---
API: 2.1
OpenSesame: 3.3.10
Platform: nt
---
set width 1440
set uniform_coordinates yes
set title "Replication: Kerwer et al.(2021)"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 16
set font_italic no
set font_family "chinese-japanese-korean"
set font_bold no
set experiment_path "C:\\R123\\LAB_metaprojects\\Projects\\202102_PL\\1_OS_scripts"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define sketchpad ACC_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="[Q_probe]" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="Y:想要" x=-160 y=128 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="N:不想要" x=128 y=128 z_index=0

define keyboard_response ACC_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "y;n"

define sequence ACC_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run ACC_board always
	run ACC_response always
	run Study_logger always

define form_text_display Access_show
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render yes
	set ok_text "記下網址請點此繼續"
	set margins "50;50;50;50"
	set form_title "全文取得網址"
	set form_text "[Link]"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_multiple_choice Access_survey
	set timeout infinite
	set spacing 10
	set question "你想要取得原始論文全文嗎？"
	__options__
	想
	不想
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice Comprehensibility_survey
	set timeout infinite
	set spacing 10
	__question__
	您如何評價這個摘要？<br>
	請按照以下等級說明您對摘要的評估。
	__end__
	__options__
	8: 完全能理解內容
	7 
	6
	5
	4
	3
	2
	1: 完全無法理解內容
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice Credibility_survey
	set timeout infinite
	set spacing 10
	__question__
	您如何評價這個摘要？<br>
	請按照以下等級說明您對摘要的評估。
	__end__
	__options__
	8: 摘要完全可信
	7 
	6
	5
	4
	3
	2
	1: 摘要完全不可信
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice Decision_survey
	set timeout infinite
	set spacing 10
	__question__
	您如何評價這個摘要？<br>
	請按照以下等級說明您對摘要的評估。
	__end__
	__options__
	8: 完全能自己做決定
	7 
	6
	5
	4
	3
	2
	1: 完全無法做決定
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sketchpad EES_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="[Q_probe]" x=0 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="[Q_options]" x=0 y=64 z_index=0

define keyboard_response EES_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8"

define sequence EES_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run EES_board always
	run EES_response always
	run Study_logger always

define form_text_display End_of_Study_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "點我結束"
	set margins "50;50;50;50"
	set form_title "測驗結束"
	set form_text "感謝您的參與"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop JB
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Question "心理學知識由研究人員的個人觀點所組成，因為心理學中沒有事實。"
	setcycle 0 Q_type Belief
	setcycle 0 Topic PJ
	setcycle 0 JB_id 1
	setcycle 1 Question "在心理學中，科學家只是將自己的觀點視作科學知識。"
	setcycle 1 Q_type Belief
	setcycle 1 Topic PJ
	setcycle 1 JB_id 2
	setcycle 2 Question "在心理學中，科學知識的產生主要來自各自研究人員的觀點。"
	setcycle 2 Q_type Belief
	setcycle 2 Topic PJ
	setcycle 2 JB_id 3
	setcycle 3 Question "如果心理學家說某些心理學上的事情是正確的話，那麼我會相信它。"
	setcycle 3 Q_type Belief
	setcycle 3 Topic JA
	setcycle 3 JB_id 1
	setcycle 4 Question "如果心理學家告訴我有關心理學的一些事情，那麼我會相信它。"
	setcycle 4 Q_type Belief
	setcycle 4 Topic JA
	setcycle 4 JB_id 2
	setcycle 5 Question "當我閱讀於心理學研究的東西時，我會知道這是真的。"
	setcycle 5 Q_type Belief
	setcycle 5 Topic JA
	setcycle 5 JB_id 3
	setcycle 6 Question "為了能夠相信心理學的科學主張，必須檢查各種來源。"
	setcycle 6 Q_type Belief
	setcycle 6 Topic MS
	setcycle 6 JB_id 1
	setcycle 7 Question "在我檢查了至少一個其他資料之前，我永遠無法確定心理學上的科學主張。"
	setcycle 7 Q_type Belief
	setcycle 7 Topic MS
	setcycle 7 JB_id 2
	setcycle 8 Question "在心理學上，僅憑一個來源不足以決定在科學上是正確的。"
	setcycle 8 Q_type Belief
	setcycle 8 Topic MS
	setcycle 8 JB_id 3
	run JB_seq

define sequence JB_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run JB_survey always
	run Study_logger always

define form_multiple_choice JB_survey
	set timeout infinite
	set spacing 10
	__question__
	在這段調查裡，你看到一系列有關心理科學的陳述。請以選項表達您同意這些陳述的程度，從“完全不正確”到“完全正確”。<br/>
	請記住，所有陳述皆肯定心理學是一門科學。<br/>
	<br/>
	<b>[Question]</b>
	__end__
	__options__
	6：完全正確
	5：大部份正確
	4：有點正確
	3：不太可能是正確的
	2：大部份不正確
	1：完全不正確
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "心理科學信念調查"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sketchpad Q_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="[Q_probe]" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="[Q_options]" x=0 y=64 z_index=0

define keyboard_response Q_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8"

define sequence Q_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Q_board never
	run Q_response never
	run Study_logger always

define form_multiple_choice Scientificness_survey
	set timeout infinite
	set spacing 10
	__question__
	您如何評價這個摘要？<br>
	請按照以下等級說明您對摘要的評估。
	__end__
	__options__
	8: 完全有科學價值內容
	7 
	6
	5
	4
	3
	2
	1: 完全沒有科學價值內容
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define logger Study_logger
	set description "Logs experimental data"
	set auto_log no
	log Q_type
	log accept_status
	log checkbox_status
	log Content
	log OSA
	log NH
	log Text_test_Q
	log correct_response
	log response

define form_multiple_choice Test_survey
	set timeout infinite
	set spacing 10
	set question "[Text_test_Q]"
	__options__
	是
	否
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "請根據您剛才讀過的三篇文章回答以下問題"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately yes
	set _theme gray

define form_multiple_choice Veracity_survey
	set timeout infinite
	set spacing 10
	__question__
	您如何評價這個摘要？<br>
	請按照以下等級說明您對摘要的評估。
	__end__
	__options__
	8: 完全有真實性
	7 
	6
	5
	4
	3
	2
	1: 完全沒有真實性
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define loop basic
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run basic_seq

define sequence basic_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run gender always
	run birth_year always
	run Study_logger always

define form_text_input birth_year
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "基本資訊調查"
	__form_question__
	請輸入出生西元年份的最後兩個數字：<br/>
	例如， 出生年是2001，請輸入<b>01</b><br/>
	輸入完畢請按Enter
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define inline_html birth_year_html
	__html__
	請輸入出生西元年份的最後兩個數字：<br/>
	例如， 出生年是2001，請輸入<b>01</b><br/>
	<br/>
	填寫完畢點擊OK繼續
	<br/>
	<input type='text' name='text_response'>
	<input type='submit' value='ok'>
	__end__
	set description "Embeds custom HTML"

define loop block
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 24
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Text_test_Q Text01_Q1
	setcycle 0 correct_response y
	setcycle 0 Test_id 1
	setcycle 0 Q_type Knowledge
	setcycle 1 Text_test_Q Text01_Q2
	setcycle 1 correct_response y
	setcycle 1 Test_id 1
	setcycle 1 Q_type Knowledge
	setcycle 2 Text_test_Q Text02_Q1
	setcycle 2 correct_response n
	setcycle 2 Test_id 2
	setcycle 2 Q_type Knowledge
	setcycle 3 Text_test_Q Text02_Q2
	setcycle 3 correct_response y
	setcycle 3 Test_id 2
	setcycle 3 Q_type Knowledge
	setcycle 4 Text_test_Q Text03_Q1
	setcycle 4 correct_response n
	setcycle 4 Test_id 3
	setcycle 4 Q_type Knowledge
	setcycle 5 Text_test_Q Text03_Q2
	setcycle 5 correct_response y
	setcycle 5 Test_id 3
	setcycle 5 Q_type Knowledge
	setcycle 6 Text_test_Q Text04_Q1
	setcycle 6 correct_response y
	setcycle 6 Test_id 4
	setcycle 6 Q_type Knowledge
	setcycle 7 Text_test_Q Text04_Q2
	setcycle 7 correct_response y
	setcycle 7 Test_id 4
	setcycle 7 Q_type Knowledge
	setcycle 8 Text_test_Q Text05_Q1
	setcycle 8 correct_response n
	setcycle 8 Test_id 5
	setcycle 8 Q_type Knowledge
	setcycle 9 Text_test_Q Text05_Q2
	setcycle 9 correct_response y
	setcycle 9 Test_id 5
	setcycle 9 Q_type Knowledge
	setcycle 10 Text_test_Q Text06_Q1
	setcycle 10 correct_response n
	setcycle 10 Test_id 6
	setcycle 10 Q_type Knowledge
	setcycle 11 Text_test_Q Text06_Q2
	setcycle 11 correct_response y
	setcycle 11 Test_id 6
	setcycle 11 Q_type Knowledge
	setcycle 12 Text_test_Q Text07_Q1
	setcycle 12 correct_response y
	setcycle 12 Test_id 7
	setcycle 12 Q_type Knowledge
	setcycle 13 Text_test_Q Text07_Q2
	setcycle 13 correct_response y
	setcycle 13 Test_id 7
	setcycle 13 Q_type Knowledge
	setcycle 14 Text_test_Q Text08_Q1
	setcycle 14 correct_response n
	setcycle 14 Test_id 8
	setcycle 14 Q_type Knowledge
	setcycle 15 Text_test_Q Text08_Q2
	setcycle 15 correct_response y
	setcycle 15 Test_id 8
	setcycle 15 Q_type Knowledge
	setcycle 16 Text_test_Q Text09_Q1
	setcycle 16 correct_response n
	setcycle 16 Test_id 9
	setcycle 16 Q_type Knowledge
	setcycle 17 Text_test_Q Text09_Q2
	setcycle 17 correct_response y
	setcycle 17 Test_id 9
	setcycle 17 Q_type Knowledge
	setcycle 18 Text_test_Q Text10_Q1
	setcycle 18 correct_response y
	setcycle 18 Test_id 10
	setcycle 18 Q_type Knowledge
	setcycle 19 Text_test_Q Text10_Q2
	setcycle 19 correct_response y
	setcycle 19 Test_id 10
	setcycle 19 Q_type Knowledge
	setcycle 20 Text_test_Q Text11_Q1
	setcycle 20 correct_response n
	setcycle 20 Test_id 11
	setcycle 20 Q_type Knowledge
	setcycle 21 Text_test_Q Text11_Q2
	setcycle 21 correct_response n
	setcycle 21 Test_id 11
	setcycle 21 Q_type Knowledge
	setcycle 22 Text_test_Q Text12_Q1
	setcycle 22 correct_response n
	setcycle 22 Test_id 12
	setcycle 22 Q_type Knowledge
	setcycle 23 Text_test_Q Text12_Q2
	setcycle 23 correct_response n
	setcycle 23 Test_id 12
	setcycle 23 Q_type Knowledge
	run block_test

define sequence block_test
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Test_survey "([Test_id]=[Qid01]) or ([Test_id]=[Qid02]) or ([Test_id]=[Qid03])"
	run Study_logger always

define loop covariates
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Question "您的日常生活涉入科學研究的程度？ 請選擇以下最適合個人狀況的等級。"
	setcycle 0 Q_type self_eval
	setcycle 0 Topic familiarity
	setcycle 1 Question "您如何評估自己判斷科學研究真實性的能力？ 請選擇以下最適合個人狀況的等級。"
	setcycle 1 Q_type self_eval
	setcycle 1 Topic ability
	run covariates_seq

define sequence covariates_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run covariates_survey always
	run Study_logger always

define form_multiple_choice covariates_survey
	set timeout infinite
	set spacing 10
	set question "[Question]"
	__options__
	8:非常高/非常好
	7
	6
	5
	4
	3
	2
	1:只有一點點
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "先備知識調查"
	set description "A simple multiple choice item"
	set button_text "選好即刻進入下一題"
	set allow_multiple no
	set advance_immediately yes
	set _theme plain

define sequence experiment
	set flush_keyboard yes
	set description "主程序"
	run form_consent always
	run welcome always
	run main always

define form_consent form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "知情同意說明"
	__form_text__
	您即將參與一項實驗。
	<br>
	該實驗不會對您的健康構成任何已知風險，您的姓名也不會被記錄。
	<br>
	在您完成本研究的參與後，您將獲得對本研究所解決問題的簡要說明。
	<br>
	如果您有任何本同意書未解決的問題，請隨時提出。
	<br>
	如果您感到不舒服，您可以在實驗過程中隨時停止。
	__end__
	set description "A simple consent form"
	set decline_text "不想參加"
	set decline_message "請先確認您已經閱讀完畢"
	set cols "2;2"
	set checkbox_text "我已經完全理解以上說明"
	set accept_text "確定參加！"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define form_multiple_choice gender
	set timeout infinite
	set spacing 10
	set question "請問您的性別？"
	__options__
	女性
	男性
	跨性別
	非二元性別
	不想回答
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "基本資訊調查"
	set description "A simple multiple choice item"
	set button_text "確定回答"
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define inline_javascript id_recording
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// Save the original text id to access the Questions in an end of block
	if((vars.count_text_seq%3)===0) {
	  vars.Qid01 = vars.O_id
	} else if((vars.count_text_seq%3)===1) {
	  vars.Qid02 = vars.O_id
	} else {
	  vars.Qid03 = vars.O_id
	}
	__end__
	set _prepare ""

define sequence main
	set flush_keyboard yes
	set description "分支程序"
	run basic always
	run birth_year_html never
	run JB always
	run covariates always
	run shuffle_block always
	run text_CB1 "[CB]=1"
	run text_CB2 "[CB]=2"
	run text_CB3 "[CB]=3"
	run End_of_Study_display always

define form_text_display preparation
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "我準備好了"
	set margins "50;50;50;50"
	set form_text "點選“我準備好了”，開始閱讀文章。"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_javascript shuffle_block
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// getRndInteger(min, max) returns a random number between min and max (both included):
	function getRndInteger(min, max) {
	  return Math.floor(Math.random() * (max - min + 1) ) + min;
	}
	
	vars.CB = getRndInteger(1,3);
	__end__
	set _prepare ""

define loop text_CB1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Content "01_PLS.txt"
	setcycle 0 NH Y
	setcycle 0 OSA N
	setcycle 0 Text_id 1
	setcycle 0 BLOCK 1
	setcycle 0 O_id 1
	setcycle 0 Link "https://www.doi.org/"
	setcycle 0 Q_type Reading
	setcycle 1 Content "01_PLS.txt"
	setcycle 1 NH N
	setcycle 1 OSA N
	setcycle 1 Text_id 1
	setcycle 1 BLOCK 2
	setcycle 1 O_id 1
	setcycle 1 Link "https://www.doi.org/"
	setcycle 1 Q_type Reading
	setcycle 2 Content "排隊現象不僅是司空見慣的消費行為，其伴隨的管理效益也不斷被服務供應商所關注，如何讓消費者動身加入或停留在服務佇列中成為一項有趣的管理議題。腦波是人類面對問題時的大腦直接反應，若能觀察腦波變化與決策之間的關係，應該可以幫助學者與業者瞭解排隊對於消費者的刺激影響。據此，本研究以情境模擬實驗搭配腦波技術，觀測提供「等候時間」與提供「等候資訊」的排隊現象於消費者等候決策歷程的變化。本研究並針對上述兩種現象對消費者等候意願進行問卷比較。問卷結果發現給予消費者等候時間資訊可以正向激勵消費者繼續加入等候。此外，本研究針對提供等候時間和提供等候資訊來進行腦波分析比較，在統計檢定上也呈現出顯著差異。"
	setcycle 2 NH N
	setcycle 2 OSA Y
	setcycle 2 Text_id 1
	setcycle 2 BLOCK 3
	setcycle 2 O_id 1
	setcycle 2 Link "https://www.doi.org/"
	setcycle 2 Q_type Reading
	setcycle 3 Content "演化賦予身為靈長類的人類成為臉孔辨認專家的先天條件與後天環境，即便是僅僅出生幾個月的新生兒，也顯示出對於臉孔的高度偏好與注意。你是否有過這樣的經驗?當我們在看外國電影時，會覺得外國人的臉孔都很相像難以區辨，容易對外國演員產生角色混淆；對於本國演員的臉孔則較不會產生混淆。此現象即是臉孔辨認上的本種族優勢(（own-race advantage，簡稱ORA），我們辨識及記憶本種族臉孔的能力優於他種族臉孔。人們對於種族訊息的敏感度從嬰兒期已見端倪，跨文化研究發現不論是白種人嬰兒或是漢民族的亞洲人嬰兒，在滿3 ~ 4 個月大時會偏好注視本種族臉孔（ Kelly et al., 2005; Kelly et al, 2007a）。 Peery與Bodenhausen在2008年所做的研究中發現，白人參與者傾向將50% 黑人與50% 白人混合的變形臉孔（morphing face）分類為黑人。此研究結果顯示出，我們除了有本種族臉孔優勢以外，在種族臉孔的歸類上也會有偏誤，當我們嘗試去辨識一個具有雙重血緣的個體時，會傾向於以單一種族去做分類。種族分類的議題不只引起西方學界的熱烈討論，近年國內學者也開始探討。陳君嫚等人(2019)的研究，以變形臉孔典範將實驗分為兩個部分，分別測試成人及學齡期兒童對不同比例亞洲人/ 白人混合臉孔的種族分類傾向。他們的研究結果發現，隨著目標臉孔中的亞洲人成分增加，不論是成人或兒童參與者將該臉孔分類為亞洲人的比率都會隨之提高，且可發現隨著參與者年齡增加，在歸類變形臉孔時就愈容易將之歸類為白人。有趣的是，研究結果顯示7 ~ 8 歲兒童組並未將中性的刺激(50%亞洲人，50%白人成分)歸類為白人，代表他們可能尚未發展出對種族混合臉孔的分類偏誤….."
	setcycle 3 NH Y
	setcycle 3 OSA N
	setcycle 3 Text_id 2
	setcycle 3 BLOCK 1
	setcycle 3 O_id 2
	setcycle 3 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 3 Q_type Reading
	setcycle 4 Content "<h2>背景</h2>演化賦予身為靈長類的人類成為臉孔辨認專家的先天條件與後天環境，即便是僅僅出生幾個月的新生兒，也顯示出對於臉孔的高度偏好與注意。你是否有過這樣的經驗?當我們在看外國電影時，會覺得外國人的臉孔都很相像難以區辨，容易對外國演員產生角色混淆；對於本國演員的臉孔則較不會產生混淆。此現象即是臉孔辨認上的本種族優勢(（own-race advantage，簡稱ORA），我們辨識及記憶本種族臉孔的能力優於他種族臉孔。<h2>為什麼進行這項研究</h2>人們對於種族訊息的敏感度從嬰兒期已見端倪，跨文化研究發現不論是白種人嬰兒或是漢民族的亞洲人嬰兒，在滿3 ~ 4 個月大時會偏好注視本種族臉孔（ Kelly et al., 2005; Kelly et al, 2007a）。 Peery與Bodenhausen在2008年所做的研究中發現，白人參與者傾向將50% 黑人與50% 白人混合的變形臉孔（morphing face）分類為黑人。此研究結果顯示出，我們除了有本種族臉孔優勢以外，在種族臉孔的歸類上也會有偏誤，當我們嘗試去辨識一個具有雙重血緣的個體時，會傾向於以單一種族去做分類。<br>種族分類的議題不只引起西方學界的熱烈討論，近年國內學者也開始探討。<h2>研究人員做了什麼，發現了什麼？</h2>陳君嫚等人(2019)的研究，以變形臉孔典範將實驗分為兩個部分，分別測試成人及學齡期兒童對不同比例亞洲人/ 白人混合臉孔的種族分類傾向。他們的研究結果發現，隨著目標臉孔中的亞洲人成分增加，不論是成人或兒童參與者將該臉孔分類為亞洲人的比率都會隨之提高，且可發現隨著參與者年齡增加，在歸類亞洲/白人臉各半的(50%亞洲，50%白人)變形臉孔時就愈容易將之歸類為白人。 <h2>這些發現意味著什麼</h2>有趣的是，研究結果顯示7 ~ 8 歲兒童組並未將中性的刺激(50%亞洲人，50%白人成分)歸類為白人，代表他們可能尚未發展出對種族混合臉孔的分類偏誤….."
	setcycle 4 NH N
	setcycle 4 OSA N
	setcycle 4 Text_id 2
	setcycle 4 BLOCK 3
	setcycle 4 O_id 2
	setcycle 4 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 4 Q_type Reading
	setcycle 5 Content "廣義的他種族效應係指人們對本種族與他種族臉孔的處理方式有別，包括辨認本種族臉孔的優勢以及對混合種族臉孔的歸類偏誤。先前的種族臉孔歸類研究多以西方白種人社會為模型，本研究欲延伸至單一種族的台灣社會，我們採用變形臉孔典範探討台灣成人與學齡期兒童對種族混合臉孔的分類表現。實驗一為成人（N = 33）的種族分類作業，測試成人對不同比例亞洲人／白人混合臉孔的種族分類傾向；實驗二為學齡期兒童，測試7 ～ 8歲（N =21）、9 ～ 10歲（N = 22）與11 ～ 12歲（N = 22）兒童的種族分類傾向。結果發現，隨變形臉孔中的亞洲人成分增加，參與者將該臉孔分類為亞洲人的比率隨之提高；而針對亞洲人成分50%的臉孔，7 ～ 8歲組傾向將其歸類為亞洲人，而9 ～ 10歲組、11 ～ 12歲組及成人則都傾向將之歸類為白人。反應時間分析顯示愈靠近兩個端點的反應時間愈短（表示兩端的臉孔容易歸類），愈靠近中間的臉孔反應時間愈長（較困難）。最後，曲線擬合結果顯示，成人將目標臉孔分類為亞洲人的機率達一半（閾值），所需的亞洲人成分為56.01%；7 ～ 8歲組的閾值為49.52%，表現出中立的歸類傾向；而9 ～ 10歲及11 ～ 12歲組的閾值分別為54.27%、53.13%，有隨年齡略增加的趨勢。整體而言，本研究提供種族臉孔歸類偏誤在兒童期發展的跨文化證據。        "
	setcycle 5 NH N
	setcycle 5 OSA Y
	setcycle 5 Text_id 2
	setcycle 5 BLOCK 2
	setcycle 5 O_id 2
	setcycle 5 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 5 Q_type Reading
	setcycle 6 Content "在日常生活中，你是否曾經有過要找某樣東西卻怎麼樣也找不到的經驗呢？通常我們都會認為顯眼的物體在雜亂的環境中較容易被找到，相似的物體較難以被搜尋，生物界中也有諸多類似原則的例子，像是動物們為了躲避天敵，會透過偽裝的方式躲藏於環境中。而過去許多關於視覺注意力的研究亦指出，顯眼的物體確實較容易攫取注意力。不過，中國醫藥大學神經科學與認知科學研究所李金鈴教授及其學生呂怡慧之研究發現，當個體在搜尋物體時，是否能夠偵測到目標物最重要的關鍵，並非是因為目標物相較於其他干擾物具有顯著性，或是目標物與其他干擾物具有相似性，而是目標物是否與其他干擾物產生連續性的知覺。以生物的偽裝機制為例，我們最常見的就是生物會透過顏色或擬態的方式使自身融入環境以躲避危險，儘管有些生物本身具有相當鮮豔的顏色，但只要可以利用身上的條紋或是肢體型態使自身與環境中的物體排列一致，將能夠製造出連續性的特性，使自己融入環境中而不容易被察覺。另外，街上商店招牌的形狀樣式是否具有連續性的特性，亦會影響人們在搜尋上的差異，當街上的商店招牌都採用相同大小形狀的樣式，儘管許多商家會透過用鮮艷的顏色來做區隔，仍會使人們較難以找到目標商店；反之，若各商家的招牌排列不一致，則較不會有被遮蔽的情況發生。因此，在生活的許多設計中，想要更快地被人們注意到，並非要著重在顏色或形狀與周遭不一樣，而是要避免與周遭的事物形成連續性的知覺所產生的遮蔽效果。"
	setcycle 6 NH Y
	setcycle 6 OSA N
	setcycle 6 Text_id 3
	setcycle 6 BLOCK 2
	setcycle 6 O_id 3
	setcycle 6 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 6 Q_type Reading
	setcycle 7 Content "<h2>背景</h2> 在日常生活中，你是否曾經有過要找某樣東西卻怎麼樣也找不到的經驗呢？通常我們都會認為顯眼的物體在雜亂的環境中較容易被找到，相似的物體較難以被搜尋。<h2>為什麼進行這項研究</h2>生物界中也有諸多類似原則的例子，像是動物們為了躲避天敵，會透過偽裝的方式躲藏於環境中。而過去許多關於視覺注意力的研究亦指出，顯眼的物體確實較容易攫取注意力。<h2>研究人員做了什麼，發現了什麼？</h2>中國醫藥大學神經科學與認知科學研究所李金鈴教授及其學生呂怡慧之研究發現，當個體在搜尋物體時，是否能夠偵測到目標物最重要的關鍵，並非是因為目標物相較於其他干擾物具有顯著性，或是目標物與其他干擾物具有相似性，而是目標物是否與其他干擾物產生連續性的知覺。以生物的偽裝機制為例，我們最常見的就是生物會透過顏色或擬態的方式使自身融入環境以躲避危險，儘管有些生物本身具有相當鮮豔的顏色，但只要可以利用身上的條紋或是肢體型態使自身與環境中的物體排列一致，將能夠製造出連續性的特性，使自己融入環境中而不容易被察覺。<h2>這些發現意味著什麼</h2><br>另外，街上商店招牌的形狀樣式是否具有連續性的特性，亦會影響人們在搜尋上的差異，當街上的商店招牌都採用相同大小形狀的樣式，儘管許多商家會透過用鮮艷的顏色來做區隔，仍會使人們較難以找到目標商店；反之，若各商家的招牌排列不一致，則較不會有被遮蔽的情況發生。因此，在生活的許多設計中，想要更快地被人們注意到，並非要著重在顏色或形狀與周遭不一樣，而是要避免與周遭的事物形成連續性的知覺所產生的遮蔽效果。"
	setcycle 7 NH N
	setcycle 7 OSA N
	setcycle 7 Text_id 3
	setcycle 7 BLOCK 1
	setcycle 7 O_id 3
	setcycle 7 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 7 Q_type Reading
	setcycle 8 Content "視覺搜尋中，具有知覺群聚特性或顯眼的物體通常會獲取注意力，若目標位於顯眼的位置上亦應有益於搜尋。本實驗室先前的研究發現，在由許多小線段組成的搜尋畫面中，當目標與顯眼的干擾物重疊時，此干擾物若由彼此平行的線段組成（梯形干擾物）會促進搜尋，但若干擾物由彼此垂直的線段組成（蛇形干擾物）卻抑制搜尋。本研究欲探討促進和遮蔽效果與干擾物的知覺組織（相似性和連續性）和顯著性之間的關聯。實驗一將干擾物彎成曲線以去除干擾物組成內容的相似性，並打散背景線段的方位以降低干擾物的顯著性。結果發現蛇形干擾物仍產生遮蔽效果，但是梯形干擾物若在異質背景就失去其促進效果。實驗二進一步操弄蛇形曲線干擾物在異質背景中的旁側線段的方位（正交、平行與隨機），測試干擾物本身的顯眼程度是否會調控共線遮蔽效果的大小。結果發現，當蛇形干擾物旁側線段為正交方位時最顯眼，但是三種旁側情況皆有遮蔽效果且遮蔽效果的大小與干擾物顯眼程度無關。因此知覺組織連續性是共線遮蔽效果的充分條件，顯著性與相似性與共線遮蔽效果無關。本研究的結果可以應用在偽裝或擬態的設計上。"
	setcycle 8 NH N
	setcycle 8 OSA Y
	setcycle 8 Text_id 3
	setcycle 8 BLOCK 3
	setcycle 8 O_id 3
	setcycle 8 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 8 Q_type Reading
	setcycle 9 Content "04_PLS.txt"
	setcycle 9 NH Y
	setcycle 9 OSA N
	setcycle 9 Text_id 4
	setcycle 9 BLOCK 2
	setcycle 9 O_id 4
	setcycle 9 Link "https://www.doi.org/"
	setcycle 9 Q_type Reading
	setcycle 10 Content "04_PLS.txt"
	setcycle 10 NH N
	setcycle 10 OSA N
	setcycle 10 Text_id 4
	setcycle 10 BLOCK 3
	setcycle 10 O_id 4
	setcycle 10 Link "https://www.doi.org/"
	setcycle 10 Q_type Reading
	setcycle 11 Content "04_OLS.txt"
	setcycle 11 NH N
	setcycle 11 OSA Y
	setcycle 11 Text_id 4
	setcycle 11 BLOCK 1
	setcycle 11 O_id 4
	setcycle 11 Link "https://www.doi.org/"
	setcycle 11 Q_type Reading
	setcycle 12 Content "隨著醫療照護、公共衛生等技術的進步以及嚴重的少子化現象，台灣也繼日本、新加坡正式邁入高齡社會。據統計台灣目前的老年人口已超過人口總數的14%，等於平均每七人就有一人是年滿65歲的長者。因此，如何去保障高齡年長者在生活上的適應與心理層面上的健康是現今國內各界急需關切的重要議題。俗話說：「百善孝為先」，孝道倫理強調子女盡心盡力的侍奉父母、滿足他們的期待。對於已經步入年老的雙親而言，在生活中最能夠依靠的就屬那些年輕力壯的成年子女了。若成年子女越是能夠認同孝道倫理的概念，將給予年長的父母親極大的安全感並能夠保障其生活。除此之外，成年子女要成為父母心目中理想的依靠對象，除了在信念層面上要能認同照顧父母老年生活是自己身為子女應盡的使命或責任，似乎也必須能夠了解父母的生活習慣、喜好與想法，有能力與他們有良好的關係互動，才能夠使其安享無憂無慮、舒適愉快的老年生活。吳志文與葉光輝（2020）的研究支持了這些想法，研究結果發現當成年子女對孝順的信念越高時，會促使長者認為該名子女能「可靠回應」自己當下立即的需求，以及「理解重視」自己對老年生活的擔憂煩心；此外，若他們有越成熟的關係互動能力，愈能理解父母在老年生活中彼此互動的期望、愈可以採取有益促進彼此關係的互動策略，並且愈能對彼此之間互動的表現感到安適自在，因而愈能透過平日主動關懷與支持等表現，讓老年父母感受到成年子女對自己相當重視。最後研究也顯示，若老年父母認為家中有個「可靠的人」可以依靠時，可以讓他們感受到生活更有意義、更自由，並且較不會感到憂鬱。從這些結果我們可以得知，成年子女對年長父母的影響是非常大的。所以不論生活再忙碌，也不要忘了給予家中的長輩適時的關心，多多的去理解他們、傾聽他們的聲音，讓他們感覺到生活中還有個靠山可以依靠，促使他們人生的後半場可以過得豐富而有意義。"
	setcycle 12 NH Y
	setcycle 12 OSA N
	setcycle 12 Text_id 5
	setcycle 12 BLOCK 3
	setcycle 12 O_id 5
	setcycle 12 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
	setcycle 12 Q_type Reading
	setcycle 13 Content "<h2>背景</h2>隨著醫療照護、公共衛生等技術的進步以及嚴重的少子化現象，台灣也繼日本、新加坡正式邁入高齡社會。據統計台灣目前的老年人口已超過人口總數的14%，等於平均每七人就有一人是年滿65歲的長者。因此，如何去保障高齡年長者在生活上的適應與心理層面上的健康是現今國內各界急需關切的重要議題。俗話說：「百善孝為先」，孝道倫理強調子女盡心盡力的侍奉父母、滿足他們的期待。對於已經步入年老的雙親而言，在生活中最能夠依靠的就屬那些年輕力壯的成年子女了。<h2>為什麼進行這項研究</h2>若成年子女越是能夠認同孝道倫理的概念，將給予年長的父母親極大的安全感並能夠保障其生活。除此之外，成年子女要成為父母心目中理想的依靠對象，除了在信念層面上要能認同照顧父母老年生活是自己身為子女應盡的使命或責任，似乎也必須能夠了解父母的生活習慣、喜好與想法，有能力與他們有良好的關係互動，才能夠使其安享無憂無慮、舒適愉快的老年生活。<h2>研究人員做了什麼，發現了什麼？</h2>吳志文與葉光輝（2020）的研究支持了這些想法，研究結果發現當成年子女對孝順的信念越高時，會促使長者認為該名子女能「可靠回應」自己當下立即的需求，以及「理解重視」自己對老年生活的擔憂煩心；此外，若他們有越成熟的關係互動能力，愈能理解父母在老年生活中彼此互動的期望、愈可以採取有益促進彼此關係的互動策略，並且愈能對彼此之間互動的表現感到安適自在，因而愈能透過平日主動關懷與支持等表現，讓老年父母感受到成年子女對自己相當重視。最後研究也顯示，若老年父母認為家中有個「可靠的人」可以依靠時，可以讓他們感受到生活更有意義、更自由，並且較不會感到憂鬱。<h2>這些發現意味著什麼</h2>從這些結果我們可以得知，成年子女對年長父母的影響是非常大的。所以不論生活再忙碌，也不要忘了給予家中的長輩適時的關心，多多的去理解他們、傾聽他們的聲音，讓他們感覺到生活中還有個靠山可以依靠，促使他們人生的後半場可以過得豐富而有意義。"
	setcycle 13 NH N
	setcycle 13 OSA N
	setcycle 13 Text_id 5
	setcycle 13 BLOCK 1
	setcycle 13 O_id 5
	setcycle 13 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
	setcycle 13 Q_type Reading
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	setcycle 14 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
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	setcycle 15 Content "在運動場上，嚴師是否一定會出高徒呢？大部分人的回答應該都會是肯定的，並認為嚴格要求選手努力練習，讓選手能夠在運動場上獲得比賽勝利，絕對是教練的重要任務。不過，所謂「水能載舟，亦能覆舟」，過往一些研究發現，教練的嚴格要求行為將可能使選手產生倦怠、降低投入訓練的意願、減少選手願意付諸努力的動機，更可能會為運動團隊帶來負面影響，甚至導致選手提早結束運動生涯。然而，根據實際運動場上成功的經驗，一個成功的選手、成功的運動團隊背後，勢必都會有位嚴格的教練，為何同樣是嚴格要求選手會有這樣的差異呢？鄭昱宏、周婉茹、周德賢及鄭伯壎（2019）針對國內大專甲組棒球員進行研究發現，當教練展現出不同類型的威權領導行為時，對於選手是否願意付出努力將會有不同的影響，並根據選手不同的目標導向特性進行更深入的探討。當教練是以對紀律、規則及績效嚴格要求的尚嚴領導時，將能夠促進選手表現出更多努力行為；然而，當選手為具有逃避表現目標導向的特性，將會透過逃離可能導致失敗的情境，來維持自己能力良好的形象，將會削弱尚嚴領導對於選手努力行為的正向效果。當教練是以嚴格控制及訓斥貶抑的專權領導時，若選手具有證明表現目標導向的特性，將會在面對如此困難情境時，透過贏過他人來維持自己的良好形象，而削弱專權領導對於努力行為的負向效果。因此，研究者建議，儘管在訓練的過程中，教練的訓斥行為有其存在的必要性，但在現今講求平權與自主的時代，尚嚴領導行為比起專權領導行為更能讓選手增加努力行為，教練在嚴格要求選手時，應避免用貶抑選手的方式，而是針對規範及表現嚴格要求。同時，教練應觀察選手是屬於何種目標導向類型，因應選手的不同特性，來施展適當地嚴格要求，將會是讓選手提升努力程度非常重要的關鍵！"
	setcycle 15 NH Y
	setcycle 15 OSA N
	setcycle 15 Text_id 6
	setcycle 15 BLOCK 3
	setcycle 15 O_id 6
	setcycle 15 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 15 Q_type Reading
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	setcycle 16 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
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	setcycle 17 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
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	setcycle 18 Content "世界上每個人所擁有的時間都是相同的。但你知道嗎，時間概念會因為不同的文化而有所差別！所謂的時間取向(time orientation)就是指人們對於時間的不同態度(Hall, 1959)。Chen、Su和O'Seaghdha(2013)提出現時延長假說(Extended Present Hypothesis)，發現中文使用者比英語使用者對「現在」有更廣泛的定義。中文使用者對於「現在」、「過去」與「未來」有更全面的觀點，而英語使用者則習慣性的區分即將到來的和已完成的行為。Chen等人(2013)認為這些差異可能都是因為語言的不同所產生的。黃舒屏與陳振宇(2019)採用Cottle的「畫圓測驗」與「時間區段查點測驗」重新檢視現時延長假說。畫圓測驗以參與者畫出代表過去、現在與未來的圓圈來評估其對於時間的概念為如何。時間區段查點測驗則以參與者選擇使用的時間單位(例如：幾秒鐘、幾天)來評估其時間概念。研究發現中文使用者確實對於「現在」有更廣的看法，並且與過去和未來有所聯結，顯示了中文使用者傾向於採用連續的時間觀。也發現中文使用者可能會使用秒、分或小時來定義「現在」，但英文使用者卻只偏向使用秒來定義「現在」。此研究驗證了現時延長理論，並因為所使用的方法將理論從語言領域擴展到了非語言領域。"
	setcycle 18 NH Y
	setcycle 18 OSA N
	setcycle 18 Text_id 7
	setcycle 18 BLOCK 1
	setcycle 18 O_id 7
	setcycle 18 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 18 Q_type Reading
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	setcycle 19 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
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	setcycle 20 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
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	setcycle 21 Content "強暴迷思(rape myth)一詞，是西方女性主義學者Brownmiller於1975年所提出的概念，她認為這是在父權社會底下所存在的一種對女性遭受性侵的普遍誤解，使得強暴事件中往往被指責的對象反而是受害者而非加害者。常見的強暴迷思例子如：「都是因為穿著太暴露才會被強暴」、「常去夜店玩才會被撿屍」、「沒有好好保護自己才會被強暴」。以往的研究多為使用西方所移植的強暴迷思概念及使用西方的量表，不過玄奘大學應用心理學系黃軍義教授認為，由於現今的華人社會同時受到傳統中華文化與西方現代文化的雙重影響，我們應該重新檢視強暴迷思在華人社會現況中所蘊含的內涵，並發展出符合在地性的本土測量工具。研究結果亦發現，與西方個人主義文化下的所建構的強暴迷思概念特徵非常不同的是，華人強暴迷思具有重視家庭、講究貞操、重視他人評價、修身自省等特徵，強暴被害者較容易被要求自我反省與檢討，並且為了維繫和諧與名譽而選擇隱忍。在這些對於被害極度不公平的迷思中，將會加重對被害者的傷害，並且不利於被害者走出創傷。另外，過往的研究指出強暴迷思將會影響男性成為強暴加害者(Bohner et al.,2010)，接受強暴迷思的女性則較容易成為強暴受害者(Yeater et al.,2010)。亦有研究顯示，相關的實務工作者，如社工、心理師、司法人員等，對於性別角色的刻板化程度將會影響強暴迷思接受程度，並進而影響處理強暴案件的態度(方嘉珩，2008；Uji et al., 2007)。因此，在強暴行為的防治教育上，強暴迷思的宣導對象應不分性別與職務！"
	setcycle 21 NH Y
	setcycle 21 OSA N
	setcycle 21 Text_id 8
	setcycle 21 BLOCK 1
	setcycle 21 O_id 8
	setcycle 21 Link "https://dx.doi.org/10.6129/CJP.20170406"
	setcycle 21 Q_type Reading
	setcycle 22 Content "<h2>背景</h2> 強暴迷思(rape myth)一詞，是西方女性主義學者Brownmiller於1975年所提出的概念，她認為這是在父權社會底下所存在的一種對女性遭受性侵的普遍誤解，使得強暴事件中往往被指責的對象反而是受害者而非加害者。常見的強暴迷思例子如：「都是因為穿著太暴露才會被強暴」、「常去夜店玩才會被撿屍」、「沒有好好保護自己才會被強暴」。<h2>為什麼進行這項研究</h2>以往的研究多為使用西方所移植的強暴迷思概念及使用西方的量表，不過玄奘大學應用心理學系黃軍義教授認為，由於現今的華人社會同時受到傳統中華文化與西方現代文化的雙重影響，我們應該重新檢視強暴迷思在華人社會現況中所蘊含的內涵，並發展出符合在地性的本土測量工具。<h2>研究人員做了什麼，發現了什麼？</h2>研究結果亦發現,與西方個人主義文化下的所建構的強暴迷思概念特徵非常不同的是，華人強暴迷思具有重視家庭、講究貞操、重視他人評價、修身自省等特徵，強暴被害者較容易被要求自我反省與檢討，並且為了維繫和諧與名譽而選擇隱忍。在這些對於被害極度不公平的迷思中，將會加重對被害者的傷害，並且不利於被害者走出創傷。<br>另外，過往的研究指出強暴迷思將會影響男性成為強暴加害者(Bohner et al.,2010)，接受強暴迷思的女性則較容易成為強暴受害者(Yeater et al.,2010)。亦有研究顯示，相關的實務工作者，如社工、心理師、司法人員等，對於性別角色的刻板化程度將會影響強暴迷思接受程度，並進而影響處理強暴案件的態度(方嘉珩，2008；Uji et al., 2007)。<h2>這些發現意味著什麼</h2>因此，在強暴行為的防治教育上，強暴迷思的宣導對象應不分性別與職務！"
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	setcycle 22 Link "https://dx.doi.org/10.6129/CJP.20170406"
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	setcycle 23 Link "https://dx.doi.org/10.6129/CJP.20170406"
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	setcycle 24 Content "隨著大數據分析的崛起，如何從龐大資料中回應研究問題、如何從大量的資料中洞悉數據背後所蘊含的意義，成了現今研究的趨勢。透過許多社群媒體的興起，如FACEBOOK、Dcard及Instagram，給予了社會科學家相當多的研究素材，透過大數據分析，可以從中了解特定族群的行為、想法及態度。近年來，許多研究也陸續透過人們在社群媒體上發表的文字，以預測性格測驗的結果、性別、年齡或個人特質等。楊立行與許清芳（2019）針對社群媒體上分手文章為分析對象，以Dcard匿名社群平台上的文章為主，針對以下兩種文本分析方式進行優劣比較，分別為封閉式詞彙分析（close vocabulary analysis）及開放式詞彙分析（open vocabulary analysis）。透過封閉式詞彙分析，研究根據中文版LIWC辭典中的人稱代名詞（如，你、妳、我、他、她等）與非代名詞類（如，認知歷程詞、因果詞、否定詞、正負向情緒詞等）為預測變項，並建立邏輯回歸模型，以檢驗這兩種詞類是否可以用以預測作者性別，結果顯示，人稱代名詞對於作者性別有較佳的預測力，但無法反映出分手文章的特性。而開放式詞彙分析，則是以寫作風格分析的演算法，分別從男性及女性的分手文章中篩選出最能代表不同性別的關鍵詞，例如：「愛你」、「等待」或「大哭」等，為女性分手文章中常出現的關鍵詞；「另一半」、「心中」或「假如」等，為男性分手文章中常出現的關鍵詞。由於抽取出的關鍵詞數量過多，僅選取前1%最常出現的關鍵詞建立模型，並同樣以作者性別為依變項，結果發現即使只有選取前1%的關鍵詞建立模型，相較於封閉式詞彙分析所建立的模型，開放式詞彙分析所建立的模型更能夠預測作者的性別。然而，儘管開放式詞彙分析可以用以分析出文章結構的特徵，卻沒辦法顯示出文章特徵所代表的心理意涵，因此，仍需要透過封閉式詞彙分析的協助。研究者透過中文版LIWC詞類，並同時採用網路分析（network analysis），將中文版LIWC詞類（如，動詞、社交歷程詞、情感歷程詞、正向情緒詞等）視為節點來建構網絡，並將關鍵詞所對應到的詞類節點進行連線，例如：「愛」這個關鍵詞，所對應的詞類有「動詞」、「社交歷程詞」、「情感歷程詞」等，以上節點之間將會形成連線。透過這樣的歸納方式得以獲得具重要性的中文版LIWC詞類，並藉由這些詞類背後所蘊含的心理屬性，來對分手文章的性別特性進行說明。研究結果發現，動詞、副詞、關係詞、社交歷程詞、生理歷程詞和認知歷程詞為兩性分手文章中共有的LIWC心理語文特徵，結果顯示出分手文章內容涉及的面向很廣泛，包含了社會關係、個人思考及生理歷程的描述，不過，唯獨女性的分手文章才有情感歷程詞、性詞和否定詞，由此可見，台灣社群媒體的使用者中，女性比男性在分手文章中更常表現出情感歷程的描述。"
	setcycle 24 NH Y
	setcycle 24 OSA N
	setcycle 24 Text_id 9
	setcycle 24 BLOCK 2
	setcycle 24 O_id 9
	setcycle 24 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
	setcycle 24 Q_type Reading
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	setcycle 25 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
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	setcycle 26 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
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	setcycle 27 Link "https://www.doi.org/"
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	setcycle 28 Link "https://www.doi.org/"
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	setcycle 29 Link "https://www.doi.org/"
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	setcycle 30 Content "隨著時代演進，人類快速的發展，人工智慧的發展也越來越進步，許多領域也開始應用AI來協助決策，像是企業運用AI來篩選合適的應徵者。但AI是否真能準確無誤地做出預測呢？還是它與我們一樣，容易被自己的想法所誤導，進而做出錯誤的決策？黃從仁（2019）回顧了AI領域中機器學習的偏誤決策，機器學習雖然可以對人類的思想和行為進行準確預測，例如：從Facebook的按讚等紀錄中準確預測個人的私人信息(例如年齡、性別、個性等)。但機器學習並不是完全準確的，像是監督式的機器學習是透過經驗觀察去進行歸納，若給予的訓練資料中，包含的種類並不齊全，很有可能會使機器做出錯誤的判斷，因為無論是人還是機器都無法對於出現較少或從沒出現的東西做出準確的預測。例如：只給予白色天鵝的資料進行訓練，導致無法正確識別黑天鵝，因為機器認為”所有天鵝都是白色的”。另外，監督式機器學習在做出決策時會學習人類的偏見。常見的機器學習算法也傾向忽略少數群體來做到最大化多數群體的預測準確度。要避免此類問題的發生，可以透過平衡每個類別的訓練樣本數量，或是依照樣本數量給予權重。使用客觀的指標也有助於減少機器學習中一部份由人為所引起的偏差。此篇文章中也討論了利用認知心理學與認知神經科學的方法了解偏誤決策的歷程。機器學習與人腦的決策過程都被稱作”黑盒子”，不過現今的神經科學方法在說明人腦與人工神經網路的內部運作上已有很大的躍進。神經科學中已有的許多技術也可以應用在人工神經網路上。像是腦損傷造成的特定方面行為損壞，使人們能夠確認大腦的哪個區域對哪個行為至關重要。同樣也可推廣到人工智能大腦中，了解機器學習中卷積神經網絡（CNN）對於感知處理的重要性。當無法使用神經科學方法時，仍可以運用心理學上的各種行為方法去間接推斷認知過程，以了解人工智慧如何做出可能帶有偏見的決策。例如：檢查特定族群中的獲勝者是否不成比例，來檢驗人工智慧選美” Beauty.AI”有無種族歧視的偏見。"
	setcycle 30 NH Y
	setcycle 30 OSA N
	setcycle 30 Text_id 11
	setcycle 30 BLOCK 3
	setcycle 30 O_id 11
	setcycle 30 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
	setcycle 30 Q_type Reading
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	setcycle 31 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
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	setcycle 32 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
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	setcycle 33 Content "大多數人都認為，幽默可以帶給他人愉悅的感受，使人在人際關係上如魚得水，更能用以化解各種令人尷尬氣氛。幽默，被視為是人際關係的潤滑劑，然而每個人展現幽默的方式卻不盡相同，有些人傾向透過說些好笑有趣的事物；有些人傾向以戲弄、挖苦他人的方式；有些人則傾向以自嘲的方式來來娛樂他人。過去許多研究亦發現，幽默對於生活品質、創造力及學習的提升、人際互動促進等方面具有正向的影響（李新民等人，2007；李蘭等人， 2008；何茉如、林世華，2000；林黎凱，2009；林耀南、楊婉如，2008；郭美君，2004；曾文志，2008）。然而，水能載舟亦能覆舟，在夫妻關係中，幽默卻可能會是婚姻殺手！過去關於婚姻衝突的研究指出，幽默確實可以幫助夫妻減少衝突並促進關係的維繫（Gottman, Coan, Carrere, & Swanson, 1998）。不過，中央研究院民族學研究所研究員周玉慧(2018)研究發現，夫妻間的幽默是否可以帶來正向的影響，會受到夫妻間如何運用幽默而不同。研究根據台灣夫妻運用幽默的動機及運用幽默的型態進行探討，幽默動機可分為利他、利己、利關係，而幽默型態則依據以自己、以他人、以文字為主三大題材，分為自我貶抑（以自己為玩笑題材）、挖苦嘲諷（以他人為玩笑題材）、詼諧戲謔（以為文字為玩笑題材）。針對大台北地區390對已婚夫妻的調查結果可以歸類為以下四大類：夫詼諧自貶型（丈夫運用較多嬉鬧說笑或自貶式幽默）、妻嘲諷自貶型（妻子運用較多自貶或開配偶玩笑）、雙多元運用型（夫妻運用幽默的頻率都很高）、雙少用幽默型（夫妻運用幽默的頻率都很低）。研究結果顯示，「夫詼諧自貶型」及「雙少用幽默型」的夫妻對於婚姻的充實感最高，後悔度最低，而「妻嘲諷自貶型」的夫妻關係最差，由此可見，在婚姻關係中使用幽默未必可以使關係變好，還有可能會造成反效果。研究者指出，會有這樣的結果，可能是因為在台灣的社會中我們仍然受到傳統的思維所影響，認為說笑自嘲這類的行為是男性才可以做的。不過，不管研究結果與我們原先對幽默的既定印象不太一樣，在婚姻關係中最重要的還是夫妻雙方彼此互相尊重，願意為彼此盡心盡力，才能找到最適合彼此的幽默方式呦！"
	setcycle 33 NH Y
	setcycle 33 OSA N
	setcycle 33 Text_id 12
	setcycle 33 BLOCK 3
	setcycle 33 O_id 12
	setcycle 33 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
	setcycle 33 Q_type Reading
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	setcycle 34 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
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	setcycle 35 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
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	sortby BLOCK
	slice 0 12
	shuffle Text_id
	run text_seq

define loop text_CB2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Content "01_PLS.txt"
	setcycle 0 NH Y
	setcycle 0 OSA N
	setcycle 0 Text_id 1
	setcycle 0 BLOCK 2
	setcycle 0 O_id 1
	setcycle 0 Link "https://www.doi.org/"
	setcycle 0 Q_type Reading
	setcycle 1 Content "01_PLS.txt"
	setcycle 1 NH N
	setcycle 1 OSA N
	setcycle 1 Text_id 1
	setcycle 1 BLOCK 3
	setcycle 1 O_id 1
	setcycle 1 Link "https://www.doi.org/"
	setcycle 1 Q_type Reading
	setcycle 2 Content "01_OLS.txt"
	setcycle 2 NH N
	setcycle 2 OSA Y
	setcycle 2 Text_id 1
	setcycle 2 BLOCK 1
	setcycle 2 O_id 1
	setcycle 2 Link "https://www.doi.org/"
	setcycle 2 Q_type Reading
	setcycle 3 Content "演化賦予身為靈長類的人類成為臉孔辨認專家的先天條件與後天環境，即便是僅僅出生幾個月的新生兒，也顯示出對於臉孔的高度偏好與注意。你是否有過這樣的經驗?當我們在看外國電影時，會覺得外國人的臉孔都很相像難以區辨，容易對外國演員產生角色混淆；對於本國演員的臉孔則較不會產生混淆。此現象即是臉孔辨認上的本種族優勢(（own-race advantage，簡稱ORA），我們辨識及記憶本種族臉孔的能力優於他種族臉孔。人們對於種族訊息的敏感度從嬰兒期已見端倪，跨文化研究發現不論是白種人嬰兒或是漢民族的亞洲人嬰兒，在滿3 ~ 4 個月大時會偏好注視本種族臉孔（ Kelly et al., 2005; Kelly et al, 2007a）。 Peery與Bodenhausen在2008年所做的研究中發現，白人參與者傾向將50% 黑人與50% 白人混合的變形臉孔（morphing face）分類為黑人。此研究結果顯示出，我們除了有本種族臉孔優勢以外，在種族臉孔的歸類上也會有偏誤，當我們嘗試去辨識一個具有雙重血緣的個體時，會傾向於以單一種族去做分類。種族分類的議題不只引起西方學界的熱烈討論，近年國內學者也開始探討。陳君嫚等人(2019)的研究，以變形臉孔典範將實驗分為兩個部分，分別測試成人及學齡期兒童對不同比例亞洲人/ 白人混合臉孔的種族分類傾向。他們的研究結果發現，隨著目標臉孔中的亞洲人成分增加，不論是成人或兒童參與者將該臉孔分類為亞洲人的比率都會隨之提高，且可發現隨著參與者年齡增加，在歸類變形臉孔時就愈容易將之歸類為白人。有趣的是，研究結果顯示7 ~ 8 歲兒童組並未將中性的刺激(50%亞洲人，50%白人成分)歸類為白人，代表他們可能尚未發展出對種族混合臉孔的分類偏誤….."
	setcycle 3 NH Y
	setcycle 3 OSA N
	setcycle 3 Text_id 2
	setcycle 3 BLOCK 2
	setcycle 3 O_id 2
	setcycle 3 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 3 Q_type Reading
	setcycle 4 Content "<h2>背景</h2>演化賦予身為靈長類的人類成為臉孔辨認專家的先天條件與後天環境，即便是僅僅出生幾個月的新生兒，也顯示出對於臉孔的高度偏好與注意。你是否有過這樣的經驗?當我們在看外國電影時，會覺得外國人的臉孔都很相像難以區辨，容易對外國演員產生角色混淆；對於本國演員的臉孔則較不會產生混淆。此現象即是臉孔辨認上的本種族優勢(（own-race advantage，簡稱ORA），我們辨識及記憶本種族臉孔的能力優於他種族臉孔。<h2>為什麼進行這項研究</h2>人們對於種族訊息的敏感度從嬰兒期已見端倪，跨文化研究發現不論是白種人嬰兒或是漢民族的亞洲人嬰兒，在滿3 ~ 4 個月大時會偏好注視本種族臉孔（ Kelly et al., 2005; Kelly et al, 2007a）。 Peery與Bodenhausen在2008年所做的研究中發現，白人參與者傾向將50% 黑人與50% 白人混合的變形臉孔（morphing face）分類為黑人。此研究結果顯示出，我們除了有本種族臉孔優勢以外，在種族臉孔的歸類上也會有偏誤，當我們嘗試去辨識一個具有雙重血緣的個體時，會傾向於以單一種族去做分類。<br>種族分類的議題不只引起西方學界的熱烈討論，近年國內學者也開始探討。<h2>研究人員做了什麼，發現了什麼？</h2>陳君嫚等人(2019)的研究，以變形臉孔典範將實驗分為兩個部分，分別測試成人及學齡期兒童對不同比例亞洲人/ 白人混合臉孔的種族分類傾向。他們的研究結果發現，隨著目標臉孔中的亞洲人成分增加，不論是成人或兒童參與者將該臉孔分類為亞洲人的比率都會隨之提高，且可發現隨著參與者年齡增加，在歸類亞洲/白人臉各半的(50%亞洲，50%白人)變形臉孔時就愈容易將之歸類為白人。 <h2>這些發現意味著什麼</h2>有趣的是，研究結果顯示7 ~ 8 歲兒童組並未將中性的刺激(50%亞洲人，50%白人成分)歸類為白人，代表他們可能尚未發展出對種族混合臉孔的分類偏誤….."
	setcycle 4 NH N
	setcycle 4 OSA N
	setcycle 4 Text_id 2
	setcycle 4 BLOCK 1
	setcycle 4 O_id 2
	setcycle 4 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 4 Q_type Reading
	setcycle 5 Content "廣義的他種族效應係指人們對本種族與他種族臉孔的處理方式有別，包括辨認本種族臉孔的優勢以及對混合種族臉孔的歸類偏誤。先前的種族臉孔歸類研究多以西方白種人社會為模型，本研究欲延伸至單一種族的台灣社會，我們採用變形臉孔典範探討台灣成人與學齡期兒童對種族混合臉孔的分類表現。實驗一為成人（N = 33）的種族分類作業，測試成人對不同比例亞洲人／白人混合臉孔的種族分類傾向；實驗二為學齡期兒童，測試7 ～ 8歲（N =21）、9 ～ 10歲（N = 22）與11 ～ 12歲（N = 22）兒童的種族分類傾向。結果發現，隨變形臉孔中的亞洲人成分增加，參與者將該臉孔分類為亞洲人的比率隨之提高；而針對亞洲人成分50%的臉孔，7 ～ 8歲組傾向將其歸類為亞洲人，而9 ～ 10歲組、11 ～ 12歲組及成人則都傾向將之歸類為白人。反應時間分析顯示愈靠近兩個端點的反應時間愈短（表示兩端的臉孔容易歸類），愈靠近中間的臉孔反應時間愈長（較困難）。最後，曲線擬合結果顯示，成人將目標臉孔分類為亞洲人的機率達一半（閾值），所需的亞洲人成分為56.01%；7 ～ 8歲組的閾值為49.52%，表現出中立的歸類傾向；而9 ～ 10歲及11 ～ 12歲組的閾值分別為54.27%、53.13%，有隨年齡略增加的趨勢。整體而言，本研究提供種族臉孔歸類偏誤在兒童期發展的跨文化證據。        "
	setcycle 5 NH N
	setcycle 5 OSA Y
	setcycle 5 Text_id 2
	setcycle 5 BLOCK 3
	setcycle 5 O_id 2
	setcycle 5 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 5 Q_type Reading
	setcycle 6 Content "在日常生活中，你是否曾經有過要找某樣東西卻怎麼樣也找不到的經驗呢？通常我們都會認為顯眼的物體在雜亂的環境中較容易被找到，相似的物體較難以被搜尋，生物界中也有諸多類似原則的例子，像是動物們為了躲避天敵，會透過偽裝的方式躲藏於環境中。而過去許多關於視覺注意力的研究亦指出，顯眼的物體確實較容易攫取注意力。不過，中國醫藥大學神經科學與認知科學研究所李金鈴教授及其學生呂怡慧之研究發現，當個體在搜尋物體時，是否能夠偵測到目標物最重要的關鍵，並非是因為目標物相較於其他干擾物具有顯著性，或是目標物與其他干擾物具有相似性，而是目標物是否與其他干擾物產生連續性的知覺。以生物的偽裝機制為例，我們最常見的就是生物會透過顏色或擬態的方式使自身融入環境以躲避危險，儘管有些生物本身具有相當鮮豔的顏色，但只要可以利用身上的條紋或是肢體型態使自身與環境中的物體排列一致，將能夠製造出連續性的特性，使自己融入環境中而不容易被察覺。另外，街上商店招牌的形狀樣式是否具有連續性的特性，亦會影響人們在搜尋上的差異，當街上的商店招牌都採用相同大小形狀的樣式，儘管許多商家會透過用鮮艷的顏色來做區隔，仍會使人們較難以找到目標商店；反之，若各商家的招牌排列不一致，則較不會有被遮蔽的情況發生。因此，在生活的許多設計中，想要更快地被人們注意到，並非要著重在顏色或形狀與周遭不一樣，而是要避免與周遭的事物形成連續性的知覺所產生的遮蔽效果。"
	setcycle 6 NH Y
	setcycle 6 OSA N
	setcycle 6 Text_id 3
	setcycle 6 BLOCK 3
	setcycle 6 O_id 3
	setcycle 6 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 6 Q_type Reading
	setcycle 7 Content "<h2>背景</h2> 在日常生活中，你是否曾經有過要找某樣東西卻怎麼樣也找不到的經驗呢？通常我們都會認為顯眼的物體在雜亂的環境中較容易被找到，相似的物體較難以被搜尋。<h2>為什麼進行這項研究</h2>生物界中也有諸多類似原則的例子，像是動物們為了躲避天敵，會透過偽裝的方式躲藏於環境中。而過去許多關於視覺注意力的研究亦指出，顯眼的物體確實較容易攫取注意力。<h2>研究人員做了什麼，發現了什麼？</h2>中國醫藥大學神經科學與認知科學研究所李金鈴教授及其學生呂怡慧之研究發現，當個體在搜尋物體時，是否能夠偵測到目標物最重要的關鍵，並非是因為目標物相較於其他干擾物具有顯著性，或是目標物與其他干擾物具有相似性，而是目標物是否與其他干擾物產生連續性的知覺。以生物的偽裝機制為例，我們最常見的就是生物會透過顏色或擬態的方式使自身融入環境以躲避危險，儘管有些生物本身具有相當鮮豔的顏色，但只要可以利用身上的條紋或是肢體型態使自身與環境中的物體排列一致，將能夠製造出連續性的特性，使自己融入環境中而不容易被察覺。<h2>這些發現意味著什麼</h2><br>另外，街上商店招牌的形狀樣式是否具有連續性的特性，亦會影響人們在搜尋上的差異，當街上的商店招牌都採用相同大小形狀的樣式，儘管許多商家會透過用鮮艷的顏色來做區隔，仍會使人們較難以找到目標商店；反之，若各商家的招牌排列不一致，則較不會有被遮蔽的情況發生。因此，在生活的許多設計中，想要更快地被人們注意到，並非要著重在顏色或形狀與周遭不一樣，而是要避免與周遭的事物形成連續性的知覺所產生的遮蔽效果。"
	setcycle 7 NH N
	setcycle 7 OSA N
	setcycle 7 Text_id 3
	setcycle 7 BLOCK 2
	setcycle 7 O_id 3
	setcycle 7 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 7 Q_type Reading
	setcycle 8 Content "視覺搜尋中，具有知覺群聚特性或顯眼的物體通常會獲取注意力，若目標位於顯眼的位置上亦應有益於搜尋。本實驗室先前的研究發現，在由許多小線段組成的搜尋畫面中，當目標與顯眼的干擾物重疊時，此干擾物若由彼此平行的線段組成（梯形干擾物）會促進搜尋，但若干擾物由彼此垂直的線段組成（蛇形干擾物）卻抑制搜尋。本研究欲探討促進和遮蔽效果與干擾物的知覺組織（相似性和連續性）和顯著性之間的關聯。實驗一將干擾物彎成曲線以去除干擾物組成內容的相似性，並打散背景線段的方位以降低干擾物的顯著性。結果發現蛇形干擾物仍產生遮蔽效果，但是梯形干擾物若在異質背景就失去其促進效果。實驗二進一步操弄蛇形曲線干擾物在異質背景中的旁側線段的方位（正交、平行與隨機），測試干擾物本身的顯眼程度是否會調控共線遮蔽效果的大小。結果發現，當蛇形干擾物旁側線段為正交方位時最顯眼，但是三種旁側情況皆有遮蔽效果且遮蔽效果的大小與干擾物顯眼程度無關。因此知覺組織連續性是共線遮蔽效果的充分條件，顯著性與相似性與共線遮蔽效果無關。本研究的結果可以應用在偽裝或擬態的設計上。"
	setcycle 8 NH N
	setcycle 8 OSA Y
	setcycle 8 Text_id 3
	setcycle 8 BLOCK 1
	setcycle 8 O_id 3
	setcycle 8 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 8 Q_type Reading
	setcycle 9 Content "04_PLS.txt"
	setcycle 9 NH Y
	setcycle 9 OSA N
	setcycle 9 Text_id 4
	setcycle 9 BLOCK 3
	setcycle 9 O_id 4
	setcycle 9 Link "https://www.doi.org/"
	setcycle 9 Q_type Reading
	setcycle 10 Content "04_PLS.txt"
	setcycle 10 NH N
	setcycle 10 OSA N
	setcycle 10 Text_id 4
	setcycle 10 BLOCK 1
	setcycle 10 O_id 4
	setcycle 10 Link "https://www.doi.org/"
	setcycle 10 Q_type Reading
	setcycle 11 Content "04_OLS.txt"
	setcycle 11 NH N
	setcycle 11 OSA Y
	setcycle 11 Text_id 4
	setcycle 11 BLOCK 2
	setcycle 11 O_id 4
	setcycle 11 Link "https://www.doi.org/"
	setcycle 11 Q_type Reading
	setcycle 12 Content "隨著醫療照護、公共衛生等技術的進步以及嚴重的少子化現象，台灣也繼日本、新加坡正式邁入高齡社會。據統計台灣目前的老年人口已超過人口總數的14%，等於平均每七人就有一人是年滿65歲的長者。因此，如何去保障高齡年長者在生活上的適應與心理層面上的健康是現今國內各界急需關切的重要議題。俗話說：「百善孝為先」，孝道倫理強調子女盡心盡力的侍奉父母、滿足他們的期待。對於已經步入年老的雙親而言，在生活中最能夠依靠的就屬那些年輕力壯的成年子女了。若成年子女越是能夠認同孝道倫理的概念，將給予年長的父母親極大的安全感並能夠保障其生活。除此之外，成年子女要成為父母心目中理想的依靠對象，除了在信念層面上要能認同照顧父母老年生活是自己身為子女應盡的使命或責任，似乎也必須能夠了解父母的生活習慣、喜好與想法，有能力與他們有良好的關係互動，才能夠使其安享無憂無慮、舒適愉快的老年生活。吳志文與葉光輝（2020）的研究支持了這些想法，研究結果發現當成年子女對孝順的信念越高時，會促使長者認為該名子女能「可靠回應」自己當下立即的需求，以及「理解重視」自己對老年生活的擔憂煩心；此外，若他們有越成熟的關係互動能力，愈能理解父母在老年生活中彼此互動的期望、愈可以採取有益促進彼此關係的互動策略，並且愈能對彼此之間互動的表現感到安適自在，因而愈能透過平日主動關懷與支持等表現，讓老年父母感受到成年子女對自己相當重視。最後研究也顯示，若老年父母認為家中有個「可靠的人」可以依靠時，可以讓他們感受到生活更有意義、更自由，並且較不會感到憂鬱。從這些結果我們可以得知，成年子女對年長父母的影響是非常大的。所以不論生活再忙碌，也不要忘了給予家中的長輩適時的關心，多多的去理解他們、傾聽他們的聲音，讓他們感覺到生活中還有個靠山可以依靠，促使他們人生的後半場可以過得豐富而有意義。"
	setcycle 12 NH Y
	setcycle 12 OSA N
	setcycle 12 Text_id 5
	setcycle 12 BLOCK 1
	setcycle 12 O_id 5
	setcycle 12 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
	setcycle 12 Q_type Reading
	setcycle 13 Content "<h2>背景</h2>隨著醫療照護、公共衛生等技術的進步以及嚴重的少子化現象，台灣也繼日本、新加坡正式邁入高齡社會。據統計台灣目前的老年人口已超過人口總數的14%，等於平均每七人就有一人是年滿65歲的長者。因此，如何去保障高齡年長者在生活上的適應與心理層面上的健康是現今國內各界急需關切的重要議題。俗話說：「百善孝為先」，孝道倫理強調子女盡心盡力的侍奉父母、滿足他們的期待。對於已經步入年老的雙親而言，在生活中最能夠依靠的就屬那些年輕力壯的成年子女了。<h2>為什麼進行這項研究</h2>若成年子女越是能夠認同孝道倫理的概念，將給予年長的父母親極大的安全感並能夠保障其生活。除此之外，成年子女要成為父母心目中理想的依靠對象，除了在信念層面上要能認同照顧父母老年生活是自己身為子女應盡的使命或責任，似乎也必須能夠了解父母的生活習慣、喜好與想法，有能力與他們有良好的關係互動，才能夠使其安享無憂無慮、舒適愉快的老年生活。<h2>研究人員做了什麼，發現了什麼？</h2>吳志文與葉光輝（2020）的研究支持了這些想法，研究結果發現當成年子女對孝順的信念越高時，會促使長者認為該名子女能「可靠回應」自己當下立即的需求，以及「理解重視」自己對老年生活的擔憂煩心；此外，若他們有越成熟的關係互動能力，愈能理解父母在老年生活中彼此互動的期望、愈可以採取有益促進彼此關係的互動策略，並且愈能對彼此之間互動的表現感到安適自在，因而愈能透過平日主動關懷與支持等表現，讓老年父母感受到成年子女對自己相當重視。最後研究也顯示，若老年父母認為家中有個「可靠的人」可以依靠時，可以讓他們感受到生活更有意義、更自由，並且較不會感到憂鬱。<h2>這些發現意味著什麼</h2>從這些結果我們可以得知，成年子女對年長父母的影響是非常大的。所以不論生活再忙碌，也不要忘了給予家中的長輩適時的關心，多多的去理解他們、傾聽他們的聲音，讓他們感覺到生活中還有個靠山可以依靠，促使他們人生的後半場可以過得豐富而有意義。"
	setcycle 13 NH N
	setcycle 13 OSA N
	setcycle 13 Text_id 5
	setcycle 13 BLOCK 2
	setcycle 13 O_id 5
	setcycle 13 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
	setcycle 13 Q_type Reading
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	setcycle 14 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
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	setcycle 15 Content "在運動場上，嚴師是否一定會出高徒呢？大部分人的回答應該都會是肯定的，並認為嚴格要求選手努力練習，讓選手能夠在運動場上獲得比賽勝利，絕對是教練的重要任務。不過，所謂「水能載舟，亦能覆舟」，過往一些研究發現，教練的嚴格要求行為將可能使選手產生倦怠、降低投入訓練的意願、減少選手願意付諸努力的動機，更可能會為運動團隊帶來負面影響，甚至導致選手提早結束運動生涯。然而，根據實際運動場上成功的經驗，一個成功的選手、成功的運動團隊背後，勢必都會有位嚴格的教練，為何同樣是嚴格要求選手會有這樣的差異呢？鄭昱宏、周婉茹、周德賢及鄭伯壎（2019）針對國內大專甲組棒球員進行研究發現，當教練展現出不同類型的威權領導行為時，對於選手是否願意付出努力將會有不同的影響，並根據選手不同的目標導向特性進行更深入的探討。當教練是以對紀律、規則及績效嚴格要求的尚嚴領導時，將能夠促進選手表現出更多努力行為；然而，當選手為具有逃避表現目標導向的特性，將會透過逃離可能導致失敗的情境，來維持自己能力良好的形象，將會削弱尚嚴領導對於選手努力行為的正向效果。當教練是以嚴格控制及訓斥貶抑的專權領導時，若選手具有證明表現目標導向的特性，將會在面對如此困難情境時，透過贏過他人來維持自己的良好形象，而削弱專權領導對於努力行為的負向效果。因此，研究者建議，儘管在訓練的過程中，教練的訓斥行為有其存在的必要性，但在現今講求平權與自主的時代，尚嚴領導行為比起專權領導行為更能讓選手增加努力行為，教練在嚴格要求選手時，應避免用貶抑選手的方式，而是針對規範及表現嚴格要求。同時，教練應觀察選手是屬於何種目標導向類型，因應選手的不同特性，來施展適當地嚴格要求，將會是讓選手提升努力程度非常重要的關鍵！"
	setcycle 15 NH Y
	setcycle 15 OSA N
	setcycle 15 Text_id 6
	setcycle 15 BLOCK 1
	setcycle 15 O_id 6
	setcycle 15 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 15 Q_type Reading
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	setcycle 16 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
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	setcycle 17 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
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	setcycle 18 Content "世界上每個人所擁有的時間都是相同的。但你知道嗎，時間概念會因為不同的文化而有所差別！所謂的時間取向(time orientation)就是指人們對於時間的不同態度(Hall, 1959)。Chen、Su和O'Seaghdha(2013)提出現時延長假說(Extended Present Hypothesis)，發現中文使用者比英語使用者對「現在」有更廣泛的定義。中文使用者對於「現在」、「過去」與「未來」有更全面的觀點，而英語使用者則習慣性的區分即將到來的和已完成的行為。Chen等人(2013)認為這些差異可能都是因為語言的不同所產生的。黃舒屏與陳振宇(2019)採用Cottle的「畫圓測驗」與「時間區段查點測驗」重新檢視現時延長假說。畫圓測驗以參與者畫出代表過去、現在與未來的圓圈來評估其對於時間的概念為如何。時間區段查點測驗則以參與者選擇使用的時間單位(例如：幾秒鐘、幾天)來評估其時間概念。研究發現中文使用者確實對於「現在」有更廣的看法，並且與過去和未來有所聯結，顯示了中文使用者傾向於採用連續的時間觀。也發現中文使用者可能會使用秒、分或小時來定義「現在」，但英文使用者卻只偏向使用秒來定義「現在」。此研究驗證了現時延長理論，並因為所使用的方法將理論從語言領域擴展到了非語言領域。"
	setcycle 18 NH Y
	setcycle 18 OSA N
	setcycle 18 Text_id 7
	setcycle 18 BLOCK 2
	setcycle 18 O_id 7
	setcycle 18 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 18 Q_type Reading
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	setcycle 19 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
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	setcycle 20 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
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	setcycle 21 Content "強暴迷思(rape myth)一詞，是西方女性主義學者Brownmiller於1975年所提出的概念，她認為這是在父權社會底下所存在的一種對女性遭受性侵的普遍誤解，使得強暴事件中往往被指責的對象反而是受害者而非加害者。常見的強暴迷思例子如：「都是因為穿著太暴露才會被強暴」、「常去夜店玩才會被撿屍」、「沒有好好保護自己才會被強暴」。以往的研究多為使用西方所移植的強暴迷思概念及使用西方的量表，不過玄奘大學應用心理學系黃軍義教授認為，由於現今的華人社會同時受到傳統中華文化與西方現代文化的雙重影響，我們應該重新檢視強暴迷思在華人社會現況中所蘊含的內涵，並發展出符合在地性的本土測量工具。研究結果亦發現，與西方個人主義文化下的所建構的強暴迷思概念特徵非常不同的是，華人強暴迷思具有重視家庭、講究貞操、重視他人評價、修身自省等特徵，強暴被害者較容易被要求自我反省與檢討，並且為了維繫和諧與名譽而選擇隱忍。在這些對於被害極度不公平的迷思中，將會加重對被害者的傷害，並且不利於被害者走出創傷。另外，過往的研究指出強暴迷思將會影響男性成為強暴加害者(Bohner et al.,2010)，接受強暴迷思的女性則較容易成為強暴受害者(Yeater et al.,2010)。亦有研究顯示，相關的實務工作者，如社工、心理師、司法人員等，對於性別角色的刻板化程度將會影響強暴迷思接受程度，並進而影響處理強暴案件的態度(方嘉珩，2008；Uji et al., 2007)。因此，在強暴行為的防治教育上，強暴迷思的宣導對象應不分性別與職務！"
	setcycle 21 NH Y
	setcycle 21 OSA N
	setcycle 21 Text_id 8
	setcycle 21 BLOCK 2
	setcycle 21 O_id 8
	setcycle 21 Link "https://dx.doi.org/10.6129/CJP.20170406"
	setcycle 21 Q_type Reading
	setcycle 22 Content "<h2>背景</h2> 強暴迷思(rape myth)一詞，是西方女性主義學者Brownmiller於1975年所提出的概念，她認為這是在父權社會底下所存在的一種對女性遭受性侵的普遍誤解，使得強暴事件中往往被指責的對象反而是受害者而非加害者。常見的強暴迷思例子如：「都是因為穿著太暴露才會被強暴」、「常去夜店玩才會被撿屍」、「沒有好好保護自己才會被強暴」。<h2>為什麼進行這項研究</h2>以往的研究多為使用西方所移植的強暴迷思概念及使用西方的量表，不過玄奘大學應用心理學系黃軍義教授認為，由於現今的華人社會同時受到傳統中華文化與西方現代文化的雙重影響，我們應該重新檢視強暴迷思在華人社會現況中所蘊含的內涵，並發展出符合在地性的本土測量工具。<h2>研究人員做了什麼，發現了什麼？</h2>研究結果亦發現,與西方個人主義文化下的所建構的強暴迷思概念特徵非常不同的是，華人強暴迷思具有重視家庭、講究貞操、重視他人評價、修身自省等特徵，強暴被害者較容易被要求自我反省與檢討，並且為了維繫和諧與名譽而選擇隱忍。在這些對於被害極度不公平的迷思中，將會加重對被害者的傷害，並且不利於被害者走出創傷。<br>另外，過往的研究指出強暴迷思將會影響男性成為強暴加害者(Bohner et al.,2010)，接受強暴迷思的女性則較容易成為強暴受害者(Yeater et al.,2010)。亦有研究顯示，相關的實務工作者，如社工、心理師、司法人員等，對於性別角色的刻板化程度將會影響強暴迷思接受程度，並進而影響處理強暴案件的態度(方嘉珩，2008；Uji et al., 2007)。<h2>這些發現意味著什麼</h2>因此，在強暴行為的防治教育上，強暴迷思的宣導對象應不分性別與職務！"
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	setcycle 22 Link "https://dx.doi.org/10.6129/CJP.20170406"
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	setcycle 23 Link "https://dx.doi.org/10.6129/CJP.20170406"
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	setcycle 24 Content "隨著大數據分析的崛起，如何從龐大資料中回應研究問題、如何從大量的資料中洞悉數據背後所蘊含的意義，成了現今研究的趨勢。透過許多社群媒體的興起，如FACEBOOK、Dcard及Instagram，給予了社會科學家相當多的研究素材，透過大數據分析，可以從中了解特定族群的行為、想法及態度。近年來，許多研究也陸續透過人們在社群媒體上發表的文字，以預測性格測驗的結果、性別、年齡或個人特質等。楊立行與許清芳（2019）針對社群媒體上分手文章為分析對象，以Dcard匿名社群平台上的文章為主，針對以下兩種文本分析方式進行優劣比較，分別為封閉式詞彙分析（close vocabulary analysis）及開放式詞彙分析（open vocabulary analysis）。透過封閉式詞彙分析，研究根據中文版LIWC辭典中的人稱代名詞（如，你、妳、我、他、她等）與非代名詞類（如，認知歷程詞、因果詞、否定詞、正負向情緒詞等）為預測變項，並建立邏輯回歸模型，以檢驗這兩種詞類是否可以用以預測作者性別，結果顯示，人稱代名詞對於作者性別有較佳的預測力，但無法反映出分手文章的特性。而開放式詞彙分析，則是以寫作風格分析的演算法，分別從男性及女性的分手文章中篩選出最能代表不同性別的關鍵詞，例如：「愛你」、「等待」或「大哭」等，為女性分手文章中常出現的關鍵詞；「另一半」、「心中」或「假如」等，為男性分手文章中常出現的關鍵詞。由於抽取出的關鍵詞數量過多，僅選取前1%最常出現的關鍵詞建立模型，並同樣以作者性別為依變項，結果發現即使只有選取前1%的關鍵詞建立模型，相較於封閉式詞彙分析所建立的模型，開放式詞彙分析所建立的模型更能夠預測作者的性別。然而，儘管開放式詞彙分析可以用以分析出文章結構的特徵，卻沒辦法顯示出文章特徵所代表的心理意涵，因此，仍需要透過封閉式詞彙分析的協助。研究者透過中文版LIWC詞類，並同時採用網路分析（network analysis），將中文版LIWC詞類（如，動詞、社交歷程詞、情感歷程詞、正向情緒詞等）視為節點來建構網絡，並將關鍵詞所對應到的詞類節點進行連線，例如：「愛」這個關鍵詞，所對應的詞類有「動詞」、「社交歷程詞」、「情感歷程詞」等，以上節點之間將會形成連線。透過這樣的歸納方式得以獲得具重要性的中文版LIWC詞類，並藉由這些詞類背後所蘊含的心理屬性，來對分手文章的性別特性進行說明。研究結果發現，動詞、副詞、關係詞、社交歷程詞、生理歷程詞和認知歷程詞為兩性分手文章中共有的LIWC心理語文特徵，結果顯示出分手文章內容涉及的面向很廣泛，包含了社會關係、個人思考及生理歷程的描述，不過，唯獨女性的分手文章才有情感歷程詞、性詞和否定詞，由此可見，台灣社群媒體的使用者中，女性比男性在分手文章中更常表現出情感歷程的描述。"
	setcycle 24 NH Y
	setcycle 24 OSA N
	setcycle 24 Text_id 9
	setcycle 24 BLOCK 3
	setcycle 24 O_id 9
	setcycle 24 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
	setcycle 24 Q_type Reading
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	setcycle 25 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
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	setcycle 26 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
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	setcycle 27 Link "https://www.doi.org/"
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	setcycle 28 Link "https://www.doi.org/"
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	setcycle 29 Link "https://www.doi.org/"
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	setcycle 30 Content "隨著時代演進，人類快速的發展，人工智慧的發展也越來越進步，許多領域也開始應用AI來協助決策，像是企業運用AI來篩選合適的應徵者。但AI是否真能準確無誤地做出預測呢？還是它與我們一樣，容易被自己的想法所誤導，進而做出錯誤的決策？黃從仁（2019）回顧了AI領域中機器學習的偏誤決策，機器學習雖然可以對人類的思想和行為進行準確預測，例如：從Facebook的按讚等紀錄中準確預測個人的私人信息(例如年齡、性別、個性等)。但機器學習並不是完全準確的，像是監督式的機器學習是透過經驗觀察去進行歸納，若給予的訓練資料中，包含的種類並不齊全，很有可能會使機器做出錯誤的判斷，因為無論是人還是機器都無法對於出現較少或從沒出現的東西做出準確的預測。例如：只給予白色天鵝的資料進行訓練，導致無法正確識別黑天鵝，因為機器認為”所有天鵝都是白色的”。另外，監督式機器學習在做出決策時會學習人類的偏見。常見的機器學習算法也傾向忽略少數群體來做到最大化多數群體的預測準確度。要避免此類問題的發生，可以透過平衡每個類別的訓練樣本數量，或是依照樣本數量給予權重。使用客觀的指標也有助於減少機器學習中一部份由人為所引起的偏差。此篇文章中也討論了利用認知心理學與認知神經科學的方法了解偏誤決策的歷程。機器學習與人腦的決策過程都被稱作”黑盒子”，不過現今的神經科學方法在說明人腦與人工神經網路的內部運作上已有很大的躍進。神經科學中已有的許多技術也可以應用在人工神經網路上。像是腦損傷造成的特定方面行為損壞，使人們能夠確認大腦的哪個區域對哪個行為至關重要。同樣也可推廣到人工智能大腦中，了解機器學習中卷積神經網絡（CNN）對於感知處理的重要性。當無法使用神經科學方法時，仍可以運用心理學上的各種行為方法去間接推斷認知過程，以了解人工智慧如何做出可能帶有偏見的決策。例如：檢查特定族群中的獲勝者是否不成比例，來檢驗人工智慧選美” Beauty.AI”有無種族歧視的偏見。"
	setcycle 30 NH Y
	setcycle 30 OSA N
	setcycle 30 Text_id 11
	setcycle 30 BLOCK 1
	setcycle 30 O_id 11
	setcycle 30 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
	setcycle 30 Q_type Reading
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	setcycle 31 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
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	setcycle 32 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
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	setcycle 33 Content "大多數人都認為，幽默可以帶給他人愉悅的感受，使人在人際關係上如魚得水，更能用以化解各種令人尷尬氣氛。幽默，被視為是人際關係的潤滑劑，然而每個人展現幽默的方式卻不盡相同，有些人傾向透過說些好笑有趣的事物；有些人傾向以戲弄、挖苦他人的方式；有些人則傾向以自嘲的方式來來娛樂他人。過去許多研究亦發現，幽默對於生活品質、創造力及學習的提升、人際互動促進等方面具有正向的影響（李新民等人，2007；李蘭等人， 2008；何茉如、林世華，2000；林黎凱，2009；林耀南、楊婉如，2008；郭美君，2004；曾文志，2008）。然而，水能載舟亦能覆舟，在夫妻關係中，幽默卻可能會是婚姻殺手！過去關於婚姻衝突的研究指出，幽默確實可以幫助夫妻減少衝突並促進關係的維繫（Gottman, Coan, Carrere, & Swanson, 1998）。不過，中央研究院民族學研究所研究員周玉慧(2018)研究發現，夫妻間的幽默是否可以帶來正向的影響，會受到夫妻間如何運用幽默而不同。研究根據台灣夫妻運用幽默的動機及運用幽默的型態進行探討，幽默動機可分為利他、利己、利關係，而幽默型態則依據以自己、以他人、以文字為主三大題材，分為自我貶抑（以自己為玩笑題材）、挖苦嘲諷（以他人為玩笑題材）、詼諧戲謔（以為文字為玩笑題材）。針對大台北地區390對已婚夫妻的調查結果可以歸類為以下四大類：夫詼諧自貶型（丈夫運用較多嬉鬧說笑或自貶式幽默）、妻嘲諷自貶型（妻子運用較多自貶或開配偶玩笑）、雙多元運用型（夫妻運用幽默的頻率都很高）、雙少用幽默型（夫妻運用幽默的頻率都很低）。研究結果顯示，「夫詼諧自貶型」及「雙少用幽默型」的夫妻對於婚姻的充實感最高，後悔度最低，而「妻嘲諷自貶型」的夫妻關係最差，由此可見，在婚姻關係中使用幽默未必可以使關係變好，還有可能會造成反效果。研究者指出，會有這樣的結果，可能是因為在台灣的社會中我們仍然受到傳統的思維所影響，認為說笑自嘲這類的行為是男性才可以做的。不過，不管研究結果與我們原先對幽默的既定印象不太一樣，在婚姻關係中最重要的還是夫妻雙方彼此互相尊重，願意為彼此盡心盡力，才能找到最適合彼此的幽默方式呦！"
	setcycle 33 NH Y
	setcycle 33 OSA N
	setcycle 33 Text_id 12
	setcycle 33 BLOCK 1
	setcycle 33 O_id 12
	setcycle 33 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
	setcycle 33 Q_type Reading
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	setcycle 34 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
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	setcycle 35 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
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	sortby BLOCK
	slice 0 12
	shuffle Text_id
	run text_seq

define loop text_CB3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Content "01_PLS.txt"
	setcycle 0 NH Y
	setcycle 0 OSA N
	setcycle 0 Text_id 1
	setcycle 0 BLOCK 3
	setcycle 0 O_id 1
	setcycle 0 Link "https://www.doi.org/"
	setcycle 0 Q_type Reading
	setcycle 1 Content "01_PLS.txt"
	setcycle 1 NH N
	setcycle 1 OSA N
	setcycle 1 Text_id 1
	setcycle 1 BLOCK 1
	setcycle 1 O_id 1
	setcycle 1 Link "https://www.doi.org/"
	setcycle 1 Q_type Reading
	setcycle 2 Content "01_OLS.txt"
	setcycle 2 NH N
	setcycle 2 OSA Y
	setcycle 2 Text_id 1
	setcycle 2 BLOCK 2
	setcycle 2 O_id 1
	setcycle 2 Link "https://www.doi.org/"
	setcycle 2 Q_type Reading
	setcycle 3 Content "演化賦予身為靈長類的人類成為臉孔辨認專家的先天條件與後天環境，即便是僅僅出生幾個月的新生兒，也顯示出對於臉孔的高度偏好與注意。你是否有過這樣的經驗?當我們在看外國電影時，會覺得外國人的臉孔都很相像難以區辨，容易對外國演員產生角色混淆；對於本國演員的臉孔則較不會產生混淆。此現象即是臉孔辨認上的本種族優勢(（own-race advantage，簡稱ORA），我們辨識及記憶本種族臉孔的能力優於他種族臉孔。人們對於種族訊息的敏感度從嬰兒期已見端倪，跨文化研究發現不論是白種人嬰兒或是漢民族的亞洲人嬰兒，在滿3 ~ 4 個月大時會偏好注視本種族臉孔（ Kelly et al., 2005; Kelly et al, 2007a）。 Peery與Bodenhausen在2008年所做的研究中發現，白人參與者傾向將50% 黑人與50% 白人混合的變形臉孔（morphing face）分類為黑人。此研究結果顯示出，我們除了有本種族臉孔優勢以外，在種族臉孔的歸類上也會有偏誤，當我們嘗試去辨識一個具有雙重血緣的個體時，會傾向於以單一種族去做分類。種族分類的議題不只引起西方學界的熱烈討論，近年國內學者也開始探討。陳君嫚等人(2019)的研究，以變形臉孔典範將實驗分為兩個部分，分別測試成人及學齡期兒童對不同比例亞洲人/ 白人混合臉孔的種族分類傾向。他們的研究結果發現，隨著目標臉孔中的亞洲人成分增加，不論是成人或兒童參與者將該臉孔分類為亞洲人的比率都會隨之提高，且可發現隨著參與者年齡增加，在歸類變形臉孔時就愈容易將之歸類為白人。有趣的是，研究結果顯示7 ~ 8 歲兒童組並未將中性的刺激(50%亞洲人，50%白人成分)歸類為白人，代表他們可能尚未發展出對種族混合臉孔的分類偏誤….."
	setcycle 3 NH Y
	setcycle 3 OSA N
	setcycle 3 Text_id 2
	setcycle 3 BLOCK 3
	setcycle 3 O_id 2
	setcycle 3 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 3 Q_type Reading
	setcycle 4 Content "<h2>背景</h2>演化賦予身為靈長類的人類成為臉孔辨認專家的先天條件與後天環境，即便是僅僅出生幾個月的新生兒，也顯示出對於臉孔的高度偏好與注意。你是否有過這樣的經驗?當我們在看外國電影時，會覺得外國人的臉孔都很相像難以區辨，容易對外國演員產生角色混淆；對於本國演員的臉孔則較不會產生混淆。此現象即是臉孔辨認上的本種族優勢(（own-race advantage，簡稱ORA），我們辨識及記憶本種族臉孔的能力優於他種族臉孔。<h2>為什麼進行這項研究</h2>人們對於種族訊息的敏感度從嬰兒期已見端倪，跨文化研究發現不論是白種人嬰兒或是漢民族的亞洲人嬰兒，在滿3 ~ 4 個月大時會偏好注視本種族臉孔（ Kelly et al., 2005; Kelly et al, 2007a）。 Peery與Bodenhausen在2008年所做的研究中發現，白人參與者傾向將50% 黑人與50% 白人混合的變形臉孔（morphing face）分類為黑人。此研究結果顯示出，我們除了有本種族臉孔優勢以外，在種族臉孔的歸類上也會有偏誤，當我們嘗試去辨識一個具有雙重血緣的個體時，會傾向於以單一種族去做分類。<br>種族分類的議題不只引起西方學界的熱烈討論，近年國內學者也開始探討。<h2>研究人員做了什麼，發現了什麼？</h2>陳君嫚等人(2019)的研究，以變形臉孔典範將實驗分為兩個部分，分別測試成人及學齡期兒童對不同比例亞洲人/ 白人混合臉孔的種族分類傾向。他們的研究結果發現，隨著目標臉孔中的亞洲人成分增加，不論是成人或兒童參與者將該臉孔分類為亞洲人的比率都會隨之提高，且可發現隨著參與者年齡增加，在歸類亞洲/白人臉各半的(50%亞洲，50%白人)變形臉孔時就愈容易將之歸類為白人。 <h2>這些發現意味著什麼</h2>有趣的是，研究結果顯示7 ~ 8 歲兒童組並未將中性的刺激(50%亞洲人，50%白人成分)歸類為白人，代表他們可能尚未發展出對種族混合臉孔的分類偏誤….."
	setcycle 4 NH N
	setcycle 4 OSA N
	setcycle 4 Text_id 2
	setcycle 4 BLOCK 2
	setcycle 4 O_id 2
	setcycle 4 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 4 Q_type Reading
	setcycle 5 Content "廣義的他種族效應係指人們對本種族與他種族臉孔的處理方式有別，包括辨認本種族臉孔的優勢以及對混合種族臉孔的歸類偏誤。先前的種族臉孔歸類研究多以西方白種人社會為模型，本研究欲延伸至單一種族的台灣社會，我們採用變形臉孔典範探討台灣成人與學齡期兒童對種族混合臉孔的分類表現。實驗一為成人（N = 33）的種族分類作業，測試成人對不同比例亞洲人／白人混合臉孔的種族分類傾向；實驗二為學齡期兒童，測試7 ～ 8歲（N =21）、9 ～ 10歲（N = 22）與11 ～ 12歲（N = 22）兒童的種族分類傾向。結果發現，隨變形臉孔中的亞洲人成分增加，參與者將該臉孔分類為亞洲人的比率隨之提高；而針對亞洲人成分50%的臉孔，7 ～ 8歲組傾向將其歸類為亞洲人，而9 ～ 10歲組、11 ～ 12歲組及成人則都傾向將之歸類為白人。反應時間分析顯示愈靠近兩個端點的反應時間愈短（表示兩端的臉孔容易歸類），愈靠近中間的臉孔反應時間愈長（較困難）。最後，曲線擬合結果顯示，成人將目標臉孔分類為亞洲人的機率達一半（閾值），所需的亞洲人成分為56.01%；7 ～ 8歲組的閾值為49.52%，表現出中立的歸類傾向；而9 ～ 10歲及11 ～ 12歲組的閾值分別為54.27%、53.13%，有隨年齡略增加的趨勢。整體而言，本研究提供種族臉孔歸類偏誤在兒童期發展的跨文化證據。        "
	setcycle 5 NH N
	setcycle 5 OSA Y
	setcycle 5 Text_id 2
	setcycle 5 BLOCK 1
	setcycle 5 O_id 2
	setcycle 5 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 5 Q_type Reading
	setcycle 6 Content "在日常生活中，你是否曾經有過要找某樣東西卻怎麼樣也找不到的經驗呢？通常我們都會認為顯眼的物體在雜亂的環境中較容易被找到，相似的物體較難以被搜尋，生物界中也有諸多類似原則的例子，像是動物們為了躲避天敵，會透過偽裝的方式躲藏於環境中。而過去許多關於視覺注意力的研究亦指出，顯眼的物體確實較容易攫取注意力。不過，中國醫藥大學神經科學與認知科學研究所李金鈴教授及其學生呂怡慧之研究發現，當個體在搜尋物體時，是否能夠偵測到目標物最重要的關鍵，並非是因為目標物相較於其他干擾物具有顯著性，或是目標物與其他干擾物具有相似性，而是目標物是否與其他干擾物產生連續性的知覺。以生物的偽裝機制為例，我們最常見的就是生物會透過顏色或擬態的方式使自身融入環境以躲避危險，儘管有些生物本身具有相當鮮豔的顏色，但只要可以利用身上的條紋或是肢體型態使自身與環境中的物體排列一致，將能夠製造出連續性的特性，使自己融入環境中而不容易被察覺。另外，街上商店招牌的形狀樣式是否具有連續性的特性，亦會影響人們在搜尋上的差異，當街上的商店招牌都採用相同大小形狀的樣式，儘管許多商家會透過用鮮艷的顏色來做區隔，仍會使人們較難以找到目標商店；反之，若各商家的招牌排列不一致，則較不會有被遮蔽的情況發生。因此，在生活的許多設計中，想要更快地被人們注意到，並非要著重在顏色或形狀與周遭不一樣，而是要避免與周遭的事物形成連續性的知覺所產生的遮蔽效果。"
	setcycle 6 NH Y
	setcycle 6 OSA N
	setcycle 6 Text_id 3
	setcycle 6 BLOCK 1
	setcycle 6 O_id 3
	setcycle 6 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 6 Q_type Reading
	setcycle 7 Content "<h2>背景</h2> 在日常生活中，你是否曾經有過要找某樣東西卻怎麼樣也找不到的經驗呢？通常我們都會認為顯眼的物體在雜亂的環境中較容易被找到，相似的物體較難以被搜尋。<h2>為什麼進行這項研究</h2>生物界中也有諸多類似原則的例子，像是動物們為了躲避天敵，會透過偽裝的方式躲藏於環境中。而過去許多關於視覺注意力的研究亦指出，顯眼的物體確實較容易攫取注意力。<h2>研究人員做了什麼，發現了什麼？</h2>中國醫藥大學神經科學與認知科學研究所李金鈴教授及其學生呂怡慧之研究發現，當個體在搜尋物體時，是否能夠偵測到目標物最重要的關鍵，並非是因為目標物相較於其他干擾物具有顯著性，或是目標物與其他干擾物具有相似性，而是目標物是否與其他干擾物產生連續性的知覺。以生物的偽裝機制為例，我們最常見的就是生物會透過顏色或擬態的方式使自身融入環境以躲避危險，儘管有些生物本身具有相當鮮豔的顏色，但只要可以利用身上的條紋或是肢體型態使自身與環境中的物體排列一致，將能夠製造出連續性的特性，使自己融入環境中而不容易被察覺。<h2>這些發現意味著什麼</h2><br>另外，街上商店招牌的形狀樣式是否具有連續性的特性，亦會影響人們在搜尋上的差異，當街上的商店招牌都採用相同大小形狀的樣式，儘管許多商家會透過用鮮艷的顏色來做區隔，仍會使人們較難以找到目標商店；反之，若各商家的招牌排列不一致，則較不會有被遮蔽的情況發生。因此，在生活的許多設計中，想要更快地被人們注意到，並非要著重在顏色或形狀與周遭不一樣，而是要避免與周遭的事物形成連續性的知覺所產生的遮蔽效果。"
	setcycle 7 NH N
	setcycle 7 OSA N
	setcycle 7 Text_id 3
	setcycle 7 BLOCK 3
	setcycle 7 O_id 3
	setcycle 7 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 7 Q_type Reading
	setcycle 8 Content "視覺搜尋中，具有知覺群聚特性或顯眼的物體通常會獲取注意力，若目標位於顯眼的位置上亦應有益於搜尋。本實驗室先前的研究發現，在由許多小線段組成的搜尋畫面中，當目標與顯眼的干擾物重疊時，此干擾物若由彼此平行的線段組成（梯形干擾物）會促進搜尋，但若干擾物由彼此垂直的線段組成（蛇形干擾物）卻抑制搜尋。本研究欲探討促進和遮蔽效果與干擾物的知覺組織（相似性和連續性）和顯著性之間的關聯。實驗一將干擾物彎成曲線以去除干擾物組成內容的相似性，並打散背景線段的方位以降低干擾物的顯著性。結果發現蛇形干擾物仍產生遮蔽效果，但是梯形干擾物若在異質背景就失去其促進效果。實驗二進一步操弄蛇形曲線干擾物在異質背景中的旁側線段的方位（正交、平行與隨機），測試干擾物本身的顯眼程度是否會調控共線遮蔽效果的大小。結果發現，當蛇形干擾物旁側線段為正交方位時最顯眼，但是三種旁側情況皆有遮蔽效果且遮蔽效果的大小與干擾物顯眼程度無關。因此知覺組織連續性是共線遮蔽效果的充分條件，顯著性與相似性與共線遮蔽效果無關。本研究的結果可以應用在偽裝或擬態的設計上。"
	setcycle 8 NH N
	setcycle 8 OSA Y
	setcycle 8 Text_id 3
	setcycle 8 BLOCK 2
	setcycle 8 O_id 3
	setcycle 8 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 8 Q_type Reading
	setcycle 9 Content "04_PLS.txt"
	setcycle 9 NH Y
	setcycle 9 OSA N
	setcycle 9 Text_id 4
	setcycle 9 BLOCK 1
	setcycle 9 O_id 4
	setcycle 9 Link "https://www.doi.org/"
	setcycle 9 Q_type Reading
	setcycle 10 Content "04_PLS.txt"
	setcycle 10 NH N
	setcycle 10 OSA N
	setcycle 10 Text_id 4
	setcycle 10 BLOCK 2
	setcycle 10 O_id 4
	setcycle 10 Link "https://www.doi.org/"
	setcycle 10 Q_type Reading
	setcycle 11 Content "04_OLS.txt"
	setcycle 11 NH N
	setcycle 11 OSA Y
	setcycle 11 Text_id 4
	setcycle 11 BLOCK 3
	setcycle 11 O_id 4
	setcycle 11 Link "https://www.doi.org/"
	setcycle 11 Q_type Reading
	setcycle 12 Content "隨著醫療照護、公共衛生等技術的進步以及嚴重的少子化現象，台灣也繼日本、新加坡正式邁入高齡社會。據統計台灣目前的老年人口已超過人口總數的14%，等於平均每七人就有一人是年滿65歲的長者。因此，如何去保障高齡年長者在生活上的適應與心理層面上的健康是現今國內各界急需關切的重要議題。俗話說：「百善孝為先」，孝道倫理強調子女盡心盡力的侍奉父母、滿足他們的期待。對於已經步入年老的雙親而言，在生活中最能夠依靠的就屬那些年輕力壯的成年子女了。若成年子女越是能夠認同孝道倫理的概念，將給予年長的父母親極大的安全感並能夠保障其生活。除此之外，成年子女要成為父母心目中理想的依靠對象，除了在信念層面上要能認同照顧父母老年生活是自己身為子女應盡的使命或責任，似乎也必須能夠了解父母的生活習慣、喜好與想法，有能力與他們有良好的關係互動，才能夠使其安享無憂無慮、舒適愉快的老年生活。吳志文與葉光輝（2020）的研究支持了這些想法，研究結果發現當成年子女對孝順的信念越高時，會促使長者認為該名子女能「可靠回應」自己當下立即的需求，以及「理解重視」自己對老年生活的擔憂煩心；此外，若他們有越成熟的關係互動能力，愈能理解父母在老年生活中彼此互動的期望、愈可以採取有益促進彼此關係的互動策略，並且愈能對彼此之間互動的表現感到安適自在，因而愈能透過平日主動關懷與支持等表現，讓老年父母感受到成年子女對自己相當重視。最後研究也顯示，若老年父母認為家中有個「可靠的人」可以依靠時，可以讓他們感受到生活更有意義、更自由，並且較不會感到憂鬱。從這些結果我們可以得知，成年子女對年長父母的影響是非常大的。所以不論生活再忙碌，也不要忘了給予家中的長輩適時的關心，多多的去理解他們、傾聽他們的聲音，讓他們感覺到生活中還有個靠山可以依靠，促使他們人生的後半場可以過得豐富而有意義。"
	setcycle 12 NH Y
	setcycle 12 OSA N
	setcycle 12 Text_id 5
	setcycle 12 BLOCK 2
	setcycle 12 O_id 5
	setcycle 12 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
	setcycle 12 Q_type Reading
	setcycle 13 Content "<h2>背景</h2>隨著醫療照護、公共衛生等技術的進步以及嚴重的少子化現象，台灣也繼日本、新加坡正式邁入高齡社會。據統計台灣目前的老年人口已超過人口總數的14%，等於平均每七人就有一人是年滿65歲的長者。因此，如何去保障高齡年長者在生活上的適應與心理層面上的健康是現今國內各界急需關切的重要議題。俗話說：「百善孝為先」，孝道倫理強調子女盡心盡力的侍奉父母、滿足他們的期待。對於已經步入年老的雙親而言，在生活中最能夠依靠的就屬那些年輕力壯的成年子女了。<h2>為什麼進行這項研究</h2>若成年子女越是能夠認同孝道倫理的概念，將給予年長的父母親極大的安全感並能夠保障其生活。除此之外，成年子女要成為父母心目中理想的依靠對象，除了在信念層面上要能認同照顧父母老年生活是自己身為子女應盡的使命或責任，似乎也必須能夠了解父母的生活習慣、喜好與想法，有能力與他們有良好的關係互動，才能夠使其安享無憂無慮、舒適愉快的老年生活。<h2>研究人員做了什麼，發現了什麼？</h2>吳志文與葉光輝（2020）的研究支持了這些想法，研究結果發現當成年子女對孝順的信念越高時，會促使長者認為該名子女能「可靠回應」自己當下立即的需求，以及「理解重視」自己對老年生活的擔憂煩心；此外，若他們有越成熟的關係互動能力，愈能理解父母在老年生活中彼此互動的期望、愈可以採取有益促進彼此關係的互動策略，並且愈能對彼此之間互動的表現感到安適自在，因而愈能透過平日主動關懷與支持等表現，讓老年父母感受到成年子女對自己相當重視。最後研究也顯示，若老年父母認為家中有個「可靠的人」可以依靠時，可以讓他們感受到生活更有意義、更自由，並且較不會感到憂鬱。<h2>這些發現意味著什麼</h2>從這些結果我們可以得知，成年子女對年長父母的影響是非常大的。所以不論生活再忙碌，也不要忘了給予家中的長輩適時的關心，多多的去理解他們、傾聽他們的聲音，讓他們感覺到生活中還有個靠山可以依靠，促使他們人生的後半場可以過得豐富而有意義。"
	setcycle 13 NH N
	setcycle 13 OSA N
	setcycle 13 Text_id 5
	setcycle 13 BLOCK 3
	setcycle 13 O_id 5
	setcycle 13 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
	setcycle 13 Q_type Reading
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	setcycle 14 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
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	setcycle 15 Content "在運動場上，嚴師是否一定會出高徒呢？大部分人的回答應該都會是肯定的，並認為嚴格要求選手努力練習，讓選手能夠在運動場上獲得比賽勝利，絕對是教練的重要任務。不過，所謂「水能載舟，亦能覆舟」，過往一些研究發現，教練的嚴格要求行為將可能使選手產生倦怠、降低投入訓練的意願、減少選手願意付諸努力的動機，更可能會為運動團隊帶來負面影響，甚至導致選手提早結束運動生涯。然而，根據實際運動場上成功的經驗，一個成功的選手、成功的運動團隊背後，勢必都會有位嚴格的教練，為何同樣是嚴格要求選手會有這樣的差異呢？鄭昱宏、周婉茹、周德賢及鄭伯壎（2019）針對國內大專甲組棒球員進行研究發現，當教練展現出不同類型的威權領導行為時，對於選手是否願意付出努力將會有不同的影響，並根據選手不同的目標導向特性進行更深入的探討。當教練是以對紀律、規則及績效嚴格要求的尚嚴領導時，將能夠促進選手表現出更多努力行為；然而，當選手為具有逃避表現目標導向的特性，將會透過逃離可能導致失敗的情境，來維持自己能力良好的形象，將會削弱尚嚴領導對於選手努力行為的正向效果。當教練是以嚴格控制及訓斥貶抑的專權領導時，若選手具有證明表現目標導向的特性，將會在面對如此困難情境時，透過贏過他人來維持自己的良好形象，而削弱專權領導對於努力行為的負向效果。因此，研究者建議，儘管在訓練的過程中，教練的訓斥行為有其存在的必要性，但在現今講求平權與自主的時代，尚嚴領導行為比起專權領導行為更能讓選手增加努力行為，教練在嚴格要求選手時，應避免用貶抑選手的方式，而是針對規範及表現嚴格要求。同時，教練應觀察選手是屬於何種目標導向類型，因應選手的不同特性，來施展適當地嚴格要求，將會是讓選手提升努力程度非常重要的關鍵！"
	setcycle 15 NH Y
	setcycle 15 OSA N
	setcycle 15 Text_id 6
	setcycle 15 BLOCK 2
	setcycle 15 O_id 6
	setcycle 15 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 15 Q_type Reading
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	setcycle 16 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
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	setcycle 17 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
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	setcycle 18 Content "世界上每個人所擁有的時間都是相同的。但你知道嗎，時間概念會因為不同的文化而有所差別！所謂的時間取向(time orientation)就是指人們對於時間的不同態度(Hall, 1959)。Chen、Su和O'Seaghdha(2013)提出現時延長假說(Extended Present Hypothesis)，發現中文使用者比英語使用者對「現在」有更廣泛的定義。中文使用者對於「現在」、「過去」與「未來」有更全面的觀點，而英語使用者則習慣性的區分即將到來的和已完成的行為。Chen等人(2013)認為這些差異可能都是因為語言的不同所產生的。黃舒屏與陳振宇(2019)採用Cottle的「畫圓測驗」與「時間區段查點測驗」重新檢視現時延長假說。畫圓測驗以參與者畫出代表過去、現在與未來的圓圈來評估其對於時間的概念為如何。時間區段查點測驗則以參與者選擇使用的時間單位(例如：幾秒鐘、幾天)來評估其時間概念。研究發現中文使用者確實對於「現在」有更廣的看法，並且與過去和未來有所聯結，顯示了中文使用者傾向於採用連續的時間觀。也發現中文使用者可能會使用秒、分或小時來定義「現在」，但英文使用者卻只偏向使用秒來定義「現在」。此研究驗證了現時延長理論，並因為所使用的方法將理論從語言領域擴展到了非語言領域。"
	setcycle 18 NH Y
	setcycle 18 OSA N
	setcycle 18 Text_id 7
	setcycle 18 BLOCK 3
	setcycle 18 O_id 7
	setcycle 18 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 18 Q_type Reading
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	setcycle 19 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
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	setcycle 20 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
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	setcycle 21 Content "強暴迷思(rape myth)一詞，是西方女性主義學者Brownmiller於1975年所提出的概念，她認為這是在父權社會底下所存在的一種對女性遭受性侵的普遍誤解，使得強暴事件中往往被指責的對象反而是受害者而非加害者。常見的強暴迷思例子如：「都是因為穿著太暴露才會被強暴」、「常去夜店玩才會被撿屍」、「沒有好好保護自己才會被強暴」。以往的研究多為使用西方所移植的強暴迷思概念及使用西方的量表，不過玄奘大學應用心理學系黃軍義教授認為，由於現今的華人社會同時受到傳統中華文化與西方現代文化的雙重影響，我們應該重新檢視強暴迷思在華人社會現況中所蘊含的內涵，並發展出符合在地性的本土測量工具。研究結果亦發現，與西方個人主義文化下的所建構的強暴迷思概念特徵非常不同的是，華人強暴迷思具有重視家庭、講究貞操、重視他人評價、修身自省等特徵，強暴被害者較容易被要求自我反省與檢討，並且為了維繫和諧與名譽而選擇隱忍。在這些對於被害極度不公平的迷思中，將會加重對被害者的傷害，並且不利於被害者走出創傷。另外，過往的研究指出強暴迷思將會影響男性成為強暴加害者(Bohner et al.,2010)，接受強暴迷思的女性則較容易成為強暴受害者(Yeater et al.,2010)。亦有研究顯示，相關的實務工作者，如社工、心理師、司法人員等，對於性別角色的刻板化程度將會影響強暴迷思接受程度，並進而影響處理強暴案件的態度(方嘉珩，2008；Uji et al., 2007)。因此，在強暴行為的防治教育上，強暴迷思的宣導對象應不分性別與職務！"
	setcycle 21 NH Y
	setcycle 21 OSA N
	setcycle 21 Text_id 8
	setcycle 21 BLOCK 3
	setcycle 21 O_id 8
	setcycle 21 Link "https://dx.doi.org/10.6129/CJP.20170406"
	setcycle 21 Q_type Reading
	setcycle 22 Content "<h2>背景</h2> 強暴迷思(rape myth)一詞，是西方女性主義學者Brownmiller於1975年所提出的概念，她認為這是在父權社會底下所存在的一種對女性遭受性侵的普遍誤解，使得強暴事件中往往被指責的對象反而是受害者而非加害者。常見的強暴迷思例子如：「都是因為穿著太暴露才會被強暴」、「常去夜店玩才會被撿屍」、「沒有好好保護自己才會被強暴」。<h2>為什麼進行這項研究</h2>以往的研究多為使用西方所移植的強暴迷思概念及使用西方的量表，不過玄奘大學應用心理學系黃軍義教授認為，由於現今的華人社會同時受到傳統中華文化與西方現代文化的雙重影響，我們應該重新檢視強暴迷思在華人社會現況中所蘊含的內涵，並發展出符合在地性的本土測量工具。<h2>研究人員做了什麼，發現了什麼？</h2>研究結果亦發現,與西方個人主義文化下的所建構的強暴迷思概念特徵非常不同的是，華人強暴迷思具有重視家庭、講究貞操、重視他人評價、修身自省等特徵，強暴被害者較容易被要求自我反省與檢討，並且為了維繫和諧與名譽而選擇隱忍。在這些對於被害極度不公平的迷思中，將會加重對被害者的傷害，並且不利於被害者走出創傷。<br>另外，過往的研究指出強暴迷思將會影響男性成為強暴加害者(Bohner et al.,2010)，接受強暴迷思的女性則較容易成為強暴受害者(Yeater et al.,2010)。亦有研究顯示，相關的實務工作者，如社工、心理師、司法人員等，對於性別角色的刻板化程度將會影響強暴迷思接受程度，並進而影響處理強暴案件的態度(方嘉珩，2008；Uji et al., 2007)。<h2>這些發現意味著什麼</h2>因此，在強暴行為的防治教育上，強暴迷思的宣導對象應不分性別與職務！"
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	setcycle 22 Link "https://dx.doi.org/10.6129/CJP.20170406"
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	setcycle 23 Link "https://dx.doi.org/10.6129/CJP.20170406"
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	setcycle 24 Content "隨著大數據分析的崛起，如何從龐大資料中回應研究問題、如何從大量的資料中洞悉數據背後所蘊含的意義，成了現今研究的趨勢。透過許多社群媒體的興起，如FACEBOOK、Dcard及Instagram，給予了社會科學家相當多的研究素材，透過大數據分析，可以從中了解特定族群的行為、想法及態度。近年來，許多研究也陸續透過人們在社群媒體上發表的文字，以預測性格測驗的結果、性別、年齡或個人特質等。楊立行與許清芳（2019）針對社群媒體上分手文章為分析對象，以Dcard匿名社群平台上的文章為主，針對以下兩種文本分析方式進行優劣比較，分別為封閉式詞彙分析（close vocabulary analysis）及開放式詞彙分析（open vocabulary analysis）。透過封閉式詞彙分析，研究根據中文版LIWC辭典中的人稱代名詞（如，你、妳、我、他、她等）與非代名詞類（如，認知歷程詞、因果詞、否定詞、正負向情緒詞等）為預測變項，並建立邏輯回歸模型，以檢驗這兩種詞類是否可以用以預測作者性別，結果顯示，人稱代名詞對於作者性別有較佳的預測力，但無法反映出分手文章的特性。而開放式詞彙分析，則是以寫作風格分析的演算法，分別從男性及女性的分手文章中篩選出最能代表不同性別的關鍵詞，例如：「愛你」、「等待」或「大哭」等，為女性分手文章中常出現的關鍵詞；「另一半」、「心中」或「假如」等，為男性分手文章中常出現的關鍵詞。由於抽取出的關鍵詞數量過多，僅選取前1%最常出現的關鍵詞建立模型，並同樣以作者性別為依變項，結果發現即使只有選取前1%的關鍵詞建立模型，相較於封閉式詞彙分析所建立的模型，開放式詞彙分析所建立的模型更能夠預測作者的性別。然而，儘管開放式詞彙分析可以用以分析出文章結構的特徵，卻沒辦法顯示出文章特徵所代表的心理意涵，因此，仍需要透過封閉式詞彙分析的協助。研究者透過中文版LIWC詞類，並同時採用網路分析（network analysis），將中文版LIWC詞類（如，動詞、社交歷程詞、情感歷程詞、正向情緒詞等）視為節點來建構網絡，並將關鍵詞所對應到的詞類節點進行連線，例如：「愛」這個關鍵詞，所對應的詞類有「動詞」、「社交歷程詞」、「情感歷程詞」等，以上節點之間將會形成連線。透過這樣的歸納方式得以獲得具重要性的中文版LIWC詞類，並藉由這些詞類背後所蘊含的心理屬性，來對分手文章的性別特性進行說明。研究結果發現，動詞、副詞、關係詞、社交歷程詞、生理歷程詞和認知歷程詞為兩性分手文章中共有的LIWC心理語文特徵，結果顯示出分手文章內容涉及的面向很廣泛，包含了社會關係、個人思考及生理歷程的描述，不過，唯獨女性的分手文章才有情感歷程詞、性詞和否定詞，由此可見，台灣社群媒體的使用者中，女性比男性在分手文章中更常表現出情感歷程的描述。"
	setcycle 24 NH Y
	setcycle 24 OSA N
	setcycle 24 Text_id 9
	setcycle 24 BLOCK 1
	setcycle 24 O_id 9
	setcycle 24 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
	setcycle 24 Q_type Reading
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	setcycle 25 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
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	setcycle 26 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
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	setcycle 27 Link "https://www.doi.org/"
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	setcycle 28 Link "https://www.doi.org/"
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	setcycle 29 Link "https://www.doi.org/"
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	setcycle 30 Content "隨著時代演進，人類快速的發展，人工智慧的發展也越來越進步，許多領域也開始應用AI來協助決策，像是企業運用AI來篩選合適的應徵者。但AI是否真能準確無誤地做出預測呢？還是它與我們一樣，容易被自己的想法所誤導，進而做出錯誤的決策？黃從仁（2019）回顧了AI領域中機器學習的偏誤決策，機器學習雖然可以對人類的思想和行為進行準確預測，例如：從Facebook的按讚等紀錄中準確預測個人的私人信息(例如年齡、性別、個性等)。但機器學習並不是完全準確的，像是監督式的機器學習是透過經驗觀察去進行歸納，若給予的訓練資料中，包含的種類並不齊全，很有可能會使機器做出錯誤的判斷，因為無論是人還是機器都無法對於出現較少或從沒出現的東西做出準確的預測。例如：只給予白色天鵝的資料進行訓練，導致無法正確識別黑天鵝，因為機器認為”所有天鵝都是白色的”。另外，監督式機器學習在做出決策時會學習人類的偏見。常見的機器學習算法也傾向忽略少數群體來做到最大化多數群體的預測準確度。要避免此類問題的發生，可以透過平衡每個類別的訓練樣本數量，或是依照樣本數量給予權重。使用客觀的指標也有助於減少機器學習中一部份由人為所引起的偏差。此篇文章中也討論了利用認知心理學與認知神經科學的方法了解偏誤決策的歷程。機器學習與人腦的決策過程都被稱作”黑盒子”，不過現今的神經科學方法在說明人腦與人工神經網路的內部運作上已有很大的躍進。神經科學中已有的許多技術也可以應用在人工神經網路上。像是腦損傷造成的特定方面行為損壞，使人們能夠確認大腦的哪個區域對哪個行為至關重要。同樣也可推廣到人工智能大腦中，了解機器學習中卷積神經網絡（CNN）對於感知處理的重要性。當無法使用神經科學方法時，仍可以運用心理學上的各種行為方法去間接推斷認知過程，以了解人工智慧如何做出可能帶有偏見的決策。例如：檢查特定族群中的獲勝者是否不成比例，來檢驗人工智慧選美” Beauty.AI”有無種族歧視的偏見。"
	setcycle 30 NH Y
	setcycle 30 OSA N
	setcycle 30 Text_id 11
	setcycle 30 BLOCK 2
	setcycle 30 O_id 11
	setcycle 30 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
	setcycle 30 Q_type Reading
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	setcycle 31 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
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	setcycle 32 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
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	setcycle 33 Content "大多數人都認為，幽默可以帶給他人愉悅的感受，使人在人際關係上如魚得水，更能用以化解各種令人尷尬氣氛。幽默，被視為是人際關係的潤滑劑，然而每個人展現幽默的方式卻不盡相同，有些人傾向透過說些好笑有趣的事物；有些人傾向以戲弄、挖苦他人的方式；有些人則傾向以自嘲的方式來來娛樂他人。過去許多研究亦發現，幽默對於生活品質、創造力及學習的提升、人際互動促進等方面具有正向的影響（李新民等人，2007；李蘭等人， 2008；何茉如、林世華，2000；林黎凱，2009；林耀南、楊婉如，2008；郭美君，2004；曾文志，2008）。然而，水能載舟亦能覆舟，在夫妻關係中，幽默卻可能會是婚姻殺手！過去關於婚姻衝突的研究指出，幽默確實可以幫助夫妻減少衝突並促進關係的維繫（Gottman, Coan, Carrere, & Swanson, 1998）。不過，中央研究院民族學研究所研究員周玉慧(2018)研究發現，夫妻間的幽默是否可以帶來正向的影響，會受到夫妻間如何運用幽默而不同。研究根據台灣夫妻運用幽默的動機及運用幽默的型態進行探討，幽默動機可分為利他、利己、利關係，而幽默型態則依據以自己、以他人、以文字為主三大題材，分為自我貶抑（以自己為玩笑題材）、挖苦嘲諷（以他人為玩笑題材）、詼諧戲謔（以為文字為玩笑題材）。針對大台北地區390對已婚夫妻的調查結果可以歸類為以下四大類：夫詼諧自貶型（丈夫運用較多嬉鬧說笑或自貶式幽默）、妻嘲諷自貶型（妻子運用較多自貶或開配偶玩笑）、雙多元運用型（夫妻運用幽默的頻率都很高）、雙少用幽默型（夫妻運用幽默的頻率都很低）。研究結果顯示，「夫詼諧自貶型」及「雙少用幽默型」的夫妻對於婚姻的充實感最高，後悔度最低，而「妻嘲諷自貶型」的夫妻關係最差，由此可見，在婚姻關係中使用幽默未必可以使關係變好，還有可能會造成反效果。研究者指出，會有這樣的結果，可能是因為在台灣的社會中我們仍然受到傳統的思維所影響，認為說笑自嘲這類的行為是男性才可以做的。不過，不管研究結果與我們原先對幽默的既定印象不太一樣，在婚姻關係中最重要的還是夫妻雙方彼此互相尊重，願意為彼此盡心盡力，才能找到最適合彼此的幽默方式呦！"
	setcycle 33 NH Y
	setcycle 33 OSA N
	setcycle 33 Text_id 12
	setcycle 33 BLOCK 2
	setcycle 33 O_id 12
	setcycle 33 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
	setcycle 33 Q_type Reading
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	setcycle 34 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
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	setcycle 35 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
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	sortby BLOCK
	slice 0 12
	shuffle Text_id
	run text_seq

define form_text_display text_read
	set timeout infinite
	set spacing 1
	set rows "1;4;1"
	set only_render no
	set ok_text "閱讀完畢，點此進行適讀性評估"
	set margins "5;5;5;5"
	set form_title "請閱讀這份文章"
	__form_text__
	[Content]
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence text_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run preparation always
	run text_read always
	run id_recording always
	run Comprehensibility_survey always
	run Scientificness_survey always
	run Credibility_survey always
	run Veracity_survey always
	run Decision_survey always
	run Access_survey always
	run Access_show "[response]=\"想\""
	run block "([count_text_seq]%3)=2"

define form_text_display welcome
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "科學文獻閱讀模式測試"
	__form_text__
	接下來您將會看到幾段文章，並回答一些簡單的問題。
	<br>
	如果在過程中有任何疑問的話，敬請隨時提出。
	<br>
	完成全部測驗將會花費您約30分鐘左右的時間。
	<br>
	沒有任何問題後請按OK開始測驗。
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


