---
API: 2.1
OpenSesame: 3.3.11
Platform: nt
---
set width 1440
set uniform_coordinates yes
set title "Replication: Kerwer et al.(2021)"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 16
set font_italic no
set font_family "chinese-japanese-korean"
set font_bold no
set experiment_path "D:\\core\\research\\projects\\Meta_Replication\\Projects\\202102_PL\\1_OS_scripts"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#ffffff"

define form_text_display Access_show
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render yes
	set ok_text "記下網址後按這裡繼續"
	set margins "50;50;50;50"
	set form_title "全文取得網址"
	__form_text__
	<center>[Link]</center>
	<br><br>
	提示：
	若不是使用您個人的設備受測，可用拍照或筆記把該DOI碼記錄下來。
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_multiple_choice Access_survey
	set timeout infinite
	set spacing 10
	__question__
	你想要取得原始論文全文嗎？
	__end__
	__options__
	想
	不想
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sequence Comprehensibility_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Comprehensibility_survey always

define form_multiple_choice Comprehensibility_survey
	set timeout infinite
	set spacing 10
	set question "[Question]"
	__options__
	8: 完全能理解內容
	7
	6
	5
	4
	3
	2
	1: 完全無法理解內容
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define loop End
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Q_type Exit
	setcycle 0 Topic feedback
	run End_seq

define form_text_input End_of_Study_input
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "測驗結束"
	__form_question__
	感謝您的參與。對於本研究有任何問題或建議，請在下方留言。<br/>
	
	輸入留言完畢請按Enter
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sequence End_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run End_of_Study_input always
	run Study_logger always

define sketchpad Exit_board
	set duration 0
	set description Instruction
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="研究結束。感謝您的參與。<br/>請以紙筆或拍照記下實驗完成碼:<br/><br/><br/><h1>[identifier]</h1><br/><br/><br/>記下後請按 `q` 登出" x=0 y=0 z_index=0

define keyboard_response Exit_board_quit
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses q

define loop JB
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Question "心理學知識是所有個別研究人員觀點的總成，所以心理學不存在客觀事實。"
	setcycle 0 Q_type Belief
	setcycle 0 Topic PJ
	setcycle 0 JB_id 1
	setcycle 1 Question "心理學家總是誤以為自己的觀點有科學知識性。"
	setcycle 1 Q_type Belief
	setcycle 1 Topic PJ
	setcycle 1 JB_id 2
	setcycle 2 Question "心理學的科學知識主要來自有聲望的研究者所提出的觀點。"
	setcycle 2 Q_type Belief
	setcycle 2 Topic PJ
	setcycle 2 JB_id 3
	setcycle 3 Question "只要是心理科學家宣稱有科學意義的事實，我都相信這些事實的正確性。"
	setcycle 3 Q_type Belief
	setcycle 3 Topic JA
	setcycle 3 JB_id 1
	setcycle 4 Question "只要是心理科學家公開主張某個重要的心理學議題，我都會相信這些議題的重要性。"
	setcycle 4 Q_type Belief
	setcycle 4 Topic JA
	setcycle 4 JB_id 2
	setcycle 5 Question "只要文章的主張有心理學研究的支持，我都會相信這些文章的真實性。"
	setcycle 5 Q_type Belief
	setcycle 5 Topic JA
	setcycle 5 JB_id 3
	setcycle 6 Question "要確認一種心理學主張具有科學信度，一定要查證各種資訊來源。"
	setcycle 6 Q_type Belief
	setcycle 6 Topic MS
	setcycle 6 JB_id 1
	setcycle 7 Question "除非有不只一條可查證的資訊來源，我不會信任某個心理學主張是科學的。"
	setcycle 7 Q_type Belief
	setcycle 7 Topic MS
	setcycle 7 JB_id 2
	setcycle 8 Question "只靠一條資訊來源是無法判斷某個心理學主張有科學信度。"
	setcycle 8 Q_type Belief
	setcycle 8 Topic MS
	setcycle 8 JB_id 3
	run JB_seq

define sketchpad JB_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="下一頁呈現一系列心理學科學知識的可信度與權威是如何建立的論述。" x=-352 y=-160 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="請透過選項“完全不正確”到“完全正確”，表達您同意這些論述的程度。" x=-352 y=-96 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="按任意按鍵至下一頁" x=0 y=320 z_index=0

define sequence JB_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run JB_survey always
	run Study_logger always

define form_multiple_choice JB_survey
	set timeout infinite
	set spacing 10
	__question__
	這個部分呈現一系列關於心理學做為一門科學的正反論述。請透過選項“完全不正確”到“完全正確”，表達您同意這些論述的程度。<br/>
	請記住，所有陳述皆肯定心理學是一門科學。<br/>
	<br/>
	<b>[Question]</b>
	__end__
	__options__
	6：完全正確
	5：大部份正確
	4：有點正確
	3：不太可能是正確的
	2：大部份不正確
	1：完全不正確
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "心理科學信念調查"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice Post_survey
	set timeout infinite
	set spacing 10
	set question "[Question]"
	__options__
	[Option8]
	[Option7]
	[Option6]
	[Option5]
	[Option4]
	[Option3]
	[Option2]
	[Option1]
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define logger Study_logger
	set description "Logs experimental data"
	set auto_log no
	log Q_type
	log accept_status
	log checkbox_status
	log Content
	log OSA
	log NH
	log correct_response
	log response
	log Test_id
	log Qid01
	log Qid02
	log Qid03
	log Topic
	log Question
	log CB
	log count_main
	log CRid01
	log CRid02
	log CRid03
	log CRid04
	log CRid05
	log CRid06
	log Set_id
	log identifier
	log text_order
	log correct
	log Q_presented

define inline_javascript Test_recording
	set description "Executes JavaScript code"
	set _run ""
	___prepare__
	// Mark the questions presented in study
	if( (((vars.Test_id == vars.Qid01) & (vars.Set_id == vars.CRid01)) | ((vars.Test_id==vars.Qid01) & (vars.Set_id == vars.CRid02)) | ((vars.Test_id==vars.Qid02) & (vars.Set_id == vars.CRid03)) | ((vars.Test_id == vars.Qid02) & (vars.Set_id == vars.CRid04)) | ((vars.Test_id == vars.Qid03) & (vars.Set_id == vars.CRid05)) | ((vars.Test_id == vars.Qid03) & (vars.Set_id == vars.CRid06)) ) === 1){
	  vars.Q_presented = 1
	} else {
	  vars.Q_presented = 0
	}
	__end__

define notepad Test_recording_notepad
	set note "Q_presented 標記正式實驗呈現測驗題"
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define form_multiple_choice Test_survey
	set timeout infinite
	set spacing 10
	set question "[Question]"
	__options__
	是
	否
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "請根據您剛才讀過的三篇文章回答以下問題"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define loop access_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Q_type Post_survey
	setcycle 0 Topic Access
	run access_seq

define sequence access_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Access_survey always
	run Access_show "[response]=\"想\""
	run Study_logger always

define loop basic
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Q_type Basic
	setcycle 0 Topic birth
	run basic_seq

define sketchpad basic_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="請在下一個網頁依序回答您的性別與出生年" x=-352 y=-160 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="性別為單選，選擇自己認同的性別，出生年請以您的西元出生年後兩碼填答" x=-352 y=-96 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="按任意按鍵至下一頁" x=0 y=320 z_index=0

define sequence basic_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run birth_year always
	run Study_logger always

define form_text_input birth_year
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "基本資訊調查"
	__form_question__
	請輸入出生西元年份的最後兩個數字：<br/>
	例如， 出生年是2001，請輸入<b>01</b><br/>
	輸入完畢請按Enter
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define loop consent_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run consent_seq

define sequence consent_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run form_consent always
	run Study_logger always

define inline_javascript count_text
	set description "Executes JavaScript code"
	set _run ""
	set _prepare "vars.text_order = vars.count_text_seq + 1"

define loop covariates
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Question "您的日常生活從事科學研究活動的時間比例？ 請選擇以下最適合個人狀況的等級選項。"
	setcycle 0 Q_type self_eval
	setcycle 0 Topic familiarity
	setcycle 0 Option8 "8:例行公事"
	setcycle 0 Option7 7
	setcycle 0 Option6 6
	setcycle 0 Option5 5
	setcycle 0 Option4 4
	setcycle 0 Option3 3
	setcycle 0 Option2 2
	setcycle 0 Option1 "1:幾乎沒有"
	setcycle 1 Question "您自認判斷某項科學研究真實性的能力有多好？ 請選擇以下最適合個人狀況的等級選項。"
	setcycle 1 Q_type self_eval
	setcycle 1 Topic ability
	setcycle 1 Option8 "8:接近專家"
	setcycle 1 Option7 7
	setcycle 1 Option6 6
	setcycle 1 Option5 5
	setcycle 1 Option4 4
	setcycle 1 Option3 3
	setcycle 1 Option2 2
	setcycle 1 Option1 "1:幾乎不行"
	run covariates_seq

define sketchpad covariates_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="下一頁將詢問您從事過或正在進行科學研究的經驗，請選擇最符合個人狀況的描述。" x=-352 y=-96 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="按任意按鍵至下一頁" x=0 y=320 z_index=0

define sequence covariates_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run covariates_survey always
	run Study_logger always

define form_multiple_choice covariates_survey
	set timeout infinite
	set spacing 10
	set question "[Question]"
	__options__
	[Option8]
	[Option7]
	[Option6]
	[Option5]
	[Option4]
	[Option3]
	[Option2]
	[Option1]
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "先備知識調查"
	set description "A simple multiple choice item"
	set button_text "選好即刻進入下一題"
	set allow_multiple no
	set advance_immediately yes
	set _theme plain

define sequence experiment
	set flush_keyboard yes
	set description "主程序"
	run consent_loop always
	run welcome always
	run main always

define form_consent form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "知情同意說明"
	__form_text__
	您好：<br>
	
	歡迎您參加慈濟大學人類與發展與心理學系的研究，這項研究的目的是探索科普文章如何幫助一般人士理解專業學術論文資訊。只要您是透過我們的招募管道登入這個網頁，就適合參與本次研究，無其它限制或配合事項。<br>
	
	實驗過程完全在網頁瀏覽器進行。過程是依照網頁指示，先請您回答有關個人基本資訊以及已備知識的相關問題，正式部分是閱讀心理學學術論文摘要或科普文章並回答相關題目，整個實驗過程約半小時。過程中您的所在地點若發生任何不可抗力之意外，請儘速離開現場，我們恕不提供額外保險或補償措施。<br>
	
	開始實驗後，您若對指示或刺激項目感到不理解，可隨時註記並在結束前於回饋欄位內反應。如果您中途想要退出，直接關閉網頁即可，網站不會保留您的參與紀錄，亦不影響之後您參與我們其他研究的權益。過程中若因意外因素(如電腦當機、網路斷線)導致中斷，只要登入網頁重新開始即可。<br>
	
	實驗網站不會記錄任何可辨識您個人身分的必要訊息，未來去除您個人資訊的反應資料將以CC授權模式(姓名標示─非商業性)存放於無限制權限的網路平台，提供全球有興趣的各界人士檢索。本次研究預計招募人數為80人。<br>
	
	這項實驗不會對您的健康構成任何已知風險，如果您突然感到不適覺得無法繼續實驗，直接關閉瀏覽器即可停止。<br>
	 
	最後非常感謝您的參與，相信您的參與將幫助我們增加有關一般大眾如何理解專業知識文章，也許能啟發您了解科普文章產製過程的興趣。如果您需要留存參與紀錄，請務必注意登出畫面的提示。若您對本研究還有進一步疑問，歡迎您隨時連絡計畫主持人陳紹慶老師(csc2009@mail.tcu.edu.tw   電話：(03)8572677 #3181) <br><br>
	
	註：研究計畫由國立臺灣大學行為與科學研究倫理委員會審查通過，委員會係依規範運作，並通過中央目的事業主管機構查核認證之審查組織。凡研究參與者於研究過程中自認權利受到影響、傷害，可直接與國立臺灣大學研究倫理中心聯絡，電話為02-33669956、02-33669980。
	__end__
	set description "A simple consent form"
	set decline_text "不想參加"
	set decline_message "請先確認您已經閱讀完畢"
	set cols "2;2"
	set checkbox_text "我已經完全理解以上說明"
	set accept_text "確定參加！"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define form_multiple_choice gender
	set timeout infinite
	set spacing 10
	set question "請問您的性別？"
	__options__
	女性
	男性
	跨性別
	非二元性別
	不想回答
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "基本資訊調查"
	set description "A simple multiple choice item"
	set button_text "確定回答"
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define loop gender_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Q_type Basic
	setcycle 0 Topic gender
	run gender_seq

define sequence gender_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run gender always
	run Study_logger always

define inline_javascript generate_identifier
	set description "Executes JavaScript code"
	set _run ""
	___prepare__
	// Generate the identifier for the participant
	vars.identifier = Math.random().toString(36).substr(2, 9);
	// Local version will not show identifier on "PP_End".
	__end__

define inline_javascript id_recording
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// Save the original text id to access the Questions in an end of block
	if((vars.count_text_seq%3)===0) {
	  vars.Qid01 = vars.O_id
	  vars.CRid01 = vars.Aarray[vars.Qid01-1]
	  vars.CRid02 = vars.Barray[vars.Qid01-1]
	} else if((vars.count_text_seq%3)===1) {
	  vars.Qid02 = vars.O_id
	  vars.CRid03 = vars.Aarray[vars.Qid02-1]
	  vars.CRid04 = vars.Barray[vars.Qid02-1]
	} else {
	  vars.Qid03 = vars.O_id
	  vars.CRid05 = vars.Aarray[vars.Qid03-1]
	  vars.CRid06 = vars.Barray[vars.Qid03-1]
	}
	__end__
	set _prepare ""

define sequence main
	set flush_keyboard yes
	set description "分支程序"
	run generate_identifier always
	run basic_instruction always
	run gender_loop always
	run basic always
	run JB_instruction always
	run JB always
	run covariates_instruction always
	run covariates always
	run shuffle_block always
	run text_instruction always
	run text_display_notepad always
	run text_CB1 "[CB]=1"
	run text_CB2 "[CB]=2"
	run text_CB3 "[CB]=3"
	run End always
	run Exit_board always
	run Exit_board_quit always

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_2
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_3
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_4
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_5
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_6
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_7
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_8
	set duration keypress
	set description "Displays stimuli"

define form_text_display preparation
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "我準備好了"
	set margins "50;50;50;50"
	set form_text "<center>點選“我準備好了”，開始閱讀文章。</center>"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad rest
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="中段休息" x=0 y=0 z_index=0

define notepad rest_duation_notepad
	__note__
	rest_duration 正式實驗設定 
	Duration：90000ms
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define advanced_delay rest_duration
	set jitter_mode Uniform
	set jitter 1000
	set duration 90000
	set description "Waits for a specified duration"

define inline_html rest_html
	__html__
	<center>按"OK"後，休息90秒繼續閱讀下一篇</center>
	<br>
	<br>
	<br>
	<br>
	<br>
	<input type='submit' value='ok'>
	__end__
	set description "Embeds custom HTML"

define inline_javascript shuffle_block
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// getRndInteger(min, max) returns a random number between min and max (both included):
	function getRndInteger(min, max) {
	  return Math.floor(Math.random() * (max - min + 1) ) + min;
	}
	
	// RandArray()
	// https://alvinalexander.com/source-code/javascript-multiple-random-unique-elements-from-array/
	function shuffle(a) {
	    for (let i = a.length - 1; i > 0; i--) {
	        const j = Math.floor(Math.random() * (i + 1));
	        [a[i], a[j]] = [a[j], a[i]];
	    }
	    return a;
	}
	
	vars.CB = getRndInteger(1,3);
	
	// About array 
	// https://www.w3schools.com/js/js_arrays.asp
	// Generate the array decided the "y/n" of each comprehension question
	
	// Build array of shuffled post-test question sets
	vars.Aarray = shuffle( [1,1,1,1,1,1,1,2,2,2,2,2] );
	vars.Barray = shuffle( [3,3,3,3,3,3,3,4,4,4,4,4] );
	__end__
	set _prepare ""

define loop test
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 48
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Question "梁直青、郭芳妤（2018）的研究發現，告知消費者「要等幾分鐘」，可以增加消費者等候的意願。"
	setcycle 0 Test_id 1
	setcycle 0 Q_type Knowledge
	setcycle 0 Topic Test
	setcycle 0 Set_id 1
	setcycle 0 correct_response y
	setcycle 1 Question "梁直青、郭芳妤（2018）的研究發現，告知消費者「要等幾分鐘」，會減低消費者等候的意願。"
	setcycle 1 Test_id 1
	setcycle 1 Q_type Knowledge
	setcycle 1 Topic Test
	setcycle 1 Set_id 2
	setcycle 1 correct_response n
	setcycle 2 Question "梁直青、郭芳妤（2018）的研究發現，當等候的時間增加時，放棄加入排隊的比率也會增加。"
	setcycle 2 Test_id 1
	setcycle 2 Q_type Knowledge
	setcycle 2 Topic Test
	setcycle 2 Set_id 3
	setcycle 2 correct_response y
	setcycle 3 Question "梁直青、郭芳妤（2018）的研究發現，當等候的時間增加時，願意加入排隊的比率也會增加。"
	setcycle 3 Test_id 1
	setcycle 3 Q_type Knowledge
	setcycle 3 Topic Test
	setcycle 3 Set_id 4
	setcycle 3 correct_response n
	setcycle 4 Question "變形臉孔典範實驗結果發現，隨著年齡的增長，7~12歲台灣兒童要將混合亞洲人與白人特徵的臉孔歸類為亞洲人，所需之亞洲人臉孔特徵的比例也會增加。"
	setcycle 4 Test_id 2
	setcycle 4 Q_type Knowledge
	setcycle 4 Topic Test
	setcycle 4 Set_id 1
	setcycle 4 correct_response y
	setcycle 5 Question "變形臉孔典範實驗結果發現，隨著年齡的增長，7~12歲台灣兒童要將混合亞洲人與白人特徵的臉孔歸類為亞洲人，所需之亞洲人臉孔特徵的比例也會增加。"
	setcycle 5 Test_id 2
	setcycle 5 Q_type Knowledge
	setcycle 5 Topic Test
	setcycle 5 Set_id 2
	setcycle 5 correct_response n
	setcycle 6 Question "變形臉孔典範實驗結果發現，7-8歲的台灣兒童對於亞洲/白人混合臉的歸類傾向為中立，可能還未發展出亞洲人與白人的臉孔分類偏誤。"
	setcycle 6 Test_id 2
	setcycle 6 Q_type Knowledge
	setcycle 6 Topic Test
	setcycle 6 Set_id 3
	setcycle 6 correct_response y
	setcycle 7 Question "變形臉孔典範實驗結果發現，7-8歲的台灣兒童對於亞洲/白人混合臉的歸類較傾向為白人臉孔。"
	setcycle 7 Test_id 2
	setcycle 7 Q_type Knowledge
	setcycle 7 Topic Test
	setcycle 7 Set_id 4
	setcycle 7 correct_response n
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	run test_seq

define sequence test_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Test_survey "(([Test_id]=[Qid01]) and ([Set_id] = [CRid01])) or (([Test_id]=[Qid01]) and ([Set_id] = [CRid02])) or (([Test_id]=[Qid02]) and ([Set_id] = [CRid03])) or (([Test_id]=[Qid02]) and ([Set_id] = [CRid04])) or (([Test_id]=[Qid03]) and ([Set_id] = [CRid05])) or (([Test_id]=[Qid03]) and ([Set_id] = [CRid06]))"
	run Test_recording_notepad always
	run Test_recording always
	run Study_logger always

define loop text_CB1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Content "<span style='font-size:14px;'>每當有新產品推出時，總是會有一堆人跟風購買，即使有人山人海的人潮，依舊沒有減少大家排隊的熱情。排隊會帶來不耐煩與煩躁的負面情緒，但是為什麼消費者仍會選擇加入排隊的行列呢？這其實跟我們的大腦認知決策很有關</span><br><br><span style='font-size:14px;'>係！近年來由於科技之發達，已經慢慢開始採用腦波量技術來進行研究，像是應用於了解人類資訊認知、(Farwell & Smith, 2001; Murugappan et al., 2008)、情緒反應(Rozgić, Vitaladevuni, & Prasad, 2013; Zhang & Zhou, 2007)或專注力訓</span><br><br><span style='font-size:14px;'>練(Chen, Wang, & Yu, 2017)。梁直青與郭芳妤（2018）透過情境模擬實驗並且搭配腦波技術來觀察「等候時間」與「等候資訊」對於消費者等候決策的變化歷程。排隊現象是台灣特有的一種文化，而排隊現象依照消費者的需求可以</span><br><br><span style='font-size:14px;'>區分為「必要行排隊」以及「需求性排隊」(Friman, 2010; Lotrakul, Sumrithe, & Saipanish, 2008)。本文主要是探討需求性排隊，也就是受到個人意願影響的排隊，若企業能夠透過揭露等候資訊則有利於降低消費者對於等候時間的不耐</span><br><br><span style='font-size:14px;'>煩(Hui, Tse, & Zhou, 2006)。等候資訊會影響到消費者對於時間的內在感知，包括：個人時間風格、等候容忍度與情緒，要測量等候資訊對於內在時間感知，可以透過問卷調查或者生心理訊號來探究。雖然以往都是透過問卷調查的方</span><br><br><span style='font-size:14px;'>式進行研究，但測量生心理訊號可以了解消費者面對等候資訊刺激的直接反應。研究結果發現，當面臨等候時間遞減情境時，受試者放棄加入排隊的比率會降低；而在面對等候時間遞增情境時，放棄加入排隊隊伍的比率會增加。證</span><br><br><span style='font-size:14px;'>實時間資訊確實會影響消費者決策，因此企業必須要避免因為時間過長影響顧客決策與消費意圖(Gillam, Simmons, Stevenson, & Weiss, 2014; Park & Kim, 2007) ，未來可以針對排隊管理策略進行近一步的研究。</span>"
	setcycle 0 NH Y
	setcycle 0 OSA N
	setcycle 0 Text_id 1
	setcycle 0 BLOCK 1
	setcycle 0 O_id 1
	setcycle 0 Link "https://dx.doi.org/10.6129/CJP.201809_60(3).0003"
	setcycle 0 cite "梁直青、郭芳妤 2018"
	setcycle 1 Content "<span style='font-size:18px;'><b>背景</b></span><br><br><span style='font-size:14px;'>每當有新產品推出時，總是會有一堆人跟風購買，即使有人山人海的人潮，依舊沒有減少大家排隊的熱情。排隊會帶來不耐煩與煩躁的負面情緒，但是為什麼消費者仍會選擇加入排隊的行列呢？這其實跟我們的大腦認知決策很有關</span><br><br><span style='font-size:14px;'>係！</span><br><br><br><span style='font-size:18px;'><b>為什麼進行這項研究</b></span><br><br><span style='font-size:14px;'>近年來由於科技之發達，已經慢慢開始採用腦波量技術來進行研究，像是應用於了解人類資訊認知、(Farwell & Smith, 2001; Murugappan et al., 2008)、 情緒反應(Rozgić, Vitaladevuni, & Prasad, 2013; Zhang & Zhou, 2007)或專注力訓練</span><br><br><span style='font-size:14px;'>(Chen, Wang, & Yu, 2017)。</span><br><br><br><span style='font-size:18px;'><b>研究人員做了什麼，發現了什麼？</b></span><br><br><span style='font-size:14px;'>梁直青與郭芳妤（2018）透過情境模擬實驗並且搭配腦波技術來觀察「等候時間」與「等候資訊」對於消費者等候決策的變化歷程。</span><br><br><span style='font-size:14px;'>排隊現象是台灣特有的一種文化，而排隊現象依照消費者的需求可以區分為「必要行排隊」以及「需求性排隊」(Friman, 2010; Lotrakul, Sumrithe, & Saipanish, 2008)。本文主要是探討需求性排隊，也就是受到個人意願影響的排隊，若</span><br><br><span style='font-size:14px;'>企業能夠透過揭露等候資訊則有利於降低消費者對於等候時間的不耐煩(Hui, Tse, & Zhou, 2006)。等候資訊會影響到消費者對於時間的內在感知，包括：個人時間風格、等候容忍度與情緒，要測量等候資訊對於內在時間感知，可以透</span><br><br><span style='font-size:14px;'>過問卷調查或者生心理訊號來探究。雖然以往都是透過問卷調查的方式進行研究，但測量生心理訊號可以了解消費者面對等候資訊刺激的直接反應。研究結果發現，當面臨等候時間遞減情境時，受試者放棄加入排隊的比率會降低；</span><br><br><span style='font-size:14px;'>而在面對等候時間遞增情境時，放棄加入排隊隊伍的比率會增加。</span><br><br><br><span style='font-size:18px;'><b>這些發現意味著什麼</b></span><br><br><span style='font-size:14px;'>證實時間資訊確實會影響消費者決策，因此企業必須要避免因為時間過長影響顧客決策與消費意圖(Gillam, Simmons, Stevenson, & Weiss, 2014; Park & Kim, 2007) ，未來可以針對排隊管理策略進行近一步的研究。</span>"
	setcycle 1 NH N
	setcycle 1 OSA N
	setcycle 1 Text_id 1
	setcycle 1 BLOCK 2
	setcycle 1 O_id 1
	setcycle 1 Link "https://dx.doi.org/10.6129/CJP.201809_60(3).0003"
	setcycle 1 cite "梁直青、郭芳妤 2018"
	setcycle 2 Content "<span style='font-size:14px;'>排隊現象不僅是司空見慣的消費行為，其伴隨的管理效益也不斷被服務供應商所關注，如何讓消費者動身加入或停留在服務佇列中成為一項有趣的管理議題。腦波是人類面對問題時的大腦直接反應，若能觀察腦波變化與決策之間的</span><br><br><span style='font-size:14px;'>關係，應該可以幫助學者與業者瞭解排隊對於消費者的刺激影響。據此，本研究以情境模擬實驗搭配腦波技術，觀測提供「等候時間」與提供「等候資訊」的排隊現象於消費者等候決策歷程的變化。本研究並針對上述兩種現象對消</span><br><br><span style='font-size:14px;'>費者等候意願進行問卷比較。問卷結果發現給予消費者等候時間資訊可以正向激勵消費者繼續加入等候。此外，本研究針對提供等候時間和提供等候資訊來進行腦波分析比較，在統計檢定上也呈現出顯著差異。</span>"
	setcycle 2 NH N
	setcycle 2 OSA Y
	setcycle 2 Text_id 1
	setcycle 2 BLOCK 3
	setcycle 2 O_id 1
	setcycle 2 Link "https://dx.doi.org/10.6129/CJP.201809_60(3).0003"
	setcycle 2 cite "梁直青、郭芳妤 2018"
	setcycle 3 Content "<span style='font-size:14px;'>演化賦予身為靈長類的人類成為臉孔辨認專家的先天條件與後天環境，即便是僅僅出生幾個月的新生兒，也顯示出對於臉孔的高度偏好與注意。你是否有過這樣的經驗？當我們在看外國電影時，會覺得外國人的臉孔都很相像難以區</span><br><br><span style='font-size:14px;'>辨，容易對外國演員產生角色混淆；對於本國演員的臉孔則較不會產生混淆。此現象即是臉孔辨認上的本種族優勢（own-race advantage，簡稱ORA），我們辨識及記憶本種族臉孔的能力優於他種族臉孔。人們對於種族訊息的敏感度</span><br><br><span style='font-size:14px;'>從嬰兒期已見端倪，跨文化研究發現不論是白種人嬰兒或是漢民族的亞洲人嬰兒，在滿3 ~ 4 個月大時會偏好注視本種族臉孔（ Kelly et al., 2005; Kelly et al, 2007a）。 Peery與Bodenhausen在2008年所做的研究中發現，白人參與者傾向</span><br><br><span style='font-size:14px;'>將50% 黑人與50% 白人混合的變形臉孔（morphing face）分類為黑人。此研究結果顯示出，我們除了有本種族臉孔優勢以外，在種族臉孔的歸類上也會有偏誤，當我們嘗試去辨識一個具有雙重血緣的個體時，會傾向於以單一種族去</span><br><br><span style='font-size:14px;'>做分類。種族分類的議題不只引起西方學界的熱烈討論，近年國內學者也開始探討。陳君嫚等人(2019)的研究，以變形臉孔典範將實驗分為兩個部分，分別測試成人及學齡期兒童對不同比例亞洲人/ 白人混合臉孔的種族分類傾向。他</span><br><br><span style='font-size:14px;'>們的研究結果發現，隨著目標臉孔中的亞洲人成分增加，不論是成人或兒童參與者將該臉孔分類為亞洲人的比率都會隨之提高，且可發現隨著參與者年齡增加，在歸類變形臉孔時就愈容易將之歸類為白人。有趣的是，研究結果顯示</span><br><br><span style='font-size:14px;'>7 ~ 8歲兒童組並未將中性的刺激(50%亞洲人，50%白人成分)歸類為白人，代表他們可能尚未發展出對種族混合臉孔的分類偏誤…..</span>"
	setcycle 3 NH Y
	setcycle 3 OSA N
	setcycle 3 Text_id 2
	setcycle 3 BLOCK 1
	setcycle 3 O_id 2
	setcycle 3 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 3 cite "陳君嫚、郭昱劭、簡惠玲 2019"
	setcycle 4 Content "<span style='font-size:18px;'><b>背景</b></span><br><br><span style='font-size:14px;'>演化賦予身為靈長類的人類成為臉孔辨認專家的先天條件與後天環境，即便是僅僅出生幾個月的新生兒，也顯示出對於臉孔的高度偏好與注意。你是否有過這樣的經驗？當我們在看外國電影時，會覺得外國人的臉孔都很相像難以區</span><br><br><span style='font-size:14px;'>辨，容易對外國演員產生角色混淆；對於本國演員的臉孔則較不會產生混淆。此現象即是臉孔辨認上的本種族優勢(（own-race advantage，簡稱ORA），我們辨識及記憶本種族臉孔的能力優於他種族臉孔。</span><br><br><br><span style='font-size:18px;'><b>為什麼進行這項研究</b></span><br><br><span style='font-size:14px;'>人們對於種族訊息的敏感度從嬰兒期已見端倪，跨文化研究發現不論是白種人嬰兒或是漢民族的亞洲人嬰兒，在滿3 ~ 4 個月大時會偏好注視本種族臉孔（ Kelly et al., 2005; Kelly et al, 2007a）。 Peery與Bodenhausen在2008年所做的研</span><br><br><span style='font-size:14px;'>究中發現，白人參與者傾向將50% 黑人與50% 白人混合的變形臉孔（morphing face）分類為黑人。此研究結果顯示出，我們除了有本種族臉孔優勢以外，在種族臉孔的歸類上也會有偏誤，當我們嘗試去辨識一個具有雙重血緣的個體</span><br><br><span style='font-size:14px;'>時，會傾向於以單一種族去做分類。種族分類的議題不只引起西方學界的熱烈討論，近年國內學者也開始探討。</span><br><br><br><span style='font-size:18px;'><b>研究人員做了什麼，發現了什麼？</b></span><br><br><span style='font-size:14px;'>陳君嫚等人(2019)的研究，以變形臉孔典範將實驗分為兩個部分，分別測試成人及學齡期兒童對不同比例亞洲人/ 白人混合臉孔的種族分類傾向。他們的研究結果發現，隨著目標臉孔中的亞洲人成分增加，不論是成人或兒童參與者將</span><br><br><span style='font-size:14px;'>該臉孔分類為亞洲人的比率都會隨之提高，且可發現隨著參與者年齡增加，在歸類亞洲/白人臉各半的(50%亞洲，50%白人)變形臉孔時就愈容易將之歸類為白人。 </span><br><br><br><span style='font-size:18px;'><b>這些發現意味著什麼</b></span><br><br><span style='font-size:14px;'>有趣的是，研究結果顯示7 ~ 8 歲兒童組並未將中性的刺激(50%亞洲人，50%白人成分)歸類為白人，代表他們可能尚未發展出對種族混合臉孔的分類偏誤……</span>"
	setcycle 4 NH N
	setcycle 4 OSA N
	setcycle 4 Text_id 2
	setcycle 4 BLOCK 3
	setcycle 4 O_id 2
	setcycle 4 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 4 cite "陳君嫚、郭昱劭、簡惠玲 2019"
	setcycle 5 Content "<span style='font-size:14px;'>廣義的他種族效應係指人們對本種族與他種族臉孔的處理方式有別，包括辨認本種族臉孔的優勢以及對混合種族臉孔的歸類偏誤。先前的種族臉孔歸類研究多以西方白種人社會為模型，本研究欲延伸至單一種族的台灣社會，我們採</span><br><br><span style='font-size:14px;'>用變形臉孔典範探討台灣成人與學齡期兒童對種族混合臉孔的分類表現。實驗一為成人（N = 33）的種族分類作業，測試成人對不同比例亞洲人／白人混合臉孔的種族分類傾向；實驗二為學齡期兒童，測試7 ～ 8歲（N =21）、9 ～ </span><br><br><span style='font-size:14px;'>10歲（N = 22）與11 ～ 12歲（N = 22）兒童的種族分類傾向。結果發現，隨變形臉孔中的亞洲人成分增加，參與者將該臉孔分類為亞洲人的比率隨之提高；而針對亞洲人成分50%的臉孔，7 ～ 8歲組傾向將其歸類為亞洲人，而9 ～ </span><br><br><span style='font-size:14px;'>10歲組、11 ～ 12歲組及成人則都傾向將之歸類為白人。反應時間分析顯示愈靠近兩個端點的反應時間愈短（表示兩端的臉孔容易歸類），愈靠近中間的臉孔反應時間愈長（較困難）。最後，曲線擬合結果顯示，成人將目標臉孔分</span><br><br><span style='font-size:14px;'>類為亞洲人的機率達一半（閾值），所需的亞洲人成分為56.01%；7 ～ 8歲組的閾值為49.52%，表現出中立的歸類傾向；而9 ～ 10歲及11 ～ 12歲組的閾值分別為54.27%、53.13%，有隨年齡略增加的趨勢。整體而言，本研究提供種</span><br><br><span style='font-size:14px;'>族臉孔歸類偏誤在兒童期發展的跨文化證據。</span>"
	setcycle 5 NH N
	setcycle 5 OSA Y
	setcycle 5 Text_id 2
	setcycle 5 BLOCK 2
	setcycle 5 O_id 2
	setcycle 5 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 5 cite "陳君嫚、郭昱劭、簡惠玲 2019"
	setcycle 6 Content "<span style='font-size:14px;'>在日常生活中，你是否曾經有過要找某樣東西卻怎麼樣也找不到的經驗呢？通常我們都會認為顯眼的物體在雜亂的環境中較容易被找到，相似的物體較難以被搜尋，生物界中也有諸多類似原則的例子，像是動物們為了躲避天敵，會</span><br><br><span style='font-size:14px;'>透過偽裝的方式躲藏於環境中。而過去許多關於視覺注意力的研究亦指出，顯眼的物體確實較容易攫取注意力。不過，中國醫藥大學神經科學與認知科學研究所李金鈴教授及其學生呂怡慧之研究發現，當個體在搜尋物體時，是否能</span><br><br><span style='font-size:14px;'>夠偵測到目標物最重要的關鍵，並非是因為目標物相較於其他干擾物具有顯著性，或是目標物與其他干擾物具有相似性，而是目標物是否與其他干擾物產生連續性的知覺。以生物的偽裝機制為例，我們最常見的就是生物會透過顏色</span><br><br><span style='font-size:14px;'>或擬態的方式使自身融入環境以躲避危險，儘管有些生物本身具有相當鮮豔的顏色，但只要可以利用身上的條紋或是肢體型態使自身與環境中的物體排列一致，將能夠製造出連續性的特性，使自己融入環境中而不容易被察覺。另</span><br><br><span style='font-size:14px;'>外，街上商店招牌的形狀樣式是否具有連續性的特性，亦會影響人們在搜尋上的差異，當街上的商店招牌都採用相同大小形狀的樣式，儘管許多商家會透過用鮮艷的顏色來做區隔，仍會使人們較難以找到目標商店；反之，若各商家</span><br><br><span style='font-size:14px;'>的招牌排列不一致，則較不會有被遮蔽的情況發生。因此，在生活的許多設計中，想要更快地被人們注意到，並非要著重在顏色或形狀與周遭不一樣，而是要避免與周遭的事物形成連續性的知覺所產生的遮蔽效果。</span>"
	setcycle 6 NH Y
	setcycle 6 OSA N
	setcycle 6 Text_id 3
	setcycle 6 BLOCK 2
	setcycle 6 O_id 3
	setcycle 6 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 6 cite "呂怡慧、李金鈴 2017"
	setcycle 7 Content "<span style='font-size:18px;'><b>背景</b></span><br><br><span style='font-size:14px;'>在日常生活中，你是否曾經有過要找某樣東西卻怎麼樣也找不到的經驗呢？通常我們都會認為顯眼的物體在雜亂的環境中較容易被找到，相似的物體較難以被搜尋。</span><br><br><br><span style='font-size:18px;'><b>為什麼進行這項研究</b></span><br><br><span style='font-size:14px;'>生物界中也有諸多類似原則的例子，像是動物們為了躲避天敵，會透過偽裝的方式躲藏於環境中。而過去許多關於視覺注意力的研究亦指出，顯眼的物體確實較容易攫取注意力。</span><br><br><br><span style='font-size:18px;'><b>研究人員做了什麼，發現了什麼？</b></span><br><br><span style='font-size:14px;'>中國醫藥大學神經科學與認知科學研究所李金鈴教授及其學生呂怡慧之研究發現，當個體在搜尋物體時，是否能夠偵測到目標物最重要的關鍵，並非是因為目標物相較於其他干擾物具有顯著性，或是目標物與其他干擾物具有相似</span><br><br><span style='font-size:14px;'>性，而是目標物是否與其他干擾物產生連續性的知覺。以生物的偽裝機制為例，我們最常見的就是生物會透過顏色或擬態的方式使自身融入環境以躲避危險，儘管有些生物本身具有相當鮮豔的顏色，但只要可以利用身上的條紋或是</span><br><br><span style='font-size:14px;'>肢體型態使自身與環境中的物體排列一致，將能夠製造出連續性的特性，使自己融入環境中而不容易被察覺。</span><br><br><br><span style='font-size:18px;'><b>這些發現意味著什麼</b></span><br><br><span style='font-size:14px;'>另外，街上商店招牌的形狀樣式是否具有連續性的特性，亦會影響人們在搜尋上的差異，當街上的商店招牌都採用相同大小形狀的樣式，儘管許多商家會透過用鮮艷的顏色來做區隔，仍會使人們較難以找到目標商店；反之，若各商</span><br><br><span style='font-size:14px;'>家的招牌排列不一致，則較不會有被遮蔽的情況發生。因此，在生活的許多設計中，想要更快地被人們注意到，並非要著重在顏色或形狀與周遭不一樣，而是要避免與周遭的事物形成連續性的知覺所產生的遮蔽效果。</span>"
	setcycle 7 NH N
	setcycle 7 OSA N
	setcycle 7 Text_id 3
	setcycle 7 BLOCK 1
	setcycle 7 O_id 3
	setcycle 7 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 7 cite "呂怡慧、李金鈴 2017"
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	setcycle 8 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 8 cite "呂怡慧、李金鈴 2017"
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	setcycle 9 Link "https://www.doi.org/10.6129/CJP.202003_62(1).0002 "
	setcycle 9 cite "陳秀蓉、鄭逸如、吳治勳 2020"
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	setcycle 10 Link "https://www.doi.org/10.6129/CJP.202003_62(1).0002 "
	setcycle 10 cite "陳秀蓉、鄭逸如、吳治勳 2020"
	setcycle 11 Content "<span style='font-size:14px;'>慢性病患者在疾病調適中有一定比例需面臨憂鬱的議題，而此一議題在近期漸漸受到重視，本研究主要目的即在探討慢性病患者在多元疾病調適歷程中影響憂鬱的相關因素。研究邀請兩類門診慢性病患者，包括高血壓患者110名與</span><br><br><span style='font-size:14px;'>糖尿病患者117名，共227，男性121位，女性106位，平均年齡為60.94歲。經由研究邀請同意後請參與研究者填寫五份問卷：病後生活變動量表、預期健康控制量表、罹病情緒量表、自我照顧行為量表及貝克憂鬱量表第二版。結果</span><br><br><span style='font-size:14px;'>證實研究路徑模式直接效果與間接效果部分成立；其中病後的生活變動透過罹病情緒間接影響憂鬱，預期控制透過自我照顧間接影響憂鬱，雙路徑中介效果成立。研究討論疾病調適憂鬱路徑的意義，並提出臨床服務的應用與建</span><br><br><span style='font-size:14px;'>議，最後亦針對研究限制進行討論。</span>"
	setcycle 11 NH N
	setcycle 11 OSA Y
	setcycle 11 Text_id 4
	setcycle 11 BLOCK 1
	setcycle 11 O_id 4
	setcycle 11 Link "https://www.doi.org/10.6129/CJP.202003_62(1).0002 "
	setcycle 11 cite "陳秀蓉、鄭逸如、吳治勳 2020"
	setcycle 12 Content "<span style='font-size:14px;'>隨著醫療照護、公共衛生等技術的進步以及嚴重的少子化現象，台灣也繼日本、新加坡正式邁入高齡社會。據統計台灣目前的老年人口已超過人口總數的14%，等於平均每七人就有一人是年滿65歲的長者。因此，如何去保障高齡年</span><br><br><span style='font-size:14px;'>長者在生活上的適應與心理層面上的健康是現今國內各界急需關切的重要議題。俗話說：「百善孝為先」，孝道倫理強調子女盡心盡力的侍奉父母、滿足他們的期待。對於已經步入年老的雙親而言，在生活中最能夠依靠的就屬那些</span><br><br><span style='font-size:14px;'>年輕力壯的成年子女了。若成年子女越是能夠認同孝道倫理的概念，將給予年長的父母親極大的安全感並能夠保障其生活。除此之外，成年子女要成為父母心目中理想的依靠對象，除了在信念層面上要能認同照顧父母老年生活是自</span><br><br><span style='font-size:14px;'>己身為子女應盡的使命或責任，似乎也必須能夠了解父母的生活習慣、喜好與想法，有能力與他們有良好的關係互動，才能夠使其安享無憂無慮、舒適愉快的老年生活。吳志文與葉光輝（2020）的研究支持了這些想法，研究結果發</span><br><br><span style='font-size:14px;'>現當成年子女對孝順的信念越高時，會促使長者認為該名子女能「可靠回應」自己當下立即的需求，以及「理解重視」自己對老年生活的擔憂煩心；此外，若他們有越成熟的關係互動能力，愈能理解父母在老年生活中彼此互動的期</span><br><br><span style='font-size:14px;'>望、愈可以採取有益促進彼此關係的互動策略，並且愈能對彼此之間互動的表現感到安適自在，因而愈能透過平日主動關懷與支持等表現，讓老年父母感受到成年子女對自己相當重視。最後研究也顯示，若老年父母認為家中有個「</span><br><br><span style='font-size:14px;'>可靠的人」可以依靠時，可以讓他們感受到生活更有意義、更自由，並且較不會感到憂鬱。從這些結果我們可以得知，成年子女對年長父母的影響是非常大的。所以不論生活再忙碌，也不要忘了給予家中的長輩適時的關心，多多的</span><br><br><span style='font-size:14px;'>去理解他們、傾聽他們的聲音，讓他們感覺到生活中還有個靠山可以依靠，促使他們人生的後半場可以過得豐富而有意義。</span>"
	setcycle 12 NH Y
	setcycle 12 OSA N
	setcycle 12 Text_id 5
	setcycle 12 BLOCK 3
	setcycle 12 O_id 5
	setcycle 12 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
	setcycle 12 cite "吳志文、葉光輝 2020"
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	setcycle 13 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
	setcycle 13 cite "吳志文、葉光輝 2020"
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	setcycle 14 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
	setcycle 14 cite "吳志文、葉光輝 2020"
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	setcycle 15 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 15 cite "鄭昱宏、周婉茹、周德賢、鄭伯壎 2019"
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	setcycle 16 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 16 cite "鄭昱宏、周婉茹、周德賢、鄭伯壎 2019"
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	setcycle 17 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 17 cite "鄭昱宏、周婉茹、周德賢、鄭伯壎 2019"
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	setcycle 18 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 18 cite "黃舒屏、陳振宇 2019"
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	setcycle 19 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 19 cite "黃舒屏、陳振宇 2019"
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	setcycle 20 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 20 cite "黃舒屏、陳振宇 2019"
	setcycle 21 Content "<span style='font-size:14px;'>強暴迷思(rape myth)一詞，是西方女性主義學者Brownmiller於1975年所提出的概念，她認為這是在父權社會底下所存在的一種對女性遭受性侵的普遍誤解，使得強暴事件中往往被指責的對象反而是受害者而非加害者。常見的強暴迷</span><br><br><span style='font-size:14px;'>思例子如：「都是因為穿著太暴露才會被強暴」、「常去夜店玩才會被撿屍」、「沒有好好保護自己才會被強暴」。以往的研究多為使用西方所移植的強暴迷思概念及使用西方的量表，不過玄奘大學應用心理學系黃軍義教授認為，</span><br><br><span style='font-size:14px;'>由於現今的華人社會同時受到傳統中華文化與西方現代文化的雙重影響，我們應該重新檢視強暴迷思在華人社會現況中所蘊含的內涵，並發展出符合在地性的本土測量工具。研究結果亦發現，與西方個人主義文化下的所建構的強暴</span><br><br><span style='font-size:14px;'>迷思概念特徵非常不同的是，華人強暴迷思具有重視家庭、講究貞操、重視他人評價、修身自省等特徵，強暴被害者較容易被要求自我反省與檢討，並且為了維繫和諧與名譽而選擇隱忍。在這些對於被害極度不公平的迷思中，將會</span><br><br><span style='font-size:14px;'>加重對被害者的傷害，並且不利於被害者走出創傷。另外，過往的研究指出強暴迷思將會影響男性成為強暴加害者(Bohner et al.,2010)，接受強暴迷思的女性則較容易成為強暴受害者(Yeater et al.,2010)。亦有研究顯示，相關的實務工</span><br><br><span style='font-size:14px;'>作者，如社工、心理師、司法人員等，對於性別角色的刻板化程度將會影響強暴迷思接受程度，並進而影響處理強暴案件的態度(方嘉珩，2008；Uji et al., 2007)。因此，在強暴行為的防治教育上，強暴迷思的宣導對象應不分性別與</span><br><br><span style='font-size:14px;'>職務！</span>"
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	setcycle 21 Link "https://dx.doi.org/10.6129/CJP.20170406"
	setcycle 21 cite "黃軍義、林旖旎 2017"
	setcycle 22 Content "<span style='font-size:18px;'><b>背景</b></span><br><br><span style='font-size:14px;'>強暴迷思(rape myth)一詞，是西方女性主義學者Brownmiller於1975年所提出的概念，她認為這是在父權社會底下所存在的一種對女性遭受性侵的普遍誤解，使得強暴事件中往往被指責的對象反而是受害者而非加害者。常見的強暴迷</span><br><br><span style='font-size:14px;'>思例子如：「都是因為穿著太暴露才會被強暴」、「常去夜店玩才會被撿屍」、「沒有好好保護自己才會被強暴」。</span><br><br><br><span style='font-size:18px;'><b>為什麼進行這項研究</b></span><br><br><span style='font-size:14px;'>以往的研究多為使用西方所移植的強暴迷思概念及使用西方的量表，不過玄奘大學應用心理學系黃軍義教授認為，由於現今的華人社會同時受到傳統中華文化與西方現代文化的雙重影響，我們應該重新檢視強暴迷思在華人社會現況</span><br><br><span style='font-size:14px;'>中所蘊含的內涵，並發展出符合在地性的本土測量工具。</span><br><br><br><span style='font-size:18px;'><b>研究人員做了什麼，發現了什麼？</b></span><br><br><span style='font-size:14px;'>研究結果亦發現,與西方個人主義文化下的所建構的強暴迷思概念特徵非常不同的是，華人強暴迷思具有重視家庭、講究貞操、重視他人評價、修身自省等特徵，強暴被害者較容易被要求自我反省與檢討，並且為了維繫和諧與名譽而</span><br><br><span style='font-size:14px;'>選擇隱忍。在這些對於被害極度不公平的迷思中，將會加重對被害者的傷害，並且不利於被害者走出創傷。</span><br><br><span style='font-size:14px;'>另外，過往的研究指出強暴迷思將會影響男性成為強暴加害者(Bohner et al.,2010)，接受強暴迷思的女性則較容易成為強暴受害者(Yeater et al.,2010)。亦有研究顯示，相關的實務工作者，如社工、心理師、司法人員等，對於性別角色</span><br><br><span style='font-size:14px;'>的刻板化程度將會影響強暴迷思接受程度，並進而影響處理強暴案件的態度(方嘉珩，2008；Uji et al., 2007)。</span><br><br><br><span style='font-size:18px;'><b>這些發現意味著什麼</b></span><br><br><span style='font-size:14px;'>因此，在強暴行為的防治教育上，強暴迷思的宣導對象應不分性別與職務！</span>"
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	setcycle 22 Link "https://dx.doi.org/10.6129/CJP.20170406"
	setcycle 22 cite "黃軍義、林旖旎 2017"
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	setcycle 23 Link "https://dx.doi.org/10.6129/CJP.20170406"
	setcycle 23 cite "黃軍義、林旖旎 2017"
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	setcycle 24 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
	setcycle 24 cite "楊立行、許清芳 2019"
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	setcycle 25 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
	setcycle 25 cite "楊立行、許清芳 2019"
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	setcycle 26 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
	setcycle 26 cite "楊立行、許清芳 2019"
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	setcycle 27 Link "https://dx.doi.org/10.6129/CJP.20170809"
	setcycle 27 cite "孫蒨如、林慧慈、洪嘉欣 2017"
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	setcycle 28 Link "https://dx.doi.org/10.6129/CJP.20170809"
	setcycle 28 cite "孫蒨如、林慧慈、洪嘉欣 2017"
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	setcycle 29 Link "https://dx.doi.org/10.6129/CJP.20170809"
	setcycle 29 cite "孫蒨如、林慧慈、洪嘉欣 2017"
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	setcycle 30 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
	setcycle 30 cite "黃從仁 2019"
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	setcycle 31 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
	setcycle 31 cite "黃從仁 2019"
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	setcycle 32 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
	setcycle 32 cite "黃從仁 2019"
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	setcycle 33 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
	setcycle 33 cite "周玉慧 2018"
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	setcycle 34 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
	setcycle 34 cite "周玉慧 2018"
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	setcycle 35 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
	setcycle 35 cite "周玉慧 2018"
	sortby BLOCK
	slice 0 12
	shuffle Text_id
	run text_seq

define loop text_CB2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Content "<span style='font-size:14px;'>每當有新產品推出時，總是會有一堆人跟風購買，即使有人山人海的人潮，依舊沒有減少大家排隊的熱情。排隊會帶來不耐煩與煩躁的負面情緒，但是為什麼消費者仍會選擇加入排隊的行列呢？這其實跟我們的大腦認知決策很有關</span><br><br><span style='font-size:14px;'>係！近年來由於科技之發達，已經慢慢開始採用腦波量技術來進行研究，像是應用於了解人類資訊認知、(Farwell & Smith, 2001; Murugappan et al., 2008)、情緒反應(Rozgić, Vitaladevuni, & Prasad, 2013; Zhang & Zhou, 2007)或專注力訓</span><br><br><span style='font-size:14px;'>練(Chen, Wang, & Yu, 2017)。梁直青與郭芳妤（2018）透過情境模擬實驗並且搭配腦波技術來觀察「等候時間」與「等候資訊」對於消費者等候決策的變化歷程。排隊現象是台灣特有的一種文化，而排隊現象依照消費者的需求可以</span><br><br><span style='font-size:14px;'>區分為「必要行排隊」以及「需求性排隊」(Friman, 2010; Lotrakul, Sumrithe, & Saipanish, 2008)。本文主要是探討需求性排隊，也就是受到個人意願影響的排隊，若企業能夠透過揭露等候資訊則有利於降低消費者對於等候時間的不耐</span><br><br><span style='font-size:14px;'>煩(Hui, Tse, & Zhou, 2006)。等候資訊會影響到消費者對於時間的內在感知，包括：個人時間風格、等候容忍度與情緒，要測量等候資訊對於內在時間感知，可以透過問卷調查或者生心理訊號來探究。雖然以往都是透過問卷調查的方</span><br><br><span style='font-size:14px;'>式進行研究，但測量生心理訊號可以了解消費者面對等候資訊刺激的直接反應。研究結果發現，當面臨等候時間遞減情境時，受試者放棄加入排隊的比率會降低；而在面對等候時間遞增情境時，放棄加入排隊隊伍的比率會增加。證</span><br><br><span style='font-size:14px;'>實時間資訊確實會影響消費者決策，因此企業必須要避免因為時間過長影響顧客決策與消費意圖(Gillam, Simmons, Stevenson, & Weiss, 2014; Park & Kim, 2007) ，未來可以針對排隊管理策略進行近一步的研究。</span>"
	setcycle 0 NH Y
	setcycle 0 OSA N
	setcycle 0 Text_id 1
	setcycle 0 BLOCK 2
	setcycle 0 O_id 1
	setcycle 0 Link "https://dx.doi.org/10.6129/CJP.201809_60(3).0003"
	setcycle 0 cite "梁直青、郭芳妤 2018"
	setcycle 1 Content "<span style='font-size:18px;'><b>背景</b></span><br><br><span style='font-size:14px;'>每當有新產品推出時，總是會有一堆人跟風購買，即使有人山人海的人潮，依舊沒有減少大家排隊的熱情。排隊會帶來不耐煩與煩躁的負面情緒，但是為什麼消費者仍會選擇加入排隊的行列呢？這其實跟我們的大腦認知決策很有關</span><br><br><span style='font-size:14px;'>係！</span><br><br><br><span style='font-size:18px;'><b>為什麼進行這項研究</b></span><br><br><span style='font-size:14px;'>近年來由於科技之發達，已經慢慢開始採用腦波量技術來進行研究，像是應用於了解人類資訊認知、(Farwell & Smith, 2001; Murugappan et al., 2008)、 情緒反應(Rozgić, Vitaladevuni, & Prasad, 2013; Zhang & Zhou, 2007)或專注力訓練</span><br><br><span style='font-size:14px;'>(Chen, Wang, & Yu, 2017)。</span><br><br><br><span style='font-size:18px;'><b>研究人員做了什麼，發現了什麼？</b></span><br><br><span style='font-size:14px;'>梁直青與郭芳妤（2018）透過情境模擬實驗並且搭配腦波技術來觀察「等候時間」與「等候資訊」對於消費者等候決策的變化歷程。</span><br><br><span style='font-size:14px;'>排隊現象是台灣特有的一種文化，而排隊現象依照消費者的需求可以區分為「必要行排隊」以及「需求性排隊」(Friman, 2010; Lotrakul, Sumrithe, & Saipanish, 2008)。本文主要是探討需求性排隊，也就是受到個人意願影響的排隊，若</span><br><br><span style='font-size:14px;'>企業能夠透過揭露等候資訊則有利於降低消費者對於等候時間的不耐煩(Hui, Tse, & Zhou, 2006)。等候資訊會影響到消費者對於時間的內在感知，包括：個人時間風格、等候容忍度與情緒，要測量等候資訊對於內在時間感知，可以透</span><br><br><span style='font-size:14px;'>過問卷調查或者生心理訊號來探究。雖然以往都是透過問卷調查的方式進行研究，但測量生心理訊號可以了解消費者面對等候資訊刺激的直接反應。研究結果發現，當面臨等候時間遞減情境時，受試者放棄加入排隊的比率會降低；</span><br><br><span style='font-size:14px;'>而在面對等候時間遞增情境時，放棄加入排隊隊伍的比率會增加。</span><br><br><br><span style='font-size:18px;'><b>這些發現意味著什麼</b></span><br><br><span style='font-size:14px;'>證實時間資訊確實會影響消費者決策，因此企業必須要避免因為時間過長影響顧客決策與消費意圖(Gillam, Simmons, Stevenson, & Weiss, 2014; Park & Kim, 2007) ，未來可以針對排隊管理策略進行近一步的研究。</span>"
	setcycle 1 NH N
	setcycle 1 OSA N
	setcycle 1 Text_id 1
	setcycle 1 BLOCK 3
	setcycle 1 O_id 1
	setcycle 1 Link "https://dx.doi.org/10.6129/CJP.201809_60(3).0003"
	setcycle 1 cite "梁直青、郭芳妤 2018"
	setcycle 2 Content "<span style='font-size:14px;'>排隊現象不僅是司空見慣的消費行為，其伴隨的管理效益也不斷被服務供應商所關注，如何讓消費者動身加入或停留在服務佇列中成為一項有趣的管理議題。腦波是人類面對問題時的大腦直接反應，若能觀察腦波變化與決策之間的</span><br><br><span style='font-size:14px;'>關係，應該可以幫助學者與業者瞭解排隊對於消費者的刺激影響。據此，本研究以情境模擬實驗搭配腦波技術，觀測提供「等候時間」與提供「等候資訊」的排隊現象於消費者等候決策歷程的變化。本研究並針對上述兩種現象對消</span><br><br><span style='font-size:14px;'>費者等候意願進行問卷比較。問卷結果發現給予消費者等候時間資訊可以正向激勵消費者繼續加入等候。此外，本研究針對提供等候時間和提供等候資訊來進行腦波分析比較，在統計檢定上也呈現出顯著差異。</span>"
	setcycle 2 NH N
	setcycle 2 OSA Y
	setcycle 2 Text_id 1
	setcycle 2 BLOCK 1
	setcycle 2 O_id 1
	setcycle 2 Link "https://dx.doi.org/10.6129/CJP.201809_60(3).0003"
	setcycle 2 cite "梁直青、郭芳妤 2018"
	setcycle 3 Content "<span style='font-size:14px;'>演化賦予身為靈長類的人類成為臉孔辨認專家的先天條件與後天環境，即便是僅僅出生幾個月的新生兒，也顯示出對於臉孔的高度偏好與注意。你是否有過這樣的經驗？當我們在看外國電影時，會覺得外國人的臉孔都很相像難以區</span><br><br><span style='font-size:14px;'>辨，容易對外國演員產生角色混淆；對於本國演員的臉孔則較不會產生混淆。此現象即是臉孔辨認上的本種族優勢（own-race advantage，簡稱ORA），我們辨識及記憶本種族臉孔的能力優於他種族臉孔。人們對於種族訊息的敏感度</span><br><br><span style='font-size:14px;'>從嬰兒期已見端倪，跨文化研究發現不論是白種人嬰兒或是漢民族的亞洲人嬰兒，在滿3 ~ 4 個月大時會偏好注視本種族臉孔（ Kelly et al., 2005; Kelly et al, 2007a）。 Peery與Bodenhausen在2008年所做的研究中發現，白人參與者傾向</span><br><br><span style='font-size:14px;'>將50% 黑人與50% 白人混合的變形臉孔（morphing face）分類為黑人。此研究結果顯示出，我們除了有本種族臉孔優勢以外，在種族臉孔的歸類上也會有偏誤，當我們嘗試去辨識一個具有雙重血緣的個體時，會傾向於以單一種族去</span><br><br><span style='font-size:14px;'>做分類。種族分類的議題不只引起西方學界的熱烈討論，近年國內學者也開始探討。陳君嫚等人(2019)的研究，以變形臉孔典範將實驗分為兩個部分，分別測試成人及學齡期兒童對不同比例亞洲人/ 白人混合臉孔的種族分類傾向。他</span><br><br><span style='font-size:14px;'>們的研究結果發現，隨著目標臉孔中的亞洲人成分增加，不論是成人或兒童參與者將該臉孔分類為亞洲人的比率都會隨之提高，且可發現隨著參與者年齡增加，在歸類變形臉孔時就愈容易將之歸類為白人。有趣的是，研究結果顯示</span><br><br><span style='font-size:14px;'>7 ~ 8歲兒童組並未將中性的刺激(50%亞洲人，50%白人成分)歸類為白人，代表他們可能尚未發展出對種族混合臉孔的分類偏誤…..</span>"
	setcycle 3 NH Y
	setcycle 3 OSA N
	setcycle 3 Text_id 2
	setcycle 3 BLOCK 2
	setcycle 3 O_id 2
	setcycle 3 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 3 cite "陳君嫚、郭昱劭、簡惠玲 2019"
	setcycle 4 Content "<span style='font-size:18px;'><b>背景</b></span><br><br><span style='font-size:14px;'>演化賦予身為靈長類的人類成為臉孔辨認專家的先天條件與後天環境，即便是僅僅出生幾個月的新生兒，也顯示出對於臉孔的高度偏好與注意。你是否有過這樣的經驗？當我們在看外國電影時，會覺得外國人的臉孔都很相像難以區</span><br><br><span style='font-size:14px;'>辨，容易對外國演員產生角色混淆；對於本國演員的臉孔則較不會產生混淆。此現象即是臉孔辨認上的本種族優勢(（own-race advantage，簡稱ORA），我們辨識及記憶本種族臉孔的能力優於他種族臉孔。</span><br><br><br><span style='font-size:18px;'><b>為什麼進行這項研究</b></span><br><br><span style='font-size:14px;'>人們對於種族訊息的敏感度從嬰兒期已見端倪，跨文化研究發現不論是白種人嬰兒或是漢民族的亞洲人嬰兒，在滿3 ~ 4 個月大時會偏好注視本種族臉孔（ Kelly et al., 2005; Kelly et al, 2007a）。 Peery與Bodenhausen在2008年所做的研</span><br><br><span style='font-size:14px;'>究中發現，白人參與者傾向將50% 黑人與50% 白人混合的變形臉孔（morphing face）分類為黑人。此研究結果顯示出，我們除了有本種族臉孔優勢以外，在種族臉孔的歸類上也會有偏誤，當我們嘗試去辨識一個具有雙重血緣的個體</span><br><br><span style='font-size:14px;'>時，會傾向於以單一種族去做分類。種族分類的議題不只引起西方學界的熱烈討論，近年國內學者也開始探討。</span><br><br><br><span style='font-size:18px;'><b>研究人員做了什麼，發現了什麼？</b></span><br><br><span style='font-size:14px;'>陳君嫚等人(2019)的研究，以變形臉孔典範將實驗分為兩個部分，分別測試成人及學齡期兒童對不同比例亞洲人/ 白人混合臉孔的種族分類傾向。他們的研究結果發現，隨著目標臉孔中的亞洲人成分增加，不論是成人或兒童參與者將</span><br><br><span style='font-size:14px;'>該臉孔分類為亞洲人的比率都會隨之提高，且可發現隨著參與者年齡增加，在歸類亞洲/白人臉各半的(50%亞洲，50%白人)變形臉孔時就愈容易將之歸類為白人。 </span><br><br><br><span style='font-size:18px;'><b>這些發現意味著什麼</b></span><br><br><span style='font-size:14px;'>有趣的是，研究結果顯示7 ~ 8 歲兒童組並未將中性的刺激(50%亞洲人，50%白人成分)歸類為白人，代表他們可能尚未發展出對種族混合臉孔的分類偏誤……</span>"
	setcycle 4 NH N
	setcycle 4 OSA N
	setcycle 4 Text_id 2
	setcycle 4 BLOCK 1
	setcycle 4 O_id 2
	setcycle 4 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 4 cite "陳君嫚、郭昱劭、簡惠玲 2019"
	setcycle 5 Content "<span style='font-size:14px;'>廣義的他種族效應係指人們對本種族與他種族臉孔的處理方式有別，包括辨認本種族臉孔的優勢以及對混合種族臉孔的歸類偏誤。先前的種族臉孔歸類研究多以西方白種人社會為模型，本研究欲延伸至單一種族的台灣社會，我們採</span><br><br><span style='font-size:14px;'>用變形臉孔典範探討台灣成人與學齡期兒童對種族混合臉孔的分類表現。實驗一為成人（N = 33）的種族分類作業，測試成人對不同比例亞洲人／白人混合臉孔的種族分類傾向；實驗二為學齡期兒童，測試7 ～ 8歲（N =21）、9 ～ </span><br><br><span style='font-size:14px;'>10歲（N = 22）與11 ～ 12歲（N = 22）兒童的種族分類傾向。結果發現，隨變形臉孔中的亞洲人成分增加，參與者將該臉孔分類為亞洲人的比率隨之提高；而針對亞洲人成分50%的臉孔，7 ～ 8歲組傾向將其歸類為亞洲人，而9 ～ </span><br><br><span style='font-size:14px;'>10歲組、11 ～ 12歲組及成人則都傾向將之歸類為白人。反應時間分析顯示愈靠近兩個端點的反應時間愈短（表示兩端的臉孔容易歸類），愈靠近中間的臉孔反應時間愈長（較困難）。最後，曲線擬合結果顯示，成人將目標臉孔分</span><br><br><span style='font-size:14px;'>類為亞洲人的機率達一半（閾值），所需的亞洲人成分為56.01%；7 ～ 8歲組的閾值為49.52%，表現出中立的歸類傾向；而9 ～ 10歲及11 ～ 12歲組的閾值分別為54.27%、53.13%，有隨年齡略增加的趨勢。整體而言，本研究提供種</span><br><br><span style='font-size:14px;'>族臉孔歸類偏誤在兒童期發展的跨文化證據。</span>"
	setcycle 5 NH N
	setcycle 5 OSA Y
	setcycle 5 Text_id 2
	setcycle 5 BLOCK 3
	setcycle 5 O_id 2
	setcycle 5 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 5 cite "陳君嫚、郭昱劭、簡惠玲 2019"
	setcycle 6 Content "<span style='font-size:14px;'>在日常生活中，你是否曾經有過要找某樣東西卻怎麼樣也找不到的經驗呢？通常我們都會認為顯眼的物體在雜亂的環境中較容易被找到，相似的物體較難以被搜尋，生物界中也有諸多類似原則的例子，像是動物們為了躲避天敵，會</span><br><br><span style='font-size:14px;'>透過偽裝的方式躲藏於環境中。而過去許多關於視覺注意力的研究亦指出，顯眼的物體確實較容易攫取注意力。不過，中國醫藥大學神經科學與認知科學研究所李金鈴教授及其學生呂怡慧之研究發現，當個體在搜尋物體時，是否能</span><br><br><span style='font-size:14px;'>夠偵測到目標物最重要的關鍵，並非是因為目標物相較於其他干擾物具有顯著性，或是目標物與其他干擾物具有相似性，而是目標物是否與其他干擾物產生連續性的知覺。以生物的偽裝機制為例，我們最常見的就是生物會透過顏色</span><br><br><span style='font-size:14px;'>或擬態的方式使自身融入環境以躲避危險，儘管有些生物本身具有相當鮮豔的顏色，但只要可以利用身上的條紋或是肢體型態使自身與環境中的物體排列一致，將能夠製造出連續性的特性，使自己融入環境中而不容易被察覺。另</span><br><br><span style='font-size:14px;'>外，街上商店招牌的形狀樣式是否具有連續性的特性，亦會影響人們在搜尋上的差異，當街上的商店招牌都採用相同大小形狀的樣式，儘管許多商家會透過用鮮艷的顏色來做區隔，仍會使人們較難以找到目標商店；反之，若各商家</span><br><br><span style='font-size:14px;'>的招牌排列不一致，則較不會有被遮蔽的情況發生。因此，在生活的許多設計中，想要更快地被人們注意到，並非要著重在顏色或形狀與周遭不一樣，而是要避免與周遭的事物形成連續性的知覺所產生的遮蔽效果。</span>"
	setcycle 6 NH Y
	setcycle 6 OSA N
	setcycle 6 Text_id 3
	setcycle 6 BLOCK 3
	setcycle 6 O_id 3
	setcycle 6 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 6 cite "呂怡慧、李金鈴 2017"
	setcycle 7 Content "<span style='font-size:18px;'><b>背景</b></span><br><br><span style='font-size:14px;'>在日常生活中，你是否曾經有過要找某樣東西卻怎麼樣也找不到的經驗呢？通常我們都會認為顯眼的物體在雜亂的環境中較容易被找到，相似的物體較難以被搜尋。</span><br><br><br><span style='font-size:18px;'><b>為什麼進行這項研究</b></span><br><br><span style='font-size:14px;'>生物界中也有諸多類似原則的例子，像是動物們為了躲避天敵，會透過偽裝的方式躲藏於環境中。而過去許多關於視覺注意力的研究亦指出，顯眼的物體確實較容易攫取注意力。</span><br><br><br><span style='font-size:18px;'><b>研究人員做了什麼，發現了什麼？</b></span><br><br><span style='font-size:14px;'>中國醫藥大學神經科學與認知科學研究所李金鈴教授及其學生呂怡慧之研究發現，當個體在搜尋物體時，是否能夠偵測到目標物最重要的關鍵，並非是因為目標物相較於其他干擾物具有顯著性，或是目標物與其他干擾物具有相似</span><br><br><span style='font-size:14px;'>性，而是目標物是否與其他干擾物產生連續性的知覺。以生物的偽裝機制為例，我們最常見的就是生物會透過顏色或擬態的方式使自身融入環境以躲避危險，儘管有些生物本身具有相當鮮豔的顏色，但只要可以利用身上的條紋或是</span><br><br><span style='font-size:14px;'>肢體型態使自身與環境中的物體排列一致，將能夠製造出連續性的特性，使自己融入環境中而不容易被察覺。</span><br><br><br><span style='font-size:18px;'><b>這些發現意味著什麼</b></span><br><br><span style='font-size:14px;'>另外，街上商店招牌的形狀樣式是否具有連續性的特性，亦會影響人們在搜尋上的差異，當街上的商店招牌都採用相同大小形狀的樣式，儘管許多商家會透過用鮮艷的顏色來做區隔，仍會使人們較難以找到目標商店；反之，若各商</span><br><br><span style='font-size:14px;'>家的招牌排列不一致，則較不會有被遮蔽的情況發生。因此，在生活的許多設計中，想要更快地被人們注意到，並非要著重在顏色或形狀與周遭不一樣，而是要避免與周遭的事物形成連續性的知覺所產生的遮蔽效果。</span>"
	setcycle 7 NH N
	setcycle 7 OSA N
	setcycle 7 Text_id 3
	setcycle 7 BLOCK 2
	setcycle 7 O_id 3
	setcycle 7 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 7 cite "呂怡慧、李金鈴 2017"
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	setcycle 8 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 8 cite "呂怡慧、李金鈴 2017"
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	setcycle 9 Link "https://www.doi.org/10.6129/CJP.202003_62(1).0002 "
	setcycle 9 cite "陳秀蓉、鄭逸如、吳治勳 2020"
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	setcycle 10 Link "https://www.doi.org/10.6129/CJP.202003_62(1).0002 "
	setcycle 10 cite "陳秀蓉、鄭逸如、吳治勳 2020"
	setcycle 11 Content "<span style='font-size:14px;'>慢性病患者在疾病調適中有一定比例需面臨憂鬱的議題，而此一議題在近期漸漸受到重視，本研究主要目的即在探討慢性病患者在多元疾病調適歷程中影響憂鬱的相關因素。研究邀請兩類門診慢性病患者，包括高血壓患者110名與</span><br><br><span style='font-size:14px;'>糖尿病患者117名，共227，男性121位，女性106位，平均年齡為60.94歲。經由研究邀請同意後請參與研究者填寫五份問卷：病後生活變動量表、預期健康控制量表、罹病情緒量表、自我照顧行為量表及貝克憂鬱量表第二版。結果</span><br><br><span style='font-size:14px;'>證實研究路徑模式直接效果與間接效果部分成立；其中病後的生活變動透過罹病情緒間接影響憂鬱，預期控制透過自我照顧間接影響憂鬱，雙路徑中介效果成立。研究討論疾病調適憂鬱路徑的意義，並提出臨床服務的應用與建</span><br><br><span style='font-size:14px;'>議，最後亦針對研究限制進行討論。</span>"
	setcycle 11 NH N
	setcycle 11 OSA Y
	setcycle 11 Text_id 4
	setcycle 11 BLOCK 2
	setcycle 11 O_id 4
	setcycle 11 Link "https://www.doi.org/10.6129/CJP.202003_62(1).0002 "
	setcycle 11 cite "陳秀蓉、鄭逸如、吳治勳 2020"
	setcycle 12 Content "<span style='font-size:14px;'>隨著醫療照護、公共衛生等技術的進步以及嚴重的少子化現象，台灣也繼日本、新加坡正式邁入高齡社會。據統計台灣目前的老年人口已超過人口總數的14%，等於平均每七人就有一人是年滿65歲的長者。因此，如何去保障高齡年</span><br><br><span style='font-size:14px;'>長者在生活上的適應與心理層面上的健康是現今國內各界急需關切的重要議題。俗話說：「百善孝為先」，孝道倫理強調子女盡心盡力的侍奉父母、滿足他們的期待。對於已經步入年老的雙親而言，在生活中最能夠依靠的就屬那些</span><br><br><span style='font-size:14px;'>年輕力壯的成年子女了。若成年子女越是能夠認同孝道倫理的概念，將給予年長的父母親極大的安全感並能夠保障其生活。除此之外，成年子女要成為父母心目中理想的依靠對象，除了在信念層面上要能認同照顧父母老年生活是自</span><br><br><span style='font-size:14px;'>己身為子女應盡的使命或責任，似乎也必須能夠了解父母的生活習慣、喜好與想法，有能力與他們有良好的關係互動，才能夠使其安享無憂無慮、舒適愉快的老年生活。吳志文與葉光輝（2020）的研究支持了這些想法，研究結果發</span><br><br><span style='font-size:14px;'>現當成年子女對孝順的信念越高時，會促使長者認為該名子女能「可靠回應」自己當下立即的需求，以及「理解重視」自己對老年生活的擔憂煩心；此外，若他們有越成熟的關係互動能力，愈能理解父母在老年生活中彼此互動的期</span><br><br><span style='font-size:14px;'>望、愈可以採取有益促進彼此關係的互動策略，並且愈能對彼此之間互動的表現感到安適自在，因而愈能透過平日主動關懷與支持等表現，讓老年父母感受到成年子女對自己相當重視。最後研究也顯示，若老年父母認為家中有個「</span><br><br><span style='font-size:14px;'>可靠的人」可以依靠時，可以讓他們感受到生活更有意義、更自由，並且較不會感到憂鬱。從這些結果我們可以得知，成年子女對年長父母的影響是非常大的。所以不論生活再忙碌，也不要忘了給予家中的長輩適時的關心，多多的</span><br><br><span style='font-size:14px;'>去理解他們、傾聽他們的聲音，讓他們感覺到生活中還有個靠山可以依靠，促使他們人生的後半場可以過得豐富而有意義。</span>"
	setcycle 12 NH Y
	setcycle 12 OSA N
	setcycle 12 Text_id 5
	setcycle 12 BLOCK 1
	setcycle 12 O_id 5
	setcycle 12 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
	setcycle 12 cite "吳志文、葉光輝 2020"
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	setcycle 13 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
	setcycle 13 cite "吳志文、葉光輝 2020"
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	setcycle 14 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
	setcycle 14 cite "吳志文、葉光輝 2020"
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	setcycle 15 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 15 cite "鄭昱宏、周婉茹、周德賢、鄭伯壎 2019"
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	setcycle 16 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 16 cite "鄭昱宏、周婉茹、周德賢、鄭伯壎 2019"
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	setcycle 17 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 17 cite "鄭昱宏、周婉茹、周德賢、鄭伯壎 2019"
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	setcycle 18 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 18 cite "黃舒屏、陳振宇 2019"
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	setcycle 19 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 19 cite "黃舒屏、陳振宇 2019"
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	setcycle 20 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 20 cite "黃舒屏、陳振宇 2019"
	setcycle 21 Content "<span style='font-size:14px;'>強暴迷思(rape myth)一詞，是西方女性主義學者Brownmiller於1975年所提出的概念，她認為這是在父權社會底下所存在的一種對女性遭受性侵的普遍誤解，使得強暴事件中往往被指責的對象反而是受害者而非加害者。常見的強暴迷</span><br><br><span style='font-size:14px;'>思例子如：「都是因為穿著太暴露才會被強暴」、「常去夜店玩才會被撿屍」、「沒有好好保護自己才會被強暴」。以往的研究多為使用西方所移植的強暴迷思概念及使用西方的量表，不過玄奘大學應用心理學系黃軍義教授認為，</span><br><br><span style='font-size:14px;'>由於現今的華人社會同時受到傳統中華文化與西方現代文化的雙重影響，我們應該重新檢視強暴迷思在華人社會現況中所蘊含的內涵，並發展出符合在地性的本土測量工具。研究結果亦發現，與西方個人主義文化下的所建構的強暴</span><br><br><span style='font-size:14px;'>迷思概念特徵非常不同的是，華人強暴迷思具有重視家庭、講究貞操、重視他人評價、修身自省等特徵，強暴被害者較容易被要求自我反省與檢討，並且為了維繫和諧與名譽而選擇隱忍。在這些對於被害極度不公平的迷思中，將會</span><br><br><span style='font-size:14px;'>加重對被害者的傷害，並且不利於被害者走出創傷。另外，過往的研究指出強暴迷思將會影響男性成為強暴加害者(Bohner et al.,2010)，接受強暴迷思的女性則較容易成為強暴受害者(Yeater et al.,2010)。亦有研究顯示，相關的實務工</span><br><br><span style='font-size:14px;'>作者，如社工、心理師、司法人員等，對於性別角色的刻板化程度將會影響強暴迷思接受程度，並進而影響處理強暴案件的態度(方嘉珩，2008；Uji et al., 2007)。因此，在強暴行為的防治教育上，強暴迷思的宣導對象應不分性別與</span><br><br><span style='font-size:14px;'>職務！</span>"
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	setcycle 21 Link "https://dx.doi.org/10.6129/CJP.20170406"
	setcycle 21 cite "黃軍義、林旖旎 2017"
	setcycle 22 Content "<span style='font-size:18px;'><b>背景</b></span><br><br><span style='font-size:14px;'>強暴迷思(rape myth)一詞，是西方女性主義學者Brownmiller於1975年所提出的概念，她認為這是在父權社會底下所存在的一種對女性遭受性侵的普遍誤解，使得強暴事件中往往被指責的對象反而是受害者而非加害者。常見的強暴迷</span><br><br><span style='font-size:14px;'>思例子如：「都是因為穿著太暴露才會被強暴」、「常去夜店玩才會被撿屍」、「沒有好好保護自己才會被強暴」。</span><br><br><br><span style='font-size:18px;'><b>為什麼進行這項研究</b></span><br><br><span style='font-size:14px;'>以往的研究多為使用西方所移植的強暴迷思概念及使用西方的量表，不過玄奘大學應用心理學系黃軍義教授認為，由於現今的華人社會同時受到傳統中華文化與西方現代文化的雙重影響，我們應該重新檢視強暴迷思在華人社會現況</span><br><br><span style='font-size:14px;'>中所蘊含的內涵，並發展出符合在地性的本土測量工具。</span><br><br><br><span style='font-size:18px;'><b>研究人員做了什麼，發現了什麼？</b></span><br><br><span style='font-size:14px;'>研究結果亦發現,與西方個人主義文化下的所建構的強暴迷思概念特徵非常不同的是，華人強暴迷思具有重視家庭、講究貞操、重視他人評價、修身自省等特徵，強暴被害者較容易被要求自我反省與檢討，並且為了維繫和諧與名譽而</span><br><br><span style='font-size:14px;'>選擇隱忍。在這些對於被害極度不公平的迷思中，將會加重對被害者的傷害，並且不利於被害者走出創傷。</span><br><br><span style='font-size:14px;'>另外，過往的研究指出強暴迷思將會影響男性成為強暴加害者(Bohner et al.,2010)，接受強暴迷思的女性則較容易成為強暴受害者(Yeater et al.,2010)。亦有研究顯示，相關的實務工作者，如社工、心理師、司法人員等，對於性別角色</span><br><br><span style='font-size:14px;'>的刻板化程度將會影響強暴迷思接受程度，並進而影響處理強暴案件的態度(方嘉珩，2008；Uji et al., 2007)。</span><br><br><br><span style='font-size:18px;'><b>這些發現意味著什麼</b></span><br><br><span style='font-size:14px;'>因此，在強暴行為的防治教育上，強暴迷思的宣導對象應不分性別與職務！</span>"
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	setcycle 22 Link "https://dx.doi.org/10.6129/CJP.20170406"
	setcycle 22 cite "黃軍義、林旖旎 2017"
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	setcycle 23 Link "https://dx.doi.org/10.6129/CJP.20170406"
	setcycle 23 cite "黃軍義、林旖旎 2017"
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	setcycle 24 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
	setcycle 24 cite "楊立行、許清芳 2019"
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	setcycle 25 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
	setcycle 25 cite "楊立行、許清芳 2019"
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	setcycle 26 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
	setcycle 26 cite "楊立行、許清芳 2019"
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	setcycle 27 Link "https://dx.doi.org/10.6129/CJP.20170809"
	setcycle 27 cite "孫蒨如、林慧慈、洪嘉欣 2017"
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	setcycle 28 Link "https://dx.doi.org/10.6129/CJP.20170809"
	setcycle 28 cite "孫蒨如、林慧慈、洪嘉欣 2017"
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	setcycle 29 Link "https://dx.doi.org/10.6129/CJP.20170809"
	setcycle 29 cite "孫蒨如、林慧慈、洪嘉欣 2017"
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	setcycle 30 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
	setcycle 30 cite "黃從仁 2019"
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	setcycle 31 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
	setcycle 31 cite "黃從仁 2019"
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	setcycle 32 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
	setcycle 32 cite "黃從仁 2019"
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	setcycle 33 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
	setcycle 33 cite "周玉慧 2018"
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	setcycle 34 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
	setcycle 34 cite "周玉慧 2018"
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	setcycle 35 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
	setcycle 35 cite "周玉慧 2018"
	sortby BLOCK
	slice 0 12
	shuffle Text_id
	run text_seq

define loop text_CB3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Content "<span style='font-size:14px;'>每當有新產品推出時，總是會有一堆人跟風購買，即使有人山人海的人潮，依舊沒有減少大家排隊的熱情。排隊會帶來不耐煩與煩躁的負面情緒，但是為什麼消費者仍會選擇加入排隊的行列呢？這其實跟我們的大腦認知決策很有關</span><br><br><span style='font-size:14px;'>係！近年來由於科技之發達，已經慢慢開始採用腦波量技術來進行研究，像是應用於了解人類資訊認知、(Farwell & Smith, 2001; Murugappan et al., 2008)、情緒反應(Rozgić, Vitaladevuni, & Prasad, 2013; Zhang & Zhou, 2007)或專注力訓</span><br><br><span style='font-size:14px;'>練(Chen, Wang, & Yu, 2017)。梁直青與郭芳妤（2018）透過情境模擬實驗並且搭配腦波技術來觀察「等候時間」與「等候資訊」對於消費者等候決策的變化歷程。排隊現象是台灣特有的一種文化，而排隊現象依照消費者的需求可以</span><br><br><span style='font-size:14px;'>區分為「必要行排隊」以及「需求性排隊」(Friman, 2010; Lotrakul, Sumrithe, & Saipanish, 2008)。本文主要是探討需求性排隊，也就是受到個人意願影響的排隊，若企業能夠透過揭露等候資訊則有利於降低消費者對於等候時間的不耐</span><br><br><span style='font-size:14px;'>煩(Hui, Tse, & Zhou, 2006)。等候資訊會影響到消費者對於時間的內在感知，包括：個人時間風格、等候容忍度與情緒，要測量等候資訊對於內在時間感知，可以透過問卷調查或者生心理訊號來探究。雖然以往都是透過問卷調查的方</span><br><br><span style='font-size:14px;'>式進行研究，但測量生心理訊號可以了解消費者面對等候資訊刺激的直接反應。研究結果發現，當面臨等候時間遞減情境時，受試者放棄加入排隊的比率會降低；而在面對等候時間遞增情境時，放棄加入排隊隊伍的比率會增加。證</span><br><br><span style='font-size:14px;'>實時間資訊確實會影響消費者決策，因此企業必須要避免因為時間過長影響顧客決策與消費意圖(Gillam, Simmons, Stevenson, & Weiss, 2014; Park & Kim, 2007) ，未來可以針對排隊管理策略進行近一步的研究。</span>"
	setcycle 0 NH Y
	setcycle 0 OSA N
	setcycle 0 Text_id 1
	setcycle 0 BLOCK 3
	setcycle 0 O_id 1
	setcycle 0 Link "https://dx.doi.org/10.6129/CJP.201809_60(3).0003"
	setcycle 0 cite "梁直青、郭芳妤 2018"
	setcycle 1 Content "<span style='font-size:18px;'><b>背景</b></span><br><br><span style='font-size:14px;'>每當有新產品推出時，總是會有一堆人跟風購買，即使有人山人海的人潮，依舊沒有減少大家排隊的熱情。排隊會帶來不耐煩與煩躁的負面情緒，但是為什麼消費者仍會選擇加入排隊的行列呢？這其實跟我們的大腦認知決策很有關</span><br><br><span style='font-size:14px;'>係！</span><br><br><br><span style='font-size:18px;'><b>為什麼進行這項研究</b></span><br><br><span style='font-size:14px;'>近年來由於科技之發達，已經慢慢開始採用腦波量技術來進行研究，像是應用於了解人類資訊認知、(Farwell & Smith, 2001; Murugappan et al., 2008)、 情緒反應(Rozgić, Vitaladevuni, & Prasad, 2013; Zhang & Zhou, 2007)或專注力訓練</span><br><br><span style='font-size:14px;'>(Chen, Wang, & Yu, 2017)。</span><br><br><br><span style='font-size:18px;'><b>研究人員做了什麼，發現了什麼？</b></span><br><br><span style='font-size:14px;'>梁直青與郭芳妤（2018）透過情境模擬實驗並且搭配腦波技術來觀察「等候時間」與「等候資訊」對於消費者等候決策的變化歷程。</span><br><br><span style='font-size:14px;'>排隊現象是台灣特有的一種文化，而排隊現象依照消費者的需求可以區分為「必要行排隊」以及「需求性排隊」(Friman, 2010; Lotrakul, Sumrithe, & Saipanish, 2008)。本文主要是探討需求性排隊，也就是受到個人意願影響的排隊，若</span><br><br><span style='font-size:14px;'>企業能夠透過揭露等候資訊則有利於降低消費者對於等候時間的不耐煩(Hui, Tse, & Zhou, 2006)。等候資訊會影響到消費者對於時間的內在感知，包括：個人時間風格、等候容忍度與情緒，要測量等候資訊對於內在時間感知，可以透</span><br><br><span style='font-size:14px;'>過問卷調查或者生心理訊號來探究。雖然以往都是透過問卷調查的方式進行研究，但測量生心理訊號可以了解消費者面對等候資訊刺激的直接反應。研究結果發現，當面臨等候時間遞減情境時，受試者放棄加入排隊的比率會降低；</span><br><br><span style='font-size:14px;'>而在面對等候時間遞增情境時，放棄加入排隊隊伍的比率會增加。</span><br><br><br><span style='font-size:18px;'><b>這些發現意味著什麼</b></span><br><br><span style='font-size:14px;'>證實時間資訊確實會影響消費者決策，因此企業必須要避免因為時間過長影響顧客決策與消費意圖(Gillam, Simmons, Stevenson, & Weiss, 2014; Park & Kim, 2007) ，未來可以針對排隊管理策略進行近一步的研究。</span>"
	setcycle 1 NH N
	setcycle 1 OSA N
	setcycle 1 Text_id 1
	setcycle 1 BLOCK 1
	setcycle 1 O_id 1
	setcycle 1 Link "https://dx.doi.org/10.6129/CJP.201809_60(3).0003"
	setcycle 1 cite "梁直青、郭芳妤 2018"
	setcycle 2 Content "<span style='font-size:14px;'>排隊現象不僅是司空見慣的消費行為，其伴隨的管理效益也不斷被服務供應商所關注，如何讓消費者動身加入或停留在服務佇列中成為一項有趣的管理議題。腦波是人類面對問題時的大腦直接反應，若能觀察腦波變化與決策之間的</span><br><br><span style='font-size:14px;'>關係，應該可以幫助學者與業者瞭解排隊對於消費者的刺激影響。據此，本研究以情境模擬實驗搭配腦波技術，觀測提供「等候時間」與提供「等候資訊」的排隊現象於消費者等候決策歷程的變化。本研究並針對上述兩種現象對消</span><br><br><span style='font-size:14px;'>費者等候意願進行問卷比較。問卷結果發現給予消費者等候時間資訊可以正向激勵消費者繼續加入等候。此外，本研究針對提供等候時間和提供等候資訊來進行腦波分析比較，在統計檢定上也呈現出顯著差異。</span>"
	setcycle 2 NH N
	setcycle 2 OSA Y
	setcycle 2 Text_id 1
	setcycle 2 BLOCK 2
	setcycle 2 O_id 1
	setcycle 2 Link "https://dx.doi.org/10.6129/CJP.201809_60(3).0003"
	setcycle 2 cite "梁直青、郭芳妤 2018"
	setcycle 3 Content "<span style='font-size:14px;'>演化賦予身為靈長類的人類成為臉孔辨認專家的先天條件與後天環境，即便是僅僅出生幾個月的新生兒，也顯示出對於臉孔的高度偏好與注意。你是否有過這樣的經驗？當我們在看外國電影時，會覺得外國人的臉孔都很相像難以區</span><br><br><span style='font-size:14px;'>辨，容易對外國演員產生角色混淆；對於本國演員的臉孔則較不會產生混淆。此現象即是臉孔辨認上的本種族優勢（own-race advantage，簡稱ORA），我們辨識及記憶本種族臉孔的能力優於他種族臉孔。人們對於種族訊息的敏感度</span><br><br><span style='font-size:14px;'>從嬰兒期已見端倪，跨文化研究發現不論是白種人嬰兒或是漢民族的亞洲人嬰兒，在滿3 ~ 4 個月大時會偏好注視本種族臉孔（ Kelly et al., 2005; Kelly et al, 2007a）。 Peery與Bodenhausen在2008年所做的研究中發現，白人參與者傾向</span><br><br><span style='font-size:14px;'>將50% 黑人與50% 白人混合的變形臉孔（morphing face）分類為黑人。此研究結果顯示出，我們除了有本種族臉孔優勢以外，在種族臉孔的歸類上也會有偏誤，當我們嘗試去辨識一個具有雙重血緣的個體時，會傾向於以單一種族去</span><br><br><span style='font-size:14px;'>做分類。種族分類的議題不只引起西方學界的熱烈討論，近年國內學者也開始探討。陳君嫚等人(2019)的研究，以變形臉孔典範將實驗分為兩個部分，分別測試成人及學齡期兒童對不同比例亞洲人/ 白人混合臉孔的種族分類傾向。他</span><br><br><span style='font-size:14px;'>們的研究結果發現，隨著目標臉孔中的亞洲人成分增加，不論是成人或兒童參與者將該臉孔分類為亞洲人的比率都會隨之提高，且可發現隨著參與者年齡增加，在歸類變形臉孔時就愈容易將之歸類為白人。有趣的是，研究結果顯示</span><br><br><span style='font-size:14px;'>7 ~ 8歲兒童組並未將中性的刺激(50%亞洲人，50%白人成分)歸類為白人，代表他們可能尚未發展出對種族混合臉孔的分類偏誤…..</span>"
	setcycle 3 NH Y
	setcycle 3 OSA N
	setcycle 3 Text_id 2
	setcycle 3 BLOCK 3
	setcycle 3 O_id 2
	setcycle 3 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 3 cite "陳君嫚、郭昱劭、簡惠玲 2019"
	setcycle 4 Content "<span style='font-size:18px;'><b>背景</b></span><br><br><span style='font-size:14px;'>演化賦予身為靈長類的人類成為臉孔辨認專家的先天條件與後天環境，即便是僅僅出生幾個月的新生兒，也顯示出對於臉孔的高度偏好與注意。你是否有過這樣的經驗？當我們在看外國電影時，會覺得外國人的臉孔都很相像難以區</span><br><br><span style='font-size:14px;'>辨，容易對外國演員產生角色混淆；對於本國演員的臉孔則較不會產生混淆。此現象即是臉孔辨認上的本種族優勢(（own-race advantage，簡稱ORA），我們辨識及記憶本種族臉孔的能力優於他種族臉孔。</span><br><br><br><span style='font-size:18px;'><b>為什麼進行這項研究</b></span><br><br><span style='font-size:14px;'>人們對於種族訊息的敏感度從嬰兒期已見端倪，跨文化研究發現不論是白種人嬰兒或是漢民族的亞洲人嬰兒，在滿3 ~ 4 個月大時會偏好注視本種族臉孔（ Kelly et al., 2005; Kelly et al, 2007a）。 Peery與Bodenhausen在2008年所做的研</span><br><br><span style='font-size:14px;'>究中發現，白人參與者傾向將50% 黑人與50% 白人混合的變形臉孔（morphing face）分類為黑人。此研究結果顯示出，我們除了有本種族臉孔優勢以外，在種族臉孔的歸類上也會有偏誤，當我們嘗試去辨識一個具有雙重血緣的個體</span><br><br><span style='font-size:14px;'>時，會傾向於以單一種族去做分類。種族分類的議題不只引起西方學界的熱烈討論，近年國內學者也開始探討。</span><br><br><br><span style='font-size:18px;'><b>研究人員做了什麼，發現了什麼？</b></span><br><br><span style='font-size:14px;'>陳君嫚等人(2019)的研究，以變形臉孔典範將實驗分為兩個部分，分別測試成人及學齡期兒童對不同比例亞洲人/ 白人混合臉孔的種族分類傾向。他們的研究結果發現，隨著目標臉孔中的亞洲人成分增加，不論是成人或兒童參與者將</span><br><br><span style='font-size:14px;'>該臉孔分類為亞洲人的比率都會隨之提高，且可發現隨著參與者年齡增加，在歸類亞洲/白人臉各半的(50%亞洲，50%白人)變形臉孔時就愈容易將之歸類為白人。 </span><br><br><br><span style='font-size:18px;'><b>這些發現意味著什麼</b></span><br><br><span style='font-size:14px;'>有趣的是，研究結果顯示7 ~ 8 歲兒童組並未將中性的刺激(50%亞洲人，50%白人成分)歸類為白人，代表他們可能尚未發展出對種族混合臉孔的分類偏誤……</span>"
	setcycle 4 NH N
	setcycle 4 OSA N
	setcycle 4 Text_id 2
	setcycle 4 BLOCK 2
	setcycle 4 O_id 2
	setcycle 4 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 4 cite "陳君嫚、郭昱劭、簡惠玲 2019"
	setcycle 5 Content "<span style='font-size:14px;'>廣義的他種族效應係指人們對本種族與他種族臉孔的處理方式有別，包括辨認本種族臉孔的優勢以及對混合種族臉孔的歸類偏誤。先前的種族臉孔歸類研究多以西方白種人社會為模型，本研究欲延伸至單一種族的台灣社會，我們採</span><br><br><span style='font-size:14px;'>用變形臉孔典範探討台灣成人與學齡期兒童對種族混合臉孔的分類表現。實驗一為成人（N = 33）的種族分類作業，測試成人對不同比例亞洲人／白人混合臉孔的種族分類傾向；實驗二為學齡期兒童，測試7 ～ 8歲（N =21）、9 ～ </span><br><br><span style='font-size:14px;'>10歲（N = 22）與11 ～ 12歲（N = 22）兒童的種族分類傾向。結果發現，隨變形臉孔中的亞洲人成分增加，參與者將該臉孔分類為亞洲人的比率隨之提高；而針對亞洲人成分50%的臉孔，7 ～ 8歲組傾向將其歸類為亞洲人，而9 ～ </span><br><br><span style='font-size:14px;'>10歲組、11 ～ 12歲組及成人則都傾向將之歸類為白人。反應時間分析顯示愈靠近兩個端點的反應時間愈短（表示兩端的臉孔容易歸類），愈靠近中間的臉孔反應時間愈長（較困難）。最後，曲線擬合結果顯示，成人將目標臉孔分</span><br><br><span style='font-size:14px;'>類為亞洲人的機率達一半（閾值），所需的亞洲人成分為56.01%；7 ～ 8歲組的閾值為49.52%，表現出中立的歸類傾向；而9 ～ 10歲及11 ～ 12歲組的閾值分別為54.27%、53.13%，有隨年齡略增加的趨勢。整體而言，本研究提供種</span><br><br><span style='font-size:14px;'>族臉孔歸類偏誤在兒童期發展的跨文化證據。</span>"
	setcycle 5 NH N
	setcycle 5 OSA Y
	setcycle 5 Text_id 2
	setcycle 5 BLOCK 1
	setcycle 5 O_id 2
	setcycle 5 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0004"
	setcycle 5 cite "陳君嫚、郭昱劭、簡惠玲 2019"
	setcycle 6 Content "<span style='font-size:14px;'>在日常生活中，你是否曾經有過要找某樣東西卻怎麼樣也找不到的經驗呢？通常我們都會認為顯眼的物體在雜亂的環境中較容易被找到，相似的物體較難以被搜尋，生物界中也有諸多類似原則的例子，像是動物們為了躲避天敵，會</span><br><br><span style='font-size:14px;'>透過偽裝的方式躲藏於環境中。而過去許多關於視覺注意力的研究亦指出，顯眼的物體確實較容易攫取注意力。不過，中國醫藥大學神經科學與認知科學研究所李金鈴教授及其學生呂怡慧之研究發現，當個體在搜尋物體時，是否能</span><br><br><span style='font-size:14px;'>夠偵測到目標物最重要的關鍵，並非是因為目標物相較於其他干擾物具有顯著性，或是目標物與其他干擾物具有相似性，而是目標物是否與其他干擾物產生連續性的知覺。以生物的偽裝機制為例，我們最常見的就是生物會透過顏色</span><br><br><span style='font-size:14px;'>或擬態的方式使自身融入環境以躲避危險，儘管有些生物本身具有相當鮮豔的顏色，但只要可以利用身上的條紋或是肢體型態使自身與環境中的物體排列一致，將能夠製造出連續性的特性，使自己融入環境中而不容易被察覺。另</span><br><br><span style='font-size:14px;'>外，街上商店招牌的形狀樣式是否具有連續性的特性，亦會影響人們在搜尋上的差異，當街上的商店招牌都採用相同大小形狀的樣式，儘管許多商家會透過用鮮艷的顏色來做區隔，仍會使人們較難以找到目標商店；反之，若各商家</span><br><br><span style='font-size:14px;'>的招牌排列不一致，則較不會有被遮蔽的情況發生。因此，在生活的許多設計中，想要更快地被人們注意到，並非要著重在顏色或形狀與周遭不一樣，而是要避免與周遭的事物形成連續性的知覺所產生的遮蔽效果。</span>"
	setcycle 6 NH Y
	setcycle 6 OSA N
	setcycle 6 Text_id 3
	setcycle 6 BLOCK 1
	setcycle 6 O_id 3
	setcycle 6 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 6 cite "呂怡慧、李金鈴 2017"
	setcycle 7 Content "<span style='font-size:18px;'><b>背景</b></span><br><br><span style='font-size:14px;'>在日常生活中，你是否曾經有過要找某樣東西卻怎麼樣也找不到的經驗呢？通常我們都會認為顯眼的物體在雜亂的環境中較容易被找到，相似的物體較難以被搜尋。</span><br><br><br><span style='font-size:18px;'><b>為什麼進行這項研究</b></span><br><br><span style='font-size:14px;'>生物界中也有諸多類似原則的例子，像是動物們為了躲避天敵，會透過偽裝的方式躲藏於環境中。而過去許多關於視覺注意力的研究亦指出，顯眼的物體確實較容易攫取注意力。</span><br><br><br><span style='font-size:18px;'><b>研究人員做了什麼，發現了什麼？</b></span><br><br><span style='font-size:14px;'>中國醫藥大學神經科學與認知科學研究所李金鈴教授及其學生呂怡慧之研究發現，當個體在搜尋物體時，是否能夠偵測到目標物最重要的關鍵，並非是因為目標物相較於其他干擾物具有顯著性，或是目標物與其他干擾物具有相似</span><br><br><span style='font-size:14px;'>性，而是目標物是否與其他干擾物產生連續性的知覺。以生物的偽裝機制為例，我們最常見的就是生物會透過顏色或擬態的方式使自身融入環境以躲避危險，儘管有些生物本身具有相當鮮豔的顏色，但只要可以利用身上的條紋或是</span><br><br><span style='font-size:14px;'>肢體型態使自身與環境中的物體排列一致，將能夠製造出連續性的特性，使自己融入環境中而不容易被察覺。</span><br><br><br><span style='font-size:18px;'><b>這些發現意味著什麼</b></span><br><br><span style='font-size:14px;'>另外，街上商店招牌的形狀樣式是否具有連續性的特性，亦會影響人們在搜尋上的差異，當街上的商店招牌都採用相同大小形狀的樣式，儘管許多商家會透過用鮮艷的顏色來做區隔，仍會使人們較難以找到目標商店；反之，若各商</span><br><br><span style='font-size:14px;'>家的招牌排列不一致，則較不會有被遮蔽的情況發生。因此，在生活的許多設計中，想要更快地被人們注意到，並非要著重在顏色或形狀與周遭不一樣，而是要避免與周遭的事物形成連續性的知覺所產生的遮蔽效果。</span>"
	setcycle 7 NH N
	setcycle 7 OSA N
	setcycle 7 Text_id 3
	setcycle 7 BLOCK 3
	setcycle 7 O_id 3
	setcycle 7 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 7 cite "呂怡慧、李金鈴 2017"
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	setcycle 8 Link "https://dx.doi.org/10.6129/CJP.20170822"
	setcycle 8 cite "呂怡慧、李金鈴 2017"
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	setcycle 9 Link "https://www.doi.org/10.6129/CJP.202003_62(1).0002 "
	setcycle 9 cite "陳秀蓉、鄭逸如、吳治勳 2020"
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	setcycle 10 Link "https://www.doi.org/10.6129/CJP.202003_62(1).0002 "
	setcycle 10 cite "陳秀蓉、鄭逸如、吳治勳 2020"
	setcycle 11 Content "<span style='font-size:14px;'>慢性病患者在疾病調適中有一定比例需面臨憂鬱的議題，而此一議題在近期漸漸受到重視，本研究主要目的即在探討慢性病患者在多元疾病調適歷程中影響憂鬱的相關因素。研究邀請兩類門診慢性病患者，包括高血壓患者110名與</span><br><br><span style='font-size:14px;'>糖尿病患者117名，共227，男性121位，女性106位，平均年齡為60.94歲。經由研究邀請同意後請參與研究者填寫五份問卷：病後生活變動量表、預期健康控制量表、罹病情緒量表、自我照顧行為量表及貝克憂鬱量表第二版。結果</span><br><br><span style='font-size:14px;'>證實研究路徑模式直接效果與間接效果部分成立；其中病後的生活變動透過罹病情緒間接影響憂鬱，預期控制透過自我照顧間接影響憂鬱，雙路徑中介效果成立。研究討論疾病調適憂鬱路徑的意義，並提出臨床服務的應用與建</span><br><br><span style='font-size:14px;'>議，最後亦針對研究限制進行討論。</span>"
	setcycle 11 NH N
	setcycle 11 OSA Y
	setcycle 11 Text_id 4
	setcycle 11 BLOCK 3
	setcycle 11 O_id 4
	setcycle 11 Link "https://www.doi.org/10.6129/CJP.202003_62(1).0002 "
	setcycle 11 cite "陳秀蓉、鄭逸如、吳治勳 2020"
	setcycle 12 Content "<span style='font-size:14px;'>隨著醫療照護、公共衛生等技術的進步以及嚴重的少子化現象，台灣也繼日本、新加坡正式邁入高齡社會。據統計台灣目前的老年人口已超過人口總數的14%，等於平均每七人就有一人是年滿65歲的長者。因此，如何去保障高齡年</span><br><br><span style='font-size:14px;'>長者在生活上的適應與心理層面上的健康是現今國內各界急需關切的重要議題。俗話說：「百善孝為先」，孝道倫理強調子女盡心盡力的侍奉父母、滿足他們的期待。對於已經步入年老的雙親而言，在生活中最能夠依靠的就屬那些</span><br><br><span style='font-size:14px;'>年輕力壯的成年子女了。若成年子女越是能夠認同孝道倫理的概念，將給予年長的父母親極大的安全感並能夠保障其生活。除此之外，成年子女要成為父母心目中理想的依靠對象，除了在信念層面上要能認同照顧父母老年生活是自</span><br><br><span style='font-size:14px;'>己身為子女應盡的使命或責任，似乎也必須能夠了解父母的生活習慣、喜好與想法，有能力與他們有良好的關係互動，才能夠使其安享無憂無慮、舒適愉快的老年生活。吳志文與葉光輝（2020）的研究支持了這些想法，研究結果發</span><br><br><span style='font-size:14px;'>現當成年子女對孝順的信念越高時，會促使長者認為該名子女能「可靠回應」自己當下立即的需求，以及「理解重視」自己對老年生活的擔憂煩心；此外，若他們有越成熟的關係互動能力，愈能理解父母在老年生活中彼此互動的期</span><br><br><span style='font-size:14px;'>望、愈可以採取有益促進彼此關係的互動策略，並且愈能對彼此之間互動的表現感到安適自在，因而愈能透過平日主動關懷與支持等表現，讓老年父母感受到成年子女對自己相當重視。最後研究也顯示，若老年父母認為家中有個「</span><br><br><span style='font-size:14px;'>可靠的人」可以依靠時，可以讓他們感受到生活更有意義、更自由，並且較不會感到憂鬱。從這些結果我們可以得知，成年子女對年長父母的影響是非常大的。所以不論生活再忙碌，也不要忘了給予家中的長輩適時的關心，多多的</span><br><br><span style='font-size:14px;'>去理解他們、傾聽他們的聲音，讓他們感覺到生活中還有個靠山可以依靠，促使他們人生的後半場可以過得豐富而有意義。</span>"
	setcycle 12 NH Y
	setcycle 12 OSA N
	setcycle 12 Text_id 5
	setcycle 12 BLOCK 2
	setcycle 12 O_id 5
	setcycle 12 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
	setcycle 12 cite "吳志文、葉光輝 2020"
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	setcycle 13 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
	setcycle 13 cite "吳志文、葉光輝 2020"
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	setcycle 14 Link "https://dx.doi.org/10.6129/CJP.202003_62(1).0001"
	setcycle 14 cite "吳志文、葉光輝 2020"
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	setcycle 15 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 15 cite "鄭昱宏、周婉茹、周德賢、鄭伯壎 2019"
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	setcycle 16 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 16 cite "鄭昱宏、周婉茹、周德賢、鄭伯壎 2019"
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	setcycle 17 Link "https://www.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 17 cite "鄭昱宏、周婉茹、周德賢、鄭伯壎 2019"
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	setcycle 18 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 18 cite "黃舒屏、陳振宇 2019"
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	setcycle 19 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 19 cite "黃舒屏、陳振宇 2019"
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	setcycle 20 Link "https://dx.doi.org/10.6129/CJP.201906_61(2).0002"
	setcycle 20 cite "黃舒屏、陳振宇 2019"
	setcycle 21 Content "<span style='font-size:14px;'>強暴迷思(rape myth)一詞，是西方女性主義學者Brownmiller於1975年所提出的概念，她認為這是在父權社會底下所存在的一種對女性遭受性侵的普遍誤解，使得強暴事件中往往被指責的對象反而是受害者而非加害者。常見的強暴迷</span><br><br><span style='font-size:14px;'>思例子如：「都是因為穿著太暴露才會被強暴」、「常去夜店玩才會被撿屍」、「沒有好好保護自己才會被強暴」。以往的研究多為使用西方所移植的強暴迷思概念及使用西方的量表，不過玄奘大學應用心理學系黃軍義教授認為，</span><br><br><span style='font-size:14px;'>由於現今的華人社會同時受到傳統中華文化與西方現代文化的雙重影響，我們應該重新檢視強暴迷思在華人社會現況中所蘊含的內涵，並發展出符合在地性的本土測量工具。研究結果亦發現，與西方個人主義文化下的所建構的強暴</span><br><br><span style='font-size:14px;'>迷思概念特徵非常不同的是，華人強暴迷思具有重視家庭、講究貞操、重視他人評價、修身自省等特徵，強暴被害者較容易被要求自我反省與檢討，並且為了維繫和諧與名譽而選擇隱忍。在這些對於被害極度不公平的迷思中，將會</span><br><br><span style='font-size:14px;'>加重對被害者的傷害，並且不利於被害者走出創傷。另外，過往的研究指出強暴迷思將會影響男性成為強暴加害者(Bohner et al.,2010)，接受強暴迷思的女性則較容易成為強暴受害者(Yeater et al.,2010)。亦有研究顯示，相關的實務工</span><br><br><span style='font-size:14px;'>作者，如社工、心理師、司法人員等，對於性別角色的刻板化程度將會影響強暴迷思接受程度，並進而影響處理強暴案件的態度(方嘉珩，2008；Uji et al., 2007)。因此，在強暴行為的防治教育上，強暴迷思的宣導對象應不分性別與</span><br><br><span style='font-size:14px;'>職務！</span>"
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	setcycle 21 Link "https://dx.doi.org/10.6129/CJP.20170406"
	setcycle 21 cite "黃軍義、林旖旎 2017"
	setcycle 22 Content "<span style='font-size:18px;'><b>背景</b></span><br><br><span style='font-size:14px;'>強暴迷思(rape myth)一詞，是西方女性主義學者Brownmiller於1975年所提出的概念，她認為這是在父權社會底下所存在的一種對女性遭受性侵的普遍誤解，使得強暴事件中往往被指責的對象反而是受害者而非加害者。常見的強暴迷</span><br><br><span style='font-size:14px;'>思例子如：「都是因為穿著太暴露才會被強暴」、「常去夜店玩才會被撿屍」、「沒有好好保護自己才會被強暴」。</span><br><br><br><span style='font-size:18px;'><b>為什麼進行這項研究</b></span><br><br><span style='font-size:14px;'>以往的研究多為使用西方所移植的強暴迷思概念及使用西方的量表，不過玄奘大學應用心理學系黃軍義教授認為，由於現今的華人社會同時受到傳統中華文化與西方現代文化的雙重影響，我們應該重新檢視強暴迷思在華人社會現況</span><br><br><span style='font-size:14px;'>中所蘊含的內涵，並發展出符合在地性的本土測量工具。</span><br><br><br><span style='font-size:18px;'><b>研究人員做了什麼，發現了什麼？</b></span><br><br><span style='font-size:14px;'>研究結果亦發現,與西方個人主義文化下的所建構的強暴迷思概念特徵非常不同的是，華人強暴迷思具有重視家庭、講究貞操、重視他人評價、修身自省等特徵，強暴被害者較容易被要求自我反省與檢討，並且為了維繫和諧與名譽而</span><br><br><span style='font-size:14px;'>選擇隱忍。在這些對於被害極度不公平的迷思中，將會加重對被害者的傷害，並且不利於被害者走出創傷。</span><br><br><span style='font-size:14px;'>另外，過往的研究指出強暴迷思將會影響男性成為強暴加害者(Bohner et al.,2010)，接受強暴迷思的女性則較容易成為強暴受害者(Yeater et al.,2010)。亦有研究顯示，相關的實務工作者，如社工、心理師、司法人員等，對於性別角色</span><br><br><span style='font-size:14px;'>的刻板化程度將會影響強暴迷思接受程度，並進而影響處理強暴案件的態度(方嘉珩，2008；Uji et al., 2007)。</span><br><br><br><span style='font-size:18px;'><b>這些發現意味著什麼</b></span><br><br><span style='font-size:14px;'>因此，在強暴行為的防治教育上，強暴迷思的宣導對象應不分性別與職務！</span>"
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	setcycle 22 Link "https://dx.doi.org/10.6129/CJP.20170406"
	setcycle 22 cite "黃軍義、林旖旎 2017"
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	setcycle 23 Link "https://dx.doi.org/10.6129/CJP.20170406"
	setcycle 23 cite "黃軍義、林旖旎 2017"
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	setcycle 24 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
	setcycle 24 cite "楊立行、許清芳 2019"
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	setcycle 25 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
	setcycle 25 cite "楊立行、許清芳 2019"
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	setcycle 26 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0003"
	setcycle 26 cite "楊立行、許清芳 2019"
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	setcycle 27 Link "https://dx.doi.org/10.6129/CJP.20170809"
	setcycle 27 cite "孫蒨如、林慧慈、洪嘉欣 2017"
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	setcycle 28 Link "https://dx.doi.org/10.6129/CJP.20170809"
	setcycle 28 cite "孫蒨如、林慧慈、洪嘉欣 2017"
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	setcycle 29 Link "https://dx.doi.org/10.6129/CJP.20170809"
	setcycle 29 cite "孫蒨如、林慧慈、洪嘉欣 2017"
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	setcycle 30 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
	setcycle 30 cite "黃從仁 2019"
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	setcycle 31 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
	setcycle 31 cite "黃從仁 2019"
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	setcycle 32 Link "https://dx.doi.org/10.6129/CJP.201909_61(3).0002"
	setcycle 32 cite "黃從仁 2019"
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	setcycle 33 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
	setcycle 33 cite "周玉慧 2018"
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	setcycle 34 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
	setcycle 34 cite "周玉慧 2018"
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	setcycle 35 Link "https://dx.doi.org/10.6129/CJP.201803_60(1).0002"
	setcycle 35 cite "周玉慧 2018"
	sortby BLOCK
	slice 0 12
	shuffle Text_id
	run text_seq

define sketchpad text_dash_01
	set duration 60000
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=14 html=yes show_if=always text="[Content]" x=-704 y=-320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="請閱讀第[text_order]篇文章([cite])" x=0 y=-333 z_index=0

define notepad text_dash_01_notepad
	__note__
	text_dash_01正式實驗延遲時間
	Duration：60000 ms
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad text_dash_02
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=14 html=yes show_if=always text="[Content]" x=-704 y=-320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="請閱讀第[text_order]篇文章([cite])" x=0 y=-333 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="按任意按鍵結束閱讀" x=0 y=352 z_index=0

define notepad text_display_notepad
	__note__
	部分文章長度超出瀏覽器視窗範圍:
	- 楊立行：白話標題
	- 黃從仁：白話標題
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad text_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="接下來將依序呈現十二篇文章，每篇文章皆需至少閱讀一分鐘，" x=-463 y=-120 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="讀完一篇文章有一些詢問您個人感想的問題，每讀完三篇文章有一些關於文章內容的問題，<br><br>都需要您仔細讀過文章才能回答，然後休息90秒再繼續，直到結束。" x=-463 y=-56 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="如果在過程中有任何疑問的話，可隨時紀錄下來，實驗結束後提出。" x=-463 y=104 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="完成全部測驗將會花費您約30分鐘左右的時間。" x=-463 y=40 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="按任意按鍵結束閱讀" x=0 y=320 z_index=0

define loop text_post
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Q_type Post_survey
	setcycle 0 Question "您認為這份摘要好不好懂？<br>請選擇一個等級選項，表達您的評估。"
	setcycle 0 Topic Comprehensibility
	setcycle 0 Option8 "8: 完全讀得懂"
	setcycle 0 Option7 7
	setcycle 0 Option6 6
	setcycle 0 Option5 5
	setcycle 0 Option4 4
	setcycle 0 Option3 3
	setcycle 0 Option2 2
	setcycle 0 Option1 "1: 完全讀不懂"
	setcycle 1 Q_type Post_survey
	setcycle 1 Question "您認為這份摘要有沒有科學性？<br>請選擇一個等級選項，表達您的評估。"
	setcycle 1 Topic Scientificness
	setcycle 1 Option8 "8: 非常有科學性"
	setcycle 1 Option7 7
	setcycle 1 Option6 6
	setcycle 1 Option5 5
	setcycle 1 Option4 4
	setcycle 1 Option3 3
	setcycle 1 Option2 2
	setcycle 1 Option1 "1: 完全沒有科學性"
	setcycle 2 Q_type Post_survey
	setcycle 2 Question "您認為這份摘要有沒有可信度？<br>請選擇一個等級選項，表達您的評估。"
	setcycle 2 Topic Credibility
	setcycle 2 Option8 "8: 非常可信"
	setcycle 2 Option7 7
	setcycle 2 Option6 6
	setcycle 2 Option5 5
	setcycle 2 Option4 4
	setcycle 2 Option3 3
	setcycle 2 Option2 2
	setcycle 2 Option1 "1: 完全不可信"
	setcycle 3 Q_type Post_survey
	setcycle 3 Question "讀了這份摘要，我認為我能夠評估相關研究的真實性。<br>請選擇一個等級選項，表達您的評估。"
	setcycle 3 Topic Veracity
	setcycle 3 Option8 "8: 我認為一定可以"
	setcycle 3 Option7 7
	setcycle 3 Option6 6
	setcycle 3 Option5 5
	setcycle 3 Option4 4
	setcycle 3 Option3 3
	setcycle 3 Option2 2
	setcycle 3 Option1 "1: 我認為完全不可以"
	setcycle 4 Q_type Post_survey
	setcycle 4 Question "讀了這份摘要，其中的資訊足以讓我對相關問題做出判斷，不需要參考更多資訊 （像是閱讀完整文章，詢問專家意見）。"
	setcycle 4 Topic Decision
	setcycle 4 Option8 "8: 我認為一定可以"
	setcycle 4 Option7 7
	setcycle 4 Option6 6
	setcycle 4 Option5 5
	setcycle 4 Option4 4
	setcycle 4 Option3 3
	setcycle 4 Option2 2
	setcycle 4 Option1 "1:我認為完全不可以"
	run text_post_seq

define sequence text_post_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Post_survey always
	run Study_logger always

define sequence text_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run count_text always
	run preparation always
	run text_dash_01_notepad always
	run text_dash_01 always
	run text_dash_02 always
	run text_post always
	run access_loop always
	run id_recording always
	run test "([count_text_seq]%3)=2"
	run rest_html "(([count_text_seq]%3)=2)and([count_text_seq]<11)"
	run rest always
	run rest_duation_notepad always
	run rest_duration "(([count_text_seq]%3)=2)and([count_text_seq]<11)"

define form_text_display welcome
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "科學文獻閱讀測試"
	__form_text__
	這份實驗依序有以下測試，切換頁面的方式依研究需要，採用滑鼠點選或按鍵
	<br><br>
	首先請您回答性別、出生年份等基本人口統計資料。
	<br><br>
	接下來的問題是有關心理科學知識信用來源以您對於及科學活動熟悉程度。
	<br><br>
	正式測試依序閱讀十二篇取材自近年發表於「中華心理學刊」的心理學論文摘要或改編的科普文章，
	<br><br>
	每篇文章需要至少閱讀一分鐘。
	<br><br>
	每讀完一篇需要您回答一些問題。
	<br><br>
	如果在過程中有任何疑問的話，敬請隨時提出。
	<br><br>
	完成全部測驗將會花費您約30分鐘左右的時間。
	<br><br>
	沒有任何問題後請按<b>OK</b>開始測試。
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


