---
API: 2.1
OpenSesame: 3.3.12
Platform: nt
---
set width 1440
set uniform_coordinates yes
set title "Replication: Kerwer et al.(2021)"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 16
set font_italic no
set font_family "chinese-japanese-korean"
set font_bold no
set experiment_path "D:\\core\\research\\projects\\Meta_Replication\\Projects\\202102_PL\\1_OS_scripts"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#ffffff"

define sketchpad Access_display
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[Link]" x=0 y=-64 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Hint:If you are not using your personal device, you can take a photo or notes to check the DOI later." x=-688.0 y=96.0 z_index=0

define sketchpad Access_question
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Do you want access to the full text of the original paper? 1:yes; 0:no" x=0 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Your answer:[post_answer]<br><br><br />You can change your answer by press <b>BACKSPACE</b>.<br><br>Once your answer is confirmed. Press <b>Enter</b> to the next question. " x=0 y=128 z_index=0

define sequence Comprehensibility_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Comprehensibility_survey always

define form_multiple_choice Comprehensibility_survey
	set timeout infinite
	set spacing 10
	set question "[Question]"
	__options__
	8: 完全能理解內容
	7
	6
	5
	4
	3
	2
	1: 完全無法理解內容
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define loop End
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Q_type Exit
	setcycle 0 Topic feedback
	run End_seq

define sketchpad End_of_Study
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Thank you for your participation. If you have any questions or suggestions for this study, please send your message to us on Prolific dashboard." x=-552 y=-128 z_index=0

define sequence End_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run End_of_Study always
	run Study_logger always

define sketchpad Exit_board
	set duration 0
	set description Instruction
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="The study is over. Thank you for your participation。If you have any questions or suggestions for this study, please send your message to us on Prolific dashboard. <br/>Please copy the completion code to the Prolific dashboard:<br/><br/><br/><h1>[identifier]</h1><br/><br/><br/>Press `q` to logout" x=0 y=0 z_index=0

define keyboard_response Exit_board_quit
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses q

define loop JB
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Question "Psychological knowledge consists of the personal opinions of researchers, since there are no facts in psychology."
	setcycle 0 Q_type Belief
	setcycle 0 Topic PJ
	setcycle 0 JB_id 1
	setcycle 1 Question "In psychology, scientists merely present their own view as scientific knowledge."
	setcycle 1 Q_type Belief
	setcycle 1 Topic PJ
	setcycle 1 JB_id 2
	setcycle 2 Question "In psychology, scientific knowledge arises mainly from the views of the researcher."
	setcycle 2 Q_type Belief
	setcycle 2 Topic PJ
	setcycle 2 JB_id 3
	setcycle 3 Question "When a psychology scientist says that something in psychology is correct, I believe it."
	setcycle 3 Q_type Belief
	setcycle 3 Topic JA
	setcycle 3 JB_id 1
	setcycle 4 Question "If a psychology scientist tells me something about a psychological issue, then I believe it."
	setcycle 4 Q_type Belief
	setcycle 4 Topic JA
	setcycle 4 JB_id 2
	setcycle 5 Question "When I read something based on psychological research, I know it's true."
	setcycle 5 Q_type Belief
	setcycle 5 Topic JA
	setcycle 5 JB_id 3
	setcycle 6 Question "In order to trust scientific claims in psychology, various sources must be checked."
	setcycle 6 Q_type Belief
	setcycle 6 Topic MS
	setcycle 6 JB_id 1
	setcycle 7 Question "I can never be sure of a scientific claim made in psychology until I have checked at least one other source."
	setcycle 7 Q_type Belief
	setcycle 7 Topic MS
	setcycle 7 JB_id 2
	setcycle 8 Question "One source alone is never enough in psychology to decide what is scientifically correct."
	setcycle 8 Q_type Belief
	setcycle 8 Topic MS
	setcycle 8 JB_id 3
	run JB_seq

define sketchpad JB_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="The next page presents a series of accounts of how the credibility and authority of scientific knowledge in psychology is established." x=-600 y=-160 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="Please indicate the extent to which you agree with these statements by ticking the boxes from Not." x=-600 y=-96 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="Press any button to go to the next page" x=0 y=320 z_index=0

define sequence JB_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run JB_survey always
	run Study_logger always

define form_multiple_choice JB_survey
	set timeout infinite
	set spacing 10
	__question__
	This section presents a series of pros and cons of psychology as a science. Please indicate the extent to which you agree with these statements by ticking the boxes from "Not at all true" to "Exactly true." <br/>
	Remember, all statements affirm that psychology is a science.<br/>
	<b>[Question]</b>
	__end__
	__options__
	6: exactly right
	5: mostly correct
	4: somewhat correct
	3: Unlikely to be true
	2: mostly incorrect
	1: Not true at all
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Psychological Science Belief Survey"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sketchpad Post_survey_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[Question]" x=0 y=-224 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[Option8]" x=352 y=-32 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[Option1]" x=-352 y=-32 z_index=0
	draw textline center=1 color="#0000ff" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Enter your option between 1 and 8." x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Your answer:[post_answer]<br><br><br />You can change your answer by press <b>BACKSPACE</b>.<br><br>Once your answer is confirmed. Press <b>Enter</b> to the next question. " x=0 y=128 z_index=0

define logger Study_logger
	set description "Logs experimental data"
	set auto_log no
	log Q_type
	log accept_status
	log checkbox_status
	log Content
	log OSA
	log NH
	log correct_response
	log response
	log Test_id
	log Qid01
	log Qid02
	log Qid03
	log Topic
	log Question
	log CB
	log count_main
	log CRid01
	log CRid02
	log CRid03
	log CRid04
	log CRid05
	log CRid06
	log Set_id
	log identifier
	log text_order
	log correct
	log Q_presented
	log post_answer
	log test_answer

define sketchpad Test_board
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[Question]<br><br>1:yes; 0:no" x=0 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Your answer:[test_answer]<br><br><br />You can change your answer by press <b>BACKSPACE</b>.<br><br>Once your answer is confirmed. Press <b>Enter</b> to the next question. " x=0 y=128 z_index=0

define inline_javascript Test_recording
	set description "Executes JavaScript code"
	set _run ""
	___prepare__
	// Mark the questions presented in study
	if( (((vars.Test_id == vars.Qid01) & (vars.Set_id == vars.CRid01)) | ((vars.Test_id==vars.Qid01) & (vars.Set_id == vars.CRid02)) | ((vars.Test_id==vars.Qid02) & (vars.Set_id == vars.CRid03)) | ((vars.Test_id == vars.Qid02) & (vars.Set_id == vars.CRid04)) | ((vars.Test_id == vars.Qid03) & (vars.Set_id == vars.CRid05)) | ((vars.Test_id == vars.Qid03) & (vars.Set_id == vars.CRid06)) ) === 1){
	  vars.Q_presented = 1
	} else {
	  vars.Q_presented = 0
	}
	__end__

define notepad Test_recording_notepad
	set note "Q_presented 標記正式實驗呈現測驗題"
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define loop access_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Q_type Post_survey
	setcycle 0 Topic Access
	run access_seq

define sequence access_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Access_question always
	run Access_display "[post_answer]=\"1\""
	run Study_logger always

define loop basic
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Q_type Basic
	setcycle 0 Topic birth
	run basic_seq

define sketchpad basic_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="Please answer your gender and year of birth in sequence on the next page" x=-600 y=-160 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="Gender is a single choice, choose the gender you identify with, and please fill in the year of birth with two yards after your birth date." x=-600 y=-96 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="Press any button to go to the next page" x=0 y=320 z_index=0

define sequence basic_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run birth_year always
	run Study_logger always

define form_text_input birth_year
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "Basic Information Survey"
	__form_question__
	Please enter the last two digits of the year of birth:<br/>
	For example, if the year of birth is 2001, please enter <b>01</b><br/>
	Please press Enter after typing
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define loop consent_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run consent_seq

define sequence consent_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run form_consent always
	run Study_logger always

define inline_javascript constants
	set description "Executes JavaScript code"
	___run__
	// Initial parameters settings have to be ahead the loops.
	
	vars.block_count = 0
	vars.post_answer = ''
	vars.test_answer = ''
	vars.response = ''
	__end__
	set _prepare ""

define inline_javascript count_text
	set description "Executes JavaScript code"
	set _run ""
	set _prepare "vars.text_order = vars.count_text_seq + 1"

define loop covariates
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Question "How much contact have you already had with scientific studies? Please indicate your assessment on the following scale."
	setcycle 0 Q_type self_eval
	setcycle 0 Topic familiarity
	setcycle 0 Option8 "8:very much"
	setcycle 0 Option7 7
	setcycle 0 Option6 6
	setcycle 0 Option5 5
	setcycle 0 Option4 4
	setcycle 0 Option3 3
	setcycle 0 Option2 2
	setcycle 0 Option1 "1:very little"
	setcycle 1 Question "How do you assess your ability to judge the truthfulness of scientific studies? Please indicate your assessment on the following scale."
	setcycle 1 Q_type self_eval
	setcycle 1 Topic ability
	setcycle 1 Option8 "8:very good"
	setcycle 1 Option7 7
	setcycle 1 Option6 6
	setcycle 1 Option5 5
	setcycle 1 Option4 4
	setcycle 1 Option3 3
	setcycle 1 Option2 2
	setcycle 1 Option1 "1:very bad"
	run covariates_seq

define sketchpad covariates_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="The next page will ask about your experience with scientific research, or ongoing research, please choose the description that best describes your situation." x=-600 y=-96 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="Press any button to go to the next page" x=0 y=320 z_index=0

define sequence covariates_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run covariates_survey always
	run Study_logger always

define form_multiple_choice covariates_survey
	set timeout infinite
	set spacing 10
	set question "[Question]"
	__options__
	[Option8]
	[Option7]
	[Option6]
	[Option5]
	[Option4]
	[Option3]
	[Option2]
	[Option1]
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Prior Knowledge Survey"
	set description "A simple multiple choice item"
	set button_text "選好即刻進入下一題"
	set allow_multiple no
	set advance_immediately yes
	set _theme plain

define sequence experiment
	set flush_keyboard yes
	set description "主程序"
	run consent_loop always
	run welcome_board always
	run main always

define form_consent form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "Informed Consent Statement"
	__form_text__
	Hello:<br>
	Welcome to participate in the research conducted by the Department of Human and Development and Psychology of Tzu Chi University. The purpose of this research is to explore how popular science articles can help ordinary people understand professional academic paper information. As long as you log in to this webpage through our recruitment channels, you are eligible to participate in this study without any other restrictions or cooperation. <br>The experiment process is carried out entirely in the web browser. The process is to follow the instructions on the webpage. First, you are asked to answer questions about basic personal information and existing knowledge. The formal part is to read abstracts of psychology academic papers or popular science articles and answer related questions. The whole experiment process takes about half an hour. If any force majeure accident occurs at your location during the process, please leave the scene as soon as possible, we will not provide additional insurance or compensation measures. <br>After starting the experiment, if you do not understand the instructions or stimulus items, you can make a note at any time and respond in the feedback column before the end. If you want to quit in the middle, just close the webpage directly, and the website will not keep your participation records, nor will it affect your rights to participate in our other studies in the future. If the process is interrupted due to unexpected factors (such as computer crash, network disconnection), just log in to the webpage and start again. <br>The experimental website will not record any necessary information that can identify your personal identity. In the future, the response data that will remove your personal information will be stored on a network platform with unlimited permissions in the CC authorization mode (name marking-non-commercial), providing global interest Search by people from all walks of life. The study is expected to recruit 80 people. <br>This experiment poses no known risks to your health, and if you suddenly feel unwell and feel unable to continue the experiment, simply close your browser to stop. <br>Finally, thank you very much for your participation. I believe that your participation will help us increase how the general public understands professional knowledge articles, and may inspire your interest in understanding the production process of popular science articles. If you need to keep your participation records, please be sure to pay attention to the prompts on the logout screen. If you have any further questions about this study, please feel free to contact the program host, Teacher Sau-Chian Chen (csc2009@mail.tcu.edu.tw Tel: (03)8572677 #3181) <br><br>Note: The research plan is reviewed and approved by the Behavioral and Scientific Research Ethics Committee of National Taiwan University. The committee operates in accordance with the norms and is an audit organization that has passed the audit and certification of the central target business authority. Any research participant who believes that his rights have been affected or harmed during the research process can directly contact the Research Ethics Center of National Taiwan University at 02-33669956 or 02-33669980.
	__end__
	set description "A simple consent form"
	set decline_text "do not want to participate"
	set decline_message "Please make sure you have read it"
	set cols "2;2"
	set checkbox_text "I have fully understood the above instructions"
	set accept_text "Be sure to participate!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define form_multiple_choice gender
	set timeout infinite
	set spacing 10
	set question "What is your gender?"
	__options__
	female
	male
	transgender
	non-binary gender
	do not want to answer
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Basic Information Survey"
	set description "A simple multiple choice item"
	set button_text "確定回答"
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define loop gender_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Q_type Basic
	setcycle 0 Topic gender
	run gender_seq

define sequence gender_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run gender always
	run Study_logger always

define inline_javascript generate_identifier
	set description "Executes JavaScript code"
	set _run ""
	___prepare__
	// Generate the identifier for the participant
	vars.identifier = Math.random().toString(36).substr(2, 9);
	// Local version will not show identifier on "Exit_board".
	__end__

define inline_javascript id_recording
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// Save the original text id to access the Questions in an end of block
	if((vars.count_text_seq%3)===0) {
	  vars.Qid01 = vars.O_id
	  vars.CRid01 = vars.Aarray[vars.Qid01-1]
	  vars.CRid02 = vars.Barray[vars.Qid01-1]
	} else if((vars.count_text_seq%3)===1) {
	  vars.Qid02 = vars.O_id
	  vars.CRid03 = vars.Aarray[vars.Qid02-1]
	  vars.CRid04 = vars.Barray[vars.Qid02-1]
	} else {
	  vars.Qid03 = vars.O_id
	  vars.CRid05 = vars.Aarray[vars.Qid03-1]
	  vars.CRid06 = vars.Barray[vars.Qid03-1]
	}
	__end__
	set _prepare ""

define sequence main
	set flush_keyboard yes
	set description "分支程序"
	run generate_identifier always
	run basic_instruction never
	run gender_loop never
	run basic never
	run JB_instruction never
	run JB never
	run covariates_instruction never
	run covariates never
	run shuffle_block always
	run text_instruction always
	run text_display_notepad always
	run text_CB1 "[CB]=1"
	run text_CB2 "[CB]=2"
	run text_CB3 "[CB]=3"
	run End never
	run Exit_board always
	run Exit_board_quit always

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_2
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_3
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_4
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_5
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_6
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_7
	set duration keypress
	set description "Displays stimuli"

define sketchpad new_sketchpad_8
	set duration keypress
	set description "Displays stimuli"

define sketchpad preparation
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Press <b>spacebar</b> to start reading the article." x=0 y=-128 z_index=0

define sketchpad rest
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text=rest x=0 y=0 z_index=0

define notepad rest_duation_notepad
	__note__
	rest_duration 正式實驗設定 
	Duration：90000ms
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define advanced_delay rest_duration
	set jitter_mode Uniform
	set jitter 1000
	set duration 90000
	set description "Waits for a specified duration"

define inline_html rest_html
	__html__
	<center>You will have a 90 seconds for break after press "OK". Next article will show up when the time is over.</center>
	<br>
	<br>
	<br>
	<br>
	<br>
	<input type='submit' value='ok'>
	__end__
	set description "Embeds custom HTML"

define inline_javascript shuffle_block
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// getRndInteger(min, max) returns a random number between min and max (both included):
	function getRndInteger(min, max) {
	  return Math.floor(Math.random() * (max - min + 1) ) + min;
	}
	
	// RandArray()
	// https://alvinalexander.com/source-code/javascript-multiple-random-unique-elements-from-array/
	function shuffle(a) {
	    for (let i = a.length - 1; i > 0; i--) {
	        const j = Math.floor(Math.random() * (i + 1));
	        [a[i], a[j]] = [a[j], a[i]];
	    }
	    return a;
	}
	
	vars.CB = getRndInteger(1,3);
	
	// About array 
	// https://www.w3schools.com/js/js_arrays.asp
	// Generate the array decided the "y/n" of each comprehension question
	
	// Build array of shuffled post-test question sets
	vars.Aarray = shuffle( [1,1,1,1,1,1,1,2,2,2,2,2] );
	vars.Barray = shuffle( [3,3,3,3,3,3,3,4,4,4,4,4] );
	__end__
	set _prepare ""

define loop test
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 48
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Question "One of the studies just presented could show the following: Anger led to both, political activation and the decision to volunteer."
	setcycle 0 Test_id 1
	setcycle 0 Q_type Knowledge
	setcycle 0 Topic Test
	setcycle 0 Set_id 1
	setcycle 0 correct_response n
	setcycle 1 Question "One of the studies just presented could show the following: Anger led to both, political activation and the decision to volunteer."
	setcycle 1 Test_id 1
	setcycle 1 Q_type Knowledge
	setcycle 1 Topic Test
	setcycle 1 Set_id 2
	setcycle 1 correct_response n
	setcycle 2 Question "One of the studies just presented could show the following: People with strong moral convictions are more motivated to become politically active than to do voluntary work."
	setcycle 2 Test_id 1
	setcycle 2 Q_type Knowledge
	setcycle 2 Topic Test
	setcycle 2 Set_id 3
	setcycle 2 correct_response n
	setcycle 3 Question "One of the studies just presented could show the following: People with strong moral convictions are more motivated to become politically active than to do voluntary work."
	setcycle 3 Test_id 1
	setcycle 3 Q_type Knowledge
	setcycle 3 Topic Test
	setcycle 3 Set_id 4
	setcycle 3 correct_response n
	setcycle 4 Question "One of the studies just presented could show the following: Persons who themselves took part in the commemoration of 9/11 rather blamed the Iranian leadership for 9/11, if they should remember this day of remembrance."
	setcycle 4 Test_id 2
	setcycle 4 Q_type Knowledge
	setcycle 4 Topic Test
	setcycle 4 Set_id 1
	setcycle 4 correct_response y
	setcycle 5 Question "One of the studies just presented could show the following: Persons who themselves took part in the commemoration of 9/11 rather blamed the Iranian leadership for 9/11, if they should remember this day of remembrance."
	setcycle 5 Test_id 2
	setcycle 5 Q_type Knowledge
	setcycle 5 Topic Test
	setcycle 5 Set_id 2
	setcycle 5 correct_response y
	setcycle 6 Question "One of the studies just presented could show the following: Persons blamed the Iranian leadership for 9/11 more when they were asked to remember the corresponding day of remembrance than when they were asked to remember another day of remembrance."
	setcycle 6 Test_id 2
	setcycle 6 Q_type Knowledge
	setcycle 6 Topic Test
	setcycle 6 Set_id 3
	setcycle 6 correct_response y
	setcycle 7 Question "One of the studies just presented could show the following: Persons blamed the Iranian leadership for 9/11 more when they were asked to remember the corresponding day of remembrance than when they were asked to remember another day of remembrance."
	setcycle 7 Test_id 2
	setcycle 7 Q_type Knowledge
	setcycle 7 Topic Test
	setcycle 7 Set_id 4
	setcycle 7 correct_response y
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	run test_seq

define sequence test_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Test_recording_notepad always
	run Test_board always
	run Test_recording always
	run Study_logger always

define loop text_CB1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Content "</span style='font-size:14px;'>The refugee crisis in the summer of 2015 mobilized thousands of volunteers in Hungary to help refugees on their journey through Europe. Because of the Hungarian government’s explicitly hostile stance toward refugees, offering volunteer help was treated </span><br><span style='font-size:14px;'>as an expression of political dissent by authorities.We investigated the motivations of volunteers within this political climate. The psychological motivations to engage in  political protest and volunteerism can be distinguished based on previous research. </span><br><span style='font-size:14px;'>Volunteerism is the intentional engagement in helping for the benefit of others; it can be long term or flare up in moments of crisis but it does not necessarily entail intentions to bring about change. In contrast, engagement in political protest is motivated </span><br><span style='font-size:14px;'>by peoples’ intentions to address injustice and achieve change. As the refugee crisis evoked both types of actions (volunteerism and political protests), it provided us with the opportunity to investigate whether volunteering was driven by (1) motivation </span><br><span style='font-size:14px;'>to bring about social change, (2) identification with the  pro-refugee movement, and (3) experiencing a violation to their moral principles, all of which are typical for political activists. We conducted a survey among people who were active in supporting</span><br><span style='font-size:14px;'>refugees, or  participated in political protests. 1459 participants completed our online survey. We measured their level of moral conviction, identification with the pro-refugee opinion group, anger about the situation, and belief in their group’s efficacy to</span><br><span style='font-size:14px;'>achieve change. Our results showed that identification with the pro-refugee movement and moral conviction were important motivations primarily for volunteers, while belief in the efficacy of the movement and anger were more closely related to </span><br><span style='font-size:14px;'>engagement in political activism.We therefore suggest that activities of pro-refugee volunteers became the means to express moral convictions and a desire for  social change. We used the case of the refugee crisis to draw attention to the importance of </span><br><span style='font-size:14px;'>understanding the similarities and differences in the paths toward volunteerism and political activism, in terms of peoples’ motivation to achieve change, as social movements are just as dependent on mobilizing allies for political actions as they are on</span><br><span style='font-size:14px;'>mobilizing volunteers."
	setcycle 0 NH Y
	setcycle 0 OSA N
	setcycle 0 Text_id 1
	setcycle 0 BLOCK 1
	setcycle 0 O_id 1
	setcycle 0 Link "10.5964/jspp.v5i1.642 "
	setcycle 0 cite "The Politicized Motivations of Volunteers in the Refugee Crisis: Intergroup Helping as the Means to Achieve Social Change "
	setcycle 1 Content "<span style='font-size:18px;'><b>Background</b></span><br><span style='font-size:14px;'>The refugee crisis in the summer of 2015 mobilized thousands of volunteers in Hungary to help refugees on their journey through Europe. Because of the Hungarian government’s explicitly hostile stance toward refugees, offering volunteer help was treated</span><br><span style='font-size:14px;'> as an expression of political dissent by authorities.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>Why was this study done?</b></span><br><span style='font-size:14px;'>We investigated the motivations of volunteers within this political climate. The psychological motivations to engage in political protest and volunteerism can be distinguished based on previous research. Volunteerism is the intentional engagement in helping</span><br><span style='font-size:14px;'>for the benefit of others; it can be long term or flare up in moments of crisis, but it does not necessarily entail intentions to bring about change. In contrast, engagement in political protest is motivated by peoples’ intentions to address injustice and </span><br><span style='font-size:14px;'>achievechange. As the refugee crisis evoked both types of actions (volunteerism and political protests), it provided us with the opportunity to investigate whether volunteering was driven by (1) motivation to bring about social change, (2) identification</span><br><span style='font-size:14px;'>with the pro-refugee movement, and (3) experiencing a violation to their moral principles, all of which are typical for political activists.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What did the researchers do and find?</b></span><br><span style='font-size:14px;'>We conducted a survey among people who were active in supporting refugees, or participated in political protests. 1459 participants completed our online survey. We measured their level of moral conviction, identification with the pro-refugee opinion</span><br><span style='font-size:14px;'>group, anger about the situation, and belief in their group’s efficacy to achieve change. Our results showed that identification with the pro-refugee movement and moral conviction were important motivations primarily for volunteers, while belief</span><br><span style='font-size:14px;'>in the efficacy of the movement and anger were more closely related to engagement in political activism.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What do these findings mean?</b></span><br><span style='font-size:14px;'>We therefore suggest that activities of pro-refugee volunteers became the means to express moral convictions and a desire for social change. We used the case of the refugee crisis to draw attention to the importance of understanding the similarities and</span><br><span style='font-size:14px;'>differences in the paths toward volunteerism and political activism, in terms of peoples’ motivation to achieve change, as social movements are just as dependent on mobilizing allies for political actions as they are on mobilizing volunteers."
	setcycle 1 NH N
	setcycle 1 OSA N
	setcycle 1 Text_id 1
	setcycle 1 BLOCK 2
	setcycle 1 O_id 1
	setcycle 1 Link "10.5964/jspp.v5i1.642 "
	setcycle 1 cite "The Politicized Motivations of Volunteers in the Refugee Crisis: Intergroup Helping as the Means to Achieve Social Change "
	setcycle 2 Content "</span style='font-size:14px;'>The refugee crisis in the summer of 2015 mobilized thousands of volunteers in Hungary to help refugees on their journey through Europe despite the government’s hostile stance. We conducted a survey (N = 1459) among people who were active in </span><br><span style='font-size:14px;'>supporting refugees and providing services to them to test the hypothesis of whether volunteers in the context of this humanitarian crisis had social change motivations similar to those engaged in direct political activism. Hierarchical regression</span><br><span style='font-size:14px;'>analysis and mediation analysis revealed the importance of opinion-based identity and moral convictions as predictors of volunteerism, while efficacy beliefs and anger only predicted political activism. Our findings suggest that volunteers engaged in</span><br><span style='font-size:14px;'>helping refugees based on motivations previously described as drivers of mobilization for political activism, but chose volunteerism to alleviate the problems embedded in the intergroup situation. Although the context of the refugee crisis in Hungary</span><br><span style='font-size:14px;'>may have been somewhat unique, these findings have implications for other asymmetrical politicized intergroup relations in which advantaged group members can choose to offer humanitarian aid, engage in political actions to change the situation, or do</span><br><span style='font-size:14px;'>both."
	setcycle 2 NH N
	setcycle 2 OSA Y
	setcycle 2 Text_id 1
	setcycle 2 BLOCK 3
	setcycle 2 O_id 1
	setcycle 2 Link "10.5964/jspp.v5i1.642 "
	setcycle 2 cite "The Politicized Motivations of Volunteers in the Refugee Crisis: Intergroup Helping as the Means to Achieve Social Change "
	setcycle 3 Content "</span style='font-size:14px;'>The attacks of September 11, 2001 took the lives of almost 3,000 civilians. The events were immediately and simultaneously tragic and rife with political repercussions, and thus each year the event is commemorated.We were interested in assessing how </span><br><span style='font-size:14px;'>commemorations of 9/11 evolve over time, and to understand how the meaning of the memory is called upon to inform discussion of ongoing political issues. For example, exactly one year after the attacks, then-U.S. president George W. Bush spoke to</span><br><span style='font-size:14px;'>the U.N. about the threat of Iraq attaining weapons of mass destruction by harkening to the attacks of 9/11. In the same way, almost 15 years later, politicians continue to invoke 9/11 in attempts to warn the public about the threat of future terrorist attacks.</span><br><span style='font-size:14px;'>How does such rhetoric shape commemorations meant to honor the innocent victims of the attacks—could it be that commonplace commemorations among citizens can trigger hawkish foreign policy attitudes in the same way we saw in the immediate</span><br><span style='font-size:14px;'>aftermath of the attacks?We conducted two experiments that compared how attitudes towards a present-day foreign policy issue—Iran’s nuclear program—are related to commemorations of 9/11 (compared to Labor Day commemorations or no</span><br><span style='font-size:14px;'>commemoration). In mid-September 2015, we asked participants to recall what, if anything, they did one week earlier on September 11, 2015 to commemorate the attacks. Compared to participants who recalled what they did on the most recent Labor</span><br><span style='font-size:14px;'>Day, or who were not asked to recall anything, participants who recalled their 9/11 commemoration expressed greater vigilance about Iran’s nuclear program and assigned more responsibility to Iranian leaders for the 9/11 attacks. And the intensity of</span><br><span style='font-size:14px;'>commemoration mattered: On average, the more public and engaged one’s commemoration, the greater their vigilance.Though commemorations are very often meaningful practices to pay respects to the innocent victims, they can also reflect a different</span><br><span style='font-size:14px;'>collective motivation that has built up over time. In the present case, because 9/11 and its subsequent commemorations have also been associated with aggressive U.S. foreign policy (such as the invasion and occupation of Iraq), people who engage in</span><br><span style='font-size:14px;'>commemorations may respond accordingly when it comes to ostensibly unrelated, emerging policy debates"
	setcycle 3 NH Y
	setcycle 3 OSA N
	setcycle 3 Text_id 2
	setcycle 3 BLOCK 1
	setcycle 3 O_id 2
	setcycle 3 Link "10.5964/jspp.v5i2.713 "
	setcycle 3 cite "Collective Memory as Tool for Intergroup Conflict: The Case of 9/11 Commemoration "
	setcycle 4 Content "<span style='font-size:18px;'><b>Background</b></span><br><span style='font-size:14px;'>The attacks of September 11, 2001 took the lives of almost 3,000 civilians. The events were immediately and simultaneously tragic and rife with political repercussions, and thus each year the event is commemorated.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>Why was this study done?</b></span><br><span style='font-size:14px;'>We were interested in assessing how commemorations of 9/11 evolve over time, and to understand how the meaning of the memory is called upon to inform discussion of ongoing political issues. For example, exactly one year after the attacks, then-U.S.</span><br><span style='font-size:14px;'>president George W. Bush spoke to the U.N. about the threat of Iraq attaining weapons of mass destruction by harkening to the attacks of 9/11. In the same way, almost 15 years later, politicians continue to invoke 9/11 in attempts to warn the public</span><br><span style='font-size:14px;'>about the threat of future terrorist attacks. How does such rhetoric shape commemorations meant to honor the innocent victims of the attacks—could it be that commonplace commemorations among citizens can trigger hawkish foreign policy attitudes in the</span><br><span style='font-size:14px;'>same way we saw in the immediate aftermath of the attacks?</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What did the researchers do and find?</b></span><br><span style='font-size:14px;'>We conducted two experiments that compared how attitudes towards a present-day foreign policy issue—Iran’s nuclear program—are related to commemorations of 9/11 (compared to Labor Day commemorations or no commemoration). In</span><br><span style='font-size:14px;'>mid-September 2015, we asked participants to recall what, if anything, they did one week earlier on September 11, 2015 to commemorate the attacks. Compared to participants who recalled what they did on the most recent Labor Day, or who were not</span><br><span style='font-size:14px;'>asked to recall anything, participants who recalled their 9/11 commemoration expressed greater vigilance about Iran’s nuclear program and assigned more responsibility to Iranian leaders for the 9/11 attacks. And the intensity of commemoration mattered</span><br><span style='font-size:14px;'>: On average, the more public and engaged one’s commemoration, the greater their vigilance.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What do these findings mean?</b></span><br><span style='font-size:14px;'>Though commemorations are very often meaningful practices to pay respects to the innocent victims, they can also reflect a different collective motivation that has built up over time. In the present case, because 9/11 and its subsequent commemorations</span><br><span style='font-size:14px;'>have also been associated with aggressive U.S. foreign policy (such as the invasion and occupation of Iraq), people who engage in commemorations may respond accordingly when it comes to ostensibly unrelated, emerging policy debates."
	setcycle 4 NH N
	setcycle 4 OSA N
	setcycle 4 Text_id 2
	setcycle 4 BLOCK 3
	setcycle 4 O_id 2
	setcycle 4 Link "10.5964/jspp.v5i2.713 "
	setcycle 4 cite "Collective Memory as Tool for Intergroup Conflict: The Case of 9/11 Commemoration "
	setcycle 5 Content "</span style='font-size:14px;'>We apply a cultural psychology approach to collective memory of the 9/11 terrorist attacks. In particular, we considered whether practices associated with commemoration of the 9/11 terrorist attacks would promote vigilance (prospective affordance </span><br><span style='font-size:14px;'>hypothesis)and misattribution of responsibility for the original 9/11 attacks (reconstructive memory hypothesis) in an ostensibly unrelated context of intergroup conflict during September 2015. In Study 1, vigilance toward Iran and misattribution of </span><br><span style='font-size:14px;'>responsibility for the 9/11 attacks to Iranian sources was greater among participants whom we asked about engagement with 9/11 commemoration than among participants whom we asked about engagement with Labor Day observations. Results of</span><br><span style='font-size:14px;'>Study 2 suggested that patterns of greater vigilance and misattribution as a function of instructions to recall engagement with 9/11 commemoration were more specifically true only of participants who reported actual engagement with hegemonic</span><br><span style='font-size:14px;'>commemoration practices. From a cultural psychological perspective, 9/11 commemoration is a case of collective memory not merely because it implicates collective-level (versus personal) identities, but instead because it emphasizes mediation of</span><br><span style='font-size:14px;'>motivation and action via engagement with commemoration practices and other cultural tools."
	setcycle 5 NH N
	setcycle 5 OSA Y
	setcycle 5 Text_id 2
	setcycle 5 BLOCK 2
	setcycle 5 O_id 2
	setcycle 5 Link "10.5964/jspp.v5i2.713 "
	setcycle 5 cite "Collective Memory as Tool for Intergroup Conflict: The Case of 9/11 Commemoration "
	setcycle 6 Content "</span style='font-size:14px;'>All humans have a fundamental desire to belong to social groups, and create collective identities with groups. Groups online, such as chat forums, may also constitute a social group in a psychological sense. This means that individuals joining an online </span><br><span style='font-size:14px;'>forum may start to identify with the other users, and hence adapt to these users. Moreover, users may start to distance themselves from other groups, so called outgroups. This could be problematic, for example if the forum is anti-immigrant and these</span><br><span style='font-size:14px;'>other groups are immigrant groups.This study was conducted to explore how processes of group identification and adaption can be studied in an online forum. Specifically, this is of importance if such forums are used to spread anti-immigrant messages</span><br><span style='font-size:14px;'>or to recruit people to radical groups.In order to explore how identification processes and adaption takes place in an online milieu, we have to use the text generated by the users in an online forum. Much of these processes can be studied analyzing how</span><br><span style='font-size:14px;'> language is used. We use a computerized method, which basically counts the use of specific types of words, and we follow individual users over time from the time they join the forum. In the present analyses, we used text data comprised of about</span><br><span style='font-size:14px;'>60 000 000 words. The forum that we analysed in this study is an online forum in Sweden, which has over one million users. The sub-forum that we focused on is under the theme Immigration and integration. Even though the online forum is not</span><br><span style='font-size:14px;'>explicitly racist, it is heavily dominated by anti-immigrant sentiments. The linguistic analysis revealed two major findings. First, we see a change in the use of pronouns over time. The use of ‘I’ decreases, while the use of ‘we’ increases when an</span><br><span style='font-size:14px;'>individual has participated for a longer time in the discussions in the forum. In addition, the use of ‘they’ increases over time. Second, we see that the linguistic style of new users becomes more similar to the linguistic style of the forum as a whole over</span><br><span style='font-size:14px;'>time, indicating that individuals adapt to the other users in the forum.These findings indicate that processes of group identification and adaption take place in online forums in a similar way as in real life settings. The decrease in use of ‘I’ and increase</span><br><span style='font-size:14px;'>in use of ‘we’ signals a collective identity formation within the forum. The increased use of ‘they’ signals increased distancing to one or more outgroups. The linguistic adaption is also a signal of normal group processes, showing that individuals in</span><br><span style='font-size:14px;'>online forums want to be part of the group and hence adapts to the norms of the group."
	setcycle 6 NH Y
	setcycle 6 OSA N
	setcycle 6 Text_id 3
	setcycle 6 BLOCK 2
	setcycle 6 O_id 3
	setcycle 6 Link "10.5964/jspp.v6i1.741 "
	setcycle 6 cite "From I to We: Group Formation and Linguistic Adaption in an Online Xenophobic Forum "
	setcycle 7 Content "<span style='font-size:18px;'><b>Background</b></span><br><span style='font-size:14px;'>All humans have a fundamental desire to belong to social groups, and create collective identities with groups. Groups online, such as chat forums, may also constitute a social group in a psychological sense. This means that individuals joining an online</span><br><span style='font-size:14px;'>forum may start to identify with the other users, and hence adapt to these users. Moreover, users may start to distance themselves from other groups, so called outgroups. This could be problematic, for example if the forum is anti-immigrant and these</span><br><span style='font-size:14px;'>other groups are immigrant groups.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>Why was this study done?</b></span><br><span style='font-size:14px;'>This study was conducted to explore how processes of group identification and adaption can be studied in an online forum. Specifically, this is of importance if such forums are used to spread anti-immigrant messages or to recruit people to radical groups.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What did the researchers do and find?</b></span><br><span style='font-size:14px;'>In order to explore how identification processes and adaption takes place in an online milieu, we have to use the text generated by the users in an online forum. Much of these processes can be studied analyzing how language is used. We use a</span><br><span style='font-size:14px;'>computerized method, which basically counts the use of specific types of words, and we follow individual users over time from the time they join the forum. In the present analyses, we used text data comprised of about 60 000 000 words. The forum that</span><br><span style='font-size:14px;'>we analysed in this study is an online forum in Sweden, which has over one million users. The sub-forum that we focused on is under the theme Immigration and integration. Even though the online forum is not explicitly racist, it is heavily dominated by</span><br><span style='font-size:14px;'>anti-immigrant sentiments. The linguistic analysis revealed two major findings. First, we see a change in the use of pronouns over time. The use of ‘I’ decreases, while the use of ‘we’ increases when an individual has participated for a longer time in the</span><br><span style='font-size:14px;'>discussions in the forum. In addition, the use of ‘they’ increases over time. Second, we see that the linguistic style of new users becomes more similar to the linguistic style of the forum as a whole over time, indicating that individuals adapt to the other</span><br><span style='font-size:14px;'>users in the forum.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What do these findings mean?</b></span><br><span style='font-size:14px;'>These findings indicate that processes of group identification and adaption take place in online forums in a similar way as in real life settings. The decrease in use of ‘I’ and increase in use of ‘we’ signals a collective identity formation within the forum.</span><br><span style='font-size:14px;'>The increased use of ‘they’ signals increased distancing to one or more outgroups. The linguistic adaption is also a signal of normal group processes, showing that individuals in online forums want to be part of the group and hence adapts to the norms of</span><br><span style='font-size:14px;'>the group."
	setcycle 7 NH N
	setcycle 7 OSA N
	setcycle 7 Text_id 3
	setcycle 7 BLOCK 1
	setcycle 7 O_id 3
	setcycle 7 Link "10.5964/jspp.v6i1.741 "
	setcycle 7 cite "From I to We: Group Formation and Linguistic Adaption in an Online Xenophobic Forum "
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	setcycle 8 Link "10.5964/jspp.v6i1.741 "
	setcycle 8 cite "From I to We: Group Formation and Linguistic Adaption in an Online Xenophobic Forum "
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	setcycle 9 Link "10.5964/jspp.v5i2.733 "
	setcycle 9 cite "Collective Memory of a Dissolved Country: Group-Based Nostalgia and Guilt Assignment as Predictors of Interethnic Relations Between Diaspora Groups From Former Yugoslavia "
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	setcycle 10 Link "10.5964/jspp.v5i2.733 "
	setcycle 10 cite "Collective Memory of a Dissolved Country: Group-Based Nostalgia and Guilt Assignment as Predictors of Interethnic Relations Between Diaspora Groups From Former Yugoslavia "
	setcycle 11 Content "</span style='font-size:14px;'>In this study we examined intergroup relations between immigrants of different ethnic backgrounds (Croats, Serbs, and Bosniaks) originating from the same conflict area (former Yugoslavia) and living in the same host country (Australia). For these </span><br><span style='font-size:14px;'>(formerly) conflicted groups we investigated whether interethnic contacts depended on superordinate Yugoslavian and subgroup ethnic identifications as well as two emotionally laden representations of history: Yugonostalgia (longing for Yugoslavia </span><br><span style='font-size:14px;'>from the past) and collective guilt assignment for the past wrongdoings. Using unique survey data collected among Croats, Serbs and Bosniaks in Australia (N = 87), we found that Yugoslavian identification was related to stronger feelings of </span><br><span style='font-size:14px;'>Yugonostalgia,and via Yugonostalgia, to relatively more contact with other subgroups from former Yugoslavia. Ethnic identification, in contrast, was related to a stronger assignment of guilt to out-group relative to in-group, and therefore, to relatively</span><br><span style='font-size:14px;'>less contact with other subgroups in Australia. We discuss implications of transferring group identities and collective memories into the diaspora."
	setcycle 11 NH N
	setcycle 11 OSA Y
	setcycle 11 Text_id 4
	setcycle 11 BLOCK 1
	setcycle 11 O_id 4
	setcycle 11 Link "10.5964/jspp.v5i2.733 "
	setcycle 11 cite "Collective Memory of a Dissolved Country: Group-Based Nostalgia and Guilt Assignment as Predictors of Interethnic Relations Between Diaspora Groups From Former Yugoslavia "
	setcycle 12 Content "</span style='font-size:14px;'>The world is currently facing the highest number of refugees since the aftermath of World War II. In addition, climate change poses another urgent challenge that is discussed on an international level. Decisions made by national leaders have far-reaching </span><br><span style='font-size:14px;'>consequences for current and future generations. Nevertheless, national leaders are humans who are subject to psychological biases in decision making.As social-psychological factors could inhibit or promote intentions to collaborate in support of</span><br><span style='font-size:14px;'>human rights at the global level, we conducted a training for future diplomats in the context of Model United Nations simulations to reduce perception biases that could influence decision making. As a theoretical basis for the training we used a social</span><br><span style='font-size:14px;'>psychological model (ingroup projection model), proposing that people perceive the group they belong to (e.g., their country) as more prototypical than other groups (e.g., other countries). Past research found a relationship of this prototypicality perception</span><br><span style='font-size:14px;'>with prejudice against other groups, but also a way to reduce such prejudice. Namely, a group that includes subgroups (in our study: the United Nations, UN) needs to be mentally represented as diverse.We used an existing method to activate diversity</span><br><span style='font-size:14px;'>and adapted it to the United Nations context. We conducted several trainings and investigated their effects on the intention to collaborate with other nations regarding human rights issues and on related processes (i.e., diversity perception of the UN and </span><br><span style='font-size:14px;'>identification with the UN). Results indicated that the workshop reduced the prototype perception bias, as intended. Furthermore, we provide evidence that the diversity training increased perceived diversity of the UN, which in turn was positively </span><br><span style='font-size:14px;'>related to the intention to act together with other nation. As negotiation settings within the political areas have major implications for people around the world, methods for reducing biases in perception seem especially useful. Based on our first evidence,</span><br><span style='font-size:14px;'> one could cautiously assume that diversity perceptions and identification with a superordinate group (UN in our case) influence and foster the intention to work together. Policies simultaneously aiming at diversity and identity management could pave a </span><br><span style='font-size:14px;'>fruitful avenue towards improving intergroup relations and collaborative action in general."
	setcycle 12 NH Y
	setcycle 12 OSA N
	setcycle 12 Text_id 5
	setcycle 12 BLOCK 3
	setcycle 12 O_id 5
	setcycle 12 Link "10.5964/jspp.v6i1.601"
	setcycle 12 cite "One World in Diversity – A Social-Psychological Intervention to Foster International Collective Action Intention "
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	setcycle 13 Link "10.5964/jspp.v6i1.601"
	setcycle 13 cite "One World in Diversity – A Social-Psychological Intervention to Foster International Collective Action Intention "
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	setcycle 14 Link "10.5964/jspp.v6i1.601"
	setcycle 14 cite "One World in Diversity – A Social-Psychological Intervention to Foster International Collective Action Intention "
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	setcycle 15 Link "10.5964/jspp.v6i2.859 "
	setcycle 15 cite "Self-Censorship Orientation: Scale Development, Correlates and Outcomes"
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	setcycle 16 Link "10.5964/jspp.v6i2.859 "
	setcycle 16 cite "Self-Censorship Orientation: Scale Development, Correlates and Outcomes"
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	setcycle 17 Link "10.5964/jspp.v6i2.859 "
	setcycle 17 cite "Self-Censorship Orientation: Scale Development, Correlates and Outcomes"
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	setcycle 18 Link "10.5964/jspp.v7i1.1063"
	setcycle 18 cite "A Field Study Around a Racial Justice Protest on a College Campus: The Proximal Impact of Collective Action on the Social Change Attitudes of Uninvolved Bystanders "
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	setcycle 19 Link "10.5964/jspp.v7i1.1063"
	setcycle 19 cite "A Field Study Around a Racial Justice Protest on a College Campus: The Proximal Impact of Collective Action on the Social Change Attitudes of Uninvolved Bystanders "
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	setcycle 20 Link "10.5964/jspp.v7i1.1063"
	setcycle 20 cite "A Field Study Around a Racial Justice Protest on a College Campus: The Proximal Impact of Collective Action on the Social Change Attitudes of Uninvolved Bystanders "
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	setcycle 21 Link "10.5964/jspp.v7i1.557 "
	setcycle 21 cite "The Meaning of Being German: An Inductive Approach to National Identity "
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	setcycle 22 Link "10.5964/jspp.v7i1.557 "
	setcycle 22 cite "The Meaning of Being German: An Inductive Approach to National Identity "
	setcycle 23 Content "</span style='font-size:14px;'>Germany is often cited as a paradigmatic case for an ethnic model of nationalism but in recent years introduced many civic elements into its citizenship policies. The goal of the current article is to explore how German citizens construct their national </span><br><span style='font-size:14px;'>identity against this backdrop. Using an inductive approach, we asked 987 German citizens to describe what being German means for them. A latent class analysis of content-coded responses revealed four classes: a heritage-based identity class </span><br><span style='font-size:14px;'>with a strong focus on language and culture (39%), an ideology-based identity class that revolves around democracy, welfare, freedom, and economy and safety (19%), a legal-formalistic identity class that is mostly concerned with the legal requirement </span><br><span style='font-size:14px;'>for obtaining and holding citizenship of national identity (26%), and a trait-based identity class describing personality-traits that are supposed to be typical for Germans (16%). These findings expand upon and add nuance to the commonly used civic vs. </span><br><span style='font-size:14px;'>ethnic national identity content typology."
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	setcycle 23 Link "10.5964/jspp.v7i1.557 "
	setcycle 23 cite "The Meaning of Being German: An Inductive Approach to National Identity "
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	setcycle 24 Link "10.5964/jspp.v7i1.746"
	setcycle 24 cite "Agentic and Communal Interaction Goals in Conflictual Intergroup Relations "
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	setcycle 25 Link "10.5964/jspp.v7i1.746"
	setcycle 25 cite "Agentic and Communal Interaction Goals in Conflictual Intergroup Relations "
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	setcycle 26 Link "10.5964/jspp.v7i1.746"
	setcycle 26 cite "Agentic and Communal Interaction Goals in Conflictual Intergroup Relations "
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	setcycle 27 Link "10.5964/jspp.v7i1.822"
	setcycle 27 cite "Contempt of Congress: Do Liberals and Conservatives Harbor Equivalent Negative Emotional Biases Towards Ideologically Congruent vs. Incongruent Politicians at the Level of Individual Emotions? "
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	setcycle 28 Link "10.5964/jspp.v7i1.822"
	setcycle 28 cite "Contempt of Congress: Do Liberals and Conservatives Harbor Equivalent Negative Emotional Biases Towards Ideologically Congruent vs. Incongruent Politicians at the Level of Individual Emotions? "
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	setcycle 29 Link "10.5964/jspp.v7i1.822"
	setcycle 29 cite "Contempt of Congress: Do Liberals and Conservatives Harbor Equivalent Negative Emotional Biases Towards Ideologically Congruent vs. Incongruent Politicians at the Level of Individual Emotions? "
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	setcycle 30 Link "10.5964/jspp.v7i1.933"
	setcycle 30 cite "Seen One, Seen ‘Em All? Do Reports About Law Violations of a Single Politician Impair the Perceived Trustworthiness of Politicians in General and of the Political System? "
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	setcycle 31 Link "10.5964/jspp.v7i1.933"
	setcycle 31 cite "Seen One, Seen ‘Em All? Do Reports About Law Violations of a Single Politician Impair the Perceived Trustworthiness of Politicians in General and of the Political System? "
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	setcycle 32 Link "10.5964/jspp.v7i1.933"
	setcycle 32 cite "Seen One, Seen ‘Em All? Do Reports About Law Violations of a Single Politician Impair the Perceived Trustworthiness of Politicians in General and of the Political System? "
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	setcycle 33 Link "10.5964/jspp.v7i1.981 "
	setcycle 33 cite "How Many Ways to Say Goodbye? The Latent Class Structure and Psychological Correlates of European Union Sentiment in a Large Sample of UK Adults "
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	setcycle 34 Link "10.5964/jspp.v7i1.981 "
	setcycle 34 cite "How Many Ways to Say Goodbye? The Latent Class Structure and Psychological Correlates of European Union Sentiment in a Large Sample of UK Adults "
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	setcycle 35 Link "10.5964/jspp.v7i1.981 "
	setcycle 35 cite "How Many Ways to Say Goodbye? The Latent Class Structure and Psychological Correlates of European Union Sentiment in a Large Sample of UK Adults "
	sortby BLOCK
	slice 0 12
	shuffle Text_id
	run text_seq

define loop text_CB2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Content "</span style='font-size:14px;'>The refugee crisis in the summer of 2015 mobilized thousands of volunteers in Hungary to help refugees on their journey through Europe. Because of the Hungarian government’s explicitly hostile stance toward refugees, offering volunteer help was treated </span><br><span style='font-size:14px;'>as an expression of political dissent by authorities.We investigated the motivations of volunteers within this political climate. The psychological motivations to engage in  political protest and volunteerism can be distinguished based on previous research. </span><br><span style='font-size:14px;'>Volunteerism is the intentional engagement in helping for the benefit of others; it can be long term or flare up in moments of crisis but it does not necessarily entail intentions to bring about change. In contrast, engagement in political protest is motivated </span><br><span style='font-size:14px;'>by peoples’ intentions to address injustice and achieve change. As the refugee crisis evoked both types of actions (volunteerism and political protests), it provided us with the opportunity to investigate whether volunteering was driven by (1) motivation </span><br><span style='font-size:14px;'>to bring about social change, (2) identification with the  pro-refugee movement, and (3) experiencing a violation to their moral principles, all of which are typical for political activists. We conducted a survey among people who were active in supporting</span><br><span style='font-size:14px;'>refugees, or  participated in political protests. 1459 participants completed our online survey. We measured their level of moral conviction, identification with the pro-refugee opinion group, anger about the situation, and belief in their group’s efficacy to</span><br><span style='font-size:14px;'>achieve change. Our results showed that identification with the pro-refugee movement and moral conviction were important motivations primarily for volunteers, while belief in the efficacy of the movement and anger were more closely related to </span><br><span style='font-size:14px;'>engagement in political activism.We therefore suggest that activities of pro-refugee volunteers became the means to express moral convictions and a desire for  social change. We used the case of the refugee crisis to draw attention to the importance of </span><br><span style='font-size:14px;'>understanding the similarities and differences in the paths toward volunteerism and political activism, in terms of peoples’ motivation to achieve change, as social movements are just as dependent on mobilizing allies for political actions as they are on</span><br><span style='font-size:14px;'>mobilizing volunteers."
	setcycle 0 NH Y
	setcycle 0 OSA N
	setcycle 0 Text_id 1
	setcycle 0 BLOCK 1
	setcycle 0 O_id 1
	setcycle 0 Link "10.5964/jspp.v5i1.642 "
	setcycle 0 cite "The Politicized Motivations of Volunteers in the Refugee Crisis: Intergroup Helping as the Means to Achieve Social Change "
	setcycle 1 Content "<span style='font-size:18px;'><b>Background</b></span><br><span style='font-size:14px;'>The refugee crisis in the summer of 2015 mobilized thousands of volunteers in Hungary to help refugees on their journey through Europe. Because of the Hungarian government’s explicitly hostile stance toward refugees, offering volunteer help was treated</span><br><span style='font-size:14px;'> as an expression of political dissent by authorities.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>Why was this study done?</b></span><br><span style='font-size:14px;'>We investigated the motivations of volunteers within this political climate. The psychological motivations to engage in political protest and volunteerism can be distinguished based on previous research. Volunteerism is the intentional engagement in helping</span><br><span style='font-size:14px;'>for the benefit of others; it can be long term or flare up in moments of crisis, but it does not necessarily entail intentions to bring about change. In contrast, engagement in political protest is motivated by peoples’ intentions to address injustice and </span><br><span style='font-size:14px;'>achievechange. As the refugee crisis evoked both types of actions (volunteerism and political protests), it provided us with the opportunity to investigate whether volunteering was driven by (1) motivation to bring about social change, (2) identification</span><br><span style='font-size:14px;'>with the pro-refugee movement, and (3) experiencing a violation to their moral principles, all of which are typical for political activists.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What did the researchers do and find?</b></span><br><span style='font-size:14px;'>We conducted a survey among people who were active in supporting refugees, or participated in political protests. 1459 participants completed our online survey. We measured their level of moral conviction, identification with the pro-refugee opinion</span><br><span style='font-size:14px;'>group, anger about the situation, and belief in their group’s efficacy to achieve change. Our results showed that identification with the pro-refugee movement and moral conviction were important motivations primarily for volunteers, while belief</span><br><span style='font-size:14px;'>in the efficacy of the movement and anger were more closely related to engagement in political activism.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What do these findings mean?</b></span><br><span style='font-size:14px;'>We therefore suggest that activities of pro-refugee volunteers became the means to express moral convictions and a desire for social change. We used the case of the refugee crisis to draw attention to the importance of understanding the similarities and</span><br><span style='font-size:14px;'>differences in the paths toward volunteerism and political activism, in terms of peoples’ motivation to achieve change, as social movements are just as dependent on mobilizing allies for political actions as they are on mobilizing volunteers."
	setcycle 1 NH N
	setcycle 1 OSA N
	setcycle 1 Text_id 1
	setcycle 1 BLOCK 2
	setcycle 1 O_id 1
	setcycle 1 Link "10.5964/jspp.v5i1.642 "
	setcycle 1 cite "The Politicized Motivations of Volunteers in the Refugee Crisis: Intergroup Helping as the Means to Achieve Social Change "
	setcycle 2 Content "</span style='font-size:14px;'>The refugee crisis in the summer of 2015 mobilized thousands of volunteers in Hungary to help refugees on their journey through Europe despite the government’s hostile stance. We conducted a survey (N = 1459) among people who were active in </span><br><span style='font-size:14px;'>supporting refugees and providing services to them to test the hypothesis of whether volunteers in the context of this humanitarian crisis had social change motivations similar to those engaged in direct political activism. Hierarchical regression</span><br><span style='font-size:14px;'>analysis and mediation analysis revealed the importance of opinion-based identity and moral convictions as predictors of volunteerism, while efficacy beliefs and anger only predicted political activism. Our findings suggest that volunteers engaged in</span><br><span style='font-size:14px;'>helping refugees based on motivations previously described as drivers of mobilization for political activism, but chose volunteerism to alleviate the problems embedded in the intergroup situation. Although the context of the refugee crisis in Hungary</span><br><span style='font-size:14px;'>may have been somewhat unique, these findings have implications for other asymmetrical politicized intergroup relations in which advantaged group members can choose to offer humanitarian aid, engage in political actions to change the situation, or do</span><br><span style='font-size:14px;'>both."
	setcycle 2 NH N
	setcycle 2 OSA Y
	setcycle 2 Text_id 1
	setcycle 2 BLOCK 3
	setcycle 2 O_id 1
	setcycle 2 Link "10.5964/jspp.v5i1.642 "
	setcycle 2 cite "The Politicized Motivations of Volunteers in the Refugee Crisis: Intergroup Helping as the Means to Achieve Social Change "
	setcycle 3 Content "</span style='font-size:14px;'>The attacks of September 11, 2001 took the lives of almost 3,000 civilians. The events were immediately and simultaneously tragic and rife with political repercussions, and thus each year the event is commemorated.We were interested in assessing how </span><br><span style='font-size:14px;'>commemorations of 9/11 evolve over time, and to understand how the meaning of the memory is called upon to inform discussion of ongoing political issues. For example, exactly one year after the attacks, then-U.S. president George W. Bush spoke to</span><br><span style='font-size:14px;'>the U.N. about the threat of Iraq attaining weapons of mass destruction by harkening to the attacks of 9/11. In the same way, almost 15 years later, politicians continue to invoke 9/11 in attempts to warn the public about the threat of future terrorist attacks.</span><br><span style='font-size:14px;'>How does such rhetoric shape commemorations meant to honor the innocent victims of the attacks—could it be that commonplace commemorations among citizens can trigger hawkish foreign policy attitudes in the same way we saw in the immediate</span><br><span style='font-size:14px;'>aftermath of the attacks?We conducted two experiments that compared how attitudes towards a present-day foreign policy issue—Iran’s nuclear program—are related to commemorations of 9/11 (compared to Labor Day commemorations or no</span><br><span style='font-size:14px;'>commemoration). In mid-September 2015, we asked participants to recall what, if anything, they did one week earlier on September 11, 2015 to commemorate the attacks. Compared to participants who recalled what they did on the most recent Labor</span><br><span style='font-size:14px;'>Day, or who were not asked to recall anything, participants who recalled their 9/11 commemoration expressed greater vigilance about Iran’s nuclear program and assigned more responsibility to Iranian leaders for the 9/11 attacks. And the intensity of</span><br><span style='font-size:14px;'>commemoration mattered: On average, the more public and engaged one’s commemoration, the greater their vigilance.Though commemorations are very often meaningful practices to pay respects to the innocent victims, they can also reflect a different</span><br><span style='font-size:14px;'>collective motivation that has built up over time. In the present case, because 9/11 and its subsequent commemorations have also been associated with aggressive U.S. foreign policy (such as the invasion and occupation of Iraq), people who engage in</span><br><span style='font-size:14px;'>commemorations may respond accordingly when it comes to ostensibly unrelated, emerging policy debates"
	setcycle 3 NH Y
	setcycle 3 OSA N
	setcycle 3 Text_id 2
	setcycle 3 BLOCK 1
	setcycle 3 O_id 2
	setcycle 3 Link "10.5964/jspp.v5i2.713 "
	setcycle 3 cite "Collective Memory as Tool for Intergroup Conflict: The Case of 9/11 Commemoration "
	setcycle 4 Content "<span style='font-size:18px;'><b>Background</b></span><br><span style='font-size:14px;'>The attacks of September 11, 2001 took the lives of almost 3,000 civilians. The events were immediately and simultaneously tragic and rife with political repercussions, and thus each year the event is commemorated.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>Why was this study done?</b></span><br><span style='font-size:14px;'>We were interested in assessing how commemorations of 9/11 evolve over time, and to understand how the meaning of the memory is called upon to inform discussion of ongoing political issues. For example, exactly one year after the attacks, then-U.S.</span><br><span style='font-size:14px;'>president George W. Bush spoke to the U.N. about the threat of Iraq attaining weapons of mass destruction by harkening to the attacks of 9/11. In the same way, almost 15 years later, politicians continue to invoke 9/11 in attempts to warn the public</span><br><span style='font-size:14px;'>about the threat of future terrorist attacks. How does such rhetoric shape commemorations meant to honor the innocent victims of the attacks—could it be that commonplace commemorations among citizens can trigger hawkish foreign policy attitudes in the</span><br><span style='font-size:14px;'>same way we saw in the immediate aftermath of the attacks?</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What did the researchers do and find?</b></span><br><span style='font-size:14px;'>We conducted two experiments that compared how attitudes towards a present-day foreign policy issue—Iran’s nuclear program—are related to commemorations of 9/11 (compared to Labor Day commemorations or no commemoration). In</span><br><span style='font-size:14px;'>mid-September 2015, we asked participants to recall what, if anything, they did one week earlier on September 11, 2015 to commemorate the attacks. Compared to participants who recalled what they did on the most recent Labor Day, or who were not</span><br><span style='font-size:14px;'>asked to recall anything, participants who recalled their 9/11 commemoration expressed greater vigilance about Iran’s nuclear program and assigned more responsibility to Iranian leaders for the 9/11 attacks. And the intensity of commemoration mattered</span><br><span style='font-size:14px;'>: On average, the more public and engaged one’s commemoration, the greater their vigilance.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What do these findings mean?</b></span><br><span style='font-size:14px;'>Though commemorations are very often meaningful practices to pay respects to the innocent victims, they can also reflect a different collective motivation that has built up over time. In the present case, because 9/11 and its subsequent commemorations</span><br><span style='font-size:14px;'>have also been associated with aggressive U.S. foreign policy (such as the invasion and occupation of Iraq), people who engage in commemorations may respond accordingly when it comes to ostensibly unrelated, emerging policy debates."
	setcycle 4 NH N
	setcycle 4 OSA N
	setcycle 4 Text_id 2
	setcycle 4 BLOCK 3
	setcycle 4 O_id 2
	setcycle 4 Link "10.5964/jspp.v5i2.713 "
	setcycle 4 cite "Collective Memory as Tool for Intergroup Conflict: The Case of 9/11 Commemoration "
	setcycle 5 Content "</span style='font-size:14px;'>We apply a cultural psychology approach to collective memory of the 9/11 terrorist attacks. In particular, we considered whether practices associated with commemoration of the 9/11 terrorist attacks would promote vigilance (prospective affordance </span><br><span style='font-size:14px;'>hypothesis)and misattribution of responsibility for the original 9/11 attacks (reconstructive memory hypothesis) in an ostensibly unrelated context of intergroup conflict during September 2015. In Study 1, vigilance toward Iran and misattribution of </span><br><span style='font-size:14px;'>responsibility for the 9/11 attacks to Iranian sources was greater among participants whom we asked about engagement with 9/11 commemoration than among participants whom we asked about engagement with Labor Day observations. Results of</span><br><span style='font-size:14px;'>Study 2 suggested that patterns of greater vigilance and misattribution as a function of instructions to recall engagement with 9/11 commemoration were more specifically true only of participants who reported actual engagement with hegemonic</span><br><span style='font-size:14px;'>commemoration practices. From a cultural psychological perspective, 9/11 commemoration is a case of collective memory not merely because it implicates collective-level (versus personal) identities, but instead because it emphasizes mediation of</span><br><span style='font-size:14px;'>motivation and action via engagement with commemoration practices and other cultural tools."
	setcycle 5 NH N
	setcycle 5 OSA Y
	setcycle 5 Text_id 2
	setcycle 5 BLOCK 2
	setcycle 5 O_id 2
	setcycle 5 Link "10.5964/jspp.v5i2.713 "
	setcycle 5 cite "Collective Memory as Tool for Intergroup Conflict: The Case of 9/11 Commemoration "
	setcycle 6 Content "</span style='font-size:14px;'>All humans have a fundamental desire to belong to social groups, and create collective identities with groups. Groups online, such as chat forums, may also constitute a social group in a psychological sense. This means that individuals joining an online </span><br><span style='font-size:14px;'>forum may start to identify with the other users, and hence adapt to these users. Moreover, users may start to distance themselves from other groups, so called outgroups. This could be problematic, for example if the forum is anti-immigrant and these</span><br><span style='font-size:14px;'>other groups are immigrant groups.This study was conducted to explore how processes of group identification and adaption can be studied in an online forum. Specifically, this is of importance if such forums are used to spread anti-immigrant messages</span><br><span style='font-size:14px;'>or to recruit people to radical groups.In order to explore how identification processes and adaption takes place in an online milieu, we have to use the text generated by the users in an online forum. Much of these processes can be studied analyzing how</span><br><span style='font-size:14px;'> language is used. We use a computerized method, which basically counts the use of specific types of words, and we follow individual users over time from the time they join the forum. In the present analyses, we used text data comprised of about</span><br><span style='font-size:14px;'>60 000 000 words. The forum that we analysed in this study is an online forum in Sweden, which has over one million users. The sub-forum that we focused on is under the theme Immigration and integration. Even though the online forum is not</span><br><span style='font-size:14px;'>explicitly racist, it is heavily dominated by anti-immigrant sentiments. The linguistic analysis revealed two major findings. First, we see a change in the use of pronouns over time. The use of ‘I’ decreases, while the use of ‘we’ increases when an</span><br><span style='font-size:14px;'>individual has participated for a longer time in the discussions in the forum. In addition, the use of ‘they’ increases over time. Second, we see that the linguistic style of new users becomes more similar to the linguistic style of the forum as a whole over</span><br><span style='font-size:14px;'>time, indicating that individuals adapt to the other users in the forum.These findings indicate that processes of group identification and adaption take place in online forums in a similar way as in real life settings. The decrease in use of ‘I’ and increase</span><br><span style='font-size:14px;'>in use of ‘we’ signals a collective identity formation within the forum. The increased use of ‘they’ signals increased distancing to one or more outgroups. The linguistic adaption is also a signal of normal group processes, showing that individuals in</span><br><span style='font-size:14px;'>online forums want to be part of the group and hence adapts to the norms of the group."
	setcycle 6 NH Y
	setcycle 6 OSA N
	setcycle 6 Text_id 3
	setcycle 6 BLOCK 2
	setcycle 6 O_id 3
	setcycle 6 Link "10.5964/jspp.v6i1.741 "
	setcycle 6 cite "From I to We: Group Formation and Linguistic Adaption in an Online Xenophobic Forum "
	setcycle 7 Content "<span style='font-size:18px;'><b>Background</b></span><br><span style='font-size:14px;'>All humans have a fundamental desire to belong to social groups, and create collective identities with groups. Groups online, such as chat forums, may also constitute a social group in a psychological sense. This means that individuals joining an online</span><br><span style='font-size:14px;'>forum may start to identify with the other users, and hence adapt to these users. Moreover, users may start to distance themselves from other groups, so called outgroups. This could be problematic, for example if the forum is anti-immigrant and these</span><br><span style='font-size:14px;'>other groups are immigrant groups.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>Why was this study done?</b></span><br><span style='font-size:14px;'>This study was conducted to explore how processes of group identification and adaption can be studied in an online forum. Specifically, this is of importance if such forums are used to spread anti-immigrant messages or to recruit people to radical groups.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What did the researchers do and find?</b></span><br><span style='font-size:14px;'>In order to explore how identification processes and adaption takes place in an online milieu, we have to use the text generated by the users in an online forum. Much of these processes can be studied analyzing how language is used. We use a</span><br><span style='font-size:14px;'>computerized method, which basically counts the use of specific types of words, and we follow individual users over time from the time they join the forum. In the present analyses, we used text data comprised of about 60 000 000 words. The forum that</span><br><span style='font-size:14px;'>we analysed in this study is an online forum in Sweden, which has over one million users. The sub-forum that we focused on is under the theme Immigration and integration. Even though the online forum is not explicitly racist, it is heavily dominated by</span><br><span style='font-size:14px;'>anti-immigrant sentiments. The linguistic analysis revealed two major findings. First, we see a change in the use of pronouns over time. The use of ‘I’ decreases, while the use of ‘we’ increases when an individual has participated for a longer time in the</span><br><span style='font-size:14px;'>discussions in the forum. In addition, the use of ‘they’ increases over time. Second, we see that the linguistic style of new users becomes more similar to the linguistic style of the forum as a whole over time, indicating that individuals adapt to the other</span><br><span style='font-size:14px;'>users in the forum.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What do these findings mean?</b></span><br><span style='font-size:14px;'>These findings indicate that processes of group identification and adaption take place in online forums in a similar way as in real life settings. The decrease in use of ‘I’ and increase in use of ‘we’ signals a collective identity formation within the forum.</span><br><span style='font-size:14px;'>The increased use of ‘they’ signals increased distancing to one or more outgroups. The linguistic adaption is also a signal of normal group processes, showing that individuals in online forums want to be part of the group and hence adapts to the norms of</span><br><span style='font-size:14px;'>the group."
	setcycle 7 NH N
	setcycle 7 OSA N
	setcycle 7 Text_id 3
	setcycle 7 BLOCK 1
	setcycle 7 O_id 3
	setcycle 7 Link "10.5964/jspp.v6i1.741 "
	setcycle 7 cite "From I to We: Group Formation and Linguistic Adaption in an Online Xenophobic Forum "
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	setcycle 8 Link "10.5964/jspp.v6i1.741 "
	setcycle 8 cite "From I to We: Group Formation and Linguistic Adaption in an Online Xenophobic Forum "
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	setcycle 9 Link "10.5964/jspp.v5i2.733 "
	setcycle 9 cite "Collective Memory of a Dissolved Country: Group-Based Nostalgia and Guilt Assignment as Predictors of Interethnic Relations Between Diaspora Groups From Former Yugoslavia "
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	setcycle 10 Link "10.5964/jspp.v5i2.733 "
	setcycle 10 cite "Collective Memory of a Dissolved Country: Group-Based Nostalgia and Guilt Assignment as Predictors of Interethnic Relations Between Diaspora Groups From Former Yugoslavia "
	setcycle 11 Content "</span style='font-size:14px;'>In this study we examined intergroup relations between immigrants of different ethnic backgrounds (Croats, Serbs, and Bosniaks) originating from the same conflict area (former Yugoslavia) and living in the same host country (Australia). For these </span><br><span style='font-size:14px;'>(formerly) conflicted groups we investigated whether interethnic contacts depended on superordinate Yugoslavian and subgroup ethnic identifications as well as two emotionally laden representations of history: Yugonostalgia (longing for Yugoslavia </span><br><span style='font-size:14px;'>from the past) and collective guilt assignment for the past wrongdoings. Using unique survey data collected among Croats, Serbs and Bosniaks in Australia (N = 87), we found that Yugoslavian identification was related to stronger feelings of </span><br><span style='font-size:14px;'>Yugonostalgia,and via Yugonostalgia, to relatively more contact with other subgroups from former Yugoslavia. Ethnic identification, in contrast, was related to a stronger assignment of guilt to out-group relative to in-group, and therefore, to relatively</span><br><span style='font-size:14px;'>less contact with other subgroups in Australia. We discuss implications of transferring group identities and collective memories into the diaspora."
	setcycle 11 NH N
	setcycle 11 OSA Y
	setcycle 11 Text_id 4
	setcycle 11 BLOCK 1
	setcycle 11 O_id 4
	setcycle 11 Link "10.5964/jspp.v5i2.733 "
	setcycle 11 cite "Collective Memory of a Dissolved Country: Group-Based Nostalgia and Guilt Assignment as Predictors of Interethnic Relations Between Diaspora Groups From Former Yugoslavia "
	setcycle 12 Content "</span style='font-size:14px;'>The world is currently facing the highest number of refugees since the aftermath of World War II. In addition, climate change poses another urgent challenge that is discussed on an international level. Decisions made by national leaders have far-reaching </span><br><span style='font-size:14px;'>consequences for current and future generations. Nevertheless, national leaders are humans who are subject to psychological biases in decision making.As social-psychological factors could inhibit or promote intentions to collaborate in support of</span><br><span style='font-size:14px;'>human rights at the global level, we conducted a training for future diplomats in the context of Model United Nations simulations to reduce perception biases that could influence decision making. As a theoretical basis for the training we used a social</span><br><span style='font-size:14px;'>psychological model (ingroup projection model), proposing that people perceive the group they belong to (e.g., their country) as more prototypical than other groups (e.g., other countries). Past research found a relationship of this prototypicality perception</span><br><span style='font-size:14px;'>with prejudice against other groups, but also a way to reduce such prejudice. Namely, a group that includes subgroups (in our study: the United Nations, UN) needs to be mentally represented as diverse.We used an existing method to activate diversity</span><br><span style='font-size:14px;'>and adapted it to the United Nations context. We conducted several trainings and investigated their effects on the intention to collaborate with other nations regarding human rights issues and on related processes (i.e., diversity perception of the UN and </span><br><span style='font-size:14px;'>identification with the UN). Results indicated that the workshop reduced the prototype perception bias, as intended. Furthermore, we provide evidence that the diversity training increased perceived diversity of the UN, which in turn was positively </span><br><span style='font-size:14px;'>related to the intention to act together with other nation. As negotiation settings within the political areas have major implications for people around the world, methods for reducing biases in perception seem especially useful. Based on our first evidence,</span><br><span style='font-size:14px;'> one could cautiously assume that diversity perceptions and identification with a superordinate group (UN in our case) influence and foster the intention to work together. Policies simultaneously aiming at diversity and identity management could pave a </span><br><span style='font-size:14px;'>fruitful avenue towards improving intergroup relations and collaborative action in general."
	setcycle 12 NH Y
	setcycle 12 OSA N
	setcycle 12 Text_id 5
	setcycle 12 BLOCK 3
	setcycle 12 O_id 5
	setcycle 12 Link "10.5964/jspp.v6i1.601"
	setcycle 12 cite "One World in Diversity – A Social-Psychological Intervention to Foster International Collective Action Intention "
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	setcycle 13 Link "10.5964/jspp.v6i1.601"
	setcycle 13 cite "One World in Diversity – A Social-Psychological Intervention to Foster International Collective Action Intention "
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	setcycle 14 Link "10.5964/jspp.v6i1.601"
	setcycle 14 cite "One World in Diversity – A Social-Psychological Intervention to Foster International Collective Action Intention "
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	setcycle 15 Link "10.5964/jspp.v6i2.859 "
	setcycle 15 cite "Self-Censorship Orientation: Scale Development, Correlates and Outcomes"
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	setcycle 16 Link "10.5964/jspp.v6i2.859 "
	setcycle 16 cite "Self-Censorship Orientation: Scale Development, Correlates and Outcomes"
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	setcycle 17 Link "10.5964/jspp.v6i2.859 "
	setcycle 17 cite "Self-Censorship Orientation: Scale Development, Correlates and Outcomes"
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	setcycle 18 Link "10.5964/jspp.v7i1.1063"
	setcycle 18 cite "A Field Study Around a Racial Justice Protest on a College Campus: The Proximal Impact of Collective Action on the Social Change Attitudes of Uninvolved Bystanders "
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	setcycle 19 Link "10.5964/jspp.v7i1.1063"
	setcycle 19 cite "A Field Study Around a Racial Justice Protest on a College Campus: The Proximal Impact of Collective Action on the Social Change Attitudes of Uninvolved Bystanders "
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	setcycle 20 Link "10.5964/jspp.v7i1.1063"
	setcycle 20 cite "A Field Study Around a Racial Justice Protest on a College Campus: The Proximal Impact of Collective Action on the Social Change Attitudes of Uninvolved Bystanders "
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	setcycle 21 Link "10.5964/jspp.v7i1.557 "
	setcycle 21 cite "The Meaning of Being German: An Inductive Approach to National Identity "
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	setcycle 22 Link "10.5964/jspp.v7i1.557 "
	setcycle 22 cite "The Meaning of Being German: An Inductive Approach to National Identity "
	setcycle 23 Content "</span style='font-size:14px;'>Germany is often cited as a paradigmatic case for an ethnic model of nationalism but in recent years introduced many civic elements into its citizenship policies. The goal of the current article is to explore how German citizens construct their national </span><br><span style='font-size:14px;'>identity against this backdrop. Using an inductive approach, we asked 987 German citizens to describe what being German means for them. A latent class analysis of content-coded responses revealed four classes: a heritage-based identity class </span><br><span style='font-size:14px;'>with a strong focus on language and culture (39%), an ideology-based identity class that revolves around democracy, welfare, freedom, and economy and safety (19%), a legal-formalistic identity class that is mostly concerned with the legal requirement </span><br><span style='font-size:14px;'>for obtaining and holding citizenship of national identity (26%), and a trait-based identity class describing personality-traits that are supposed to be typical for Germans (16%). These findings expand upon and add nuance to the commonly used civic vs. </span><br><span style='font-size:14px;'>ethnic national identity content typology."
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	setcycle 23 Link "10.5964/jspp.v7i1.557 "
	setcycle 23 cite "The Meaning of Being German: An Inductive Approach to National Identity "
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	setcycle 24 Link "10.5964/jspp.v7i1.746"
	setcycle 24 cite "Agentic and Communal Interaction Goals in Conflictual Intergroup Relations "
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	setcycle 25 Link "10.5964/jspp.v7i1.746"
	setcycle 25 cite "Agentic and Communal Interaction Goals in Conflictual Intergroup Relations "
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	setcycle 26 Link "10.5964/jspp.v7i1.746"
	setcycle 26 cite "Agentic and Communal Interaction Goals in Conflictual Intergroup Relations "
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	setcycle 27 Link "10.5964/jspp.v7i1.822"
	setcycle 27 cite "Contempt of Congress: Do Liberals and Conservatives Harbor Equivalent Negative Emotional Biases Towards Ideologically Congruent vs. Incongruent Politicians at the Level of Individual Emotions? "
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	setcycle 28 Link "10.5964/jspp.v7i1.822"
	setcycle 28 cite "Contempt of Congress: Do Liberals and Conservatives Harbor Equivalent Negative Emotional Biases Towards Ideologically Congruent vs. Incongruent Politicians at the Level of Individual Emotions? "
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	setcycle 29 Link "10.5964/jspp.v7i1.822"
	setcycle 29 cite "Contempt of Congress: Do Liberals and Conservatives Harbor Equivalent Negative Emotional Biases Towards Ideologically Congruent vs. Incongruent Politicians at the Level of Individual Emotions? "
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	setcycle 30 Link "10.5964/jspp.v7i1.933"
	setcycle 30 cite "Seen One, Seen ‘Em All? Do Reports About Law Violations of a Single Politician Impair the Perceived Trustworthiness of Politicians in General and of the Political System? "
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	setcycle 31 Link "10.5964/jspp.v7i1.933"
	setcycle 31 cite "Seen One, Seen ‘Em All? Do Reports About Law Violations of a Single Politician Impair the Perceived Trustworthiness of Politicians in General and of the Political System? "
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	setcycle 32 Link "10.5964/jspp.v7i1.933"
	setcycle 32 cite "Seen One, Seen ‘Em All? Do Reports About Law Violations of a Single Politician Impair the Perceived Trustworthiness of Politicians in General and of the Political System? "
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	setcycle 33 Link "10.5964/jspp.v7i1.981 "
	setcycle 33 cite "How Many Ways to Say Goodbye? The Latent Class Structure and Psychological Correlates of European Union Sentiment in a Large Sample of UK Adults "
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	setcycle 34 Link "10.5964/jspp.v7i1.981 "
	setcycle 34 cite "How Many Ways to Say Goodbye? The Latent Class Structure and Psychological Correlates of European Union Sentiment in a Large Sample of UK Adults "
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	setcycle 35 Link "10.5964/jspp.v7i1.981 "
	setcycle 35 cite "How Many Ways to Say Goodbye? The Latent Class Structure and Psychological Correlates of European Union Sentiment in a Large Sample of UK Adults "
	sortby BLOCK
	slice 0 12
	shuffle Text_id
	run text_seq

define loop text_CB3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Content "</span style='font-size:14px;'>The refugee crisis in the summer of 2015 mobilized thousands of volunteers in Hungary to help refugees on their journey through Europe. Because of the Hungarian government’s explicitly hostile stance toward refugees, offering volunteer help was treated </span><br><span style='font-size:14px;'>as an expression of political dissent by authorities.We investigated the motivations of volunteers within this political climate. The psychological motivations to engage in  political protest and volunteerism can be distinguished based on previous research. </span><br><span style='font-size:14px;'>Volunteerism is the intentional engagement in helping for the benefit of others; it can be long term or flare up in moments of crisis but it does not necessarily entail intentions to bring about change. In contrast, engagement in political protest is motivated </span><br><span style='font-size:14px;'>by peoples’ intentions to address injustice and achieve change. As the refugee crisis evoked both types of actions (volunteerism and political protests), it provided us with the opportunity to investigate whether volunteering was driven by (1) motivation </span><br><span style='font-size:14px;'>to bring about social change, (2) identification with the  pro-refugee movement, and (3) experiencing a violation to their moral principles, all of which are typical for political activists. We conducted a survey among people who were active in supporting</span><br><span style='font-size:14px;'>refugees, or  participated in political protests. 1459 participants completed our online survey. We measured their level of moral conviction, identification with the pro-refugee opinion group, anger about the situation, and belief in their group’s efficacy to</span><br><span style='font-size:14px;'>achieve change. Our results showed that identification with the pro-refugee movement and moral conviction were important motivations primarily for volunteers, while belief in the efficacy of the movement and anger were more closely related to </span><br><span style='font-size:14px;'>engagement in political activism.We therefore suggest that activities of pro-refugee volunteers became the means to express moral convictions and a desire for  social change. We used the case of the refugee crisis to draw attention to the importance of </span><br><span style='font-size:14px;'>understanding the similarities and differences in the paths toward volunteerism and political activism, in terms of peoples’ motivation to achieve change, as social movements are just as dependent on mobilizing allies for political actions as they are on</span><br><span style='font-size:14px;'>mobilizing volunteers."
	setcycle 0 NH Y
	setcycle 0 OSA N
	setcycle 0 Text_id 1
	setcycle 0 BLOCK 1
	setcycle 0 O_id 1
	setcycle 0 Link "10.5964/jspp.v5i1.642 "
	setcycle 0 cite "The Politicized Motivations of Volunteers in the Refugee Crisis: Intergroup Helping as the Means to Achieve Social Change "
	setcycle 1 Content "<span style='font-size:18px;'><b>Background</b></span><br><span style='font-size:14px;'>The refugee crisis in the summer of 2015 mobilized thousands of volunteers in Hungary to help refugees on their journey through Europe. Because of the Hungarian government’s explicitly hostile stance toward refugees, offering volunteer help was treated</span><br><span style='font-size:14px;'> as an expression of political dissent by authorities.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>Why was this study done?</b></span><br><span style='font-size:14px;'>We investigated the motivations of volunteers within this political climate. The psychological motivations to engage in political protest and volunteerism can be distinguished based on previous research. Volunteerism is the intentional engagement in helping</span><br><span style='font-size:14px;'>for the benefit of others; it can be long term or flare up in moments of crisis, but it does not necessarily entail intentions to bring about change. In contrast, engagement in political protest is motivated by peoples’ intentions to address injustice and </span><br><span style='font-size:14px;'>achievechange. As the refugee crisis evoked both types of actions (volunteerism and political protests), it provided us with the opportunity to investigate whether volunteering was driven by (1) motivation to bring about social change, (2) identification</span><br><span style='font-size:14px;'>with the pro-refugee movement, and (3) experiencing a violation to their moral principles, all of which are typical for political activists.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What did the researchers do and find?</b></span><br><span style='font-size:14px;'>We conducted a survey among people who were active in supporting refugees, or participated in political protests. 1459 participants completed our online survey. We measured their level of moral conviction, identification with the pro-refugee opinion</span><br><span style='font-size:14px;'>group, anger about the situation, and belief in their group’s efficacy to achieve change. Our results showed that identification with the pro-refugee movement and moral conviction were important motivations primarily for volunteers, while belief</span><br><span style='font-size:14px;'>in the efficacy of the movement and anger were more closely related to engagement in political activism.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What do these findings mean?</b></span><br><span style='font-size:14px;'>We therefore suggest that activities of pro-refugee volunteers became the means to express moral convictions and a desire for social change. We used the case of the refugee crisis to draw attention to the importance of understanding the similarities and</span><br><span style='font-size:14px;'>differences in the paths toward volunteerism and political activism, in terms of peoples’ motivation to achieve change, as social movements are just as dependent on mobilizing allies for political actions as they are on mobilizing volunteers."
	setcycle 1 NH N
	setcycle 1 OSA N
	setcycle 1 Text_id 1
	setcycle 1 BLOCK 2
	setcycle 1 O_id 1
	setcycle 1 Link "10.5964/jspp.v5i1.642 "
	setcycle 1 cite "The Politicized Motivations of Volunteers in the Refugee Crisis: Intergroup Helping as the Means to Achieve Social Change "
	setcycle 2 Content "</span style='font-size:14px;'>The refugee crisis in the summer of 2015 mobilized thousands of volunteers in Hungary to help refugees on their journey through Europe despite the government’s hostile stance. We conducted a survey (N = 1459) among people who were active in </span><br><span style='font-size:14px;'>supporting refugees and providing services to them to test the hypothesis of whether volunteers in the context of this humanitarian crisis had social change motivations similar to those engaged in direct political activism. Hierarchical regression</span><br><span style='font-size:14px;'>analysis and mediation analysis revealed the importance of opinion-based identity and moral convictions as predictors of volunteerism, while efficacy beliefs and anger only predicted political activism. Our findings suggest that volunteers engaged in</span><br><span style='font-size:14px;'>helping refugees based on motivations previously described as drivers of mobilization for political activism, but chose volunteerism to alleviate the problems embedded in the intergroup situation. Although the context of the refugee crisis in Hungary</span><br><span style='font-size:14px;'>may have been somewhat unique, these findings have implications for other asymmetrical politicized intergroup relations in which advantaged group members can choose to offer humanitarian aid, engage in political actions to change the situation, or do</span><br><span style='font-size:14px;'>both."
	setcycle 2 NH N
	setcycle 2 OSA Y
	setcycle 2 Text_id 1
	setcycle 2 BLOCK 3
	setcycle 2 O_id 1
	setcycle 2 Link "10.5964/jspp.v5i1.642 "
	setcycle 2 cite "The Politicized Motivations of Volunteers in the Refugee Crisis: Intergroup Helping as the Means to Achieve Social Change "
	setcycle 3 Content "</span style='font-size:14px;'>The attacks of September 11, 2001 took the lives of almost 3,000 civilians. The events were immediately and simultaneously tragic and rife with political repercussions, and thus each year the event is commemorated.We were interested in assessing how </span><br><span style='font-size:14px;'>commemorations of 9/11 evolve over time, and to understand how the meaning of the memory is called upon to inform discussion of ongoing political issues. For example, exactly one year after the attacks, then-U.S. president George W. Bush spoke to</span><br><span style='font-size:14px;'>the U.N. about the threat of Iraq attaining weapons of mass destruction by harkening to the attacks of 9/11. In the same way, almost 15 years later, politicians continue to invoke 9/11 in attempts to warn the public about the threat of future terrorist attacks.</span><br><span style='font-size:14px;'>How does such rhetoric shape commemorations meant to honor the innocent victims of the attacks—could it be that commonplace commemorations among citizens can trigger hawkish foreign policy attitudes in the same way we saw in the immediate</span><br><span style='font-size:14px;'>aftermath of the attacks?We conducted two experiments that compared how attitudes towards a present-day foreign policy issue—Iran’s nuclear program—are related to commemorations of 9/11 (compared to Labor Day commemorations or no</span><br><span style='font-size:14px;'>commemoration). In mid-September 2015, we asked participants to recall what, if anything, they did one week earlier on September 11, 2015 to commemorate the attacks. Compared to participants who recalled what they did on the most recent Labor</span><br><span style='font-size:14px;'>Day, or who were not asked to recall anything, participants who recalled their 9/11 commemoration expressed greater vigilance about Iran’s nuclear program and assigned more responsibility to Iranian leaders for the 9/11 attacks. And the intensity of</span><br><span style='font-size:14px;'>commemoration mattered: On average, the more public and engaged one’s commemoration, the greater their vigilance.Though commemorations are very often meaningful practices to pay respects to the innocent victims, they can also reflect a different</span><br><span style='font-size:14px;'>collective motivation that has built up over time. In the present case, because 9/11 and its subsequent commemorations have also been associated with aggressive U.S. foreign policy (such as the invasion and occupation of Iraq), people who engage in</span><br><span style='font-size:14px;'>commemorations may respond accordingly when it comes to ostensibly unrelated, emerging policy debates"
	setcycle 3 NH Y
	setcycle 3 OSA N
	setcycle 3 Text_id 2
	setcycle 3 BLOCK 1
	setcycle 3 O_id 2
	setcycle 3 Link "10.5964/jspp.v5i2.713 "
	setcycle 3 cite "Collective Memory as Tool for Intergroup Conflict: The Case of 9/11 Commemoration "
	setcycle 4 Content "<span style='font-size:18px;'><b>Background</b></span><br><span style='font-size:14px;'>The attacks of September 11, 2001 took the lives of almost 3,000 civilians. The events were immediately and simultaneously tragic and rife with political repercussions, and thus each year the event is commemorated.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>Why was this study done?</b></span><br><span style='font-size:14px;'>We were interested in assessing how commemorations of 9/11 evolve over time, and to understand how the meaning of the memory is called upon to inform discussion of ongoing political issues. For example, exactly one year after the attacks, then-U.S.</span><br><span style='font-size:14px;'>president George W. Bush spoke to the U.N. about the threat of Iraq attaining weapons of mass destruction by harkening to the attacks of 9/11. In the same way, almost 15 years later, politicians continue to invoke 9/11 in attempts to warn the public</span><br><span style='font-size:14px;'>about the threat of future terrorist attacks. How does such rhetoric shape commemorations meant to honor the innocent victims of the attacks—could it be that commonplace commemorations among citizens can trigger hawkish foreign policy attitudes in the</span><br><span style='font-size:14px;'>same way we saw in the immediate aftermath of the attacks?</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What did the researchers do and find?</b></span><br><span style='font-size:14px;'>We conducted two experiments that compared how attitudes towards a present-day foreign policy issue—Iran’s nuclear program—are related to commemorations of 9/11 (compared to Labor Day commemorations or no commemoration). In</span><br><span style='font-size:14px;'>mid-September 2015, we asked participants to recall what, if anything, they did one week earlier on September 11, 2015 to commemorate the attacks. Compared to participants who recalled what they did on the most recent Labor Day, or who were not</span><br><span style='font-size:14px;'>asked to recall anything, participants who recalled their 9/11 commemoration expressed greater vigilance about Iran’s nuclear program and assigned more responsibility to Iranian leaders for the 9/11 attacks. And the intensity of commemoration mattered</span><br><span style='font-size:14px;'>: On average, the more public and engaged one’s commemoration, the greater their vigilance.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What do these findings mean?</b></span><br><span style='font-size:14px;'>Though commemorations are very often meaningful practices to pay respects to the innocent victims, they can also reflect a different collective motivation that has built up over time. In the present case, because 9/11 and its subsequent commemorations</span><br><span style='font-size:14px;'>have also been associated with aggressive U.S. foreign policy (such as the invasion and occupation of Iraq), people who engage in commemorations may respond accordingly when it comes to ostensibly unrelated, emerging policy debates."
	setcycle 4 NH N
	setcycle 4 OSA N
	setcycle 4 Text_id 2
	setcycle 4 BLOCK 3
	setcycle 4 O_id 2
	setcycle 4 Link "10.5964/jspp.v5i2.713 "
	setcycle 4 cite "Collective Memory as Tool for Intergroup Conflict: The Case of 9/11 Commemoration "
	setcycle 5 Content "</span style='font-size:14px;'>We apply a cultural psychology approach to collective memory of the 9/11 terrorist attacks. In particular, we considered whether practices associated with commemoration of the 9/11 terrorist attacks would promote vigilance (prospective affordance </span><br><span style='font-size:14px;'>hypothesis)and misattribution of responsibility for the original 9/11 attacks (reconstructive memory hypothesis) in an ostensibly unrelated context of intergroup conflict during September 2015. In Study 1, vigilance toward Iran and misattribution of </span><br><span style='font-size:14px;'>responsibility for the 9/11 attacks to Iranian sources was greater among participants whom we asked about engagement with 9/11 commemoration than among participants whom we asked about engagement with Labor Day observations. Results of</span><br><span style='font-size:14px;'>Study 2 suggested that patterns of greater vigilance and misattribution as a function of instructions to recall engagement with 9/11 commemoration were more specifically true only of participants who reported actual engagement with hegemonic</span><br><span style='font-size:14px;'>commemoration practices. From a cultural psychological perspective, 9/11 commemoration is a case of collective memory not merely because it implicates collective-level (versus personal) identities, but instead because it emphasizes mediation of</span><br><span style='font-size:14px;'>motivation and action via engagement with commemoration practices and other cultural tools."
	setcycle 5 NH N
	setcycle 5 OSA Y
	setcycle 5 Text_id 2
	setcycle 5 BLOCK 2
	setcycle 5 O_id 2
	setcycle 5 Link "10.5964/jspp.v5i2.713 "
	setcycle 5 cite "Collective Memory as Tool for Intergroup Conflict: The Case of 9/11 Commemoration "
	setcycle 6 Content "</span style='font-size:14px;'>All humans have a fundamental desire to belong to social groups, and create collective identities with groups. Groups online, such as chat forums, may also constitute a social group in a psychological sense. This means that individuals joining an online </span><br><span style='font-size:14px;'>forum may start to identify with the other users, and hence adapt to these users. Moreover, users may start to distance themselves from other groups, so called outgroups. This could be problematic, for example if the forum is anti-immigrant and these</span><br><span style='font-size:14px;'>other groups are immigrant groups.This study was conducted to explore how processes of group identification and adaption can be studied in an online forum. Specifically, this is of importance if such forums are used to spread anti-immigrant messages</span><br><span style='font-size:14px;'>or to recruit people to radical groups.In order to explore how identification processes and adaption takes place in an online milieu, we have to use the text generated by the users in an online forum. Much of these processes can be studied analyzing how</span><br><span style='font-size:14px;'> language is used. We use a computerized method, which basically counts the use of specific types of words, and we follow individual users over time from the time they join the forum. In the present analyses, we used text data comprised of about</span><br><span style='font-size:14px;'>60 000 000 words. The forum that we analysed in this study is an online forum in Sweden, which has over one million users. The sub-forum that we focused on is under the theme Immigration and integration. Even though the online forum is not</span><br><span style='font-size:14px;'>explicitly racist, it is heavily dominated by anti-immigrant sentiments. The linguistic analysis revealed two major findings. First, we see a change in the use of pronouns over time. The use of ‘I’ decreases, while the use of ‘we’ increases when an</span><br><span style='font-size:14px;'>individual has participated for a longer time in the discussions in the forum. In addition, the use of ‘they’ increases over time. Second, we see that the linguistic style of new users becomes more similar to the linguistic style of the forum as a whole over</span><br><span style='font-size:14px;'>time, indicating that individuals adapt to the other users in the forum.These findings indicate that processes of group identification and adaption take place in online forums in a similar way as in real life settings. The decrease in use of ‘I’ and increase</span><br><span style='font-size:14px;'>in use of ‘we’ signals a collective identity formation within the forum. The increased use of ‘they’ signals increased distancing to one or more outgroups. The linguistic adaption is also a signal of normal group processes, showing that individuals in</span><br><span style='font-size:14px;'>online forums want to be part of the group and hence adapts to the norms of the group."
	setcycle 6 NH Y
	setcycle 6 OSA N
	setcycle 6 Text_id 3
	setcycle 6 BLOCK 2
	setcycle 6 O_id 3
	setcycle 6 Link "10.5964/jspp.v6i1.741 "
	setcycle 6 cite "From I to We: Group Formation and Linguistic Adaption in an Online Xenophobic Forum "
	setcycle 7 Content "<span style='font-size:18px;'><b>Background</b></span><br><span style='font-size:14px;'>All humans have a fundamental desire to belong to social groups, and create collective identities with groups. Groups online, such as chat forums, may also constitute a social group in a psychological sense. This means that individuals joining an online</span><br><span style='font-size:14px;'>forum may start to identify with the other users, and hence adapt to these users. Moreover, users may start to distance themselves from other groups, so called outgroups. This could be problematic, for example if the forum is anti-immigrant and these</span><br><span style='font-size:14px;'>other groups are immigrant groups.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>Why was this study done?</b></span><br><span style='font-size:14px;'>This study was conducted to explore how processes of group identification and adaption can be studied in an online forum. Specifically, this is of importance if such forums are used to spread anti-immigrant messages or to recruit people to radical groups.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What did the researchers do and find?</b></span><br><span style='font-size:14px;'>In order to explore how identification processes and adaption takes place in an online milieu, we have to use the text generated by the users in an online forum. Much of these processes can be studied analyzing how language is used. We use a</span><br><span style='font-size:14px;'>computerized method, which basically counts the use of specific types of words, and we follow individual users over time from the time they join the forum. In the present analyses, we used text data comprised of about 60 000 000 words. The forum that</span><br><span style='font-size:14px;'>we analysed in this study is an online forum in Sweden, which has over one million users. The sub-forum that we focused on is under the theme Immigration and integration. Even though the online forum is not explicitly racist, it is heavily dominated by</span><br><span style='font-size:14px;'>anti-immigrant sentiments. The linguistic analysis revealed two major findings. First, we see a change in the use of pronouns over time. The use of ‘I’ decreases, while the use of ‘we’ increases when an individual has participated for a longer time in the</span><br><span style='font-size:14px;'>discussions in the forum. In addition, the use of ‘they’ increases over time. Second, we see that the linguistic style of new users becomes more similar to the linguistic style of the forum as a whole over time, indicating that individuals adapt to the other</span><br><span style='font-size:14px;'>users in the forum.</span><br><br><span style='font-size:14px;'><span style='font-size:18px;'><b>What do these findings mean?</b></span><br><span style='font-size:14px;'>These findings indicate that processes of group identification and adaption take place in online forums in a similar way as in real life settings. The decrease in use of ‘I’ and increase in use of ‘we’ signals a collective identity formation within the forum.</span><br><span style='font-size:14px;'>The increased use of ‘they’ signals increased distancing to one or more outgroups. The linguistic adaption is also a signal of normal group processes, showing that individuals in online forums want to be part of the group and hence adapts to the norms of</span><br><span style='font-size:14px;'>the group."
	setcycle 7 NH N
	setcycle 7 OSA N
	setcycle 7 Text_id 3
	setcycle 7 BLOCK 1
	setcycle 7 O_id 3
	setcycle 7 Link "10.5964/jspp.v6i1.741 "
	setcycle 7 cite "From I to We: Group Formation and Linguistic Adaption in an Online Xenophobic Forum "
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	setcycle 8 Link "10.5964/jspp.v6i1.741 "
	setcycle 8 cite "From I to We: Group Formation and Linguistic Adaption in an Online Xenophobic Forum "
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	setcycle 9 Link "10.5964/jspp.v5i2.733 "
	setcycle 9 cite "Collective Memory of a Dissolved Country: Group-Based Nostalgia and Guilt Assignment as Predictors of Interethnic Relations Between Diaspora Groups From Former Yugoslavia "
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	setcycle 10 Link "10.5964/jspp.v5i2.733 "
	setcycle 10 cite "Collective Memory of a Dissolved Country: Group-Based Nostalgia and Guilt Assignment as Predictors of Interethnic Relations Between Diaspora Groups From Former Yugoslavia "
	setcycle 11 Content "</span style='font-size:14px;'>In this study we examined intergroup relations between immigrants of different ethnic backgrounds (Croats, Serbs, and Bosniaks) originating from the same conflict area (former Yugoslavia) and living in the same host country (Australia). For these </span><br><span style='font-size:14px;'>(formerly) conflicted groups we investigated whether interethnic contacts depended on superordinate Yugoslavian and subgroup ethnic identifications as well as two emotionally laden representations of history: Yugonostalgia (longing for Yugoslavia </span><br><span style='font-size:14px;'>from the past) and collective guilt assignment for the past wrongdoings. Using unique survey data collected among Croats, Serbs and Bosniaks in Australia (N = 87), we found that Yugoslavian identification was related to stronger feelings of </span><br><span style='font-size:14px;'>Yugonostalgia,and via Yugonostalgia, to relatively more contact with other subgroups from former Yugoslavia. Ethnic identification, in contrast, was related to a stronger assignment of guilt to out-group relative to in-group, and therefore, to relatively</span><br><span style='font-size:14px;'>less contact with other subgroups in Australia. We discuss implications of transferring group identities and collective memories into the diaspora."
	setcycle 11 NH N
	setcycle 11 OSA Y
	setcycle 11 Text_id 4
	setcycle 11 BLOCK 1
	setcycle 11 O_id 4
	setcycle 11 Link "10.5964/jspp.v5i2.733 "
	setcycle 11 cite "Collective Memory of a Dissolved Country: Group-Based Nostalgia and Guilt Assignment as Predictors of Interethnic Relations Between Diaspora Groups From Former Yugoslavia "
	setcycle 12 Content "</span style='font-size:14px;'>The world is currently facing the highest number of refugees since the aftermath of World War II. In addition, climate change poses another urgent challenge that is discussed on an international level. Decisions made by national leaders have far-reaching </span><br><span style='font-size:14px;'>consequences for current and future generations. Nevertheless, national leaders are humans who are subject to psychological biases in decision making.As social-psychological factors could inhibit or promote intentions to collaborate in support of</span><br><span style='font-size:14px;'>human rights at the global level, we conducted a training for future diplomats in the context of Model United Nations simulations to reduce perception biases that could influence decision making. As a theoretical basis for the training we used a social</span><br><span style='font-size:14px;'>psychological model (ingroup projection model), proposing that people perceive the group they belong to (e.g., their country) as more prototypical than other groups (e.g., other countries). Past research found a relationship of this prototypicality perception</span><br><span style='font-size:14px;'>with prejudice against other groups, but also a way to reduce such prejudice. Namely, a group that includes subgroups (in our study: the United Nations, UN) needs to be mentally represented as diverse.We used an existing method to activate diversity</span><br><span style='font-size:14px;'>and adapted it to the United Nations context. We conducted several trainings and investigated their effects on the intention to collaborate with other nations regarding human rights issues and on related processes (i.e., diversity perception of the UN and </span><br><span style='font-size:14px;'>identification with the UN). Results indicated that the workshop reduced the prototype perception bias, as intended. Furthermore, we provide evidence that the diversity training increased perceived diversity of the UN, which in turn was positively </span><br><span style='font-size:14px;'>related to the intention to act together with other nation. As negotiation settings within the political areas have major implications for people around the world, methods for reducing biases in perception seem especially useful. Based on our first evidence,</span><br><span style='font-size:14px;'> one could cautiously assume that diversity perceptions and identification with a superordinate group (UN in our case) influence and foster the intention to work together. Policies simultaneously aiming at diversity and identity management could pave a </span><br><span style='font-size:14px;'>fruitful avenue towards improving intergroup relations and collaborative action in general."
	setcycle 12 NH Y
	setcycle 12 OSA N
	setcycle 12 Text_id 5
	setcycle 12 BLOCK 3
	setcycle 12 O_id 5
	setcycle 12 Link "10.5964/jspp.v6i1.601"
	setcycle 12 cite "One World in Diversity – A Social-Psychological Intervention to Foster International Collective Action Intention "
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	setcycle 13 Link "10.5964/jspp.v6i1.601"
	setcycle 13 cite "One World in Diversity – A Social-Psychological Intervention to Foster International Collective Action Intention "
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	setcycle 14 Link "10.5964/jspp.v6i1.601"
	setcycle 14 cite "One World in Diversity – A Social-Psychological Intervention to Foster International Collective Action Intention "
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	setcycle 15 Link "10.5964/jspp.v6i2.859 "
	setcycle 15 cite "Self-Censorship Orientation: Scale Development, Correlates and Outcomes"
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	setcycle 16 Link "10.5964/jspp.v6i2.859 "
	setcycle 16 cite "Self-Censorship Orientation: Scale Development, Correlates and Outcomes"
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	setcycle 17 Link "10.5964/jspp.v6i2.859 "
	setcycle 17 cite "Self-Censorship Orientation: Scale Development, Correlates and Outcomes"
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	setcycle 18 Link "10.5964/jspp.v7i1.1063"
	setcycle 18 cite "A Field Study Around a Racial Justice Protest on a College Campus: The Proximal Impact of Collective Action on the Social Change Attitudes of Uninvolved Bystanders "
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	setcycle 19 Link "10.5964/jspp.v7i1.1063"
	setcycle 19 cite "A Field Study Around a Racial Justice Protest on a College Campus: The Proximal Impact of Collective Action on the Social Change Attitudes of Uninvolved Bystanders "
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	setcycle 20 Link "10.5964/jspp.v7i1.1063"
	setcycle 20 cite "A Field Study Around a Racial Justice Protest on a College Campus: The Proximal Impact of Collective Action on the Social Change Attitudes of Uninvolved Bystanders "
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	setcycle 21 Link "10.5964/jspp.v7i1.557 "
	setcycle 21 cite "The Meaning of Being German: An Inductive Approach to National Identity "
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	setcycle 22 Link "10.5964/jspp.v7i1.557 "
	setcycle 22 cite "The Meaning of Being German: An Inductive Approach to National Identity "
	setcycle 23 Content "</span style='font-size:14px;'>Germany is often cited as a paradigmatic case for an ethnic model of nationalism but in recent years introduced many civic elements into its citizenship policies. The goal of the current article is to explore how German citizens construct their national </span><br><span style='font-size:14px;'>identity against this backdrop. Using an inductive approach, we asked 987 German citizens to describe what being German means for them. A latent class analysis of content-coded responses revealed four classes: a heritage-based identity class </span><br><span style='font-size:14px;'>with a strong focus on language and culture (39%), an ideology-based identity class that revolves around democracy, welfare, freedom, and economy and safety (19%), a legal-formalistic identity class that is mostly concerned with the legal requirement </span><br><span style='font-size:14px;'>for obtaining and holding citizenship of national identity (26%), and a trait-based identity class describing personality-traits that are supposed to be typical for Germans (16%). These findings expand upon and add nuance to the commonly used civic vs. </span><br><span style='font-size:14px;'>ethnic national identity content typology."
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	setcycle 23 Link "10.5964/jspp.v7i1.557 "
	setcycle 23 cite "The Meaning of Being German: An Inductive Approach to National Identity "
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	setcycle 24 Link "10.5964/jspp.v7i1.746"
	setcycle 24 cite "Agentic and Communal Interaction Goals in Conflictual Intergroup Relations "
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	setcycle 25 Link "10.5964/jspp.v7i1.746"
	setcycle 25 cite "Agentic and Communal Interaction Goals in Conflictual Intergroup Relations "
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	setcycle 26 Link "10.5964/jspp.v7i1.746"
	setcycle 26 cite "Agentic and Communal Interaction Goals in Conflictual Intergroup Relations "
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	setcycle 27 Link "10.5964/jspp.v7i1.822"
	setcycle 27 cite "Contempt of Congress: Do Liberals and Conservatives Harbor Equivalent Negative Emotional Biases Towards Ideologically Congruent vs. Incongruent Politicians at the Level of Individual Emotions? "
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	setcycle 28 Link "10.5964/jspp.v7i1.822"
	setcycle 28 cite "Contempt of Congress: Do Liberals and Conservatives Harbor Equivalent Negative Emotional Biases Towards Ideologically Congruent vs. Incongruent Politicians at the Level of Individual Emotions? "
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	setcycle 29 Link "10.5964/jspp.v7i1.822"
	setcycle 29 cite "Contempt of Congress: Do Liberals and Conservatives Harbor Equivalent Negative Emotional Biases Towards Ideologically Congruent vs. Incongruent Politicians at the Level of Individual Emotions? "
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	setcycle 30 Link "10.5964/jspp.v7i1.933"
	setcycle 30 cite "Seen One, Seen ‘Em All? Do Reports About Law Violations of a Single Politician Impair the Perceived Trustworthiness of Politicians in General and of the Political System? "
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	setcycle 31 Link "10.5964/jspp.v7i1.933"
	setcycle 31 cite "Seen One, Seen ‘Em All? Do Reports About Law Violations of a Single Politician Impair the Perceived Trustworthiness of Politicians in General and of the Political System? "
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	setcycle 32 Link "10.5964/jspp.v7i1.933"
	setcycle 32 cite "Seen One, Seen ‘Em All? Do Reports About Law Violations of a Single Politician Impair the Perceived Trustworthiness of Politicians in General and of the Political System? "
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	setcycle 33 Link "10.5964/jspp.v7i1.981 "
	setcycle 33 cite "How Many Ways to Say Goodbye? The Latent Class Structure and Psychological Correlates of European Union Sentiment in a Large Sample of UK Adults "
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	setcycle 34 Link "10.5964/jspp.v7i1.981 "
	setcycle 34 cite "How Many Ways to Say Goodbye? The Latent Class Structure and Psychological Correlates of European Union Sentiment in a Large Sample of UK Adults "
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	setcycle 35 Link "10.5964/jspp.v7i1.981 "
	setcycle 35 cite "How Many Ways to Say Goodbye? The Latent Class Structure and Psychological Correlates of European Union Sentiment in a Large Sample of UK Adults "
	sortby BLOCK
	slice 0 12
	shuffle Text_id
	run text_seq

define sketchpad text_dash_01
	set duration 60000
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=14 html=yes show_if=always text=summary x=-704 y=-320 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=14 html=yes show_if=always text="[Content]" x=-704 y=-278 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="[cite]" x=0 y=-333 z_index=0

define sketchpad text_dash_02
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=14 html=yes show_if=always text=summary x=-704 y=-320 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=14 html=yes show_if=always text="[Content]" x=-704 y=-278 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="[cite]" x=0 y=-333 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="Press any key to end reading" x=0 y=352 z_index=0

define notepad text_display_notepad
	__note__
	部分文章長度超出瀏覽器視窗範圍:
	- 楊立行：白話標題
	- 黃從仁：白話標題
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad text_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="Next, twelve articles will be presented sequentially, and each article needs to be read for at least one minute." x=-600 y=-210 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="After reading an article, there are some questions asking about your personal feelings. Every time after reading three articles, there are some questions about the content of the article.<br>You need to read the article carefully before answering, and then rest for 90 seconds before continuing until the end ." x=-600 y=-150 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="If you have any questions during the process, you can record them at any time and ask them after the experiment is over." x=-600 y=-50 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="It will take you about 30 minutes to complete the entire quiz." x=-600 y=40 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="Press any key to end reading" x=0 y=320 z_index=0

define loop text_post
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Q_type Post_survey
	setcycle 0 Question "How do you rate this summary?<br> Please indicate your assessment of the summary on the following scale."
	setcycle 0 Topic Comprehensibility
	setcycle 0 Option8 "8: extremely comphrehensible"
	setcycle 0 Option7 7
	setcycle 0 Option6 6
	setcycle 0 Option5 5
	setcycle 0 Option4 4
	setcycle 0 Option3 3
	setcycle 0 Option2 2
	setcycle 0 Option1 "1: not comprehensible at all"
	setcycle 1 Q_type Post_survey
	setcycle 1 Question "How do you rate this summary?<br> Please indicate your assessment of the summary on the following scale."
	setcycle 1 Topic Scientificness
	setcycle 1 Option8 "8: extremely scientific"
	setcycle 1 Option7 7
	setcycle 1 Option6 6
	setcycle 1 Option5 5
	setcycle 1 Option4 4
	setcycle 1 Option3 3
	setcycle 1 Option2 2
	setcycle 1 Option1 "1: not scientific at all"
	setcycle 2 Q_type Post_survey
	setcycle 2 Question "How do you rate this summary?<br> Please indicate your assessment of the summary on the following scale."
	setcycle 2 Topic Credibility
	setcycle 2 Option8 "8: extremely credible"
	setcycle 2 Option7 7
	setcycle 2 Option6 6
	setcycle 2 Option5 5
	setcycle 2 Option4 4
	setcycle 2 Option3 3
	setcycle 2 Option2 2
	setcycle 2 Option1 "1: not credible at all"
	setcycle 3 Q_type Post_survey
	setcycle 3 Question "Based on this summary, I am able to evaluate the veracity of the corresponding study. Please indicate your agreement with the following statements."
	setcycle 3 Topic Veracity
	setcycle 3 Option8 "8: I totally agree"
	setcycle 3 Option7 7
	setcycle 3 Option6 6
	setcycle 3 Option5 5
	setcycle 3 Option4 4
	setcycle 3 Option3 3
	setcycle 3 Option2 2
	setcycle 3 Option1 "1:I do not agree at all"
	setcycle 4 Q_type Post_survey
	setcycle 4 Question "Based on this summary, I am able to make a decision without needing any further information (i.e., reading the full text or talking to an expert). Please indicate your agreement with the following statements."
	setcycle 4 Topic Decision
	setcycle 4 Option8 "8: I totally agree"
	setcycle 4 Option7 7
	setcycle 4 Option6 6
	setcycle 4 Option5 5
	setcycle 4 Option4 4
	setcycle 4 Option3 3
	setcycle 4 Option2 2
	setcycle 4 Option1 "1:I do not agree at all"
	run text_post_seq

define sequence text_post_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Post_survey_board always
	run Study_logger always

define sequence text_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run text_seq_notepad always
	run count_text always
	run preparation always
	run text_dash_01 always
	run text_dash_02 always
	run constants always
	run text_post always
	run constants always
	run access_loop always
	run id_recording always
	run constants always
	run test "([count_text_seq]%3)=2"
	run rest_html "(([count_text_seq]%3)=2)and([count_text_seq]<11)"
	run rest always
	run rest_duation_notepad always
	run rest_duration "(([count_text_seq]%3)=2)and([count_text_seq]<11)"

define notepad text_seq_notepad
	__note__
	`text_dash_01`正式實驗延遲時間 Duration：60000 ms
	
	`constants` 設定問卷填答loop內必存變數。每個問卷loop之前都要置放。
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad welcome_board
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="This experiment has the following tests in order. The method of switching pages depends on the needs of the research, using mouse clicks or buttons<br /><br><br />First, please answer the basic demographic information such as gender and birth year.<br /><br><br />The next question is about credit sources of knowledge about psychological science and your familiarity with scientific activities.<br /><br><br />The formal test reads the abstracts of twelve psychology papers or adapted popular science articles in sequence, and each article requires at least one minute of reading.<br /><br><br />After reading each chapter, you will need to answer some questions.<br /><br><br />If you have any questions during the process, please feel free to ask.<br /><br><br />It will take you about 30 minutes to complete the entire quiz.<br /><br><br />If there is no problem, please press <b>OK</b> to start the test." x=-512.0 y=-352.0 z_index=0

