---
API: 2.1
OpenSesame: 3.3.11
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Show pictures"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family "chinese-japanese-korean"
set font_bold no
set experiment_path "D:\\core\\research\\projects\\Meta_Replication\\Projects\\202202_color\\1_sti_norm"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background white

define sketchpad PIC_board
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="[picture]" scale=1 show_if=always x=0 y=0 z_index=0

define loop PIC_presentation
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 picture "banana green.png"
	setcycle 1 picture "broom_1_300.png"
	setcycle 2 picture "kangaroo_1_300.png"
	setcycle 3 picture "monkeyorange_1_300.png"
	setcycle 4 picture "orangeorange_1_300.png"
	setcycle 5 picture "table_1_300.png"
	run PIC_sequence

define sequence PIC_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run PIC_board always

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started always
	run welcome always
	run PIC_presentation always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="展示刺激圖<br /><br />按任意鍵切換" x=0 y=0 z_index=0

