---
API: 2.1
OpenSesame: 3.3.11
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "SPV color"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set pygame_window_pos auto
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 14
set font_italic no
set font_family "chinese-japanese-korean"
set font_bold no
set experiment_path "D:\\core\\Research\\projects\\Meta_Replication\\Projects\\202202_color\\2_design"
set enable_escape no
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background white

define keyboard_response Check_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "a;l"

define sketchpad Check_term
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="剛才最後的三個嘗試有沒有這一句？" x=0 y=-120 z_index=0
	draw textline center=1 color=blue font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="[recterm]" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="L:是" x=288 y=224 z_index=0
	draw textline center=1 color=black font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="A:否" x=-288 y=224 z_index=0

define sketchpad Consent_form01
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="這是知情同意書的版面，放置研究倫理審查核可的文字。執行期間如需更動文字，必須向倫理委員會申請修改。" x=-448 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="按C代表您已閱讀完畢" x=-288 y=288 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="按Esc可立即退出本研究" x=288 y=288 z_index=0

define sketchpad Consent_form02
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="放置如何向倫理委員會申訴的訊息。<br /><br />告知隨時可按Esc退出研究。" x=-384 y=-224 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="按A代表您同意進行研究" x=-288 y=288 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="按Esc可立即退出本研究" x=288 y=288 z_index=0

define sketchpad EXP_Instruction
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="練習後,正式實驗前再提醒<br/><br/>指導語編輯中" x=4 y=-47 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="按任意鍵切換" x=4 y=250 z_index=0

define sketchpad Exp_End
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="實驗結束<br/><br/>請記下你的實驗完成碼<br/>[identifier]<br/><br/>按任意鍵關閉網頁" x=0 y=-32 z_index=0

define sketchpad Fixation_1st
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=-352 y=0 z_index=0

define sketchpad Fixation_2nd
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sequence Memory_check
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Check_term always
	run Check_response always
	run check_response_correct "[correct]=1"
	run check_response_wrong "[correct]=0"

define sketchpad PIC_board
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[picture]" scale=1 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="L:是" x=288 y=224 z_index=0
	draw textline center=1 color=black font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="A:否" x=-288 y=224 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=14 html=yes show_if=always text="前面描述中有提到這項物品嗎？<br/>請在三秒內做出判斷" x=0 y=288 z_index=0

define sequence Post_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Survey_board always
	run survey_response always
	run survey_feedback always
	run SPV_logger always

define loop Post_survey
	set source table
	set repeat 200
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if "[response]=q"
	setcycle 0 Question "請問您的性別？<br/>輸入對應選項的號碼表達您的回答"
	setcycle 0 Options "1: 女性 2:男性 3:跨性別 4:非二元性別 x:不願作答"
	setcycle 0 Task Post
	setcycle 0 Topic gender
	setcycle 1 Question "您的出生西元年前二位數字是(1)19;(2)20<br/>請輸入對應的號碼。 "
	setcycle 1 Options "註: 如果您不想回答, 請輸入 \"x\"."
	setcycle 1 Task Post
	setcycle 1 Topic birth_12
	setcycle 2 Question "請輸入您的出生西元年第三位數字<br/>例如, 出生年是 2001, 請輸入 0; 1999請輸入9。 "
	setcycle 2 Options "註: 如果您不想回答, 請輸入 \"x\"."
	setcycle 2 Task Post
	setcycle 2 Topic birth_3
	setcycle 3 Question "請輸入您的出生西元年第四位數字<br/>例如, 出生年是 2001, 請輸入1 ; 1999請輸入9。"
	setcycle 3 Options "註: 如果您不想回答, 請輸入 \"x\"."
	setcycle 3 Task Post
	setcycle 3 Topic birth_4
	setcycle 4 Question "請確認您剛才的輸入都正確！ "
	setcycle 4 Options "要重新回答請按\"x\"，確認無誤按\"q\"結束"
	setcycle 4 Task Post
	setcycle 4 Topic Exit
	run Post_seq

define sketchpad Probe_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="[probe1][probe2]" x=-352 y=-15 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=never text="[probe2]" x=-150 y=60 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=14 html=yes show_if=always text="按空白鍵看圖" x=0 y=224 z_index=0

define keyboard_response Probe_switch
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define loop SPV_List01
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define loop SPV_List02
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define loop SPV_List03
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define loop SPV_List04
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define sequence SPV_exp
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run presetup always
	run SPV_List01 "[List]=1"
	run SPV_List02 "[List]=2"
	run SPV_List03 "[List]=3"
	run SPV_List04 "[List]=4"

define logger SPV_logger
	set description "Logs experimental data"
	set auto_log no

define notepad SPV_notepad
	__note__
	Color effect Replication
	
	句圖比對作業收集中文參與者閱讀中文句子後，辨識對應圖片的反應時間，這份腳本以Hoeben Mannaert et al. (2021) Study 2為範本，理解測試改成記憶測試。
	
	知情同意書應備要素：(下載臺灣大學研究倫理中心最新文件)
	https://ord.ntu.edu.tw/WebUPD/ordntu/info/REC-S-03%E7%9F%A5%E6%83%85%E5%90%8C%E6%84%8F%E8%A6%81%E7%B4%A0%E6%AA%A2%E6%A0%B8%E8%A1%A8_20170505%E6%9B%B4%E6%96%B0.pdf
	
	知情同意書編輯範本：
	
	您好：<br>
	
	歡迎您參加慈濟大學人類與發展與心理學系的研究，這項研究的目的是[實驗目的]。只要您是透過我們的招募管道登入這個網頁，就適合參與本次研究，無其它限制或配合事項。<br>
	
	實驗過程完全在網頁瀏覽器進行。過程是依照網頁指示，先請您回答有關個人基本資訊以及已備知識的相關問題，正式部分是[簡介實驗內容]，整個實驗過程約[進行時間]。過程中您的所在地點若發生任何不可抗力之意外，請儘速離開現場，我們恕不提供額外保險或補償措施。<br>
	
	開始實驗後，您若對指示或刺激項目感到不理解，可隨時註記並在結束前於回饋欄位內反應。如果您中途想要退出，直接關閉網頁即可，網站不會保留您的參與紀錄，亦不影響之後您參與我們其他研究的權益。過程中若因意外因素(如電腦當機、網路斷線)導致中斷，只要登入網頁重新開始即可。<br>
	
	實驗網站不會記錄任何可辨識您個人身分的必要訊息，未來去除您個人資訊的反應資料將以CC授權模式(姓名標示─非商業性)存放於無限制權限的網路平台，提供全球有興趣的各界人士檢索。本次研究預計招募人數為[預估樣本數]人。<br>
	
	這項實驗不會對您的健康構成任何已知風險，如果您突然感到不適覺得無法繼續實驗，直接關閉瀏覽器即可停止。<br>
	 
	最後非常感謝您的參與，相信您的參與將幫助我們增加有關一般大眾如何理解專業知識文章，也許能啟發您了解科普文章產製過程的興趣。如果您需要留存參與紀錄，請務必注意登出畫面的提示。若您對本研究還有進一步疑問，歡迎您隨時連絡計畫主持人______
	
	註：（IRB/REC申訴管道）
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define loop SPV_prac
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 picture "banana green.png"
	setcycle 0 correct_response l
	setcycle 0 probe1 "婦人打量桌上的香蕉。"
	setcycle 0 probe2 "把青色的香蕉收起來。"
	setcycle 0 Task Prac
	setcycle 1 picture "broom_2.png"
	setcycle 1 correct_response l
	setcycle 1 probe1 "小男孩緊抓著土黃色掃帚。"
	setcycle 1 probe2 "認真地清掃地上的灰塵。"
	setcycle 1 Task Prac
	setcycle 2 picture "kangaroo_1.png"
	setcycle 2 correct_response a
	setcycle 2 probe1 "女學生從背包裡拿出一個文件夾。"
	setcycle 2 probe2 "用夾子夾住剛做好的筆記。"
	setcycle 2 Task Prac
	setcycle 3 picture "monkeyorange_1_240.png"
	setcycle 3 correct_response l
	setcycle 3 probe1 "那位男士端詳那張橘色猴子的畫像。"
	setcycle 3 probe2 "一邊說他從未見過這種模樣的猴子。"
	setcycle 3 Task Prac
	setcycle 4 picture "orangeorange_1.png"
	setcycle 4 correct_response l
	setcycle 4 probe1 "小女孩挑出一顆最鮮艷橘子。"
	setcycle 4 probe2 "馬上就吃掉了。"
	setcycle 4 Task Prac
	setcycle 5 picture "clock_300.png"
	setcycle 5 correct_response a
	setcycle 5 probe1 "攝影師站在金字塔下方。"
	setcycle 5 probe2 "仰望著黃閃閃的塔頂。"
	setcycle 5 Task Prac
	setcycle 6 picture "banana green.png"
	setcycle 6 correct_response a
	setcycle 6 probe1 "婦人打量桌上的李子。"
	setcycle 6 probe2 "然後拿起最大的李子。"
	setcycle 6 Task Prac
	setcycle 7 picture "broom_2.png"
	setcycle 7 correct_response a
	setcycle 7 probe1 "小男孩緊抓著紅柄拖把。"
	setcycle 7 probe2 "認真地清理地上的污漬。"
	setcycle 7 Task Prac
	setcycle 8 picture "kangaroo_1.png"
	setcycle 8 correct_response l
	setcycle 8 probe1 "女學生來到動物園參觀。"
	setcycle 8 probe2 "在袋鼠園區前停留看了一陣子。"
	setcycle 8 Task Prac
	setcycle 9 picture "monkeyorange_1_240.png"
	setcycle 9 correct_response a
	setcycle 9 probe1 "那位男士端詳那張紫色兔子的畫像。"
	setcycle 9 probe2 "一邊說他從未見過這種模樣的兔子。"
	setcycle 9 Task Prac
	setcycle 10 picture "orangeorange_1.png"
	setcycle 10 correct_response a
	setcycle 10 probe1 "小女孩挑出一顆最大的檸檬。"
	setcycle 10 probe2 "要切開來榨檸檬汁。"
	setcycle 10 Task Prac
	setcycle 11 picture "clock_300.png"
	setcycle 11 correct_response l
	setcycle 11 probe1 "攝影師站在一張桌子旁邊。"
	setcycle 11 probe2 "構思如何擺設要拍攝的作品。"
	setcycle 11 Task Prac
	run SPV_seq

define sequence SPV_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run exp_notepad never
	run Fixation_1st always
	run Probe_board always
	run Probe_switch always
	run item_collect always
	run Fixation_2nd always
	run PIC_board always
	run decision_response always
	run decision_response_correct "[correct]=1"
	run decision_response_wrong "[correct]=0"
	run decision_response_noans "[response_time]>2500"
	run item_import always
	run Memory_check "([trial_seq] = [check_0]) or ([trial_seq] = [check_1]) or ([trial_seq] = [check_2]) or ([trial_seq] = [check_3]) or ([trial_seq] = [check_4]) or ([trial_seq] = [check_5]) or ([trial_seq] = [check_6]) or ([trial_seq] = [check_7]) or ([trial_seq] = [check_8]) or ([trial_seq] = [check_9]) or ([trial_seq] = [check_10])"
	run task_break "[trial_seq] = 20"
	run logger_notepad never
	run SPV_logger always

define sketchpad Survey_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="[Question]" x=0 y=-192 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="[Options]" x=0 y=0 z_index=0

define keyboard_response agree_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses a

define sketchpad check_response_correct
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=60 html=yes show_if=always text="正確！" x=0 y=0 z_index=0

define sketchpad check_response_wrong
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=60 html=yes show_if=always text="答錯了！" x=0 y=0 z_index=0

define loop consent_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Task consent
	run consent_seq

define keyboard_response consent_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses c

define sequence consent_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Consent_form01 always
	run consent_response always
	run Consent_form02 always
	run agree_response always
	run SPV_logger always

define keyboard_response decision_response
	set timeout 3000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "a;l"

define sketchpad decision_response_correct
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="正確！" x=0 y=0 z_index=0

define sketchpad decision_response_noans
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="作答逾時" x=0 y=72 z_index=0

define sketchpad decision_response_wrong
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="答錯了！" x=0 y=0 z_index=0

define notepad exp_notepad
	__note__
	實驗迴圈編輯要點
	
	1. File pool設定
	練習,正式實驗要呈現的圖片檔案要存入
	填入迴圈表格的圖檔名稱要與File pool一致
	
	2. Norm_exp迴圈表格變項欄位
	probe1 引導句第一句
	probe2 引導句第二句 
	picture	物件圖檔檔名
	first_color 引導句第一句是彩色(y),黑白(n)
	pic_color 物件圖檔是彩色(y),黑白(n)
	correct_response  反應正確按鍵
	
	句/圖交互平衡表格，在協作刺激表製作：
	https://docs.google.com/spreadsheets/d/1JEOhXorJC7ZWRAfB9OVoGaQMVZBRQcZiiyb0CNvZuBA/edit#gid=864540482
	
	3. SPV_seq序列 參數紀錄
	
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Term_board always
	run item_collect always
	run PIC_board always
	run decision_response always
	run decision_response_correct "[correct]=1"
	run decision_response_wrong "[correct]=0"
	run item_import always
	run Memory_check "([trial_seq] = [check_0]) or ([trial_seq] = [check_1]) or ([trial_seq] = [check_2]) or ([trial_seq] = [check_3]) or ([trial_seq] = [check_4]) or ([trial_seq] = [check_5]) or ([trial_seq] = [check_6]) or ([trial_seq] = [check_7]) or ([trial_seq] = [check_8]) or ([trial_seq] = [check_9]) or ([trial_seq] = [check_10])"
	run task_break "[trial_seq] = 20"
	run SPV_logger always
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run SPV_notepad never
	run consent_loop always
	run js_notepad never
	run initilization never
	run instruction_notepad never
	run welcome always
	run presetup always
	run SPV_prac always
	run EXP_Instruction always
	run SPV_exp never
	run Post_survey always
	run Exp_End always

define inline_javascript initilization
	set description "Executes JavaScript code"
	set _run ""
	___prepare__
	// Generate the identifier for the participant
	vars.identifier = Math.random().toString(36).substr(2, 9);
	// Local version will not show identifier on "PP_End".
	
	// getRndInteger(min, max) returns a random number between min and max (both included):
	function getRndInteger(min, max) {
	  return Math.floor(Math.random() * (max - min + 1) ) + min;
	}
	
	vars.List = getRndInteger(1,4);
	__end__

define notepad instruction_notepad
	__note__
	句子閱讀及圖片區辨作業指導語說明資訊
	
	- 引導句呈現及切換方式
	- 圖片呈現方式
	- 題目反應方法
	- 判斷後回饋訊息
	- 記憶檢測提示訊息
	- 記憶檢測反應方法
	- 記憶檢測出現次數
	- 練習及正式實驗段落
	- 正式實驗中途休息資訊
	- 實驗結束資訊
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_javascript item_collect
	set description "Executes JavaScript code"
	set _run ""
	___prepare__
	// Concatent the probes into a list
	if(vars.term_list.length == 0){
	// Add first probe into the list
	   vars.term_list.splice(1,0,vars.probe1);
	} else if (vars.term_list.length > 0 & vars.term_list.length < 6) {
	// Add the last probe into the list till length = 6
	   vars.term_list.unshift(vars.probe1);
	} else {
	// After length = 6, revmove the oldest probe then add the newest probe
	   vars.term_list.pop();
	   vars.term_list.unshift(vars.probe1);
	}
	// Store 
	vars.list_length = vars.term_list.length;
	// Incredimate
	vars.trial_seq += 1;
	__end__

define inline_javascript item_import
	set description "Executes JavaScript code"
	___run__
	// getRndInteger(min, max) returns a random number between min and max (both included):
	function getRndInteger(min, max) {
	  return Math.floor(Math.random() * (max - min + 1) ) + min;
	}
	
	// Prepare memory check after 5th trial
	if(vars.list_length > 5){
	
	// Locate the probe to be checked
	vars.anchor = getRndInteger(0,5);
	
	// Use the first anchor
	vars.recterm = vars.term_list[vars.anchor];
	
	// Set up correct_response
	if( vars.anchor < 3 ) {
			vars.correct_response = 'l';
	}
	else{
			vars.correct_response = 'a';
	}
	
	}
	
	// Store response time to target
	//vars.response_time_target = vars.response_time
	
	// Store answerto target
	vars.correct_response_target = vars.correct_response
	
	// Store correctness to target
	//vars.correct_target = vars.correct
	
	// Mark the memory check
	if( (vars.trial_seq == vars.check_0) | (vars.trial_seq == vars.check_1) | (vars.trial_seq == vars.check_2) | (vars.trial_seq == vars.check_3) | (vars.trial_seq == vars.check_4) | (vars.trial_seq == vars.check_5) | (vars.trial_seq == vars.check_6) | (vars.trial_seq == vars.check_7) | (vars.trial_seq == vars.check_8) | (vars.trial_seq == vars.check_9) | (vars.trial_seq == vars.check_10) | (vars.trial_seq == vars.check_11) | (vars.trial_seq == vars.check_12) | (vars.trial_seq == vars.check_13) | (vars.trial_seq == vars.check_14) | (vars.trial_seq == vars.check_15) | (vars.trial_seq == vars.check_16) | (vars.trial_seq == vars.check_17) | (vars.trial_seq == vars.check_18) | (vars.trial_seq == vars.check_19) | (vars.trial_seq == vars.check_20)| (vars.trial_seq == vars.check_21) | (vars.trial_seq == vars.check_22) | (vars.trial_seq == vars.check_23) ){
	        vars.memory = "y";
	} 
	else{
	        vars.memory = 'n';
	}
	__end__
	set _prepare ""

define notepad js_notepad
	__note__
	vars.anchor has to get the Integer from function.
	
	OpenSesame defaultly store the response time and correct for each keyboard responses. The better practice is load these data to logger.
	
	
	Functions of javascript ：
	
	
	- initilization
	Generate a complete code
	Decide which list in this experiment.
	
	- presetup
	Call the var for collecting the items 
	
	
	- item_collect
	Collecting the items for memory checks
	
	- item_import
	Turn on/off memory check; Setup memory check trial
	
	
	Learn javascrip at w3c school ~ https://www.w3schools.com/js/DEFAULT.asp
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define notepad logger_notepad
	__note__
	應紀錄變項
	
	全局自訂變項欄位
	
	identifier  實驗完成碼
	 
	知情同意
	response    確認閱讀(C), 確認參與(A)
	
	
	SPV_序列紀錄變項欄位
	probe1 引導句第一句
	probe2 引導句第二句 
	picture	物件圖檔檔名
	first_color 引導句第一句是彩色(y),黑白(n) 獨變項#1
	pic_color 物件圖檔是彩色(y),黑白(n)      獨變項#2
	correct_response  反應正確按鍵
	correct         嘗試序列最後一次反應正誤   依變項#B1
	response_time   嘗試序列最後一次反應時間   依變項#A1
	term_list       嘗試序列最後更新的待選記憶測試項目
	trial_seq       嘗試次數累進
	recterm         要呈現的記憶測試項目
	anchor          要呈現的待選記憶測試項目序號
	memory          嘗試序列有無執行記憶測試
	correct_decision_response  目標圖片判斷正誤      依變項#B2
	response_time_decision_response  目標圖片判斷反應時間   依變項#A2
	correct_Check_response        記憶測試項目判斷正誤      依變項#B3
	response_time_Check_response  記憶測試項目判斷反應時間   依變項#A3
	
	Post_survey序列紀錄變項欄位
	Task        作業段落標記
	Topic       出口調查項目主題
	response    參與者作答
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_javascript presetup
	set description "Executes JavaScript code"
	___run__
	//getRndInteger(min, max) returns a random number between min and max (both included):
	function getRndInteger(min, max) {
	  return Math.floor(Math.random() * (max - min + 1) ) + min;
	}
	
	// Call empty list for memory check
	vars.term_list = [];
	
	// Call counters for trial sequence
	vars.trial_seq = 0;
	
	// Call memory slot for probe list length
	let list_length; 
	
	// Call memory slot for response time to target
	let response_time_target
	
	// Call memory slot for correctness to target
	let correct_target
	
	// Call target for memory check
	vars.recterm = [];
	
	// Generate the index of memory check
	// save each randomized sequence into each variable
	vars.check_0 = getRndInteger(7,8);
	vars.check_1 = getRndInteger(10,11);
	vars.check_2 = getRndInteger(14,15);
	vars.check_3 = getRndInteger(18,19);
	vars.check_4 = getRndInteger(22,23);
	vars.check_5 = getRndInteger(26,27);
	vars.check_6 = getRndInteger(30,31);
	vars.check_7 = getRndInteger(34,35);
	vars.check_8 = getRndInteger(38,39);
	vars.check_9 = getRndInteger(42,43);
	vars.check_10 = getRndInteger(46,47);
	vars.check_11 = getRndInteger(50,51);
	vars.check_12 = getRndInteger(54,55);
	vars.check_13 = getRndInteger(58,59);
	vars.check_14 = getRndInteger(62,63);
	vars.check_15 = getRndInteger(66,67);
	vars.check_16 = getRndInteger(70,71);
	vars.check_17 = getRndInteger(74,75);
	vars.check_18 = getRndInteger(78,79);
	vars.check_19 = getRndInteger(82,83);
	vars.check_20 = getRndInteger(84,85);
	vars.check_21 = getRndInteger(88,89);
	vars.check_22 = getRndInteger(92,93);
	vars.check_23 = getRndInteger(95,96);
	__end__
	set _prepare ""

define feedback survey_feedback
	set reset_variables yes
	set duration 750
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="您剛才輸入的是：[response]" x=0 y=-96 z_index=0

define keyboard_response survey_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8;9;0;x;q"

define feedback task_break
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="休息一下<br /><br />按任意鍵繼續" x=0 y=0 z_index=0

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="句子閱讀及圖片區辨<br/><br/>指導語編輯中" x=4 y=-47 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="按任意鍵切換" x=4 y=250 z_index=0

