---
API: 2.1
OpenSesame: 3.3.2
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Spot the Animal Related Word"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set osf_id 5e7b4596d3843900c4cdc529
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground "#555555"
set font_underline no
set font_size 24
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\nenny\\Desktop\\Minor Internship\\Experiment"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background "#777777"

define sketchpad Consent
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="" x=0 y=0 z_index=0
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="<b>Toestemming:</b><br />Door op de volgende knop te drukken <br />bevestig jij je deelname aan het onderzoek.<br /><br />Als je niet wilt deelnemen aan dit onderzoek <br />kan je nu je deelname beeindigen <br />door de internetbrowser af te sluiten.<br /><br /><b>Let op:</b> <br />Het sluiten van de browser resulteerd <br />in het vervallen van je deelname <br />en daarmee je recht op vergoeding.<br /><br />Druk op een knop om door te gaan." x=0 y=0 z_index=0

define inline_javascript Counterbalance_key_response
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	if (vars.subject_parity === "even") {
		vars.animal_response = "LEFT"
		vars.other_word_response = "RIGHT"
	} else {
		vars.animal_response = "RIGHT"
		vars.other_word_response = "LEFT"
	}
	__end__

define sketchpad Example_animal_even
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text=donzig x=0 y=0 z_index=0
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Druk op de <b>linkerpijl</b> als je hier een woord ziet die-<br /><br /> geassocieerd wordt met dieren. <br /><br />Druk op de <b>rechterpijl</b> bij alle andere woorden." x=0 y=128 z_index=0

define sketchpad Example_animal_odd
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text=donzig x=0 y=0 z_index=0
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Druk op de <b>rechterpijl</b> als je hier een woord ziet die-<br /><br />geassocieerd wordt met dieren. <br /><br />Druk op de <b>linkerpijl</b> bij alle andere woorden." x=0 y=128 z_index=0

define sketchpad Example_other_word_even
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="geen huis" x=0 y=0 z_index=0
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Druk op de <b>linkerpijl</b> als je hier een woord ziet die-<br /><br />geassocieerd worden met dieren. <br /><br />Druk op de <b>rechterpijl</b> bij alle andere woorden." x=0 y=128 z_index=0

define sketchpad Example_other_word_odd
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="geen huis" x=0 y=0 z_index=0
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Druk op de <b>rechterpijl</b> als je hier een woord ziet die-<br /><br /> die geassocieerd wordt met dieren. <br /><br />Druk op de <b>linkerpijl</b> bij alle andere woorden." x=0 y=128 z_index=0

define sketchpad Fin
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Het experiment is afgelopen.<br /><br />Bedankt voor je deelname!<br />" x=0 y=0 z_index=0

define sketchpad Instructions_even
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="<b>Instructies:</b><br />Tijdens dit experiment zie je verschillende woorden.<br /><br />Druk op de <b>linkerpijl</b> als je een woord ziet <br /><br />die geassocieerd wordt met dieren. <br /><br />Druk op de <b>rechterpijl</b> bij alle andere woorden.<br /><br /><br /><br />Dus bijvoorbeeld:<br /><br />- Als je 'schildpad' of 'niet donzig' ziet <br /><br />dan druk je op de <b>linkerpijl</b>.<br /><br />- Als je 'huis' of 'niet zwemmen' ziet <br /><br /> dan druk je op de <b>rechterpijl</b>.<br /><br /><br /><br /> Drup op een knop om door te gaan." x=0 y=0 z_index=0

define sketchpad Instructions_odd
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="<b>Instructies:</b><br />Tijdens dit experiment zie je verschillende woorden.<br /><br />Druk op de <b>rechterpijl</b> als je een woord ziet <br /><br /> die geassocieerd wordt met dieren. <br /><br />Druk op de <b>linkerpijl</b> bij alle andere woorden.<br /><br /><br /><br />Dus bijvoorbeeld:<br /><br />- Als je 'schildpad' of 'niet donzig' ziet <br /><br /> dan druk je op de <b>rechterpijl</b>.<br /><br />- Als je 'huis' of 'niet zwemmen' ziet <br /><br /> dan druk je op de <b>linkerpijl</b>.<br /><br /><br /><br /> Drup op een knop om door te gaan." x=0 y=0 z_index=0

define loop Negation_Block_even
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 156
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 category animal
	setcycle 0 word "geen aap"
	setcycle 0 correct_response left
	setcycle 0 negation 1
	setcycle 0 font_colour_1 black
	setcycle 0 font_colour_2 white
	setcycle 1 category animal
	setcycle 1 word "geen beer"
	setcycle 1 correct_response left
	setcycle 1 negation 1
	setcycle 1 font_colour_1 black
	setcycle 1 font_colour_2 white
	setcycle 2 category animal
	setcycle 2 word "geen bever"
	setcycle 2 correct_response left
	setcycle 2 negation 1
	setcycle 2 font_colour_1 black
	setcycle 2 font_colour_2 white
	setcycle 3 category animal
	setcycle 3 word "geen bij"
	setcycle 3 correct_response left
	setcycle 3 negation 1
	setcycle 3 font_colour_1 black
	setcycle 3 font_colour_2 white
	setcycle 4 category animal
	setcycle 4 word "geen capybara"
	setcycle 4 correct_response left
	setcycle 4 negation 1
	setcycle 4 font_colour_1 black
	setcycle 4 font_colour_2 white
	setcycle 5 category animal
	setcycle 5 word "geen duif"
	setcycle 5 correct_response left
	setcycle 5 negation 1
	setcycle 5 font_colour_1 black
	setcycle 5 font_colour_2 white
	setcycle 6 category animal
	setcycle 6 word "geen eekhoorn"
	setcycle 6 correct_response left
	setcycle 6 negation 1
	setcycle 6 font_colour_1 black
	setcycle 6 font_colour_2 white
	setcycle 7 category animal
	setcycle 7 word "geen egel"
	setcycle 7 correct_response left
	setcycle 7 negation 1
	setcycle 7 font_colour_1 black
	setcycle 7 font_colour_2 white
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	setcycle 80 category control
	setcycle 80 word "geen beheer"
	setcycle 80 correct_response right
	setcycle 80 negation 1
	setcycle 80 font_colour_1 black
	setcycle 80 font_colour_2 white
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	setcycle 106 category bright
	setcycle 106 word "niet blank"
	setcycle 106 correct_response right
	setcycle 106 negation 1
	setcycle 106 font_colour_1 black
	setcycle 106 font_colour_2 white
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	setcycle 132 category dark
	setcycle 132 word "geen avond"
	setcycle 132 correct_response right
	setcycle 132 negation 1
	setcycle 132 font_colour_1 black
	setcycle 132 font_colour_2 white
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	shuffle_horiz font_colour_1 font_colour_2
	run Practice_Sequence

define loop Negation_Block_even_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 156
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 category animal
	setcycle 0 word "geen aap"
	setcycle 0 correct_response left
	setcycle 0 negation 1
	setcycle 0 font_colour_1 black
	setcycle 0 font_colour_2 white
	setcycle 1 category animal
	setcycle 1 word "geen beer"
	setcycle 1 correct_response left
	setcycle 1 negation 1
	setcycle 1 font_colour_1 black
	setcycle 1 font_colour_2 white
	setcycle 2 category animal
	setcycle 2 word "geen bever"
	setcycle 2 correct_response left
	setcycle 2 negation 1
	setcycle 2 font_colour_1 black
	setcycle 2 font_colour_2 white
	setcycle 3 category animal
	setcycle 3 word "geen bij"
	setcycle 3 correct_response left
	setcycle 3 negation 1
	setcycle 3 font_colour_1 black
	setcycle 3 font_colour_2 white
	setcycle 4 category animal
	setcycle 4 word "geen capybara"
	setcycle 4 correct_response left
	setcycle 4 negation 1
	setcycle 4 font_colour_1 black
	setcycle 4 font_colour_2 white
	setcycle 5 category animal
	setcycle 5 word "geen duif"
	setcycle 5 correct_response left
	setcycle 5 negation 1
	setcycle 5 font_colour_1 black
	setcycle 5 font_colour_2 white
	setcycle 6 category animal
	setcycle 6 word "geen eekhoorn"
	setcycle 6 correct_response left
	setcycle 6 negation 1
	setcycle 6 font_colour_1 black
	setcycle 6 font_colour_2 white
	setcycle 7 category animal
	setcycle 7 word "geen egel"
	setcycle 7 correct_response left
	setcycle 7 negation 1
	setcycle 7 font_colour_1 black
	setcycle 7 font_colour_2 white
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	setcycle 80 category control
	setcycle 80 word "geen beheer"
	setcycle 80 correct_response right
	setcycle 80 negation 1
	setcycle 80 font_colour_1 black
	setcycle 80 font_colour_2 white
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	setcycle 106 category bright
	setcycle 106 word "niet blank"
	setcycle 106 correct_response right
	setcycle 106 negation 1
	setcycle 106 font_colour_1 black
	setcycle 106 font_colour_2 white
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	setcycle 132 category dark
	setcycle 132 word "geen avond"
	setcycle 132 correct_response right
	setcycle 132 negation 1
	setcycle 132 font_colour_1 black
	setcycle 132 font_colour_2 white
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	shuffle_horiz font_colour_1 font_colour_2
	run Practice_Sequence_1

define loop Negation_Block_odd
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 156
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 category animal
	setcycle 0 word "geen aap"
	setcycle 0 correct_response right
	setcycle 0 negation 1
	setcycle 0 font_colour_1 black
	setcycle 0 font_colour_2 white
	setcycle 1 category animal
	setcycle 1 word "geen beer"
	setcycle 1 correct_response right
	setcycle 1 negation 1
	setcycle 1 font_colour_1 black
	setcycle 1 font_colour_2 white
	setcycle 2 category animal
	setcycle 2 word "geen bever"
	setcycle 2 correct_response right
	setcycle 2 negation 1
	setcycle 2 font_colour_1 black
	setcycle 2 font_colour_2 white
	setcycle 3 category animal
	setcycle 3 word "geen bij"
	setcycle 3 correct_response right
	setcycle 3 negation 1
	setcycle 3 font_colour_1 black
	setcycle 3 font_colour_2 white
	setcycle 4 category animal
	setcycle 4 word "geen capybara"
	setcycle 4 correct_response right
	setcycle 4 negation 1
	setcycle 4 font_colour_1 black
	setcycle 4 font_colour_2 white
	setcycle 5 category animal
	setcycle 5 word "geen duif"
	setcycle 5 correct_response right
	setcycle 5 negation 1
	setcycle 5 font_colour_1 black
	setcycle 5 font_colour_2 white
	setcycle 6 category animal
	setcycle 6 word "geen eekhoorn"
	setcycle 6 correct_response right
	setcycle 6 negation 1
	setcycle 6 font_colour_1 black
	setcycle 6 font_colour_2 white
	setcycle 7 category animal
	setcycle 7 word "geen egel"
	setcycle 7 correct_response right
	setcycle 7 negation 1
	setcycle 7 font_colour_1 black
	setcycle 7 font_colour_2 white
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	setcycle 80 category control
	setcycle 80 word "geen beheer"
	setcycle 80 correct_response left
	setcycle 80 negation 1
	setcycle 80 font_colour_1 black
	setcycle 80 font_colour_2 white
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	setcycle 106 category bright
	setcycle 106 word "niet blank"
	setcycle 106 correct_response left
	setcycle 106 negation 1
	setcycle 106 font_colour_1 black
	setcycle 106 font_colour_2 white
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	setcycle 132 category dark
	setcycle 132 word "geen avond"
	setcycle 132 correct_response left
	setcycle 132 negation 1
	setcycle 132 font_colour_1 black
	setcycle 132 font_colour_2 white
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	shuffle_horiz font_colour_1 font_colour_2
	run Practice_Sequence

define loop Negation_Block_odd_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 156
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 category animal
	setcycle 0 word "geen aap"
	setcycle 0 correct_response right
	setcycle 0 negation 1
	setcycle 0 font_colour_1 black
	setcycle 0 font_colour_2 white
	setcycle 1 category animal
	setcycle 1 word "geen beer"
	setcycle 1 correct_response right
	setcycle 1 negation 1
	setcycle 1 font_colour_1 black
	setcycle 1 font_colour_2 white
	setcycle 2 category animal
	setcycle 2 word "geen bever"
	setcycle 2 correct_response right
	setcycle 2 negation 1
	setcycle 2 font_colour_1 black
	setcycle 2 font_colour_2 white
	setcycle 3 category animal
	setcycle 3 word "geen bij"
	setcycle 3 correct_response right
	setcycle 3 negation 1
	setcycle 3 font_colour_1 black
	setcycle 3 font_colour_2 white
	setcycle 4 category animal
	setcycle 4 word "geen capybara"
	setcycle 4 correct_response right
	setcycle 4 negation 1
	setcycle 4 font_colour_1 black
	setcycle 4 font_colour_2 white
	setcycle 5 category animal
	setcycle 5 word "geen duif"
	setcycle 5 correct_response right
	setcycle 5 negation 1
	setcycle 5 font_colour_1 black
	setcycle 5 font_colour_2 white
	setcycle 6 category animal
	setcycle 6 word "geen eekhoorn"
	setcycle 6 correct_response right
	setcycle 6 negation 1
	setcycle 6 font_colour_1 black
	setcycle 6 font_colour_2 white
	setcycle 7 category animal
	setcycle 7 word "geen egel"
	setcycle 7 correct_response right
	setcycle 7 negation 1
	setcycle 7 font_colour_1 black
	setcycle 7 font_colour_2 white
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	setcycle 80 category control
	setcycle 80 word "geen beheer"
	setcycle 80 correct_response left
	setcycle 80 negation 1
	setcycle 80 font_colour_1 black
	setcycle 80 font_colour_2 white
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	setcycle 106 category bright
	setcycle 106 word "niet blank"
	setcycle 106 correct_response left
	setcycle 106 negation 1
	setcycle 106 font_colour_1 black
	setcycle 106 font_colour_2 white
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	setcycle 132 category dark
	setcycle 132 word "geen avond"
	setcycle 132 correct_response left
	setcycle 132 negation 1
	setcycle 132 font_colour_1 black
	setcycle 132 font_colour_2 white
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	shuffle_horiz font_colour_1 font_colour_2
	run Practice_Sequence_1

define loop Normal_Block_even
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 156
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 word aap
	setcycle 0 category animal
	setcycle 0 correct_response left
	setcycle 0 negation 0
	setcycle 0 font_colour_1 black
	setcycle 0 font_colour_2 white
	setcycle 1 word beer
	setcycle 1 category animal
	setcycle 1 correct_response left
	setcycle 1 negation 0
	setcycle 1 font_colour_1 black
	setcycle 1 font_colour_2 white
	setcycle 2 word bever
	setcycle 2 category animal
	setcycle 2 correct_response left
	setcycle 2 negation 0
	setcycle 2 font_colour_1 black
	setcycle 2 font_colour_2 white
	setcycle 3 word bij
	setcycle 3 category animal
	setcycle 3 correct_response left
	setcycle 3 negation 0
	setcycle 3 font_colour_1 black
	setcycle 3 font_colour_2 white
	setcycle 4 word bikken
	setcycle 4 category animal
	setcycle 4 correct_response left
	setcycle 4 negation 0
	setcycle 4 font_colour_1 black
	setcycle 4 font_colour_2 white
	setcycle 5 word blaffen
	setcycle 5 category animal
	setcycle 5 correct_response left
	setcycle 5 negation 0
	setcycle 5 font_colour_1 black
	setcycle 5 font_colour_2 white
	setcycle 6 word brullen
	setcycle 6 category animal
	setcycle 6 correct_response left
	setcycle 6 negation 0
	setcycle 6 font_colour_1 black
	setcycle 6 font_colour_2 white
	setcycle 7 word capybara
	setcycle 7 category animal
	setcycle 7 correct_response left
	setcycle 7 negation 0
	setcycle 7 font_colour_1 black
	setcycle 7 font_colour_2 white
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	setcycle 80 word beheer
	setcycle 80 category control
	setcycle 80 correct_response right
	setcycle 80 negation 0
	setcycle 80 font_colour_1 black
	setcycle 80 font_colour_2 white
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	setcycle 106 word blank
	setcycle 106 category bright
	setcycle 106 correct_response right
	setcycle 106 negation 0
	setcycle 106 font_colour_1 black
	setcycle 106 font_colour_2 white
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	setcycle 132 word avond
	setcycle 132 category dark
	setcycle 132 correct_response right
	setcycle 132 negation 0
	setcycle 132 font_colour_1 black
	setcycle 132 font_colour_2 white
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	shuffle_horiz font_colour_1 font_colour_2
	run Practice_Sequence

define loop Normal_Block_even_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 156
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 word aap
	setcycle 0 category animal
	setcycle 0 correct_response left
	setcycle 0 negation 0
	setcycle 0 font_colour_1 black
	setcycle 0 font_colour_2 white
	setcycle 1 word beer
	setcycle 1 category animal
	setcycle 1 correct_response left
	setcycle 1 negation 0
	setcycle 1 font_colour_1 black
	setcycle 1 font_colour_2 white
	setcycle 2 word bever
	setcycle 2 category animal
	setcycle 2 correct_response left
	setcycle 2 negation 0
	setcycle 2 font_colour_1 black
	setcycle 2 font_colour_2 white
	setcycle 3 word bij
	setcycle 3 category animal
	setcycle 3 correct_response left
	setcycle 3 negation 0
	setcycle 3 font_colour_1 black
	setcycle 3 font_colour_2 white
	setcycle 4 word bikken
	setcycle 4 category animal
	setcycle 4 correct_response left
	setcycle 4 negation 0
	setcycle 4 font_colour_1 black
	setcycle 4 font_colour_2 white
	setcycle 5 word blaffen
	setcycle 5 category animal
	setcycle 5 correct_response left
	setcycle 5 negation 0
	setcycle 5 font_colour_1 black
	setcycle 5 font_colour_2 white
	setcycle 6 word brullen
	setcycle 6 category animal
	setcycle 6 correct_response left
	setcycle 6 negation 0
	setcycle 6 font_colour_1 black
	setcycle 6 font_colour_2 white
	setcycle 7 word capybara
	setcycle 7 category animal
	setcycle 7 correct_response left
	setcycle 7 negation 0
	setcycle 7 font_colour_1 black
	setcycle 7 font_colour_2 white
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	setcycle 80 word beheer
	setcycle 80 category control
	setcycle 80 correct_response right
	setcycle 80 negation 0
	setcycle 80 font_colour_1 black
	setcycle 80 font_colour_2 white
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	setcycle 106 word blank
	setcycle 106 category bright
	setcycle 106 correct_response right
	setcycle 106 negation 0
	setcycle 106 font_colour_1 black
	setcycle 106 font_colour_2 white
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	setcycle 132 word avond
	setcycle 132 category dark
	setcycle 132 correct_response right
	setcycle 132 negation 0
	setcycle 132 font_colour_1 black
	setcycle 132 font_colour_2 white
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	shuffle_horiz font_colour_1 font_colour_2
	run Practice_Sequence_1

define loop Normal_Block_odd
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 156
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 word aap
	setcycle 0 category animal
	setcycle 0 correct_response right
	setcycle 0 negation 0
	setcycle 0 font_colour_1 black
	setcycle 0 font_colour_2 white
	setcycle 1 word beer
	setcycle 1 category animal
	setcycle 1 correct_response right
	setcycle 1 negation 0
	setcycle 1 font_colour_1 black
	setcycle 1 font_colour_2 white
	setcycle 2 word bever
	setcycle 2 category animal
	setcycle 2 correct_response right
	setcycle 2 negation 0
	setcycle 2 font_colour_1 black
	setcycle 2 font_colour_2 white
	setcycle 3 word bij
	setcycle 3 category animal
	setcycle 3 correct_response right
	setcycle 3 negation 0
	setcycle 3 font_colour_1 black
	setcycle 3 font_colour_2 white
	setcycle 4 word bikken
	setcycle 4 category animal
	setcycle 4 correct_response right
	setcycle 4 negation 0
	setcycle 4 font_colour_1 black
	setcycle 4 font_colour_2 white
	setcycle 5 word blaffen
	setcycle 5 category animal
	setcycle 5 correct_response right
	setcycle 5 negation 0
	setcycle 5 font_colour_1 black
	setcycle 5 font_colour_2 white
	setcycle 6 word brullen
	setcycle 6 category animal
	setcycle 6 correct_response right
	setcycle 6 negation 0
	setcycle 6 font_colour_1 black
	setcycle 6 font_colour_2 white
	setcycle 7 word capybara
	setcycle 7 category animal
	setcycle 7 correct_response right
	setcycle 7 negation 0
	setcycle 7 font_colour_1 black
	setcycle 7 font_colour_2 white
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	setcycle 80 word beheer
	setcycle 80 category control
	setcycle 80 correct_response left
	setcycle 80 negation 0
	setcycle 80 font_colour_1 black
	setcycle 80 font_colour_2 white
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	setcycle 106 word blank
	setcycle 106 category bright
	setcycle 106 correct_response left
	setcycle 106 negation 0
	setcycle 106 font_colour_1 black
	setcycle 106 font_colour_2 white
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	setcycle 132 word avond
	setcycle 132 category dark
	setcycle 132 correct_response left
	setcycle 132 negation 0
	setcycle 132 font_colour_1 black
	setcycle 132 font_colour_2 white
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	shuffle_horiz font_colour_1 font_colour_2
	run Practice_Sequence

define loop Normal_Block_odd_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 156
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 word aap
	setcycle 0 category animal
	setcycle 0 correct_response right
	setcycle 0 negation 0
	setcycle 0 font_colour_1 black
	setcycle 0 font_colour_2 white
	setcycle 1 word beer
	setcycle 1 category animal
	setcycle 1 correct_response right
	setcycle 1 negation 0
	setcycle 1 font_colour_1 black
	setcycle 1 font_colour_2 white
	setcycle 2 word bever
	setcycle 2 category animal
	setcycle 2 correct_response right
	setcycle 2 negation 0
	setcycle 2 font_colour_1 black
	setcycle 2 font_colour_2 white
	setcycle 3 word bij
	setcycle 3 category animal
	setcycle 3 correct_response right
	setcycle 3 negation 0
	setcycle 3 font_colour_1 black
	setcycle 3 font_colour_2 white
	setcycle 4 word bikken
	setcycle 4 category animal
	setcycle 4 correct_response right
	setcycle 4 negation 0
	setcycle 4 font_colour_1 black
	setcycle 4 font_colour_2 white
	setcycle 5 word blaffen
	setcycle 5 category animal
	setcycle 5 correct_response right
	setcycle 5 negation 0
	setcycle 5 font_colour_1 black
	setcycle 5 font_colour_2 white
	setcycle 6 word brullen
	setcycle 6 category animal
	setcycle 6 correct_response right
	setcycle 6 negation 0
	setcycle 6 font_colour_1 black
	setcycle 6 font_colour_2 white
	setcycle 7 word capybara
	setcycle 7 category animal
	setcycle 7 correct_response right
	setcycle 7 negation 0
	setcycle 7 font_colour_1 black
	setcycle 7 font_colour_2 white
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	setcycle 80 word beheer
	setcycle 80 category control
	setcycle 80 correct_response left
	setcycle 80 negation 0
	setcycle 80 font_colour_1 black
	setcycle 80 font_colour_2 white
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	setcycle 106 word blank
	setcycle 106 category bright
	setcycle 106 correct_response left
	setcycle 106 negation 0
	setcycle 106 font_colour_1 black
	setcycle 106 font_colour_2 white
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	setcycle 132 word avond
	setcycle 132 category dark
	setcycle 132 correct_response left
	setcycle 132 negation 0
	setcycle 132 font_colour_1 black
	setcycle 132 font_colour_2 white
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	shuffle_horiz font_colour_1 font_colour_2
	run Practice_Sequence_1

define sketchpad Pause
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Dit was het eerste deel van het experiment. <br /><br />Je kan nu een korte rustpauze nemen.<br /><br />Druk op een knop om te beginnen <br />met het tweede deel van het experiment.<br /><br /><b>Let op: </b><br />Het sluiten van de browser resulteerd <br />in het vervallen van de deelname <br />en daarmee je recht op vergoeding.<br />" x=0 y=0 z_index=0

define sketchpad Pause_2
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Dit was het eerste deel van het experiment. <br /><br />Je kan nu een korte rustpauze nemen.<br /><br />Druk op een knop om te beginnen <br />met het tweede deel van het experiment.<br /><br /><b>Let op: </b><br />Het sluiten van de browser resulteerd <br />in het vervallen van de deelname <br />en daarmee je recht op vergoeding.<br />" x=0 y=0 z_index=0

define sequence Practice_Sequence
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run fixation always
	run target always
	run keyboard_response always
	run correct "[correct] = 1"
	run false "[correct] = 0"
	run new_logger always

define sequence Practice_Sequence_1
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run fixation_1 always
	run target_1 always
	run keyboard_response_1 always
	run correct_1 "[correct] = 1"
	run false_1 "[correct] = 0"
	run new_logger_1 always

define loop Practice_Trial_even
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 category control
	setcycle 0 word beste
	setcycle 0 practice yes
	setcycle 0 negation 0
	setcycle 0 font_colour_1 black
	setcycle 0 font_colour_2 white
	setcycle 0 correct_response right
	setcycle 1 category control
	setcycle 1 word "geen verzameling"
	setcycle 1 practice yes
	setcycle 1 negation 1
	setcycle 1 font_colour_1 black
	setcycle 1 font_colour_2 white
	setcycle 1 correct_response right
	setcycle 2 category control
	setcycle 2 word ziek
	setcycle 2 practice yes
	setcycle 2 negation 0
	setcycle 2 font_colour_1 black
	setcycle 2 font_colour_2 white
	setcycle 2 correct_response right
	setcycle 3 category control
	setcycle 3 word "geen zonnepaneel"
	setcycle 3 practice yes
	setcycle 3 negation 1
	setcycle 3 font_colour_1 black
	setcycle 3 font_colour_2 white
	setcycle 3 correct_response right
	setcycle 4 category control
	setcycle 4 word gelukkig
	setcycle 4 practice yes
	setcycle 4 negation 0
	setcycle 4 font_colour_1 black
	setcycle 4 font_colour_2 white
	setcycle 4 correct_response right
	setcycle 5 category animal
	setcycle 5 word "niet vreten"
	setcycle 5 practice yes
	setcycle 5 negation 1
	setcycle 5 font_colour_1 black
	setcycle 5 font_colour_2 white
	setcycle 5 correct_response left
	setcycle 6 category animal
	setcycle 6 word spinnen
	setcycle 6 practice yes
	setcycle 6 negation 0
	setcycle 6 font_colour_1 black
	setcycle 6 font_colour_2 white
	setcycle 6 correct_response left
	setcycle 7 category animal
	setcycle 7 word "niet brullen"
	setcycle 7 practice yes
	setcycle 7 negation 1
	setcycle 7 font_colour_1 black
	setcycle 7 font_colour_2 white
	setcycle 7 correct_response left
	setcycle 8 category animal
	setcycle 8 word duif
	setcycle 8 practice yes
	setcycle 8 negation 0
	setcycle 8 font_colour_1 black
	setcycle 8 font_colour_2 white
	setcycle 8 correct_response left
	setcycle 9 category animal
	setcycle 9 word "geen oester"
	setcycle 9 practice yes
	setcycle 9 negation 1
	setcycle 9 font_colour_1 black
	setcycle 9 font_colour_2 white
	setcycle 9 correct_response left
	shuffle_horiz font_colour_1 font_colour_2
	run Practice_Sequence

define loop Practice_Trial_odd
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 category control
	setcycle 0 word beste
	setcycle 0 practice yes
	setcycle 0 negation 0
	setcycle 0 font_colour_1 black
	setcycle 0 font_colour_2 white
	setcycle 0 correct_response left
	setcycle 1 category control
	setcycle 1 word "geen verzameling"
	setcycle 1 practice yes
	setcycle 1 negation 1
	setcycle 1 font_colour_1 black
	setcycle 1 font_colour_2 white
	setcycle 1 correct_response left
	setcycle 2 category control
	setcycle 2 word ziek
	setcycle 2 practice yes
	setcycle 2 negation 0
	setcycle 2 font_colour_1 black
	setcycle 2 font_colour_2 white
	setcycle 2 correct_response left
	setcycle 3 category control
	setcycle 3 word "geen zonnepaneel"
	setcycle 3 practice yes
	setcycle 3 negation 1
	setcycle 3 font_colour_1 black
	setcycle 3 font_colour_2 white
	setcycle 3 correct_response left
	setcycle 4 category control
	setcycle 4 word gelukkig
	setcycle 4 practice yes
	setcycle 4 negation 0
	setcycle 4 font_colour_1 black
	setcycle 4 font_colour_2 white
	setcycle 4 correct_response left
	setcycle 5 category animal
	setcycle 5 word "niet vreten"
	setcycle 5 practice yes
	setcycle 5 negation 1
	setcycle 5 font_colour_1 black
	setcycle 5 font_colour_2 white
	setcycle 5 correct_response right
	setcycle 6 category animal
	setcycle 6 word spinnen
	setcycle 6 practice yes
	setcycle 6 negation 0
	setcycle 6 font_colour_1 black
	setcycle 6 font_colour_2 white
	setcycle 6 correct_response right
	setcycle 7 category animal
	setcycle 7 word "niet brullen"
	setcycle 7 practice yes
	setcycle 7 negation 1
	setcycle 7 font_colour_1 black
	setcycle 7 font_colour_2 white
	setcycle 7 correct_response right
	setcycle 8 category animal
	setcycle 8 word duif
	setcycle 8 practice yes
	setcycle 8 negation 0
	setcycle 8 font_colour_1 black
	setcycle 8 font_colour_2 white
	setcycle 8 correct_response right
	setcycle 9 category animal
	setcycle 9 word "geen oester"
	setcycle 9 practice yes
	setcycle 9 negation 1
	setcycle 9 font_colour_1 black
	setcycle 9 font_colour_2 white
	setcycle 9 correct_response right
	shuffle_horiz font_colour_1 font_colour_2
	run Practice_Sequence

define keyboard_response Prolific_number_input
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8;9;0;return;backspace"

define sketchpad Study_Info
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="<b>Vrijwilligheid van deelname:</b><br />Deelname aan het onderzoek is vrijwillig. <br />Je hoeft niet aan dit onderzoek deel te nemen <br />als je dat niet wilt. Je kunt je <br />op elk moment terugtrekken uit het onderzoek. <br /><br /><b>Vergoeding:</b> <br />Voor deelname aan dit experiment krijg je <br />1.88 Pound. <br /><br /><b>Duur:</b><br />Het experiment duurt ongeveer 12 minuten.<br /><br /><b>Verdere informatie:</b><br />Als je nog vragen hebt, dan kun je de onderzoekers <br />e-mailen (j.march@student.rug.nl). <br /><br />Druk op een knop om door te gaan." x=0 y=0 z_index=0

define sketchpad WELKOM
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="WELKOM bij het experiment <br /><br />'Spot the animal-related word'<br /><br /><br /><br />Druk op een knop om door te gaan" x=0 y=0 z_index=0

define sequence block_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run start_normal_block_even "[subject_parity] = even"
	run start_normal_block_odd "[subject_parity] = odd"
	run Normal_Block_even "[subject_parity] = even"
	run Normal_Block_odd "[subject_parity] = odd"
	run Pause always
	run start_negated_block_even "[subject_parity] = even"
	run start_negated_block_odd "[subject_parity] = odd"
	run Negation_Block_even "[subject_parity] = even"
	run Negation_Block_odd "[subject_parity] = odd"

define sequence block_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run start_negated_block_even_2 "[subject_parity] = even"
	run start_negated_block_odd_2 "[subject_parity] = odd"
	run Negation_Block_even_2 "[subject_parity] = even"
	run Negation_Block_odd_2 "[subject_parity] = odd"
	run Pause_2 always
	run start_normal_block_even_2 "[subject_parity] = even"
	run start_normal_block_odd_2 "[subject_parity] = odd"
	run Normal_Block_even_2 "[subject_parity] = even"
	run Normal_Block_odd_2 "[subject_parity] = odd"

define inline_javascript constants
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.block_count = 0
	vars.Prolific_ID = ''
	vars.response = ''
	__end__

define sketchpad correct
	set duration 500
	set description "Displays stimuli"
	draw fixdot color="#005500" show_if=always style=default x=0 y=0 z_index=0

define sketchpad correct_1
	set duration 500
	set description "Displays stimuli"
	draw fixdot color="#005500" show_if=always style=default x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run constants always
	run get_Prolific_ID always
	run verify_Prolific_ID always
	run Counterbalance_key_response always
	run WELKOM always
	run Study_Info always
	run Consent always
	run Instructions_even "[subject_parity] = even"
	run Instructions_odd "[subject_parity] = odd"
	run Example_animal_even "[subject_parity] = even"
	run Example_animal_odd "[subject_parity] = odd"
	run keyboard_response_animal_even "[subject_parity] = even"
	run keyboard_response_animal_odd "[subject_parity] = odd"
	run Example_other_word_even "[subject_parity] = even"
	run Example_other_word_odd "[subject_parity] = odd"
	run keyboard_response_other_word_even "[subject_parity] = even"
	run keyboard_response_other_word_odd "[subject_parity] = odd"
	run start_practice always
	run Practice_Trial_even "[subject_parity] = even"
	run Practice_Trial_odd "[subject_parity] = odd"
	run start_experiment always
	run experimental_loop_1 "[subject_nr] <=2"
	run experimental_loop_2 "[subject_nr] > 2"
	run Fin always

define loop experimental_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run block_sequence_1

define loop experimental_loop_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run block_sequence_2

define sketchpad false
	set duration 500
	set description "Displays stimuli"
	draw fixdot color="#780000" show_if=always style=default x=0 y=0 z_index=0

define sketchpad false_1
	set duration 500
	set description "Displays stimuli"
	draw fixdot color="#780000" show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation
	set duration 500
	set description "Displays stimuli"
	draw fixdot color="#555555" show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1
	set duration 500
	set description "Displays stimuli"
	draw fixdot color="#555555" show_if=always style=default x=0 y=0 z_index=0

define loop get_Prolific_ID
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[response] = return or [response] = enter"
	setcycle 0 empty_column ""
	run get_Prolific_ID_2

define sequence get_Prolific_ID_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run show_Prolific_ID always
	run Prolific_number_input always
	run process_Prolific_number_input always

define loop get_student_number_loop
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[response] = return or [response] = enter"
	setcycle 0 empty_column ""
	run get_student_number_sequence

define sequence get_student_number_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run show_student_number always
	run number_input always
	run process_number_input always

define keyboard_response keyboard_response
	set timeout 1500
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Sammelt Tastaturantworten"

define keyboard_response keyboard_response_1
	set timeout 1500
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Sammelt Tastaturantworten"

define keyboard_response keyboard_response_animal_even
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Sammelt Tastaturantworten"
	set allowed_responses LEFT

define keyboard_response keyboard_response_animal_odd
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Sammelt Tastaturantworten"
	set allowed_responses RIGHT

define keyboard_response keyboard_response_other_word_even
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Sammelt Tastaturantworten"
	set allowed_responses RIGHT

define keyboard_response keyboard_response_other_word_odd
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Sammelt Tastaturantworten"
	set allowed_responses LEFT

define logger new_logger
	set description "Registriert experimentelle Daten"
	set auto_log yes

define logger new_logger_1
	set description "Registriert experimentelle Daten"
	set auto_log yes

define keyboard_response number_input
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8;9;0;return;backspace"

define inline_javascript process_Prolific_number_input
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	console.log(vars.response)
	if (vars.response in [0, 1, 2, 3, 4, 5, 6, 7, 8, 9]) {
		vars.Prolific_ID += vars.response.toString()
	} else if (vars.response === 'backspace') {
		vars.Prolific_ID = vars.Prolific_ID.toString().slice(0, vars.Prolific_ID.toString().length - 1)
	}
	__end__
	set _prepare ""

define inline_javascript process_number_input
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	console.log(vars.response)
	if (vars.response in [0, 1, 2, 3, 4, 5, 6, 7, 8, 9]) {
		vars.student_number += vars.response.toString()
	} else if (vars.response === 'backspace') {
		vars.student_number = vars.student_number.toString().slice(0, vars.student_number.toString().length - 1)
	}
	__end__
	set _prepare ""

define sketchpad show_Prolific_ID
	set duration 0
	set description "Displays stimuli"
	set cols "1;1;1"
	set _theme gray
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Voer ter verificatie de <b>laatste drie nummers</b><br /><br /> van je Prolific ID in. <br /><br /><b>Bijvoorbeeld:</b> <br /><br />Als je Prolific ID 5e552c03bb0d45000af<b>923</b>fb is, <br /><br />dan voer je in: 923 <br /><br /><br /><br />Type nu de laatste drie nummers van je Prolific ID <br /><br />(zonder eerst op het scherm te klikken)<br /><br />[Prolific_ID]<br /><br /><br /><br />Daarna druk op 'Enter' om door te gaan" x=0 y=0 z_index=0

define sketchpad show_student_number
	set duration 0
	set description "Displays stimuli"
	set cols "1;1;1"
	set _theme gray
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Voer je studentnummer in<br /><br />Druk op 'Enter' om door te gaan<br /><br />S[student_number]" x=0 y=0 z_index=0

define sketchpad start_experiment
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="De oefenfase is afgelopen. We gaan nu beginnen <br /><br /> met het echte experiment. <br /><br />Dit is precies hetzelfde als de oefenfase.<br /><br /><br /><br /> Druk op een knop om te beginnen met het experiment." x=0 y=0 z_index=0

define sketchpad start_negated_block_even
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="<b>Instructies:</b><br />In dit deel van het experiment <br />zie je twee woorden.<br /><br />Druk op de <b>linkerpijl</b> als je een woord ziet <br />die geassocieerd wordt met dieren. <br /><br />Druk op de <b>rechterpijl</b> bij alle andere woorden.<br /><br /><br />Dus bijvoorbeeld:<br /><br />- Als je 'geen schildpad', of 'niet donzig' ziet <br />dan druk je op de <b>linkerpijl</b>.<br /><br />- Als je 'geen huis' of 'niet zwemmen' ziet <br />dan druk je op de <b>rechterpijl</b>.<br /><br />Druk op een knop om te beginnen met het experiment.<br />" x=0 y=0 z_index=0

define sketchpad start_negated_block_even_2
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="<b>Instructies:</b><br />In dit deel van het experiment <br />zie je twee woorden.<br /><br />Druk op de <b>linkerpijl</b> als je een woord ziet <br />die geassocieerd wordt met dieren. <br /><br />Druk op de <b>rechterpijl</b> bij alle andere woorden.<br /><br /><br />Dus bijvoorbeeld:<br /><br />- Als je 'geen schildpad', of 'niet donzig' ziet <br />dan druk je op de <b>linkerpijl</b>.<br /><br />- Als je 'geen huis' of 'niet zwemmen' ziet <br />dan druk je op de <b>rechterpijl</b>.<br /><br />Druk op een knop om te beginnen met het experiment.<br />" x=0 y=0 z_index=0

define sketchpad start_negated_block_odd
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="<b>Instructies:</b><br />In dit deel van het experiment <br />zie je twee woorden.<br /><br />Druk op de <b>rechterpijl</b> als je een woord ziet <br />die geassocieerd wordt met dieren. <br /><br />Druk op de <b>linkerpijl</b> bij alle andere woorden.<br /><br /><br />Dus bijvoorbeeld:<br /><br />- Als je 'geen schildpad', of 'niet donzig' ziet <br />dan druk je op de <b>rechterpijl</b>.<br /><br />- Als je 'geen huis' of 'niet zwemmen' ziet <br />dan druk je op de <b>linkerpijl</b>.<br /><br />Druk op een knop om te beginnen met het experiment.<br />" x=0 y=0 z_index=0

define sketchpad start_negated_block_odd_2
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="<b>Instructies:</b><br />In dit deel van het experiment <br />zie je twee woorden.<br /><br />Druk op de <b>rechterpijl</b> als je een woord ziet <br />die geassocieerd wordt met dieren. <br /><br />Druk op de <b>linkerpijl</b> bij alle andere woorden.<br /><br /><br />Dus bijvoorbeeld:<br /><br />- Als je 'geen schildpad', of 'niet donzig' ziet <br />dan druk je op de <b>rechterpijl</b>.<br /><br />- Als je 'geen huis' of 'niet zwemmen' ziet <br />dan druk je op de <b>linkerpijl</b>.<br /><br />Druk op een knop om te beginnen met het experiment.<br />" x=0 y=0 z_index=0

define sketchpad start_normal_block_even
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="<b>Instructies:</b><br />In dit deel van het experiment <br />zie je een woord.<br /><br />Druk op de <b>linkerpijl</b> als je een woord ziet <br />die geassocieerd wordt met dieren. <br /><br />Druk op de <b>rechterpijl</b> bij alle andere woorden.<br /><br /><br />Dus bijvoorbeeld:<br /><br />- Als je 'schildpad', of 'donzig' ziet <br />dan druk je op de <b>linkerpijl</b>.<br /><br />- Als je 'huis' of 'zwemmen' ziet <br />dan druk je op de <b>rechterpijl</b>.<br /><br />Druk op een knop om te beginnen met het experiment.<br />" x=0 y=0 z_index=0

define sketchpad start_normal_block_even_2
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="<b>Instructies:</b><br />In dit deel van het experiment <br />zie je een woord.<br /><br />Druk op de <b>linkerpijl</b> als je een woord ziet <br />die geassocieerd wordt met dieren. <br /><br />Druk op de <b>rechterpijl</b> bij alle andere woorden.<br /><br /><br />Dus bijvoorbeeld:<br /><br />- Als je 'schildpad', of 'donzig' ziet <br />dan druk je op de <b>linkerpijl</b>.<br /><br />- Als je 'huis' of 'zwemmen' ziet <br />dan druk je op de <b>rechterpijl</b>.<br /><br />Druk op een knop om te beginnen met het experiment.<br />" x=0 y=0 z_index=0

define sketchpad start_normal_block_odd
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="<b>Instructies:</b><br />In dit deel van het experiment <br />zie je een woord.<br /><br />Druk op de <b>rechterpijl</b> als je een woord ziet <br />die geassocieerd wordt met dieren. <br /><br />Druk op de <b>linkerpijl</b> bij alle andere woorden.<br /><br /><br />Dus bijvoorbeeld:<br /><br />- Als je 'schildpad', of 'donzig' ziet <br />dan druk je op de <b>rechterpijl</b>.<br /> <br /> - Als je 'huis' of 'zwemmen' ziet <br />dan druk je op de <b>linkerpijl</b>.<br /><br />Druk op een knop om te beginnen met het experiment.<br />" x=0 y=0 z_index=0

define sketchpad start_normal_block_odd_2
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="<b>Instructies:</b><br />In dit deel van het experiment <br />zie je een woord.<br /><br />Druk op de <b>rechterpijl</b> als je een woord ziet <br />die geassocieerd wordt met dieren. <br /><br />Druk op de <b>linkerpijl</b> bij alle andere woorden.<br /><br /><br />Dus bijvoorbeeld:<br /><br />- Als je 'schildpad', of 'donzig' ziet <br />dan druk je op de <b>rechterpijl</b>.<br /><br />- Als je 'huis' of 'zwemmen' ziet <br />dan druk je op de <b>linkerpijl</b>.<br /><br />Druk op een knop om te beginnen met het experiment.<br />" x=0 y=0 z_index=0

define sketchpad start_practice
	set duration keypress
	set description "Präsentiert Stimuli"
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Het experiment begint met een korte oefenfase.<br /><br />Druk op een knop om te beginnen met de oefenfase." x=0 y=0 z_index=0

define sketchpad target
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color="[font_colour_1]" font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="[word]" x=0 y=0 z_index=0

define sketchpad target_1
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color="[font_colour_1]" font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="[word]" x=0 y=0 z_index=0

define feedback verify_Prolific_ID
	set spacing 10
	set rows "1;4;1"
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	set cols "1;1;1"
	set _theme gray
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="De laatste drie nummers <br /><br />van je Prolific ID zijn <b>[Prolific_ID]</b><br /><br /><br /><br />Als dit correct is; druk je op een knop <br /> om het experiment te starten. <br /><br />Als dit niet correct is; sluit je browser af <br /> en herstart het experiment." x=0 y=0 z_index=0

define feedback verify_student_number
	set spacing 10
	set rows "1;4;1"
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	set cols "1;1;1"
	set _theme gray
	draw textline center=1 color="#555555" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Je studentnummer is S[student_number]<br /><br />Als dit correct is; druk je op een knop <br /> om het experiment te starten. <br /><br />Als dit niet correct is; sluit je browser af <br /> en herstart het experiment." x=0 y=0 z_index=0

